# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_124 gabor_006 gabor_085 gabor_175    gabor_124 gabor_006 gabor_085_alt gabor_175_alt      "2_1_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_124_006_085_175_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_085_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_1_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_090 gabor_052 gabor_067 gabor_129    gabor_090 gabor_052 gabor_067_alt gabor_129_alt      "2_2_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_090_052_067_129_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_174_framed    blank blank blank blank    fixation_cross_target_position_3_4     "2_2_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  1942      fixation_cross    gabor_060 gabor_172 gabor_035 gabor_094    gabor_060_alt gabor_172 gabor_035 gabor_094_alt      "2_3_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_060_172_035_094_target_position_1_4_retrieval_position_1"          gabor_060_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_3_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2542      fixation_cross    gabor_103 gabor_180 gabor_073 gabor_015    gabor_103 gabor_180_alt gabor_073 gabor_015_alt      "2_4_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_103_180_073_015_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_151_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_4_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2042  2992  2442      fixation_cross    gabor_101 gabor_012 gabor_065 gabor_081    gabor_101_alt gabor_012 gabor_065_alt gabor_081      "2_5_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_2050_3000_2450_gabor_patch_orientation_101_012_065_081_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_127_framed    blank blank blank blank    fixation_cross_target_position_1_3     "2_5_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_127_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2292      fixation_cross    gabor_107 gabor_047 gabor_136 gabor_161    gabor_107_alt gabor_047 gabor_136_alt gabor_161      "2_6_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_107_047_136_161_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_087_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_6_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2142      fixation_cross    gabor_009 gabor_133 gabor_163 gabor_024    gabor_009_alt gabor_133 gabor_163 gabor_024_alt      "2_7_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_009_133_163_024_target_position_1_4_retrieval_position_1"          gabor_056_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_7_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_060 gabor_121 gabor_035 gabor_004    gabor_060_alt gabor_121 gabor_035_alt gabor_004      "2_8_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_060_121_035_004_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_170_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_8_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  2042      fixation_cross    gabor_151 gabor_082 gabor_036 gabor_067    gabor_151_alt gabor_082 gabor_036 gabor_067_alt      "2_9_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_151_082_036_067_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_067_framed    blank blank blank blank    fixation_cross_target_position_1_4     "2_9_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1842  2992  1992      fixation_cross    gabor_041 gabor_178 gabor_155 gabor_007    gabor_041 gabor_178_alt gabor_155_alt gabor_007     "2_10_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2000_gabor_patch_orientation_041_178_155_007_target_position_2_3_retrieval_position_1"          gabor_088_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_10_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_088_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2592      fixation_cross    gabor_101 gabor_062 gabor_174 gabor_041    gabor_101 gabor_062 gabor_174_alt gabor_041_alt     "2_11_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_101_062_174_041_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_174_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_11_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_074 gabor_129 gabor_056 gabor_099    gabor_074 gabor_129 gabor_056_alt gabor_099_alt     "2_12_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_074_129_056_099_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_145_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_12_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_145_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_026 gabor_081 gabor_009 gabor_149    gabor_026_alt gabor_081_alt gabor_009 gabor_149     "2_13_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_026_081_009_149_target_position_1_2_retrieval_position_1"          gabor_026_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_13_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2492      fixation_cross    gabor_028 gabor_013 gabor_093 gabor_133    gabor_028_alt gabor_013 gabor_093_alt gabor_133     "2_14_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_028_013_093_133_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_046_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_14_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1842  2992  2342      fixation_cross    gabor_174 gabor_115 gabor_059 gabor_100    gabor_174 gabor_115_alt gabor_059 gabor_100_alt     "2_15_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2350_gabor_patch_orientation_174_115_059_100_target_position_2_4_retrieval_position_1"          gabor_174_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_15_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_174_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2092      fixation_cross    gabor_114 gabor_009 gabor_175 gabor_062    gabor_114 gabor_009_alt gabor_175 gabor_062_alt     "2_16_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_114_009_175_062_target_position_2_4_retrieval_position_2"          gabor_circ gabor_009_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_16_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_061 gabor_045 gabor_179 gabor_113    gabor_061 gabor_045 gabor_179_alt gabor_113_alt     "2_17_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_061_045_179_113_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_17_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2442      fixation_cross    gabor_051 gabor_141 gabor_030 gabor_075    gabor_051_alt gabor_141 gabor_030 gabor_075_alt     "2_18_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_051_141_030_075_target_position_1_4_retrieval_position_1"          gabor_051_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_18_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_051_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1892  2992  2342      fixation_cross    gabor_131 gabor_098 gabor_152 gabor_017    gabor_131 gabor_098_alt gabor_152_alt gabor_017     "2_19_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2350_gabor_patch_orientation_131_098_152_017_target_position_2_3_retrieval_position_1"          gabor_131_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_19_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_131_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_007 gabor_118 gabor_055 gabor_165    gabor_007 gabor_118 gabor_055_alt gabor_165_alt     "2_20_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_007_118_055_165_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_165_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_20_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2392      fixation_cross    gabor_064 gabor_041 gabor_131 gabor_004    gabor_064 gabor_041_alt gabor_131 gabor_004_alt     "2_21_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_064_041_131_004_target_position_2_4_retrieval_position_2"          gabor_circ gabor_091_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_21_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2392      fixation_cross    gabor_105 gabor_173 gabor_045 gabor_153    gabor_105 gabor_173_alt gabor_045 gabor_153_alt     "2_22_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_105_173_045_153_target_position_2_4_retrieval_position_2"          gabor_circ gabor_124_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_22_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2242      fixation_cross    gabor_018 gabor_146 gabor_058 gabor_174    gabor_018 gabor_146_alt gabor_058_alt gabor_174     "2_23_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_018_146_058_174_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_103_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_23_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2592      fixation_cross    gabor_049 gabor_019 gabor_158 gabor_003    gabor_049 gabor_019_alt gabor_158_alt gabor_003     "2_24_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_049_019_158_003_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_158_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_24_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  1892      fixation_cross    gabor_128 gabor_094 gabor_004 gabor_071    gabor_128 gabor_094 gabor_004_alt gabor_071_alt     "2_25_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_128_094_004_071_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_071_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_25_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2142  2992  2042      fixation_cross    gabor_078 gabor_165 gabor_002 gabor_035    gabor_078 gabor_165 gabor_002_alt gabor_035_alt     "2_26_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_2150_3000_2050_gabor_patch_orientation_078_165_002_035_target_position_3_4_retrieval_position_1"          gabor_124_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_26_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_124_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2492      fixation_cross    gabor_168 gabor_141 gabor_032 gabor_097    gabor_168_alt gabor_141 gabor_032 gabor_097_alt     "2_27_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_168_141_032_097_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_097_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_27_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2392      fixation_cross    gabor_105 gabor_034 gabor_171 gabor_056    gabor_105_alt gabor_034 gabor_171_alt gabor_056     "2_28_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_105_034_171_056_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_171_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_28_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  2492      fixation_cross    gabor_083 gabor_044 gabor_065 gabor_014    gabor_083 gabor_044_alt gabor_065 gabor_014_alt     "2_29_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_083_044_065_014_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_150_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_29_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  2142      fixation_cross    gabor_157 gabor_112 gabor_068 gabor_131    gabor_157 gabor_112 gabor_068_alt gabor_131_alt     "2_30_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_157_112_068_131_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_084_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_30_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_066 gabor_086 gabor_033 gabor_051    gabor_066 gabor_086 gabor_033_alt gabor_051_alt     "2_31_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_066_086_033_051_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_004_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_31_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2242  2992  1992      fixation_cross    gabor_058 gabor_137 gabor_179 gabor_018    gabor_058 gabor_137_alt gabor_179 gabor_018_alt     "2_32_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2000_gabor_patch_orientation_058_137_179_018_target_position_2_4_retrieval_position_1"          gabor_058_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_32_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_058_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_014 gabor_035 gabor_087 gabor_125    gabor_014_alt gabor_035 gabor_087_alt gabor_125     "2_33_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_014_035_087_125_target_position_1_3_retrieval_position_1"          gabor_063_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_33_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  1992      fixation_cross    gabor_125 gabor_152 gabor_174 gabor_013    gabor_125_alt gabor_152 gabor_174_alt gabor_013     "2_34_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_125_152_174_013_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_174_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_34_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2092      fixation_cross    gabor_062 gabor_133 gabor_023 gabor_007    gabor_062_alt gabor_133_alt gabor_023 gabor_007     "2_35_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_062_133_023_007_target_position_1_2_retrieval_position_2"          gabor_circ gabor_083_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_35_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2242      fixation_cross    gabor_069 gabor_023 gabor_129 gabor_085    gabor_069 gabor_023_alt gabor_129_alt gabor_085     "2_36_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_069_023_129_085_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_175_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_36_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_180 gabor_014 gabor_147 gabor_162    gabor_180_alt gabor_014 gabor_147 gabor_162_alt     "2_37_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_180_014_147_162_target_position_1_4_retrieval_position_1"          gabor_040_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_37_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2092  2992  1992      fixation_cross    gabor_088 gabor_155 gabor_019 gabor_069    gabor_088 gabor_155_alt gabor_019 gabor_069_alt     "2_38_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2000_gabor_patch_orientation_088_155_019_069_target_position_2_4_retrieval_position_1"          gabor_040_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_38_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_040_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  2592      fixation_cross    gabor_105 gabor_131 gabor_167 gabor_058    gabor_105_alt gabor_131_alt gabor_167 gabor_058     "2_39_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_105_131_167_058_target_position_1_2_retrieval_position_2"          gabor_circ gabor_082_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_39_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1842  2992  2242      fixation_cross    gabor_048 gabor_102 gabor_013 gabor_130    gabor_048 gabor_102_alt gabor_013_alt gabor_130     "2_40_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2250_gabor_patch_orientation_048_102_013_130_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_084_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_40_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_084_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2192      fixation_cross    gabor_098 gabor_019 gabor_079 gabor_164    gabor_098_alt gabor_019_alt gabor_079 gabor_164     "2_41_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_098_019_079_164_target_position_1_2_retrieval_position_1"          gabor_048_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_41_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2442      fixation_cross    gabor_028 gabor_157 gabor_043 gabor_172    gabor_028 gabor_157_alt gabor_043_alt gabor_172     "2_42_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_028_157_043_172_target_position_2_3_retrieval_position_2"          gabor_circ gabor_111_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_42_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2542      fixation_cross    gabor_161 gabor_032 gabor_113 gabor_094    gabor_161 gabor_032_alt gabor_113_alt gabor_094     "2_43_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_161_032_113_094_target_position_2_3_retrieval_position_2"          gabor_circ gabor_032_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_43_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2342      fixation_cross    gabor_084 gabor_165 gabor_014 gabor_032    gabor_084 gabor_165 gabor_014_alt gabor_032_alt     "2_44_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_084_165_014_032_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_149_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_44_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_081 gabor_148 gabor_118 gabor_170    gabor_081_alt gabor_148 gabor_118 gabor_170_alt     "2_45_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_081_148_118_170_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_170_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_45_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2092  2992  2192      fixation_cross    gabor_022 gabor_104 gabor_043 gabor_083    gabor_022 gabor_104_alt gabor_043_alt gabor_083     "2_46_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2200_gabor_patch_orientation_022_104_043_083_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_131_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_46_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_131_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2542      fixation_cross    gabor_126 gabor_141 gabor_080 gabor_021    gabor_126 gabor_141 gabor_080_alt gabor_021_alt     "2_47_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_126_141_080_021_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_021_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_47_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_021_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  2542      fixation_cross    gabor_168 gabor_009 gabor_042 gabor_125    gabor_168 gabor_009_alt gabor_042_alt gabor_125     "2_48_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_168_009_042_125_target_position_2_3_retrieval_position_2"          gabor_circ gabor_009_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_48_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_006 gabor_021 gabor_138 gabor_050    gabor_006 gabor_021 gabor_138_alt gabor_050_alt     "2_49_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_006_021_138_050_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_050_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_49_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_085 gabor_131 gabor_023 gabor_041    gabor_085 gabor_131 gabor_023_alt gabor_041_alt     "2_50_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_085_131_023_041_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_161_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_50_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2492      fixation_cross    gabor_031 gabor_079 gabor_152 gabor_096    gabor_031_alt gabor_079_alt gabor_152 gabor_096     "2_51_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2500_gabor_patch_orientation_031_079_152_096_target_position_1_2_retrieval_position_1"          gabor_031_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_51_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_077 gabor_058 gabor_129 gabor_013    gabor_077 gabor_058_alt gabor_129 gabor_013_alt     "2_52_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_077_058_129_013_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_013_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_52_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_013_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1792  2992  2392      fixation_cross    gabor_075 gabor_165 gabor_012 gabor_056    gabor_075_alt gabor_165 gabor_012_alt gabor_056     "2_53_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1800_3000_2400_gabor_patch_orientation_075_165_012_056_target_position_1_3_retrieval_position_2"          gabor_circ gabor_165_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_53_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_165_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2292      fixation_cross    gabor_075 gabor_043 gabor_090 gabor_120    gabor_075 gabor_043 gabor_090_alt gabor_120_alt     "2_54_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_075_043_090_120_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_165_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_54_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2342      fixation_cross    gabor_141 gabor_103 gabor_175 gabor_014    gabor_141 gabor_103_alt gabor_175 gabor_014_alt     "2_55_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_141_103_175_014_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_014_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_55_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  1942      fixation_cross    gabor_103 gabor_171 gabor_081 gabor_143    gabor_103 gabor_171_alt gabor_081_alt gabor_143     "2_56_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_1950_gabor_patch_orientation_103_171_081_143_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_031_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_56_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2292      fixation_cross    gabor_045 gabor_067 gabor_102 gabor_176    gabor_045_alt gabor_067 gabor_102_alt gabor_176     "2_57_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_045_067_102_176_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_102_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_57_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_102_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1742  2992  1892      fixation_cross    gabor_031 gabor_002 gabor_151 gabor_071    gabor_031_alt gabor_002 gabor_151_alt gabor_071     "2_58_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_1900_gabor_patch_orientation_031_002_151_071_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_121_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_58_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_121_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2042      fixation_cross    gabor_170 gabor_018 gabor_155 gabor_126    gabor_170 gabor_018 gabor_155_alt gabor_126_alt     "2_59_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_170_018_155_126_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_080_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_59_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2042      fixation_cross    gabor_035 gabor_059 gabor_020 gabor_147    gabor_035_alt gabor_059 gabor_020 gabor_147_alt     "2_60_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_035_059_020_147_target_position_1_4_retrieval_position_1"          gabor_174_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_60_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2242  2992  2142      fixation_cross    gabor_087 gabor_055 gabor_035 gabor_168    gabor_087_alt gabor_055 gabor_035_alt gabor_168     "2_61_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2150_gabor_patch_orientation_087_055_035_168_target_position_1_3_retrieval_position_2"          gabor_circ gabor_055_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_61_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_055_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_120 gabor_040 gabor_099 gabor_015    gabor_120_alt gabor_040_alt gabor_099 gabor_015     "2_62_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_120_040_099_015_target_position_1_2_retrieval_position_2"          gabor_circ gabor_179_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_62_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2292      fixation_cross    gabor_037 gabor_147 gabor_060 gabor_165    gabor_037 gabor_147_alt gabor_060_alt gabor_165     "2_63_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_037_147_060_165_target_position_2_3_retrieval_position_2"          gabor_circ gabor_147_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_63_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_147_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2342      fixation_cross    gabor_047 gabor_161 gabor_134 gabor_004    gabor_047_alt gabor_161_alt gabor_134 gabor_004     "2_64_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_047_161_134_004_target_position_1_2_retrieval_position_2"          gabor_circ gabor_161_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_64_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_146 gabor_178 gabor_131 gabor_017    gabor_146 gabor_178 gabor_131_alt gabor_017_alt     "2_65_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_146_178_131_017_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_062_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_65_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_062_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  1942      fixation_cross    gabor_171 gabor_109 gabor_093 gabor_023    gabor_171 gabor_109_alt gabor_093 gabor_023_alt     "2_66_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_171_109_093_023_target_position_2_4_retrieval_position_2"          gabor_circ gabor_109_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_66_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2092  2992  1892      fixation_cross    gabor_010 gabor_145 gabor_078 gabor_123    gabor_010_alt gabor_145 gabor_078_alt gabor_123     "2_67_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_1900_gabor_patch_orientation_010_145_078_123_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_123_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_67_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_123_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2592      fixation_cross    gabor_012 gabor_092 gabor_057 gabor_172    gabor_012_alt gabor_092 gabor_057_alt gabor_172     "2_68_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2600_gabor_patch_orientation_012_092_057_172_target_position_1_3_retrieval_position_1"          gabor_012_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_68_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_164 gabor_124 gabor_093 gabor_051    gabor_164 gabor_124_alt gabor_093_alt gabor_051     "2_69_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_164_124_093_051_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_093_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_69_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1742  2992  2092      fixation_cross    gabor_146 gabor_169 gabor_116 gabor_040    gabor_146 gabor_169_alt gabor_116_alt gabor_040     "2_70_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2100_gabor_patch_orientation_146_169_116_040_target_position_2_3_retrieval_position_1"          gabor_146_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_70_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_146_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  