# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    62   292   292   399   125  1742  2992  1992      fixation_cross    gabor_149 gabor_001 gabor_038 gabor_018    gabor_149_alt gabor_001_alt gabor_038 gabor_018      "2_1_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_149_001_038_018_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_038_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_1_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_092 gabor_127 gabor_177 gabor_155    gabor_092 gabor_127_alt gabor_177 gabor_155_alt      "2_2_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_092_127_177_155_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_039_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_2_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  1892      fixation_cross    gabor_079 gabor_129 gabor_046 gabor_020    gabor_079 gabor_129_alt gabor_046 gabor_020_alt      "2_3_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_079_129_046_020_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_046_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_3_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2392      fixation_cross    gabor_160 gabor_005 gabor_081 gabor_025    gabor_160 gabor_005_alt gabor_081_alt gabor_025      "2_4_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_160_005_081_025_target_position_1_4_retrieval_position_1"       gabor_115_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_4_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2142      fixation_cross    gabor_039 gabor_144 gabor_114 gabor_070    gabor_039 gabor_144 gabor_114_alt gabor_070_alt      "2_5_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_039_144_114_070_target_position_1_2_retrieval_position_1"       gabor_039_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_5_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2092      fixation_cross    gabor_055 gabor_089 gabor_074 gabor_161    gabor_055_alt gabor_089 gabor_074_alt gabor_161      "2_6_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_055_089_074_161_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_161_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_6_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2092  2992  2542      fixation_cross    gabor_144 gabor_011 gabor_125 gabor_177    gabor_144 gabor_011_alt gabor_125 gabor_177_alt      "2_7_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2550_gabor_patch_orientation_144_011_125_177_target_position_1_3_retrieval_position_2"       gabor_circ gabor_011_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_7_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_011_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  1942      fixation_cross    gabor_085 gabor_011 gabor_164 gabor_138    gabor_085 gabor_011_alt gabor_164 gabor_138_alt      "2_8_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_085_011_164_138_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_164_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_8_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2442      fixation_cross    gabor_134 gabor_088 gabor_151 gabor_022    gabor_134_alt gabor_088_alt gabor_151 gabor_022      "2_9_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_134_088_151_022_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_104_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_9_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2192  2992  2292      fixation_cross    gabor_097 gabor_179 gabor_117 gabor_027    gabor_097 gabor_179_alt gabor_117_alt gabor_027     "2_10_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2300_gabor_patch_orientation_097_179_117_027_target_position_1_4_retrieval_position_2"       gabor_circ gabor_044_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_10_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_044_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_108 gabor_054 gabor_139 gabor_024    gabor_108 gabor_054_alt gabor_139_alt gabor_024     "2_11_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_108_054_139_024_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_024_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_11_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_103 gabor_137 gabor_028 gabor_153    gabor_103_alt gabor_137 gabor_028 gabor_153_alt     "2_12_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_103_137_028_153_target_position_2_3_retrieval_position_2"       gabor_circ gabor_087_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_12_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_176 gabor_111 gabor_001 gabor_049    gabor_176 gabor_111 gabor_001_alt gabor_049_alt     "2_13_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_176_111_001_049_target_position_1_2_retrieval_position_2"       gabor_circ gabor_111_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_13_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_179 gabor_045 gabor_125 gabor_071    gabor_179_alt gabor_045 gabor_125_alt gabor_071     "2_14_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_179_045_125_071_target_position_2_4_retrieval_position_2"       gabor_circ gabor_092_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_14_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_095 gabor_021 gabor_077 gabor_006    gabor_095 gabor_021_alt gabor_077_alt gabor_006     "2_15_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_095_021_077_006_target_position_1_4_retrieval_position_1"       gabor_095_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_15_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1742  2992  2042      fixation_cross    gabor_165 gabor_034 gabor_139 gabor_085    gabor_165 gabor_034 gabor_139_alt gabor_085_alt     "2_16_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2050_gabor_patch_orientation_165_034_139_085_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_139_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_16_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_139_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  1942      fixation_cross    gabor_102 gabor_158 gabor_085 gabor_129    gabor_102_alt gabor_158 gabor_085_alt gabor_129     "2_17_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_102_158_085_129_target_position_2_4_retrieval_position_2"       gabor_circ gabor_018_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_17_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_018_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_004 gabor_116 gabor_078 gabor_167    gabor_004 gabor_116_alt gabor_078 gabor_167_alt     "2_18_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_004_116_078_167_target_position_1_3_retrieval_position_1"       gabor_004_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_18_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2092      fixation_cross    gabor_116 gabor_147 gabor_085 gabor_030    gabor_116 gabor_147_alt gabor_085 gabor_030_alt     "2_19_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_116_147_085_030_target_position_1_3_retrieval_position_1"       gabor_163_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_19_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  1942      fixation_cross    gabor_154 gabor_036 gabor_124 gabor_099    gabor_154_alt gabor_036 gabor_124_alt gabor_099     "2_20_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_154_036_124_099_target_position_2_4_retrieval_position_2"       gabor_circ gabor_172_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_20_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1992  2992  2392      fixation_cross    gabor_132 gabor_111 gabor_090 gabor_168    gabor_132_alt gabor_111 gabor_090_alt gabor_168     "2_21_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2000_3000_2400_gabor_patch_orientation_132_111_090_168_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_044_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_21_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_044_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2442      fixation_cross    gabor_112 gabor_004 gabor_153 gabor_025    gabor_112 gabor_004_alt gabor_153_alt gabor_025     "2_22_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2450_gabor_patch_orientation_112_004_153_025_target_position_1_4_retrieval_position_1"       gabor_067_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_22_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2492      fixation_cross    gabor_016 gabor_175 gabor_054 gabor_144    gabor_016 gabor_175 gabor_054_alt gabor_144_alt     "2_23_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_016_175_054_144_target_position_1_2_retrieval_position_2"       gabor_circ gabor_175_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_23_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  1892      fixation_cross    gabor_109 gabor_002 gabor_166 gabor_141    gabor_109_alt gabor_002_alt gabor_166 gabor_141     "2_24_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_109_002_166_141_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_027_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_24_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_108 gabor_156 gabor_140 gabor_078    gabor_108_alt gabor_156_alt gabor_140 gabor_078     "2_25_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_108_156_140_078_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_001_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_25_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2092  2992  2142      fixation_cross    gabor_070 gabor_143 gabor_054 gabor_179    gabor_070_alt gabor_143 gabor_054_alt gabor_179     "2_26_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2150_gabor_patch_orientation_070_143_054_179_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_009_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_26_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_009_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2592      fixation_cross    gabor_048 gabor_090 gabor_111 gabor_175    gabor_048 gabor_090_alt gabor_111_alt gabor_175     "2_27_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2600_gabor_patch_orientation_048_090_111_175_target_position_1_4_retrieval_position_1"       gabor_048_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_27_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_012 gabor_046 gabor_163 gabor_089    gabor_012_alt gabor_046 gabor_163 gabor_089_alt     "2_28_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_012_046_163_089_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_118_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_28_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2092  2992  2042      fixation_cross    gabor_083 gabor_125 gabor_009 gabor_062    gabor_083 gabor_125_alt gabor_009_alt gabor_062     "2_29_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2050_gabor_patch_orientation_083_125_009_062_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_146_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_29_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_146_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2492      fixation_cross    gabor_062 gabor_039 gabor_077 gabor_018    gabor_062 gabor_039_alt gabor_077 gabor_018_alt     "2_30_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_062_039_077_018_target_position_1_3_retrieval_position_1"       gabor_107_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_30_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_107_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2242      fixation_cross    gabor_087 gabor_149 gabor_102 gabor_067    gabor_087_alt gabor_149 gabor_102_alt gabor_067     "2_31_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_087_149_102_067_target_position_2_4_retrieval_position_2"       gabor_circ gabor_149_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_31_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2292      fixation_cross    gabor_081 gabor_012 gabor_117 gabor_066    gabor_081_alt gabor_012 gabor_117_alt gabor_066     "2_32_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_081_012_117_066_target_position_2_4_retrieval_position_2"       gabor_circ gabor_149_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_32_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2542      fixation_cross    gabor_045 gabor_104 gabor_084 gabor_022    gabor_045_alt gabor_104 gabor_084_alt gabor_022     "2_33_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_045_104_084_022_target_position_2_4_retrieval_position_2"       gabor_circ gabor_104_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_33_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2342      fixation_cross    gabor_095 gabor_063 gabor_028 gabor_142    gabor_095_alt gabor_063_alt gabor_028 gabor_142     "2_34_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_095_063_028_142_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_006_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_34_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  1942      fixation_cross    gabor_090 gabor_046 gabor_163 gabor_129    gabor_090_alt gabor_046 gabor_163 gabor_129_alt     "2_35_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_090_046_163_129_target_position_2_3_retrieval_position_2"       gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_35_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1942  2992  2492      fixation_cross    gabor_168 gabor_101 gabor_144 gabor_129    gabor_168 gabor_101 gabor_144_alt gabor_129_alt     "2_36_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1950_3000_2500_gabor_patch_orientation_168_101_144_129_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_129_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_36_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_129_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2592      fixation_cross    gabor_179 gabor_006 gabor_095 gabor_066    gabor_179_alt gabor_006 gabor_095_alt gabor_066     "2_37_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_179_006_095_066_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_066_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_37_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2292      fixation_cross    gabor_026 gabor_158 gabor_008 gabor_092    gabor_026 gabor_158 gabor_008_alt gabor_092_alt     "2_38_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_026_158_008_092_target_position_1_2_retrieval_position_1"       gabor_076_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_38_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2042  2992  2592      fixation_cross    gabor_057 gabor_024 gabor_139 gabor_088    gabor_057 gabor_024_alt gabor_139_alt gabor_088     "2_39_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2600_gabor_patch_orientation_057_024_139_088_target_position_1_4_retrieval_position_2"       gabor_circ gabor_164_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_39_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_164_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2542      fixation_cross    gabor_012 gabor_124 gabor_142 gabor_089    gabor_012_alt gabor_124 gabor_142_alt gabor_089     "2_40_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_012_124_142_089_target_position_2_4_retrieval_position_2"       gabor_circ gabor_124_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_40_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2342      fixation_cross    gabor_015 gabor_048 gabor_161 gabor_031    gabor_015_alt gabor_048 gabor_161 gabor_031_alt     "2_41_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_015_048_161_031_target_position_2_3_retrieval_position_2"       gabor_circ gabor_094_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_41_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2342      fixation_cross    gabor_160 gabor_175 gabor_145 gabor_114    gabor_160 gabor_175_alt gabor_145 gabor_114_alt     "2_42_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_160_175_145_114_target_position_1_3_retrieval_position_1"       gabor_025_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_42_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2442      fixation_cross    gabor_089 gabor_172 gabor_005 gabor_065    gabor_089 gabor_172 gabor_005_alt gabor_065_alt     "2_43_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_089_172_005_065_target_position_1_2_retrieval_position_1"       gabor_089_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_43_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2192      fixation_cross    gabor_167 gabor_144 gabor_056 gabor_121    gabor_167 gabor_144 gabor_056_alt gabor_121_alt     "2_44_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_167_144_056_121_target_position_1_2_retrieval_position_2"       gabor_circ gabor_144_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_44_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  1992      fixation_cross    gabor_119 gabor_171 gabor_034 gabor_104    gabor_119 gabor_171_alt gabor_034 gabor_104_alt     "2_45_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_119_171_034_104_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_034_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_45_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_039 gabor_103 gabor_018 gabor_173    gabor_039 gabor_103_alt gabor_018_alt gabor_173     "2_46_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_039_103_018_173_target_position_1_4_retrieval_position_1"       gabor_085_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_46_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2092      fixation_cross    gabor_007 gabor_145 gabor_036 gabor_167    gabor_007 gabor_145_alt gabor_036_alt gabor_167     "2_47_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_007_145_036_167_target_position_1_4_retrieval_position_1"       gabor_007_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_47_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2092  2992  2342      fixation_cross    gabor_139 gabor_180 gabor_013 gabor_124    gabor_139 gabor_180 gabor_013_alt gabor_124_alt     "2_48_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2350_gabor_patch_orientation_139_180_013_124_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_013_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_48_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_013_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2392      fixation_cross    gabor_179 gabor_003 gabor_054 gabor_093    gabor_179 gabor_003_alt gabor_054 gabor_093_alt     "2_49_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_179_003_054_093_target_position_1_3_retrieval_position_1"       gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_49_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2592      fixation_cross    gabor_139 gabor_029 gabor_049 gabor_091    gabor_139_alt gabor_029 gabor_049 gabor_091_alt     "2_50_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_139_029_049_091_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_004_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_50_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2242      fixation_cross    gabor_167 gabor_098 gabor_035 gabor_015    gabor_167_alt gabor_098 gabor_035_alt gabor_015     "2_51_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_167_098_035_015_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_015_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_51_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2242  2992  2292      fixation_cross    gabor_112 gabor_072 gabor_005 gabor_087    gabor_112 gabor_072 gabor_005_alt gabor_087_alt     "2_52_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_2300_gabor_patch_orientation_112_072_005_087_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_087_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_52_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_087_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_002 gabor_115 gabor_073 gabor_089    gabor_002 gabor_115_alt gabor_073 gabor_089_alt     "2_53_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_002_115_073_089_target_position_1_3_retrieval_position_1"       gabor_002_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_53_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_046 gabor_155 gabor_131 gabor_066    gabor_046 gabor_155 gabor_131_alt gabor_066_alt     "2_54_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_046_155_131_066_target_position_1_2_retrieval_position_2"       gabor_circ gabor_020_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_54_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2042      fixation_cross    gabor_012 gabor_140 gabor_173 gabor_033    gabor_012_alt gabor_140 gabor_173_alt gabor_033     "2_55_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_012_140_173_033_target_position_2_4_retrieval_position_2"       gabor_circ gabor_140_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_55_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2192      fixation_cross    gabor_012 gabor_095 gabor_076 gabor_158    gabor_012_alt gabor_095 gabor_076 gabor_158_alt     "2_56_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_012_095_076_158_target_position_2_3_retrieval_position_2"       gabor_circ gabor_045_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_56_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1942  2992  2192      fixation_cross    gabor_048 gabor_122 gabor_081 gabor_157    gabor_048_alt gabor_122 gabor_081 gabor_157_alt     "2_57_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2200_gabor_patch_orientation_048_122_081_157_target_position_2_3_retrieval_position_1"       gabor_098_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_57_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_098_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2042      fixation_cross    gabor_089 gabor_112 gabor_002 gabor_179    gabor_089 gabor_112_alt gabor_002 gabor_179_alt     "2_58_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_089_112_002_179_target_position_1_3_retrieval_position_1"       gabor_134_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_58_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_117 gabor_141 gabor_098 gabor_079    gabor_117_alt gabor_141_alt gabor_098 gabor_079     "2_59_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_117_141_098_079_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_098_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_59_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1892  2992  2192      fixation_cross    gabor_117 gabor_073 gabor_162 gabor_145    gabor_117_alt gabor_073 gabor_162 gabor_145_alt     "2_60_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2200_gabor_patch_orientation_117_073_162_145_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_145_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_60_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_145_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_128 gabor_152 gabor_045 gabor_103    gabor_128 gabor_152_alt gabor_045 gabor_103_alt     "2_61_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_128_152_045_103_target_position_1_3_retrieval_position_1"       gabor_128_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_61_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_148 gabor_021 gabor_180 gabor_105    gabor_148_alt gabor_021 gabor_180 gabor_105_alt     "2_62_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_148_021_180_105_target_position_2_3_retrieval_position_2"       gabor_circ gabor_071_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_62_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2142      fixation_cross    gabor_132 gabor_149 gabor_107 gabor_087    gabor_132 gabor_149 gabor_107_alt gabor_087_alt     "2_63_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_132_149_107_087_target_position_1_2_retrieval_position_1"       gabor_177_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_63_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2242  2992  2492      fixation_cross    gabor_008 gabor_029 gabor_059 gabor_114    gabor_008_alt gabor_029_alt gabor_059 gabor_114     "2_64_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2500_gabor_patch_orientation_008_029_059_114_target_position_3_4_retrieval_position_1"       gabor_147_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_64_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_147_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_087 gabor_175 gabor_032 gabor_067    gabor_087_alt gabor_175_alt gabor_032 gabor_067     "2_65_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_087_175_032_067_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_067_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_65_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2542      fixation_cross    gabor_012 gabor_125 gabor_148 gabor_164    gabor_012 gabor_125 gabor_148_alt gabor_164_alt     "2_66_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_012_125_148_164_target_position_1_2_retrieval_position_2"       gabor_circ gabor_077_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_66_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_032 gabor_122 gabor_075 gabor_139    gabor_032 gabor_122_alt gabor_075_alt gabor_139     "2_67_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_032_122_075_139_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_004_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_67_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  1992      fixation_cross    gabor_091 gabor_142 gabor_127 gabor_020    gabor_091_alt gabor_142_alt gabor_127 gabor_020     "2_68_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_091_142_127_020_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_020_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_68_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1792  2992  2092      fixation_cross    gabor_049 gabor_107 gabor_069 gabor_177    gabor_049_alt gabor_107 gabor_069 gabor_177_alt     "2_69_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2100_gabor_patch_orientation_049_107_069_177_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_177_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_69_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_177_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2392      fixation_cross    gabor_011 gabor_055 gabor_143 gabor_083    gabor_011_alt gabor_055 gabor_143_alt gabor_083     "2_70_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_011_055_143_083_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_083_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_70_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  