# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_039 gabor_017 gabor_105 gabor_060    gabor_039_alt gabor_017 gabor_105 gabor_060_alt      "1_1_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_039_017_105_060_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_150_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_1_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  1892      fixation_cross    gabor_062 gabor_047 gabor_014 gabor_029    gabor_062_alt gabor_047 gabor_014_alt gabor_029      "1_2_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_062_047_014_029_target_position_2_4_retrieval_position_2"       gabor_circ gabor_047_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "1_2_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_047_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2042      fixation_cross    gabor_012 gabor_052 gabor_129 gabor_084    gabor_012_alt gabor_052 gabor_129 gabor_084_alt      "1_3_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_012_052_129_084_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_129_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_3_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  1992      fixation_cross    gabor_021 gabor_037 gabor_064 gabor_171    gabor_021 gabor_037 gabor_064_alt gabor_171_alt      "1_4_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_021_037_064_171_target_position_1_2_retrieval_position_2"       gabor_circ gabor_084_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_4_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_175 gabor_003 gabor_069 gabor_044    gabor_175 gabor_003_alt gabor_069 gabor_044_alt      "1_5_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_175_003_069_044_target_position_1_3_retrieval_position_1"       gabor_129_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_5_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2192  2992  2592      fixation_cross    gabor_173 gabor_002 gabor_122 gabor_090    gabor_173 gabor_002_alt gabor_122_alt gabor_090      "1_6_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2600_gabor_patch_orientation_173_002_122_090_target_position_1_4_retrieval_position_2"       gabor_circ gabor_141_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "1_6_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_141_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  1942      fixation_cross    gabor_028 gabor_084 gabor_004 gabor_139    gabor_028 gabor_084 gabor_004_alt gabor_139_alt      "1_7_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_028_084_004_139_target_position_1_2_retrieval_position_1"       gabor_167_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_7_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2342      fixation_cross    gabor_143 gabor_055 gabor_167 gabor_079    gabor_143_alt gabor_055 gabor_167 gabor_079_alt      "1_8_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_143_055_167_079_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_029_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_8_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2242  2992  2292      fixation_cross    gabor_092 gabor_071 gabor_161 gabor_043    gabor_092 gabor_071_alt gabor_161 gabor_043_alt      "1_9_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2300_gabor_patch_orientation_092_071_161_043_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_179_framed    blank blank blank blank    fixation_cross_target_position_1_3     "1_9_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_179_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2042      fixation_cross    gabor_058 gabor_004 gabor_090 gabor_026    gabor_058_alt gabor_004_alt gabor_090 gabor_026     "1_10_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_058_004_090_026_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_026_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_10_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2142      fixation_cross    gabor_115 gabor_059 gabor_002 gabor_083    gabor_115 gabor_059_alt gabor_002_alt gabor_083     "1_11_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_115_059_002_083_target_position_1_4_retrieval_position_1"       gabor_165_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_11_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2442      fixation_cross    gabor_048 gabor_111 gabor_028 gabor_156    gabor_048_alt gabor_111_alt gabor_028 gabor_156     "1_12_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_048_111_028_156_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_078_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_12_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2392      fixation_cross    gabor_144 gabor_075 gabor_029 gabor_099    gabor_144 gabor_075_alt gabor_029_alt gabor_099     "1_13_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_144_075_029_099_target_position_1_4_retrieval_position_1"       gabor_144_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_13_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_097 gabor_080 gabor_116 gabor_047    gabor_097 gabor_080_alt gabor_116 gabor_047_alt     "1_14_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_097_080_116_047_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_116_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_14_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2242      fixation_cross    gabor_112 gabor_031 gabor_156 gabor_084    gabor_112 gabor_031 gabor_156_alt gabor_084_alt     "1_15_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_112_031_156_084_target_position_1_2_retrieval_position_1"       gabor_112_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_15_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1792  2992  1892      fixation_cross    gabor_021 gabor_109 gabor_081 gabor_134    gabor_021_alt gabor_109 gabor_081_alt gabor_134     "1_16_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_1900_gabor_patch_orientation_021_109_081_134_target_position_2_4_retrieval_position_1"       gabor_159_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_16_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_159_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2592      fixation_cross    gabor_083 gabor_062 gabor_116 gabor_170    gabor_083_alt gabor_062 gabor_116_alt gabor_170     "1_17_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2600_gabor_patch_orientation_083_062_116_170_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_035_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_17_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2442      fixation_cross    gabor_124 gabor_048 gabor_068 gabor_096    gabor_124_alt gabor_048 gabor_068 gabor_096_alt     "1_18_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_124_048_068_096_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_068_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_18_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_119 gabor_003 gabor_150 gabor_179    gabor_119 gabor_003_alt gabor_150 gabor_179_alt     "1_19_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_119_003_150_179_target_position_1_3_retrieval_position_1"       gabor_072_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_19_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2492      fixation_cross    gabor_095 gabor_143 gabor_125 gabor_060    gabor_095_alt gabor_143 gabor_125 gabor_060_alt     "1_20_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_095_143_125_060_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_125_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_20_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_105 gabor_081 gabor_157 gabor_122    gabor_105_alt gabor_081 gabor_157 gabor_122_alt     "1_21_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_105_081_157_122_target_position_2_3_retrieval_position_2"       gabor_circ gabor_034_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_21_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2092  2992  2242      fixation_cross    gabor_081 gabor_107 gabor_027 gabor_139    gabor_081 gabor_107_alt gabor_027 gabor_139_alt     "1_22_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2250_gabor_patch_orientation_081_107_027_139_target_position_1_3_retrieval_position_2"       gabor_circ gabor_059_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_22_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_059_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2392      fixation_cross    gabor_040 gabor_025 gabor_090 gabor_108    gabor_040 gabor_025_alt gabor_090_alt gabor_108     "1_23_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_040_025_090_108_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_108_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_23_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_108_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2142      fixation_cross    gabor_097 gabor_122 gabor_176 gabor_010    gabor_097 gabor_122_alt gabor_176 gabor_010_alt     "1_24_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_097_122_176_010_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_038_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_24_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2242      fixation_cross    gabor_128 gabor_156 gabor_083 gabor_002    gabor_128_alt gabor_156 gabor_083_alt gabor_002     "1_25_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_128_156_083_002_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_048_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_25_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2542      fixation_cross    gabor_082 gabor_166 gabor_052 gabor_025    gabor_082 gabor_166 gabor_052_alt gabor_025_alt     "1_26_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_082_166_052_025_target_position_1_2_retrieval_position_1"       gabor_131_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_26_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2242  2992  1892      fixation_cross    gabor_180 gabor_055 gabor_121 gabor_097    gabor_180 gabor_055_alt gabor_121 gabor_097_alt     "1_27_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_1900_gabor_patch_orientation_180_055_121_097_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_097_framed    blank blank blank blank    fixation_cross_target_position_1_3    "1_27_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_097_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2292      fixation_cross    gabor_078 gabor_165 gabor_095 gabor_149    gabor_078_alt gabor_165 gabor_095_alt gabor_149     "1_28_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_078_165_095_149_target_position_2_4_retrieval_position_2"       gabor_circ gabor_027_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_28_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2142      fixation_cross    gabor_022 gabor_158 gabor_004 gabor_079    gabor_022_alt gabor_158_alt gabor_004 gabor_079     "1_29_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_022_158_004_079_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_139_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_29_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1792  2992  2442      fixation_cross    gabor_126 gabor_081 gabor_055 gabor_110    gabor_126_alt gabor_081 gabor_055 gabor_110_alt     "1_30_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2450_gabor_patch_orientation_126_081_055_110_target_position_2_3_retrieval_position_1"       gabor_126_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_30_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_126_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  1942      fixation_cross    gabor_142 gabor_026 gabor_059 gabor_094    gabor_142_alt gabor_026 gabor_059 gabor_094_alt     "1_31_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_142_026_059_094_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_059_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_31_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2142      fixation_cross    gabor_098 gabor_076 gabor_153 gabor_120    gabor_098_alt gabor_076 gabor_153 gabor_120_alt     "1_32_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_098_076_153_120_target_position_2_3_retrieval_position_2"       gabor_circ gabor_031_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_32_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  1992      fixation_cross    gabor_169 gabor_017 gabor_146 gabor_122    gabor_169 gabor_017_alt gabor_146 gabor_122_alt     "1_33_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_169_017_146_122_target_position_1_3_retrieval_position_1"       gabor_034_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_33_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2042      fixation_cross    gabor_042 gabor_157 gabor_027 gabor_008    gabor_042_alt gabor_157 gabor_027 gabor_008_alt     "1_34_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_042_157_027_008_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_077_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_34_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_069 gabor_091 gabor_178 gabor_132    gabor_069_alt gabor_091_alt gabor_178 gabor_132     "1_35_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_069_091_178_132_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_178_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_35_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2042      fixation_cross    gabor_003 gabor_112 gabor_045 gabor_081    gabor_003_alt gabor_112_alt gabor_045 gabor_081     "1_36_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_003_112_045_081_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_081_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_36_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2192      fixation_cross    gabor_039 gabor_100 gabor_013 gabor_128    gabor_039_alt gabor_100 gabor_013 gabor_128_alt     "1_37_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_039_100_013_128_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_061_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_37_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1742  2992  2342      fixation_cross    gabor_116 gabor_050 gabor_072 gabor_006    gabor_116_alt gabor_050 gabor_072_alt gabor_006     "1_38_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2350_gabor_patch_orientation_116_050_072_006_target_position_2_4_retrieval_position_1"       gabor_161_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_38_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_161_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_142 gabor_025 gabor_088 gabor_165    gabor_142 gabor_025_alt gabor_088 gabor_165_alt     "1_39_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_142_025_088_165_target_position_1_3_retrieval_position_1"       gabor_142_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_39_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2042      fixation_cross    gabor_101 gabor_162 gabor_129 gabor_074    gabor_101_alt gabor_162 gabor_129 gabor_074_alt     "1_40_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_101_162_129_074_target_position_2_3_retrieval_position_2"       gabor_circ gabor_023_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_40_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2192  2992  2092      fixation_cross    gabor_064 gabor_011 gabor_034 gabor_146    gabor_064_alt gabor_011 gabor_034_alt gabor_146     "1_41_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2100_gabor_patch_orientation_064_011_034_146_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_081_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_41_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_081_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2442      fixation_cross    gabor_037 gabor_014 gabor_073 gabor_122    gabor_037_alt gabor_014 gabor_073_alt gabor_122     "1_42_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_037_014_073_122_target_position_2_4_retrieval_position_2"       gabor_circ gabor_014_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_42_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2492      fixation_cross    gabor_024 gabor_086 gabor_175 gabor_067    gabor_024_alt gabor_086_alt gabor_175 gabor_067     "1_43_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_024_086_175_067_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_175_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_43_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2092      fixation_cross    gabor_010 gabor_094 gabor_132 gabor_115    gabor_010 gabor_094_alt gabor_132_alt gabor_115     "1_44_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_010_094_132_115_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_162_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_44_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_162_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2592      fixation_cross    gabor_127 gabor_006 gabor_090 gabor_062    gabor_127 gabor_006 gabor_090_alt gabor_062_alt     "1_45_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_127_006_090_062_target_position_1_2_retrieval_position_1"       gabor_176_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_45_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2192      fixation_cross    gabor_053 gabor_180 gabor_068 gabor_005    gabor_053 gabor_180_alt gabor_068 gabor_005_alt     "1_46_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_053_180_068_005_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_068_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_46_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2392      fixation_cross    gabor_066 gabor_046 gabor_111 gabor_179    gabor_066 gabor_046 gabor_111_alt gabor_179_alt     "1_47_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_066_046_111_179_target_position_1_2_retrieval_position_2"       gabor_circ gabor_046_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_47_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1842  2992  1942      fixation_cross    gabor_152 gabor_079 gabor_014 gabor_062    gabor_152 gabor_079_alt gabor_014 gabor_062_alt     "1_48_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_1950_gabor_patch_orientation_152_079_014_062_target_position_1_3_retrieval_position_2"       gabor_circ gabor_079_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_48_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_079_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  1892      fixation_cross    gabor_137 gabor_057 gabor_111 gabor_032    gabor_137 gabor_057 gabor_111_alt gabor_032_alt     "1_49_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_137_057_111_032_target_position_1_2_retrieval_position_1"       gabor_137_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_49_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1892  2992  2192      fixation_cross    gabor_139 gabor_156 gabor_099 gabor_017    gabor_139 gabor_156_alt gabor_099 gabor_017_alt     "1_50_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1900_3000_2200_gabor_patch_orientation_139_156_099_017_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_067_framed    blank blank blank blank    fixation_cross_target_position_1_3    "1_50_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_067_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2492      fixation_cross    gabor_115 gabor_088 gabor_049 gabor_001    gabor_115 gabor_088_alt gabor_049_alt gabor_001     "1_51_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_115_088_049_001_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_001_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_51_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2092      fixation_cross    gabor_169 gabor_033 gabor_009 gabor_059    gabor_169 gabor_033 gabor_009_alt gabor_059_alt     "1_52_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_169_033_009_059_target_position_1_2_retrieval_position_2"       gabor_circ gabor_079_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_52_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2542      fixation_cross    gabor_179 gabor_105 gabor_048 gabor_089    gabor_179 gabor_105_alt gabor_048_alt gabor_089     "1_53_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_179_105_048_089_target_position_1_4_retrieval_position_1"       gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_53_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2492      fixation_cross    gabor_066 gabor_098 gabor_155 gabor_130    gabor_066 gabor_098_alt gabor_155_alt gabor_130     "1_54_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_066_098_155_130_target_position_1_4_retrieval_position_1"       gabor_021_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_54_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_021_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1792  2992  2542      fixation_cross    gabor_090 gabor_003 gabor_032 gabor_113    gabor_090 gabor_003 gabor_032_alt gabor_113_alt     "1_55_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2550_gabor_patch_orientation_090_003_032_113_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_032_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_55_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_032_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2192      fixation_cross    gabor_153 gabor_108 gabor_021 gabor_093    gabor_153_alt gabor_108_alt gabor_021 gabor_093     "1_56_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_153_108_021_093_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_021_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_56_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_021_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  1992      fixation_cross    gabor_136 gabor_113 gabor_052 gabor_168    gabor_136 gabor_113_alt gabor_052 gabor_168_alt     "1_57_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_136_113_052_168_target_position_1_3_retrieval_position_1"       gabor_090_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_57_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_157 gabor_017 gabor_076 gabor_139    gabor_157_alt gabor_017_alt gabor_076 gabor_139     "1_58_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_157_017_076_139_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_076_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_58_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_080 gabor_136 gabor_156 gabor_022    gabor_080 gabor_136_alt gabor_156 gabor_022_alt     "1_59_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_080_136_156_022_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_156_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_59_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  1992      fixation_cross    gabor_095 gabor_005 gabor_029 gabor_067    gabor_095 gabor_005_alt gabor_029_alt gabor_067     "1_60_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_095_005_029_067_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_067_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_60_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_092 gabor_167 gabor_036 gabor_054    gabor_092 gabor_167 gabor_036_alt gabor_054_alt     "1_61_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_092_167_036_054_target_position_1_2_retrieval_position_2"       gabor_circ gabor_167_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_61_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_058 gabor_171 gabor_123 gabor_081    gabor_058_alt gabor_171_alt gabor_123 gabor_081     "1_62_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_058_171_123_081_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_036_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_62_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1792  2992  2342      fixation_cross    gabor_031 gabor_055 gabor_001 gabor_089    gabor_031 gabor_055 gabor_001_alt gabor_089_alt     "1_63_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2350_gabor_patch_orientation_031_055_001_089_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_089_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_63_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_089_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  1942      fixation_cross    gabor_118 gabor_082 gabor_169 gabor_049    gabor_118_alt gabor_082 gabor_169_alt gabor_049     "1_64_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_118_082_169_049_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_049_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_64_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2592      fixation_cross    gabor_092 gabor_129 gabor_172 gabor_066    gabor_092 gabor_129_alt gabor_172_alt gabor_066     "1_65_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_092_129_172_066_target_position_1_4_retrieval_position_1"       gabor_092_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_65_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_165 gabor_012 gabor_120 gabor_139    gabor_165_alt gabor_012 gabor_120_alt gabor_139     "1_66_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_165_012_120_139_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_091_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_66_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1842  2992  2342      fixation_cross    gabor_064 gabor_039 gabor_145 gabor_170    gabor_064_alt gabor_039_alt gabor_145 gabor_170     "1_67_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_2350_gabor_patch_orientation_064_039_145_170_target_position_3_4_retrieval_position_2"       gabor_circ gabor_039_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_67_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_039_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2242      fixation_cross    gabor_040 gabor_017 gabor_056 gabor_175    gabor_040 gabor_017_alt gabor_056 gabor_175_alt     "1_68_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_040_017_056_175_target_position_1_3_retrieval_position_1"       gabor_089_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_68_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1842  2992  2292      fixation_cross    gabor_130 gabor_068 gabor_045 gabor_105    gabor_130 gabor_068 gabor_045_alt gabor_105_alt     "1_69_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_2300_gabor_patch_orientation_130_068_045_105_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_105_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_69_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_105_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2092      fixation_cross    gabor_088 gabor_016 gabor_127 gabor_055    gabor_088_alt gabor_016 gabor_127_alt gabor_055     "1_70_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_088_016_127_055_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_055_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_70_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_055_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  