# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    62   292   292   399   125  2142  2992  1942      fixation_cross    gabor_006 gabor_159 gabor_096 gabor_141    gabor_006 gabor_159_alt gabor_096 gabor_141_alt      "2_1_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_006_159_096_141_target_position_1_3_retrieval_position_1"       gabor_006_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_1_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2592      fixation_cross    gabor_046 gabor_062 gabor_121 gabor_167    gabor_046 gabor_062_alt gabor_121 gabor_167_alt      "2_2_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_046_062_121_167_target_position_1_3_retrieval_position_1"       gabor_001_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_2_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2392      fixation_cross    gabor_166 gabor_139 gabor_015 gabor_032    gabor_166 gabor_139_alt gabor_015 gabor_032_alt      "2_3_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_166_139_015_032_target_position_1_3_retrieval_position_1"       gabor_121_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_3_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_121_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_045 gabor_005 gabor_083 gabor_061    gabor_045_alt gabor_005 gabor_083_alt gabor_061      "2_4_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_045_005_083_061_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_111_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_4_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2092  2992  2342      fixation_cross    gabor_020 gabor_156 gabor_171 gabor_129    gabor_020 gabor_156_alt gabor_171 gabor_129_alt      "2_5_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2350_gabor_patch_orientation_020_156_171_129_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_129_framed    blank blank blank blank    fixation_cross_target_position_1_3     "2_5_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_129_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_048 gabor_025 gabor_130 gabor_178    gabor_048 gabor_025 gabor_130_alt gabor_178_alt      "2_6_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_048_025_130_178_target_position_1_2_retrieval_position_2"       gabor_circ gabor_025_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_6_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2542      fixation_cross    gabor_137 gabor_023 gabor_155 gabor_086    gabor_137_alt gabor_023 gabor_155 gabor_086_alt      "2_7_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_137_023_155_086_target_position_2_3_retrieval_position_2"       gabor_circ gabor_023_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_7_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2592      fixation_cross    gabor_174 gabor_103 gabor_088 gabor_063    gabor_174_alt gabor_103 gabor_088_alt gabor_063      "2_8_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2600_gabor_patch_orientation_174_103_088_063_target_position_2_4_retrieval_position_2"       gabor_circ gabor_103_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_8_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2042  2992  1892      fixation_cross    gabor_106 gabor_123 gabor_001 gabor_151    gabor_106_alt gabor_123_alt gabor_001 gabor_151      "2_9_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_1900_gabor_patch_orientation_106_123_001_151_target_position_3_4_retrieval_position_1"       gabor_061_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_9_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_061_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2192      fixation_cross    gabor_160 gabor_008 gabor_118 gabor_141    gabor_160_alt gabor_008 gabor_118 gabor_141_alt     "2_10_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_160_008_118_141_target_position_2_3_retrieval_position_2"       gabor_circ gabor_008_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_10_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  1892      fixation_cross    gabor_113 gabor_141 gabor_095 gabor_053    gabor_113 gabor_141_alt gabor_095_alt gabor_053     "2_11_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_113_141_095_053_target_position_1_4_retrieval_position_1"       gabor_161_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_11_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2542      fixation_cross    gabor_022 gabor_106 gabor_051 gabor_137    gabor_022 gabor_106_alt gabor_051_alt gabor_137     "2_12_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_022_106_051_137_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_137_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_12_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2242      fixation_cross    gabor_011 gabor_085 gabor_166 gabor_146    gabor_011_alt gabor_085 gabor_166 gabor_146_alt     "2_13_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_011_085_166_146_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_166_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_13_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2442      fixation_cross    gabor_014 gabor_171 gabor_131 gabor_097    gabor_014_alt gabor_171_alt gabor_131 gabor_097     "2_14_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_014_171_131_097_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_081_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_14_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_056 gabor_073 gabor_002 gabor_118    gabor_056 gabor_073_alt gabor_002 gabor_118_alt     "2_15_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_056_073_002_118_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_002_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_15_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_146 gabor_001 gabor_033 gabor_173    gabor_146 gabor_001_alt gabor_033_alt gabor_173     "2_16_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_146_001_033_173_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_123_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_16_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2242  2992  2442      fixation_cross    gabor_064 gabor_088 gabor_005 gabor_151    gabor_064_alt gabor_088 gabor_005 gabor_151_alt     "2_17_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2450_gabor_patch_orientation_064_088_005_151_target_position_2_3_retrieval_position_1"       gabor_112_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_17_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_112_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_064 gabor_018 gabor_170 gabor_106    gabor_064 gabor_018_alt gabor_170 gabor_106_alt     "2_18_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_064_018_170_106_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_124_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_18_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2142      fixation_cross    gabor_118 gabor_088 gabor_146 gabor_034    gabor_118_alt gabor_088_alt gabor_146 gabor_034     "2_19_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_118_088_146_034_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_009_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_19_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1992  2992  2092      fixation_cross    gabor_105 gabor_179 gabor_127 gabor_150    gabor_105 gabor_179_alt gabor_127 gabor_150_alt     "2_20_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2000_3000_2100_gabor_patch_orientation_105_179_127_150_target_position_1_3_retrieval_position_2"       gabor_circ gabor_179_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_20_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_179_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  1992      fixation_cross    gabor_068 gabor_045 gabor_103 gabor_013    gabor_068 gabor_045_alt gabor_103 gabor_013_alt     "2_21_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_068_045_103_013_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_152_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_21_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2392      fixation_cross    gabor_092 gabor_009 gabor_158 gabor_028    gabor_092 gabor_009_alt gabor_158_alt gabor_028     "2_22_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_092_009_158_028_target_position_1_4_retrieval_position_1"       gabor_142_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_22_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  1942      fixation_cross    gabor_048 gabor_137 gabor_160 gabor_022    gabor_048_alt gabor_137_alt gabor_160 gabor_022     "2_23_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_048_137_160_022_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_111_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_23_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_064 gabor_171 gabor_002 gabor_087    gabor_064_alt gabor_171 gabor_002_alt gabor_087     "2_24_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_064_171_002_087_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_037_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_24_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2292      fixation_cross    gabor_177 gabor_020 gabor_135 gabor_001    gabor_177 gabor_020_alt gabor_135_alt gabor_001     "2_25_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_177_020_135_001_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_001_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_25_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2242      fixation_cross    gabor_047 gabor_090 gabor_074 gabor_021    gabor_047_alt gabor_090 gabor_074_alt gabor_021     "2_26_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_047_090_074_021_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_160_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_26_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_098 gabor_116 gabor_083 gabor_132    gabor_098 gabor_116_alt gabor_083 gabor_132_alt     "2_27_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_098_116_083_132_target_position_1_3_retrieval_position_1"       gabor_052_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_27_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2092  2992  2492      fixation_cross    gabor_035 gabor_144 gabor_088 gabor_163    gabor_035 gabor_144_alt gabor_088 gabor_163_alt     "2_28_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2500_gabor_patch_orientation_035_144_088_163_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_163_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_28_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_163_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2292      fixation_cross    gabor_134 gabor_157 gabor_090 gabor_002    gabor_134_alt gabor_157 gabor_090_alt gabor_002     "2_29_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_134_157_090_002_target_position_2_4_retrieval_position_2"       gabor_circ gabor_109_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_29_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1742  2992  2142      fixation_cross    gabor_039 gabor_095 gabor_164 gabor_114    gabor_039 gabor_095_alt gabor_164_alt gabor_114     "2_30_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2150_gabor_patch_orientation_039_095_164_114_target_position_1_4_retrieval_position_2"       gabor_circ gabor_095_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_30_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_095_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_009 gabor_161 gabor_119 gabor_177    gabor_009_alt gabor_161 gabor_119_alt gabor_177     "2_31_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_009_161_119_177_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_177_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_31_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_032 gabor_098 gabor_179 gabor_158    gabor_032 gabor_098 gabor_179_alt gabor_158_alt     "2_32_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_032_098_179_158_target_position_1_2_retrieval_position_2"       gabor_circ gabor_098_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_32_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2192      fixation_cross    gabor_007 gabor_065 gabor_154 gabor_027    gabor_007_alt gabor_065 gabor_154 gabor_027_alt     "2_33_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_007_065_154_027_target_position_2_3_retrieval_position_2"       gabor_circ gabor_065_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_33_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  1892      fixation_cross    gabor_109 gabor_069 gabor_092 gabor_047    gabor_109 gabor_069_alt gabor_092_alt gabor_047     "2_34_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_109_069_092_047_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_002_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_34_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2592      fixation_cross    gabor_111 gabor_032 gabor_140 gabor_177    gabor_111 gabor_032_alt gabor_140 gabor_177_alt     "2_35_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2600_gabor_patch_orientation_111_032_140_177_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_140_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_35_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2192  2992  2092      fixation_cross    gabor_100 gabor_120 gabor_032 gabor_085    gabor_100_alt gabor_120_alt gabor_032 gabor_085     "2_36_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_2100_gabor_patch_orientation_100_120_032_085_target_position_3_4_retrieval_position_2"       gabor_circ gabor_120_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_36_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_120_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_148 gabor_029 gabor_166 gabor_014    gabor_148 gabor_029 gabor_166_alt gabor_014_alt     "2_37_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_148_029_166_014_target_position_1_2_retrieval_position_1"       gabor_103_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_37_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2342      fixation_cross    gabor_147 gabor_087 gabor_057 gabor_106    gabor_147_alt gabor_087 gabor_057_alt gabor_106     "2_38_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_147_087_057_106_target_position_2_4_retrieval_position_2"       gabor_circ gabor_087_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_38_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2592      fixation_cross    gabor_139 gabor_162 gabor_123 gabor_078    gabor_139_alt gabor_162 gabor_123_alt gabor_078     "2_39_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2600_gabor_patch_orientation_139_162_123_078_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_078_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_39_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2042  2992  2192      fixation_cross    gabor_094 gabor_169 gabor_079 gabor_146    gabor_094 gabor_169 gabor_079_alt gabor_146_alt     "2_40_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2200_gabor_patch_orientation_094_169_079_146_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_032_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_40_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_032_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_179 gabor_019 gabor_097 gabor_154    gabor_179 gabor_019_alt gabor_097_alt gabor_154     "2_41_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_179_019_097_154_target_position_1_4_retrieval_position_1"       gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_41_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2092      fixation_cross    gabor_096 gabor_028 gabor_152 gabor_065    gabor_096_alt gabor_028 gabor_152_alt gabor_065     "2_42_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_096_028_152_065_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_115_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_42_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  1892      fixation_cross    gabor_084 gabor_152 gabor_112 gabor_174    gabor_084 gabor_152 gabor_112_alt gabor_174_alt     "2_43_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_1900_gabor_patch_orientation_084_152_112_174_target_position_1_2_retrieval_position_1"       gabor_132_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_43_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2292      fixation_cross    gabor_066 gabor_113 gabor_082 gabor_001    gabor_066_alt gabor_113 gabor_082 gabor_001_alt     "2_44_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_066_113_082_001_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_082_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_44_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1792  2992  2342      fixation_cross    gabor_144 gabor_097 gabor_180 gabor_122    gabor_144 gabor_097 gabor_180_alt gabor_122_alt     "2_45_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2350_gabor_patch_orientation_144_097_180_122_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_074_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_45_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_074_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2342      fixation_cross    gabor_120 gabor_163 gabor_180 gabor_094    gabor_120 gabor_163_alt gabor_180 gabor_094_alt     "2_46_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_120_163_180_094_target_position_1_3_retrieval_position_1"       gabor_073_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_46_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2292      fixation_cross    gabor_009 gabor_034 gabor_168 gabor_062    gabor_009 gabor_034_alt gabor_168_alt gabor_062     "2_47_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_009_034_168_062_target_position_1_4_retrieval_position_1"       gabor_009_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_47_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2442      fixation_cross    gabor_127 gabor_046 gabor_107 gabor_069    gabor_127 gabor_046_alt gabor_107 gabor_069_alt     "2_48_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_127_046_107_069_target_position_1_3_retrieval_position_1"       gabor_127_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_48_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2242      fixation_cross    gabor_084 gabor_168 gabor_040 gabor_100    gabor_084 gabor_168 gabor_040_alt gabor_100_alt     "2_49_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_084_168_040_100_target_position_1_2_retrieval_position_2"       gabor_circ gabor_168_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_49_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2392      fixation_cross    gabor_142 gabor_172 gabor_088 gabor_123    gabor_142 gabor_172 gabor_088_alt gabor_123_alt     "2_50_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_142_172_088_123_target_position_1_2_retrieval_position_2"       gabor_circ gabor_172_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_50_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1992  2992  1992      fixation_cross    gabor_026 gabor_009 gabor_074 gabor_045    gabor_026_alt gabor_009 gabor_074_alt gabor_045     "2_51_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2000_3000_2000_gabor_patch_orientation_026_009_074_045_target_position_2_4_retrieval_position_1"       gabor_163_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_51_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_163_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2492      fixation_cross    gabor_177 gabor_007 gabor_035 gabor_142    gabor_177_alt gabor_007_alt gabor_035 gabor_142     "2_52_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_177_007_035_142_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_142_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_52_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_032 gabor_144 gabor_055 gabor_120    gabor_032 gabor_144 gabor_055_alt gabor_120_alt     "2_53_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_032_144_055_120_target_position_1_2_retrieval_position_1"       gabor_032_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_53_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_158 gabor_077 gabor_108 gabor_092    gabor_158 gabor_077_alt gabor_108 gabor_092_alt     "2_54_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_158_077_108_092_target_position_1_3_retrieval_position_1"       gabor_023_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_54_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  1942      fixation_cross    gabor_179 gabor_150 gabor_028 gabor_065    gabor_179 gabor_150_alt gabor_028_alt gabor_065     "2_55_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_179_150_028_065_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_065_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_55_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_158 gabor_052 gabor_176 gabor_127    gabor_158 gabor_052_alt gabor_176 gabor_127_alt     "2_56_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_158_052_176_127_target_position_1_3_retrieval_position_1"       gabor_158_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_56_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1892  2992  2492      fixation_cross    gabor_121 gabor_089 gabor_011 gabor_061    gabor_121 gabor_089_alt gabor_011_alt gabor_061     "2_57_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1900_3000_2500_gabor_patch_orientation_121_089_011_061_target_position_1_4_retrieval_position_2"       gabor_circ gabor_138_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_57_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_138_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2542      fixation_cross    gabor_147 gabor_064 gabor_006 gabor_089    gabor_147_alt gabor_064_alt gabor_006 gabor_089     "2_58_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_147_064_006_089_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_089_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_58_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1942  2992  2192      fixation_cross    gabor_050 gabor_027 gabor_114 gabor_134    gabor_050 gabor_027 gabor_114_alt gabor_134_alt     "2_59_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1950_3000_2200_gabor_patch_orientation_050_027_114_134_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_134_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_59_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_134_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2542      fixation_cross    gabor_054 gabor_012 gabor_094 gabor_035    gabor_054_alt gabor_012_alt gabor_094 gabor_035     "2_60_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_054_012_094_035_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_035_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_60_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  1942      fixation_cross    gabor_052 gabor_111 gabor_092 gabor_157    gabor_052 gabor_111_alt gabor_092 gabor_157_alt     "2_61_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_1950_gabor_patch_orientation_052_111_092_157_target_position_1_3_retrieval_position_1"       gabor_005_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_61_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2092      fixation_cross    gabor_103 gabor_058 gabor_148 gabor_082    gabor_103_alt gabor_058 gabor_148 gabor_082_alt     "2_62_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_103_058_148_082_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_013_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_62_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_013_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2392      fixation_cross    gabor_044 gabor_170 gabor_016 gabor_096    gabor_044_alt gabor_170_alt gabor_016 gabor_096     "2_63_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_044_170_016_096_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_016_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_63_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2492      fixation_cross    gabor_164 gabor_020 gabor_145 gabor_102    gabor_164_alt gabor_020_alt gabor_145 gabor_102     "2_64_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_164_020_145_102_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_055_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_64_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_055_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2142  2992  1942      fixation_cross    gabor_084 gabor_014 gabor_101 gabor_054    gabor_084_alt gabor_014_alt gabor_101 gabor_054     "2_65_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_1950_gabor_patch_orientation_084_014_101_054_target_position_3_4_retrieval_position_1"       gabor_131_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_65_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_131_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_121 gabor_076 gabor_001 gabor_061    gabor_121 gabor_076_alt gabor_001 gabor_061_alt     "2_66_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_121_076_001_061_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_138_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_66_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_164 gabor_046 gabor_081 gabor_004    gabor_164_alt gabor_046_alt gabor_081 gabor_004     "2_67_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_164_046_081_004_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_67_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2442      fixation_cross    gabor_005 gabor_023 gabor_087 gabor_056    gabor_005 gabor_023_alt gabor_087 gabor_056_alt     "2_68_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_005_023_087_056_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_136_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_68_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1842  2992  2092      fixation_cross    gabor_024 gabor_138 gabor_162 gabor_057    gabor_024_alt gabor_138 gabor_162 gabor_057_alt     "2_69_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_2100_gabor_patch_orientation_024_138_162_057_target_position_2_3_retrieval_position_1"       gabor_024_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_69_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_024_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  1992      fixation_cross    gabor_137 gabor_104 gabor_176 gabor_026    gabor_137_alt gabor_104 gabor_176 gabor_026_alt     "2_70_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_137_104_176_026_target_position_2_3_retrieval_position_2"       gabor_circ gabor_055_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_70_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_055_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  