# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;	  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   44    61   292   292   399   125  1742  2992  2392      fixation_cross    gabor_170 gabor_149 gabor_001 gabor_123    gabor_170 gabor_149_alt gabor_001 gabor_123_alt      "2_1_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_170_149_001_123_target_position_1_3_retrieval_position_1"       gabor_035_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2042      fixation_cross    gabor_092 gabor_158 gabor_173 gabor_008    gabor_092_alt gabor_158 gabor_173 gabor_008_alt      "2_2_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_092_158_173_008_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_038_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2142      fixation_cross    gabor_053 gabor_142 gabor_082 gabor_098    gabor_053 gabor_142_alt gabor_082 gabor_098_alt      "2_3_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_053_142_082_098_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_082_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  2242      fixation_cross    gabor_139 gabor_030 gabor_051 gabor_096    gabor_139_alt gabor_030 gabor_051_alt gabor_096      "2_4_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_139_030_051_096_target_position_2_4_retrieval_position_2"       gabor_circ gabor_077_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2242  2992  2442      fixation_cross    gabor_016 gabor_106 gabor_169 gabor_043    gabor_016 gabor_106_alt gabor_169_alt gabor_043      "2_5_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2450_gabor_patch_orientation_016_106_169_043_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_122_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_122_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_023 gabor_052 gabor_138 gabor_175    gabor_023_alt gabor_052_alt gabor_138 gabor_175      "2_6_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_023_052_138_175_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_138_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_083 gabor_167 gabor_013 gabor_030    gabor_083 gabor_167_alt gabor_013 gabor_030_alt      "2_7_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_083_167_013_030_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_148_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  1892      fixation_cross    gabor_147 gabor_030 gabor_168 gabor_106    gabor_147 gabor_030 gabor_168_alt gabor_106_alt      "2_8_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_1900_gabor_patch_orientation_147_030_168_106_target_position_1_2_retrieval_position_2"       gabor_circ gabor_079_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1892  2992  2192      fixation_cross    gabor_130 gabor_016 gabor_044 gabor_067    gabor_130_alt gabor_016 gabor_044_alt gabor_067      "2_9_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2200_gabor_patch_orientation_130_016_044_067_target_position_2_4_retrieval_position_1"       gabor_130_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_130_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2292      fixation_cross    gabor_137 gabor_176 gabor_001 gabor_153    gabor_137 gabor_176_alt gabor_001_alt gabor_153     "2_10_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_137_176_001_153_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_153_framed    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_153_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2542      fixation_cross    gabor_057 gabor_040 gabor_001 gabor_107    gabor_057_alt gabor_040 gabor_001 gabor_107_alt     "2_11_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_057_040_001_107_target_position_2_3_retrieval_position_2"       gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  2142      fixation_cross    gabor_117 gabor_143 gabor_004 gabor_074    gabor_117 gabor_143_alt gabor_004_alt gabor_074     "2_12_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_117_143_004_074_target_position_1_4_retrieval_position_1"       gabor_117_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2192      fixation_cross    gabor_060 gabor_009 gabor_116 gabor_133    gabor_060_alt gabor_009 gabor_116_alt gabor_133     "2_13_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_060_009_116_133_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_088_framed    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1942  2992  2492      fixation_cross    gabor_051 gabor_140 gabor_083 gabor_120    gabor_051 gabor_140_alt gabor_083 gabor_120_alt     "2_14_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_051_140_083_120_target_position_1_3_retrieval_position_1"       gabor_003_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  2492      fixation_cross    gabor_123 gabor_072 gabor_099 gabor_155    gabor_123 gabor_072_alt gabor_099 gabor_155_alt     "2_15_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_123_072_099_155_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_099_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_090 gabor_151 gabor_062 gabor_029    gabor_090 gabor_151_alt gabor_062_alt gabor_029     "2_16_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_090_151_062_029_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_029_framed    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_052 gabor_111 gabor_138 gabor_163    gabor_052 gabor_111 gabor_138_alt gabor_163_alt     "2_17_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_052_111_138_163_target_position_1_2_retrieval_position_1"       gabor_005_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1842  2992  1892      fixation_cross    gabor_095 gabor_175 gabor_054 gabor_131    gabor_095_alt gabor_175 gabor_054_alt gabor_131     "2_18_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_1900_gabor_patch_orientation_095_175_054_131_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_054_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_054_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2192      fixation_cross    gabor_051 gabor_067 gabor_096 gabor_016    gabor_051_alt gabor_067_alt gabor_096 gabor_016     "2_19_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_051_067_096_016_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_141_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2142      fixation_cross    gabor_096 gabor_157 gabor_067 gabor_174    gabor_096 gabor_157 gabor_067_alt gabor_174_alt     "2_20_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_096_157_067_174_target_position_1_2_retrieval_position_2"       gabor_circ gabor_157_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_157_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2042  2992  2092      fixation_cross    gabor_005 gabor_153 gabor_118 gabor_047    gabor_005 gabor_153_alt gabor_118_alt gabor_047     "2_21_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2100_gabor_patch_orientation_005_153_118_047_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_072_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_072_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2092      fixation_cross    gabor_060 gabor_150 gabor_091 gabor_179    gabor_060 gabor_150_alt gabor_091 gabor_179_alt     "2_22_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_060_150_091_179_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_091_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  2192      fixation_cross    gabor_082 gabor_163 gabor_044 gabor_007    gabor_082 gabor_163 gabor_044_alt gabor_007_alt     "2_23_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_082_163_044_007_target_position_1_2_retrieval_position_2"       gabor_circ gabor_117_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_034 gabor_066 gabor_110 gabor_082    gabor_034 gabor_066 gabor_110_alt gabor_082_alt     "2_24_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_034_066_110_082_target_position_1_2_retrieval_position_1"       gabor_034_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2142  2992  2142      fixation_cross    gabor_097 gabor_179 gabor_007 gabor_033    gabor_097_alt gabor_179_alt gabor_007 gabor_033     "2_25_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_097_179_007_033_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_145_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_145_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  1892      fixation_cross    gabor_034 gabor_165 gabor_060 gabor_111    gabor_034 gabor_165 gabor_060_alt gabor_111_alt     "2_26_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_034_165_060_111_target_position_1_2_retrieval_position_1"       gabor_034_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2592      fixation_cross    gabor_136 gabor_170 gabor_028 gabor_115    gabor_136 gabor_170 gabor_028_alt gabor_115_alt     "2_27_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2600_gabor_patch_orientation_136_170_028_115_target_position_1_2_retrieval_position_1"       gabor_086_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_086_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1792  2992  2342      fixation_cross    gabor_014 gabor_125 gabor_036 gabor_091    gabor_014 gabor_125_alt gabor_036_alt gabor_091     "2_28_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2350_gabor_patch_orientation_014_125_036_091_target_position_1_4_retrieval_position_2"       gabor_circ gabor_175_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_175_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_164 gabor_089 gabor_036 gabor_008    gabor_164 gabor_089_alt gabor_036_alt gabor_008     "2_29_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_164_089_036_008_target_position_1_4_retrieval_position_1"       gabor_118_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_014 gabor_162 gabor_074 gabor_142    gabor_014 gabor_162_alt gabor_074_alt gabor_142     "2_30_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_014_162_074_142_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_142_framed    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_147 gabor_132 gabor_093 gabor_069    gabor_147_alt gabor_132_alt gabor_093 gabor_069     "2_31_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_147_132_093_069_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_069_framed    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1892  2992  2042      fixation_cross    gabor_124 gabor_148 gabor_038 gabor_080    gabor_124_alt gabor_148_alt gabor_038 gabor_080     "2_32_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2050_gabor_patch_orientation_124_148_038_080_target_position_3_4_retrieval_position_1"       gabor_124_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_124_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1942  2992  1942      fixation_cross    gabor_021 gabor_137 gabor_059 gabor_078    gabor_021 gabor_137_alt gabor_059 gabor_078_alt     "2_33_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_021_137_059_078_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_109_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2242  2992  2392      fixation_cross    gabor_105 gabor_025 gabor_138 gabor_079    gabor_105 gabor_025_alt gabor_138_alt gabor_079     "2_34_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_105_025_138_079_target_position_1_4_retrieval_position_1"       gabor_105_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2342      fixation_cross    gabor_045 gabor_150 gabor_064 gabor_102    gabor_045_alt gabor_150 gabor_064 gabor_102_alt     "2_35_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_045_150_064_102_target_position_2_3_retrieval_position_2"       gabor_circ gabor_150_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_152 gabor_034 gabor_017 gabor_078    gabor_152 gabor_034 gabor_017_alt gabor_078_alt     "2_36_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_152_034_017_078_target_position_1_2_retrieval_position_1"       gabor_103_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2142  2992  2542      fixation_cross    gabor_011 gabor_143 gabor_125 gabor_169    gabor_011 gabor_143_alt gabor_125_alt gabor_169     "2_37_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2550_gabor_patch_orientation_011_143_125_169_target_position_1_4_retrieval_position_2"       gabor_circ gabor_143_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_143_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  2392      fixation_cross    gabor_171 gabor_064 gabor_084 gabor_041    gabor_171 gabor_064_alt gabor_084 gabor_041_alt     "2_38_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_171_064_084_041_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_084_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1742  2992  1942      fixation_cross    gabor_064 gabor_039 gabor_019 gabor_145    gabor_064_alt gabor_039_alt gabor_019 gabor_145     "2_39_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_1950_gabor_patch_orientation_064_039_019_145_target_position_3_4_retrieval_position_1"       gabor_064_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_064_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_052 gabor_114 gabor_029 gabor_180    gabor_052 gabor_114_alt gabor_029_alt gabor_180     "2_40_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_052_114_029_180_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_135_framed    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2392      fixation_cross    gabor_049 gabor_113 gabor_157 gabor_092    gabor_049_alt gabor_113 gabor_157_alt gabor_092     "2_41_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_049_113_157_092_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_092_framed    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_070 gabor_005 gabor_086 gabor_151    gabor_070 gabor_005_alt gabor_086 gabor_151_alt     "2_42_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_070_005_086_151_target_position_1_3_retrieval_position_1"       gabor_070_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_086 gabor_157 gabor_174 gabor_112    gabor_086_alt gabor_157 gabor_174_alt gabor_112     "2_43_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_086_157_174_112_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_112_framed    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2042  2992  2442      fixation_cross    gabor_118 gabor_061 gabor_166 gabor_041    gabor_118 gabor_061_alt gabor_166_alt gabor_041     "2_44_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_118_061_166_041_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_041_framed    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  1992      fixation_cross    gabor_098 gabor_027 gabor_155 gabor_114    gabor_098_alt gabor_027 gabor_155_alt gabor_114     "2_45_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_098_027_155_114_target_position_2_4_retrieval_position_2"       gabor_circ gabor_027_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2042      fixation_cross    gabor_154 gabor_019 gabor_137 gabor_098    gabor_154 gabor_019_alt gabor_137_alt gabor_098     "2_46_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_154_019_137_098_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_098_framed    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2242      fixation_cross    gabor_024 gabor_103 gabor_039 gabor_167    gabor_024 gabor_103_alt gabor_039 gabor_167_alt     "2_47_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_024_103_039_167_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_084_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2242  2992  2592      fixation_cross    gabor_147 gabor_115 gabor_037 gabor_176    gabor_147 gabor_115_alt gabor_037 gabor_176_alt     "2_48_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2600_gabor_patch_orientation_147_115_037_176_target_position_1_3_retrieval_position_2"       gabor_circ gabor_069_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_069_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2292      fixation_cross    gabor_093 gabor_177 gabor_003 gabor_027    gabor_093 gabor_177_alt gabor_003_alt gabor_027     "2_49_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_093_177_003_027_target_position_1_4_retrieval_position_1"       gabor_043_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  1942      fixation_cross    gabor_144 gabor_174 gabor_101 gabor_031    gabor_144_alt gabor_174_alt gabor_101 gabor_031     "2_50_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_144_174_101_031_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_101_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1942  2992  2292      fixation_cross    gabor_054 gabor_141 gabor_112 gabor_025    gabor_054 gabor_141_alt gabor_112 gabor_025_alt     "2_51_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2300_gabor_patch_orientation_054_141_112_025_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_075_framed    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_075_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  2192      fixation_cross    gabor_134 gabor_112 gabor_080 gabor_002    gabor_134 gabor_112_alt gabor_080_alt gabor_002     "2_52_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_134_112_080_002_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_002_framed    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  1992      fixation_cross    gabor_124 gabor_043 gabor_083 gabor_007    gabor_124 gabor_043_alt gabor_083 gabor_007_alt     "2_53_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_124_043_083_007_target_position_1_3_retrieval_position_1"       gabor_169_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1792  2992  2592      fixation_cross    gabor_074 gabor_051 gabor_032 gabor_106    gabor_074_alt gabor_051 gabor_032 gabor_106_alt     "2_54_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2600_gabor_patch_orientation_074_051_032_106_target_position_2_3_retrieval_position_1"       gabor_122_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_122_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2092      fixation_cross    gabor_025 gabor_076 gabor_047 gabor_161    gabor_025 gabor_076_alt gabor_047_alt gabor_161     "2_55_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_025_076_047_161_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_113_framed    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_071 gabor_159 gabor_141 gabor_120    gabor_071 gabor_159_alt gabor_141 gabor_120_alt     "2_56_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_071_159_141_120_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_141_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2242      fixation_cross    gabor_169 gabor_112 gabor_033 gabor_144    gabor_169_alt gabor_112_alt gabor_033 gabor_144     "2_57_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_169_112_033_144_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_079_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_122 gabor_039 gabor_002 gabor_161    gabor_122_alt gabor_039 gabor_002_alt gabor_161     "2_58_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_122_039_002_161_target_position_2_4_retrieval_position_2"       gabor_circ gabor_039_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2142  2992  2292      fixation_cross    gabor_147 gabor_034 gabor_099 gabor_059    gabor_147 gabor_034 gabor_099_alt gabor_059_alt     "2_59_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_147_034_099_059_target_position_1_2_retrieval_position_1"       gabor_010_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_031 gabor_105 gabor_174 gabor_087    gabor_031 gabor_105_alt gabor_174_alt gabor_087     "2_60_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_031_105_174_087_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_137_framed    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2592      fixation_cross    gabor_107 gabor_171 gabor_147 gabor_123    gabor_107_alt gabor_171 gabor_147_alt gabor_123     "2_61_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_107_171_147_123_target_position_2_4_retrieval_position_2"       gabor_circ gabor_033_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_033_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2342      fixation_cross    gabor_073 gabor_048 gabor_002 gabor_137    gabor_073 gabor_048_alt gabor_002 gabor_137_alt     "2_62_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_073_048_002_137_target_position_1_3_retrieval_position_1"       gabor_073_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2042  2992  2242      fixation_cross    gabor_054 gabor_088 gabor_024 gabor_138    gabor_054 gabor_088 gabor_024_alt gabor_138_alt     "2_63_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2250_gabor_patch_orientation_054_088_024_138_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_001_framed    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_001_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_039 gabor_054 gabor_173 gabor_001    gabor_039 gabor_054_alt gabor_173_alt gabor_001     "2_64_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_039_054_173_001_target_position_1_4_retrieval_position_1"       gabor_084_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  2542      fixation_cross    gabor_074 gabor_028 gabor_044 gabor_099    gabor_074 gabor_028_alt gabor_044 gabor_099_alt     "2_65_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_074_028_044_099_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_180_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2042      fixation_cross    gabor_151 gabor_108 gabor_062 gabor_028    gabor_151_alt gabor_108_alt gabor_062 gabor_028     "2_66_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_151_108_062_028_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_168_framed    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1892  2992  2442      fixation_cross    gabor_077 gabor_036 gabor_105 gabor_016    gabor_077 gabor_036 gabor_105_alt gabor_016_alt     "2_67_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2450_gabor_patch_orientation_077_036_105_016_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_016_framed    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_016_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2542      fixation_cross    gabor_162 gabor_178 gabor_137 gabor_022    gabor_162 gabor_178_alt gabor_137 gabor_022_alt     "2_68_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_162_178_137_022_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_001_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_164 gabor_009 gabor_077 gabor_148    gabor_164_alt gabor_009 gabor_077_alt gabor_148     "2_69_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_164_009_077_148_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_148_framed    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1892  2992  2492      fixation_cross    gabor_134 gabor_046 gabor_113 gabor_079    gabor_134 gabor_046_alt gabor_113 gabor_079_alt     "2_70_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2500_gabor_patch_orientation_134_046_113_079_target_position_1_3_retrieval_position_2"       gabor_circ gabor_046_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_046_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  