# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_066 gabor_149 gabor_130 gabor_112    gabor_066_alt gabor_149 gabor_130 gabor_112_alt      "2_1_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_066_149_130_112_target_position_2_3_retrieval_position_3"        gabor_circ gabor_circ gabor_130_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_1_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2442      fixation_cross    gabor_035 gabor_080 gabor_004 gabor_063    gabor_035_alt gabor_080 gabor_004 gabor_063_alt      "2_2_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2450_gabor_patch_orientation_035_080_004_063_target_position_2_3_retrieval_position_3"        gabor_circ gabor_circ gabor_143_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_2_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_062 gabor_042 gabor_171 gabor_152    gabor_062_alt gabor_042 gabor_171_alt gabor_152      "2_3_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_062_042_171_152_target_position_2_4_retrieval_position_2"        gabor_circ gabor_042_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_3_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2392      fixation_cross    gabor_009 gabor_150 gabor_031 gabor_076    gabor_009 gabor_150_alt gabor_031 gabor_076_alt      "2_4_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_009_150_031_076_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_166_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_4_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_171 gabor_146 gabor_029 gabor_084    gabor_171_alt gabor_146 gabor_029_alt gabor_084      "2_5_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_171_146_029_084_target_position_2_4_retrieval_position_2"        gabor_circ gabor_146_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_5_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2392      fixation_cross    gabor_118 gabor_008 gabor_147 gabor_098    gabor_118 gabor_008 gabor_147_alt gabor_098_alt      "2_6_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_118_008_147_098_target_position_1_2_retrieval_position_2"        gabor_circ gabor_008_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_6_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_155 gabor_025 gabor_140 gabor_067    gabor_155_alt gabor_025_alt gabor_140 gabor_067      "2_7_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_155_025_140_067_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_067_framed    blank blank blank blank    fixation_cross_target_position_3_4     "2_7_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1792  2992  2142      fixation_cross    gabor_114 gabor_078 gabor_161 gabor_051    gabor_114_alt gabor_078 gabor_161 gabor_051_alt      "2_8_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_1800_3000_2150_gabor_patch_orientation_114_078_161_051_target_position_2_3_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_051_framed    blank blank blank blank    fixation_cross_target_position_2_3     "2_8_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_051_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2092      fixation_cross    gabor_048 gabor_012 gabor_064 gabor_118    gabor_048 gabor_012_alt gabor_064_alt gabor_118      "2_9_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_048_012_064_118_target_position_1_4_retrieval_position_1"        gabor_095_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_9_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2092  2992  2192      fixation_cross    gabor_017 gabor_179 gabor_048 gabor_097    gabor_017_alt gabor_179_alt gabor_048 gabor_097     "2_10_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_2100_3000_2200_gabor_patch_orientation_017_179_048_097_target_position_3_4_retrieval_position_1"        gabor_154_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_10_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_154_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_069 gabor_124 gabor_091 gabor_008    gabor_069 gabor_124_alt gabor_091_alt gabor_008     "2_11_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_069_124_091_008_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_145_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_11_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_145_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2242      fixation_cross    gabor_070 gabor_025 gabor_050 gabor_136    gabor_070_alt gabor_025 gabor_050_alt gabor_136     "2_12_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_070_025_050_136_target_position_2_4_retrieval_position_2"        gabor_circ gabor_025_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_12_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2042      fixation_cross    gabor_052 gabor_162 gabor_127 gabor_087    gabor_052 gabor_162_alt gabor_127 gabor_087_alt     "2_13_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_052_162_127_087_target_position_1_3_retrieval_position_1"        gabor_052_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_13_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_109 gabor_020 gabor_094 gabor_039    gabor_109 gabor_020 gabor_094_alt gabor_039_alt     "2_14_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_109_020_094_039_target_position_1_2_retrieval_position_1"        gabor_158_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_14_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_108 gabor_179 gabor_158 gabor_142    gabor_108_alt gabor_179_alt gabor_158 gabor_142     "2_15_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_108_179_158_142_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_092_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_15_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2442      fixation_cross    gabor_133 gabor_049 gabor_177 gabor_025    gabor_133 gabor_049 gabor_177_alt gabor_025_alt     "2_16_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2450_gabor_patch_orientation_133_049_177_025_target_position_1_2_retrieval_position_1"        gabor_088_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_16_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_119 gabor_102 gabor_136 gabor_165    gabor_119_alt gabor_102 gabor_136 gabor_165_alt     "2_17_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_119_102_136_165_target_position_2_3_retrieval_position_2"        gabor_circ gabor_054_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_17_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2242  2992  2342      fixation_cross    gabor_093 gabor_161 gabor_127 gabor_018    gabor_093 gabor_161 gabor_127_alt gabor_018_alt     "2_18_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2250_3000_2350_gabor_patch_orientation_093_161_127_018_target_position_1_2_retrieval_position_3"        gabor_circ gabor_circ gabor_127_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_18_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_127_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2042      fixation_cross    gabor_175 gabor_117 gabor_055 gabor_097    gabor_175 gabor_117 gabor_055_alt gabor_097_alt     "2_19_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_175_117_055_097_target_position_1_2_retrieval_position_1"        gabor_038_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_19_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_075 gabor_141 gabor_180 gabor_161    gabor_075 gabor_141 gabor_180_alt gabor_161_alt     "2_20_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_075_141_180_161_target_position_1_2_retrieval_position_1"        gabor_025_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_20_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_098 gabor_066 gabor_082 gabor_014    gabor_098 gabor_066_alt gabor_082 gabor_014_alt     "2_21_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_098_066_082_014_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_129_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_21_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2292      fixation_cross    gabor_019 gabor_132 gabor_079 gabor_156    gabor_019 gabor_132_alt gabor_079_alt gabor_156     "2_22_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_019_132_079_156_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_156_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_22_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2042  2992  1992      fixation_cross    gabor_145 gabor_094 gabor_036 gabor_070    gabor_145 gabor_094 gabor_036_alt gabor_070_alt     "2_23_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_2050_3000_2000_gabor_patch_orientation_145_094_036_070_target_position_1_2_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_118_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_23_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_118_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_097 gabor_113 gabor_069 gabor_133    gabor_097_alt gabor_113 gabor_069_alt gabor_133     "2_24_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_097_113_069_133_target_position_2_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_133_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_24_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_133_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2092      fixation_cross    gabor_156 gabor_005 gabor_118 gabor_044    gabor_156_alt gabor_005_alt gabor_118 gabor_044     "2_25_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_156_005_118_044_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_071_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_25_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_030 gabor_048 gabor_102 gabor_165    gabor_030 gabor_048_alt gabor_102_alt gabor_165     "2_26_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_030_048_102_165_target_position_1_4_retrieval_position_1"        gabor_030_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_26_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2092      fixation_cross    gabor_167 gabor_080 gabor_009 gabor_149    gabor_167_alt gabor_080_alt gabor_009 gabor_149     "2_27_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_167_080_009_149_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_099_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_27_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2042  2992  2342      fixation_cross    gabor_153 gabor_047 gabor_137 gabor_075    gabor_153 gabor_047 gabor_137_alt gabor_075_alt     "2_28_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2050_3000_2350_gabor_patch_orientation_153_047_137_075_target_position_1_2_retrieval_position_3"        gabor_circ gabor_circ gabor_137_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_28_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_137_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2192      fixation_cross    gabor_089 gabor_132 gabor_157 gabor_005    gabor_089_alt gabor_132 gabor_157_alt gabor_005     "2_29_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_089_132_157_005_target_position_2_4_retrieval_position_2"        gabor_circ gabor_178_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_29_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  1992      fixation_cross    gabor_136 gabor_089 gabor_066 gabor_010    gabor_136_alt gabor_089 gabor_066 gabor_010_alt     "2_30_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_136_089_066_010_target_position_2_3_retrieval_position_3"        gabor_circ gabor_circ gabor_116_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_30_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1992  2992  2342      fixation_cross    gabor_111 gabor_161 gabor_179 gabor_054    gabor_111 gabor_161 gabor_179_alt gabor_054_alt     "2_31_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_2000_3000_2350_gabor_patch_orientation_111_161_179_054_target_position_1_2_retrieval_position_3"        gabor_circ gabor_circ gabor_132_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_31_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_132_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_093 gabor_152 gabor_065 gabor_038    gabor_093_alt gabor_152 gabor_065_alt gabor_038     "2_32_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_093_152_065_038_target_position_2_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_175_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_32_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2442      fixation_cross    gabor_042 gabor_114 gabor_009 gabor_067    gabor_042 gabor_114_alt gabor_009_alt gabor_067     "2_33_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2450_gabor_patch_orientation_042_114_009_067_target_position_1_4_retrieval_position_1"        gabor_089_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_33_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2042      fixation_cross    gabor_035 gabor_011 gabor_147 gabor_085    gabor_035 gabor_011_alt gabor_147 gabor_085_alt     "2_34_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_035_011_147_085_target_position_1_3_retrieval_position_1"        gabor_173_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_34_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_072 gabor_162 gabor_044 gabor_012    gabor_072 gabor_162_alt gabor_044 gabor_012_alt     "2_35_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_072_162_044_012_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_044_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_35_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2192  2992  2042      fixation_cross    gabor_138 gabor_093 gabor_015 gabor_069    gabor_138 gabor_093_alt gabor_015_alt gabor_069     "2_36_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_2200_3000_2050_gabor_patch_orientation_138_093_015_069_target_position_1_4_retrieval_position_3"        gabor_circ gabor_circ gabor_155_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_36_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_155_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2042      fixation_cross    gabor_033 gabor_123 gabor_080 gabor_152    gabor_033_alt gabor_123_alt gabor_080 gabor_152     "2_37_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_033_123_080_152_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_152_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_37_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2042      fixation_cross    gabor_096 gabor_112 gabor_159 gabor_179    gabor_096 gabor_112_alt gabor_159 gabor_179_alt     "2_38_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_096_112_159_179_target_position_1_3_retrieval_position_1"        gabor_096_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_38_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2042      fixation_cross    gabor_128 gabor_020 gabor_176 gabor_093    gabor_128_alt gabor_020 gabor_176_alt gabor_093     "2_39_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_128_020_176_093_target_position_2_4_retrieval_position_2"        gabor_circ gabor_020_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_39_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1942  2992  2242      fixation_cross    gabor_030 gabor_146 gabor_011 gabor_167    gabor_030_alt gabor_146_alt gabor_011 gabor_167     "2_40_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_1950_3000_2250_gabor_patch_orientation_030_146_011_167_target_position_3_4_retrieval_position_1"        gabor_080_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_40_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_080_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_166 gabor_081 gabor_058 gabor_041    gabor_166 gabor_081_alt gabor_058_alt gabor_041     "2_41_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_166_081_058_041_target_position_1_4_retrieval_position_1"        gabor_166_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_41_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2092      fixation_cross    gabor_001 gabor_106 gabor_087 gabor_173    gabor_001 gabor_106_alt gabor_087_alt gabor_173     "2_42_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_001_106_087_173_target_position_1_4_retrieval_position_1"        gabor_001_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_42_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_062 gabor_141 gabor_123 gabor_033    gabor_062_alt gabor_141_alt gabor_123 gabor_033     "2_43_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_062_141_123_033_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_080_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_43_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_085 gabor_023 gabor_046 gabor_158    gabor_085_alt gabor_023 gabor_046 gabor_158_alt     "2_44_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_085_023_046_158_target_position_2_3_retrieval_position_2"        gabor_circ gabor_023_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_44_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2192  2992  2492      fixation_cross    gabor_178 gabor_148 gabor_027 gabor_111    gabor_178 gabor_148 gabor_027_alt gabor_111_alt     "2_45_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2200_3000_2500_gabor_patch_orientation_178_148_027_111_target_position_1_2_retrieval_position_3"        gabor_circ gabor_circ gabor_027_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_45_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_027_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2292      fixation_cross    gabor_101 gabor_145 gabor_079 gabor_013    gabor_101 gabor_145_alt gabor_079_alt gabor_013     "2_46_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_101_145_079_013_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_013_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_46_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_013_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2392      fixation_cross    gabor_159 gabor_073 gabor_088 gabor_141    gabor_159 gabor_073_alt gabor_088_alt gabor_141     "2_47_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_159_073_088_141_target_position_1_4_retrieval_position_1"        gabor_022_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_47_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2442      fixation_cross    gabor_174 gabor_086 gabor_131 gabor_015    gabor_174_alt gabor_086_alt gabor_131 gabor_015     "2_48_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_174_086_131_015_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_015_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_48_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2292      fixation_cross    gabor_017 gabor_138 gabor_073 gabor_002    gabor_017 gabor_138_alt gabor_073_alt gabor_002     "2_49_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_017_138_073_002_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_050_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_49_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2492      fixation_cross    gabor_139 gabor_170 gabor_004 gabor_155    gabor_139 gabor_170_alt gabor_004 gabor_155_alt     "2_50_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_139_170_004_155_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_004_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_50_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_094 gabor_170 gabor_147 gabor_127    gabor_094_alt gabor_170_alt gabor_147 gabor_127     "2_51_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_094_170_147_127_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_008_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_51_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2042  2992  1992      fixation_cross    gabor_013 gabor_148 gabor_120 gabor_080    gabor_013_alt gabor_148_alt gabor_120 gabor_080     "2_52_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_2050_3000_2000_gabor_patch_orientation_013_148_120_080_target_position_3_4_retrieval_position_1"        gabor_062_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_52_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_062_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2142      fixation_cross    gabor_119 gabor_161 gabor_094 gabor_139    gabor_119_alt gabor_161 gabor_094 gabor_139_alt     "2_53_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_119_161_094_139_target_position_2_3_retrieval_position_3"        gabor_circ gabor_circ gabor_094_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_53_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2092      fixation_cross    gabor_092 gabor_064 gabor_125 gabor_017    gabor_092 gabor_064_alt gabor_125_alt gabor_017     "2_54_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_092_064_125_017_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_152_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_54_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2442      fixation_cross    gabor_034 gabor_012 gabor_170 gabor_061    gabor_034_alt gabor_012_alt gabor_170 gabor_061     "2_55_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_034_012_170_061_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_124_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_55_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2042  2992  2292      fixation_cross    gabor_092 gabor_129 gabor_044 gabor_111    gabor_092 gabor_129 gabor_044_alt gabor_111_alt     "2_56_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2050_3000_2300_gabor_patch_orientation_092_129_044_111_target_position_1_2_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_111_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_56_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_111_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_111 gabor_030 gabor_094 gabor_171    gabor_111_alt gabor_030_alt gabor_094 gabor_171     "2_57_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_111_030_094_171_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_094_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_57_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_146 gabor_032 gabor_062 gabor_013    gabor_146 gabor_032_alt gabor_062 gabor_013_alt     "2_58_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_146_032_062_013_target_position_1_3_retrieval_position_1"        gabor_146_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_58_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2392      fixation_cross    gabor_040 gabor_093 gabor_169 gabor_146    gabor_040 gabor_093_alt gabor_169_alt gabor_146     "2_59_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_040_093_169_146_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_006_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_59_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2242  2992  1992      fixation_cross    gabor_154 gabor_008 gabor_123 gabor_038    gabor_154_alt gabor_008 gabor_123_alt gabor_038     "2_60_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2250_3000_2000_gabor_patch_orientation_154_008_123_038_target_position_2_4_retrieval_position_3"        gabor_circ gabor_circ gabor_123_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_60_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_123_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2292      fixation_cross    gabor_046 gabor_116 gabor_008 gabor_062    gabor_046 gabor_116_alt gabor_008_alt gabor_062     "2_61_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_046_116_008_062_target_position_1_4_retrieval_position_1"        gabor_046_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_61_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2192      fixation_cross    gabor_048 gabor_108 gabor_025 gabor_081    gabor_048_alt gabor_108 gabor_025 gabor_081_alt     "2_62_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_048_108_025_081_target_position_2_3_retrieval_position_2"        gabor_circ gabor_108_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_62_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_108_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_115 gabor_070 gabor_175 gabor_138    gabor_115_alt gabor_070 gabor_175_alt gabor_138     "2_63_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_115_070_175_138_target_position_2_4_retrieval_position_2"        gabor_circ gabor_025_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_63_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2442      fixation_cross    gabor_119 gabor_030 gabor_079 gabor_045    gabor_119 gabor_030 gabor_079_alt gabor_045_alt     "2_64_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_119_030_079_045_target_position_1_2_retrieval_position_1"        gabor_119_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_64_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2242      fixation_cross    gabor_103 gabor_126 gabor_066 gabor_036    gabor_103_alt gabor_126 gabor_066_alt gabor_036     "2_65_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_103_126_066_036_target_position_2_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_083_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_65_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_166 gabor_118 gabor_058 gabor_143    gabor_166 gabor_118_alt gabor_058_alt gabor_143     "2_66_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_166_118_058_143_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_143_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_66_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1992  2992  2192      fixation_cross    gabor_084 gabor_154 gabor_038 gabor_002    gabor_084 gabor_154_alt gabor_038_alt gabor_002     "2_67_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_2000_3000_2200_gabor_patch_orientation_084_154_038_002_target_position_1_4_retrieval_position_2"        gabor_circ gabor_109_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_67_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_109_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2492      fixation_cross    gabor_165 gabor_032 gabor_180 gabor_011    gabor_165 gabor_032 gabor_180_alt gabor_011_alt     "2_68_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_165_032_180_011_target_position_1_2_retrieval_position_1"        gabor_117_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_68_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1992  2992  2492      fixation_cross    gabor_048 gabor_081 gabor_166 gabor_011    gabor_048_alt gabor_081 gabor_166 gabor_011_alt     "2_69_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2000_3000_2500_gabor_patch_orientation_048_081_166_011_target_position_2_3_retrieval_position_1"        gabor_048_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_69_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_048_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_139 gabor_123 gabor_051 gabor_085    gabor_139 gabor_123_alt gabor_051_alt gabor_085     "2_70_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_139_123_051_085_target_position_1_4_retrieval_position_1"        gabor_139_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_70_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  