# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;

# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   #port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_085 gabor_040 gabor_175 gabor_152    gabor_085_alt gabor_040_alt gabor_175 gabor_152      "1_1_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_085_040_175_152_target_position_1_2_retrieval_position_1"           gabor_085_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_1_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2392      fixation_cross    gabor_090 gabor_028 gabor_149 gabor_009    gabor_090 gabor_028_alt gabor_149_alt gabor_009      "1_2_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_090_028_149_009_target_position_2_3_retrieval_position_2"           gabor_circ gabor_028_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_2_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2242      fixation_cross    gabor_165 gabor_134 gabor_057 gabor_022    gabor_165 gabor_134 gabor_057_alt gabor_022_alt      "1_3_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_165_134_057_022_target_position_3_4_retrieval_position_3"           gabor_circ gabor_circ gabor_107_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_3_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_107_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_064 gabor_048 gabor_082 gabor_170    gabor_064 gabor_048_alt gabor_082_alt gabor_170      "1_4_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_064_048_082_170_target_position_2_3_retrieval_position_3"           gabor_circ gabor_circ gabor_082_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_4_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2092      fixation_cross    gabor_101 gabor_033 gabor_177 gabor_120    gabor_101_alt gabor_033 gabor_177 gabor_120_alt      "1_5_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_101_033_177_120_target_position_1_4_retrieval_position_1"           gabor_149_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "1_5_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1842  2992  2342      fixation_cross    gabor_061 gabor_089 gabor_170 gabor_016    gabor_061_alt gabor_089 gabor_170_alt gabor_016      "1_6_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_1850_3000_2350_gabor_patch_orientation_061_089_170_016_target_position_1_3_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_151_framed    blank blank blank blank    fixation_cross_target_position_1_3     "1_6_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_151_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2142      fixation_cross    gabor_121 gabor_037 gabor_010 gabor_149    gabor_121_alt gabor_037 gabor_010_alt gabor_149      "1_7_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_121_037_010_149_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_010_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_7_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_129 gabor_178 gabor_151 gabor_063    gabor_129 gabor_178 gabor_151_alt gabor_063_alt      "1_8_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_129_178_151_063_target_position_3_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_014_framed    blank blank blank blank    fixation_cross_target_position_3_4     "1_8_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  1992      fixation_cross    gabor_077 gabor_001 gabor_055 gabor_034    gabor_077_alt gabor_001_alt gabor_055 gabor_034      "1_9_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_077_001_055_034_target_position_1_2_retrieval_position_2"           gabor_circ gabor_140_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_9_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2042      fixation_cross    gabor_119 gabor_007 gabor_081 gabor_166    gabor_119 gabor_007_alt gabor_081 gabor_166_alt     "1_10_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_119_007_081_166_target_position_2_4_retrieval_position_2"           gabor_circ gabor_056_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_10_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2042  2992  2142      fixation_cross    gabor_087 gabor_045 gabor_155 gabor_020    gabor_087_alt gabor_045_alt gabor_155 gabor_020     "1_11_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_2050_3000_2150_gabor_patch_orientation_087_045_155_020_target_position_1_2_retrieval_position_3"           gabor_circ gabor_circ gabor_108_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_11_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_108_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2492      fixation_cross    gabor_071 gabor_046 gabor_157 gabor_088    gabor_071_alt gabor_046 gabor_157 gabor_088_alt     "1_12_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_071_046_157_088_target_position_1_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_136_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_12_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_035 gabor_060 gabor_145 gabor_113    gabor_035 gabor_060 gabor_145_alt gabor_113_alt     "1_13_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_035_060_145_113_target_position_3_4_retrieval_position_3"           gabor_circ gabor_circ gabor_145_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_13_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_145_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2392      fixation_cross    gabor_042 gabor_018 gabor_157 gabor_082    gabor_042 gabor_018_alt gabor_157_alt gabor_082     "1_14_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_042_018_157_082_target_position_2_3_retrieval_position_3"           gabor_circ gabor_circ gabor_108_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_14_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_108_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2242      fixation_cross    gabor_010 gabor_121 gabor_179 gabor_072    gabor_010_alt gabor_121 gabor_179_alt gabor_072     "1_15_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_010_121_179_072_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_043_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_15_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2092      fixation_cross    gabor_001 gabor_082 gabor_016 gabor_033    gabor_001 gabor_082_alt gabor_016_alt gabor_033     "1_16_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_001_082_016_033_target_position_2_3_retrieval_position_3"           gabor_circ gabor_circ gabor_151_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_16_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2192  2992  2392      fixation_cross    gabor_089 gabor_010 gabor_174 gabor_067    gabor_089_alt gabor_010 gabor_174 gabor_067_alt     "1_17_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_2200_3000_2400_gabor_patch_orientation_089_010_174_067_target_position_1_4_retrieval_position_3"           gabor_circ gabor_circ gabor_174_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_17_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_174_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  1992      fixation_cross    gabor_045 gabor_027 gabor_165 gabor_133    gabor_045 gabor_027_alt gabor_165 gabor_133_alt     "1_18_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_045_027_165_133_target_position_2_4_retrieval_position_2"           gabor_circ gabor_027_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_18_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1892  2992  2042      fixation_cross    gabor_119 gabor_063 gabor_098 gabor_035    gabor_119 gabor_063_alt gabor_098 gabor_035_alt     "1_19_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_1900_3000_2050_gabor_patch_orientation_119_063_098_035_target_position_2_4_retrieval_position_1"           gabor_169_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_19_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_169_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2442      fixation_cross    gabor_046 gabor_117 gabor_179 gabor_071    gabor_046_alt gabor_117 gabor_179_alt gabor_071     "1_20_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_046_117_179_071_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_20_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_062 gabor_030 gabor_003 gabor_149    gabor_062_alt gabor_030 gabor_003_alt gabor_149     "1_21_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_062_030_003_149_target_position_1_3_retrieval_position_1"           gabor_062_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_21_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_062_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2442      fixation_cross    gabor_039 gabor_061 gabor_020 gabor_175    gabor_039_alt gabor_061_alt gabor_020 gabor_175     "1_22_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_039_061_020_175_target_position_1_2_retrieval_position_2"           gabor_circ gabor_106_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_22_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  2492      fixation_cross    gabor_140 gabor_085 gabor_124 gabor_065    gabor_140_alt gabor_085_alt gabor_124 gabor_065     "1_23_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_140_085_124_065_target_position_1_2_retrieval_position_1"           gabor_140_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_23_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2342      fixation_cross    gabor_178 gabor_091 gabor_019 gabor_144    gabor_178 gabor_091_alt gabor_019_alt gabor_144     "1_24_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_178_091_019_144_target_position_2_3_retrieval_position_3"           gabor_circ gabor_circ gabor_019_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_24_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_019_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2292      fixation_cross    gabor_123 gabor_151 gabor_071 gabor_096    gabor_123 gabor_151_alt gabor_071_alt gabor_096     "1_25_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_123_151_071_096_target_position_2_3_retrieval_position_2"           gabor_circ gabor_151_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_25_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2092      fixation_cross    gabor_117 gabor_008 gabor_142 gabor_161    gabor_117_alt gabor_008 gabor_142_alt gabor_161     "1_26_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_117_008_142_161_target_position_1_3_retrieval_position_1"           gabor_071_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_26_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1842  2992  2042      fixation_cross    gabor_023 gabor_132 gabor_157 gabor_068    gabor_023_alt gabor_132_alt gabor_157 gabor_068     "1_27_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_1850_3000_2050_gabor_patch_orientation_023_132_157_068_target_position_1_2_retrieval_position_3"           gabor_circ gabor_circ gabor_157_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_27_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_157_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2292      fixation_cross    gabor_142 gabor_121 gabor_005 gabor_163    gabor_142_alt gabor_121 gabor_005_alt gabor_163     "1_28_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_142_121_005_163_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_055_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_28_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_055_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1792  2992  2442      fixation_cross    gabor_158 gabor_028 gabor_179 gabor_107    gabor_158_alt gabor_028 gabor_179_alt gabor_107     "1_29_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_1800_3000_2450_gabor_patch_orientation_158_028_179_107_target_position_1_3_retrieval_position_2"           gabor_circ gabor_028_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_29_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_028_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_156 gabor_095 gabor_134 gabor_029    gabor_156_alt gabor_095 gabor_134_alt gabor_029     "1_30_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_156_095_134_029_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_30_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2292      fixation_cross    gabor_082 gabor_144 gabor_058 gabor_036    gabor_082_alt gabor_144 gabor_058 gabor_036_alt     "1_31_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_082_144_058_036_target_position_1_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_036_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_31_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_072 gabor_129 gabor_092 gabor_156    gabor_072 gabor_129_alt gabor_092 gabor_156_alt     "1_32_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_072_129_092_156_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_156_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_32_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2442      fixation_cross    gabor_126 gabor_009 gabor_144 gabor_170    gabor_126 gabor_009 gabor_144_alt gabor_170_alt     "1_33_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2100_3000_2450_gabor_patch_orientation_126_009_144_170_target_position_3_4_retrieval_position_3"           gabor_circ gabor_circ gabor_099_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_33_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2392      fixation_cross    gabor_147 gabor_095 gabor_115 gabor_008    gabor_147 gabor_095_alt gabor_115_alt gabor_008     "1_34_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_147_095_115_008_target_position_2_3_retrieval_position_3"           gabor_circ gabor_circ gabor_115_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_34_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  1992      fixation_cross    gabor_062 gabor_146 gabor_169 gabor_082    gabor_062 gabor_146 gabor_169_alt gabor_082_alt     "1_35_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_062_146_169_082_target_position_3_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_082_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_35_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_115 gabor_090 gabor_003 gabor_032    gabor_115_alt gabor_090 gabor_003 gabor_032_alt     "1_36_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_115_090_003_032_target_position_1_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_032_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_36_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_036 gabor_113 gabor_174 gabor_063    gabor_036_alt gabor_113 gabor_174_alt gabor_063     "1_37_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_036_113_174_063_target_position_1_3_retrieval_position_1"           gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_37_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1842  2992  2192      fixation_cross    gabor_012 gabor_118 gabor_137 gabor_077    gabor_012 gabor_118_alt gabor_137 gabor_077_alt     "1_38_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_1850_3000_2200_gabor_patch_orientation_012_118_137_077_target_position_2_4_retrieval_position_1"           gabor_012_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_38_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_012_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_172 gabor_096 gabor_034 gabor_060    gabor_172_alt gabor_096 gabor_034 gabor_060_alt     "1_39_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_172_096_034_060_target_position_1_4_retrieval_position_1"           gabor_172_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_39_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2392      fixation_cross    gabor_056 gabor_146 gabor_124 gabor_086    gabor_056 gabor_146_alt gabor_124 gabor_086_alt     "1_40_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_056_146_124_086_target_position_2_4_retrieval_position_2"           gabor_circ gabor_009_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_40_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_104 gabor_047 gabor_030 gabor_165    gabor_104 gabor_047 gabor_030_alt gabor_165_alt     "1_41_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_104_047_030_165_target_position_3_4_retrieval_position_3"           gabor_circ gabor_circ gabor_030_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_41_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  2492      fixation_cross    gabor_127 gabor_055 gabor_104 gabor_168    gabor_127_alt gabor_055 gabor_104_alt gabor_168     "1_42_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_127_055_104_168_target_position_1_3_retrieval_position_1"           gabor_080_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_42_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1742  2992  2192      fixation_cross    gabor_170 gabor_132 gabor_054 gabor_092    gabor_170_alt gabor_132 gabor_054 gabor_092_alt     "1_43_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_1750_3000_2200_gabor_patch_orientation_170_132_054_092_target_position_1_4_retrieval_position_3"           gabor_circ gabor_circ gabor_009_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_43_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_009_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2192      fixation_cross    gabor_172 gabor_061 gabor_131 gabor_106    gabor_172 gabor_061 gabor_131_alt gabor_106_alt     "1_44_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_172_061_131_106_target_position_3_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_151_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_44_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_130 gabor_073 gabor_016 gabor_106    gabor_130_alt gabor_073 gabor_016_alt gabor_106     "1_45_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_130_073_016_106_target_position_1_3_retrieval_position_1"           gabor_130_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_45_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  2092      fixation_cross    gabor_177 gabor_067 gabor_149 gabor_040    gabor_177 gabor_067_alt gabor_149 gabor_040_alt     "1_46_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_177_067_149_040_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_087_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_46_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1992  2992  2342      fixation_cross    gabor_169 gabor_006 gabor_038 gabor_148    gabor_169 gabor_006_alt gabor_038_alt gabor_148     "1_47_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_2000_3000_2350_gabor_patch_orientation_169_006_038_148_target_position_2_3_retrieval_position_1"           gabor_119_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_47_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_119_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2392      fixation_cross    gabor_098 gabor_176 gabor_009 gabor_154    gabor_098_alt gabor_176_alt gabor_009 gabor_154     "1_48_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_098_176_009_154_target_position_1_2_retrieval_position_2"           gabor_circ gabor_176_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_48_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2492      fixation_cross    gabor_179 gabor_139 gabor_099 gabor_028    gabor_179 gabor_139_alt gabor_099 gabor_028_alt     "1_49_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_179_139_099_028_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_163_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_49_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2042      fixation_cross    gabor_042 gabor_178 gabor_001 gabor_024    gabor_042 gabor_178_alt gabor_001_alt gabor_024     "1_50_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_042_178_001_024_target_position_2_3_retrieval_position_2"           gabor_circ gabor_130_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_50_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2142  2992  2042      fixation_cross    gabor_018 gabor_093 gabor_036 gabor_125    gabor_018_alt gabor_093_alt gabor_036 gabor_125     "1_51_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_2150_3000_2050_gabor_patch_orientation_018_093_036_125_target_position_1_2_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_125_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_51_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_125_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2492      fixation_cross    gabor_119 gabor_172 gabor_086 gabor_152    gabor_119_alt gabor_172 gabor_086_alt gabor_152     "1_52_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_119_172_086_152_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_039_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_52_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2292      fixation_cross    gabor_019 gabor_065 gabor_098 gabor_083    gabor_019_alt gabor_065 gabor_098 gabor_083_alt     "1_53_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_019_065_098_083_target_position_1_4_retrieval_position_1"           gabor_154_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_53_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_031 gabor_046 gabor_180 gabor_102    gabor_031_alt gabor_046 gabor_180 gabor_102_alt     "1_54_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_031_046_180_102_target_position_1_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_152_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_54_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2492      fixation_cross    gabor_159 gabor_007 gabor_050 gabor_177    gabor_159_alt gabor_007_alt gabor_050 gabor_177     "1_55_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_159_007_050_177_target_position_1_2_retrieval_position_1"           gabor_159_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_55_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_035 gabor_167 gabor_111 gabor_145    gabor_035 gabor_167 gabor_111_alt gabor_145_alt     "1_56_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_035_167_111_145_target_position_3_4_retrieval_position_3"           gabor_circ gabor_circ gabor_111_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_56_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_115 gabor_164 gabor_095 gabor_144    gabor_115 gabor_164_alt gabor_095 gabor_144_alt     "1_57_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_115_164_095_144_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_144_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_57_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2242  2992  2142      fixation_cross    gabor_137 gabor_068 gabor_018 gabor_098    gabor_137_alt gabor_068_alt gabor_018 gabor_098     "1_58_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_2250_3000_2150_gabor_patch_orientation_137_068_018_098_target_position_1_2_retrieval_position_3"           gabor_circ gabor_circ gabor_154_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_58_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_154_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_061 gabor_168 gabor_129 gabor_046    gabor_061_alt gabor_168_alt gabor_129 gabor_046     "1_59_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_061_168_129_046_target_position_1_2_retrieval_position_1"           gabor_014_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_59_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2142      fixation_cross    gabor_018 gabor_157 gabor_100 gabor_045    gabor_018_alt gabor_157_alt gabor_100 gabor_045     "1_60_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_018_157_100_045_target_position_1_2_retrieval_position_1"           gabor_018_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_60_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_018_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  1992      fixation_cross    gabor_130 gabor_070 gabor_175 gabor_089    gabor_130_alt gabor_070_alt gabor_175 gabor_089     "1_61_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_130_070_175_089_target_position_1_2_retrieval_position_2"           gabor_circ gabor_070_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_61_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2242      fixation_cross    gabor_101 gabor_155 gabor_044 gabor_082    gabor_101_alt gabor_155 gabor_044 gabor_082_alt     "1_62_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_101_155_044_082_target_position_1_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_128_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_62_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2042  2992  2342      fixation_cross    gabor_023 gabor_001 gabor_160 gabor_108    gabor_023_alt gabor_001 gabor_160 gabor_108_alt     "1_63_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_2050_3000_2350_gabor_patch_orientation_023_001_160_108_target_position_1_4_retrieval_position_2"           gabor_circ gabor_138_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_63_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_138_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2342      fixation_cross    gabor_144 gabor_037 gabor_013 gabor_076    gabor_144 gabor_037_alt gabor_013 gabor_076_alt     "1_64_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_144_037_013_076_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_076_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_64_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  1992      fixation_cross    gabor_164 gabor_129 gabor_077 gabor_098    gabor_164 gabor_129_alt gabor_077 gabor_098_alt     "1_65_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_164_129_077_098_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_051_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_65_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_051_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1792  2992  2092      fixation_cross    gabor_117 gabor_029 gabor_175 gabor_155    gabor_117 gabor_029_alt gabor_175_alt gabor_155     "1_66_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_1800_3000_2100_gabor_patch_orientation_117_029_175_155_target_position_2_3_retrieval_position_1"           gabor_117_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_66_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_117_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2342      fixation_cross    gabor_067 gabor_120 gabor_042 gabor_005    gabor_067_alt gabor_120 gabor_042_alt gabor_005     "1_67_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_067_120_042_005_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_089_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_67_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2242      fixation_cross    gabor_140 gabor_118 gabor_095 gabor_028    gabor_140_alt gabor_118 gabor_095 gabor_028_alt     "1_68_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_140_118_095_028_target_position_1_4_retrieval_position_1"           gabor_140_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_68_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_070 gabor_021 gabor_085 gabor_105    gabor_070_alt gabor_021 gabor_085_alt gabor_105     "1_69_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_070_021_085_105_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_130_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_69_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2092  2992  2192      fixation_cross    gabor_144 gabor_058 gabor_116 gabor_172    gabor_144_alt gabor_058_alt gabor_116 gabor_172     "1_70_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_2100_3000_2200_gabor_patch_orientation_144_058_116_172_target_position_1_2_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_172_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_70_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_172_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  