# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    61   292   292   399   125  1992  2992  2042      fixation_cross    gabor_016 gabor_121 gabor_148 gabor_179    gabor_016 gabor_121_alt gabor_148_alt gabor_179      "2_1_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_016_121_148_179_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_042_framed    blank blank blank blank    fixation_cross_target_position_1_4     "2_1_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_171 gabor_126 gabor_147 gabor_003    gabor_171 gabor_126_alt gabor_147 gabor_003_alt      "2_2_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_171_126_147_003_target_position_1_3_retrieval_position_1"        gabor_171_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_2_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_162 gabor_019 gabor_036 gabor_104    gabor_162_alt gabor_019 gabor_036_alt gabor_104      "2_3_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_162_019_036_104_target_position_2_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_104_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_3_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_094 gabor_017 gabor_169 gabor_152    gabor_094_alt gabor_017_alt gabor_169 gabor_152      "2_4_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_094_017_169_152_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_033_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_4_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_033_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2242      fixation_cross    gabor_037 gabor_153 gabor_070 gabor_101    gabor_037 gabor_153_alt gabor_070 gabor_101_alt      "2_5_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_037_153_070_101_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_118_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_5_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_026 gabor_134 gabor_069 gabor_110    gabor_026_alt gabor_134 gabor_069 gabor_110_alt      "2_6_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_026_134_069_110_target_position_2_3_retrieval_position_2"        gabor_circ gabor_134_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_6_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2492      fixation_cross    gabor_040 gabor_165 gabor_075 gabor_005    gabor_040_alt gabor_165_alt gabor_075 gabor_005      "2_7_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_040_165_075_005_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_075_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_7_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_075_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1992  2992  1992      fixation_cross    gabor_180 gabor_093 gabor_006 gabor_120    gabor_180_alt gabor_093_alt gabor_006 gabor_120      "2_8_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2000_3000_2000_gabor_patch_orientation_180_093_006_120_target_position_3_4_retrieval_position_1"        gabor_180_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_8_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_180_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_112 gabor_087 gabor_006 gabor_055    gabor_112_alt gabor_087_alt gabor_006 gabor_055      "2_9_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_112_087_006_055_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_143_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_9_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1792  2992  2342      fixation_cross    gabor_092 gabor_178 gabor_069 gabor_035    gabor_092 gabor_178_alt gabor_069_alt gabor_035     "2_10_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_1800_3000_2350_gabor_patch_orientation_092_178_069_035_target_position_1_4_retrieval_position_3"        gabor_circ gabor_circ gabor_069_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_10_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_069_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2042      fixation_cross    gabor_175 gabor_128 gabor_150 gabor_069    gabor_175 gabor_128_alt gabor_150 gabor_069_alt     "2_11_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_175_128_150_069_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_104_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_11_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2392      fixation_cross    gabor_146 gabor_008 gabor_068 gabor_026    gabor_146_alt gabor_008_alt gabor_068 gabor_026     "2_12_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_146_008_068_026_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_115_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_12_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_139 gabor_104 gabor_016 gabor_170    gabor_139_alt gabor_104_alt gabor_016 gabor_170     "2_13_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_139_104_016_170_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_170_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_13_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_090 gabor_153 gabor_008 gabor_173    gabor_090 gabor_153_alt gabor_008 gabor_173_alt     "2_14_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_090_153_008_173_target_position_1_3_retrieval_position_1"        gabor_090_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_14_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2392      fixation_cross    gabor_140 gabor_005 gabor_159 gabor_114    gabor_140 gabor_005_alt gabor_159 gabor_114_alt     "2_15_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_140_005_159_114_target_position_1_3_retrieval_position_1"        gabor_095_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_15_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_116 gabor_180 gabor_096 gabor_155    gabor_116_alt gabor_180_alt gabor_096 gabor_155     "2_16_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_116_180_096_155_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_049_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_16_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2242      fixation_cross    gabor_041 gabor_007 gabor_168 gabor_026    gabor_041 gabor_007_alt gabor_168_alt gabor_026     "2_17_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_041_007_168_026_target_position_1_4_retrieval_position_1"        gabor_041_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_17_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1892  2992  2292      fixation_cross    gabor_101 gabor_163 gabor_075 gabor_017    gabor_101_alt gabor_163_alt gabor_075 gabor_017     "2_18_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_1900_3000_2300_gabor_patch_orientation_101_163_075_017_target_position_3_4_retrieval_position_1"        gabor_054_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_18_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_054_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2092      fixation_cross    gabor_130 gabor_174 gabor_068 gabor_022    gabor_130 gabor_174_alt gabor_068_alt gabor_022     "2_19_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_130_174_068_022_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_157_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_19_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_157_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  1992      fixation_cross    gabor_011 gabor_042 gabor_177 gabor_127    gabor_011 gabor_042 gabor_177_alt gabor_127_alt     "2_20_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_011_042_177_127_target_position_1_2_retrieval_position_1"        gabor_011_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_20_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2042      fixation_cross    gabor_168 gabor_108 gabor_148 gabor_038    gabor_168_alt gabor_108 gabor_148_alt gabor_038     "2_21_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_168_108_148_038_target_position_2_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_038_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_21_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1942  2992  2392      fixation_cross    gabor_156 gabor_042 gabor_177 gabor_132    gabor_156 gabor_042 gabor_177_alt gabor_132_alt     "2_22_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_1950_3000_2400_gabor_patch_orientation_156_042_177_132_target_position_1_2_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_087_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_22_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_087_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_117 gabor_144 gabor_087 gabor_068    gabor_117_alt gabor_144_alt gabor_087 gabor_068     "2_23_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_117_144_087_068_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_037_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_23_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  1992      fixation_cross    gabor_146 gabor_003 gabor_078 gabor_164    gabor_146 gabor_003_alt gabor_078 gabor_164_alt     "2_24_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_146_003_078_164_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_033_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_24_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_033_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2192      fixation_cross    gabor_138 gabor_068 gabor_178 gabor_048    gabor_138_alt gabor_068 gabor_178 gabor_048_alt     "2_25_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_138_068_178_048_target_position_2_3_retrieval_position_2"        gabor_circ gabor_068_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_25_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2492      fixation_cross    gabor_099 gabor_153 gabor_034 gabor_079    gabor_099_alt gabor_153 gabor_034 gabor_079_alt     "2_26_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_099_153_034_079_target_position_2_3_retrieval_position_3"        gabor_circ gabor_circ gabor_034_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_26_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2092  2992  2292      fixation_cross    gabor_109 gabor_094 gabor_160 gabor_071    gabor_109_alt gabor_094 gabor_160_alt gabor_071     "2_27_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_2100_3000_2300_gabor_patch_orientation_109_094_160_071_target_position_2_4_retrieval_position_3"        gabor_circ gabor_circ gabor_025_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_27_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_025_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2192      fixation_cross    gabor_119 gabor_102 gabor_167 gabor_134    gabor_119 gabor_102_alt gabor_167_alt gabor_134     "2_28_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_119_102_167_134_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_085_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_28_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  1992      fixation_cross    gabor_095 gabor_162 gabor_146 gabor_007    gabor_095 gabor_162_alt gabor_146_alt gabor_007     "2_29_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_095_162_146_007_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_056_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_29_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_163 gabor_107 gabor_043 gabor_148    gabor_163 gabor_107_alt gabor_043 gabor_148_alt     "2_30_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_163_107_043_148_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_30_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2492      fixation_cross    gabor_007 gabor_087 gabor_172 gabor_060    gabor_007_alt gabor_087 gabor_172 gabor_060_alt     "2_31_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_007_087_172_060_target_position_2_3_retrieval_position_2"        gabor_circ gabor_087_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_31_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2192  2992  2142      fixation_cross    gabor_091 gabor_066 gabor_134 gabor_176    gabor_091_alt gabor_066_alt gabor_134 gabor_176     "2_32_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_2200_3000_2150_gabor_patch_orientation_091_066_134_176_target_position_3_4_retrieval_position_1"        gabor_046_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_32_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_046_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2292      fixation_cross    gabor_021 gabor_094 gabor_062 gabor_169    gabor_021 gabor_094 gabor_062_alt gabor_169_alt     "2_33_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_021_094_062_169_target_position_1_2_retrieval_position_2"        gabor_circ gabor_094_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_33_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_173 gabor_051 gabor_115 gabor_092    gabor_173_alt gabor_051_alt gabor_115 gabor_092     "2_34_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_173_051_115_092_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_092_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_34_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_138 gabor_154 gabor_103 gabor_075    gabor_138 gabor_154 gabor_103_alt gabor_075_alt     "2_35_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_138_154_103_075_target_position_1_2_retrieval_position_2"        gabor_circ gabor_154_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_35_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2092      fixation_cross    gabor_142 gabor_075 gabor_102 gabor_021    gabor_142 gabor_075_alt gabor_102 gabor_021_alt     "2_36_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_142_075_102_021_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_102_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_36_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_102_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2342      fixation_cross    gabor_065 gabor_090 gabor_009 gabor_153    gabor_065_alt gabor_090 gabor_009 gabor_153_alt     "2_37_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_065_090_009_153_target_position_2_3_retrieval_position_2"        gabor_circ gabor_090_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_37_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2242  2992  2442      fixation_cross    gabor_088 gabor_129 gabor_042 gabor_068    gabor_088 gabor_129 gabor_042_alt gabor_068_alt     "2_38_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2250_3000_2450_gabor_patch_orientation_088_129_042_068_target_position_1_2_retrieval_position_3"        gabor_circ gabor_circ gabor_042_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_38_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_042_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2042      fixation_cross    gabor_085 gabor_168 gabor_040 gabor_114    gabor_085 gabor_168 gabor_040_alt gabor_114_alt     "2_39_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_085_168_040_114_target_position_1_2_retrieval_position_1"        gabor_130_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_39_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2092      fixation_cross    gabor_154 gabor_132 gabor_179 gabor_023    gabor_154_alt gabor_132 gabor_179_alt gabor_023     "2_40_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_154_132_179_023_target_position_2_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_072_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_40_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2492      fixation_cross    gabor_172 gabor_045 gabor_156 gabor_014    gabor_172 gabor_045 gabor_156_alt gabor_014_alt     "2_41_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_172_045_156_014_target_position_1_2_retrieval_position_2"        gabor_circ gabor_095_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_41_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2242  2992  2192      fixation_cross    gabor_035 gabor_017 gabor_091 gabor_152    gabor_035_alt gabor_017 gabor_091 gabor_152_alt     "2_42_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2250_3000_2200_gabor_patch_orientation_035_017_091_152_target_position_2_3_retrieval_position_1"        gabor_035_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_42_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_035_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_134 gabor_018 gabor_180 gabor_093    gabor_134_alt gabor_018_alt gabor_180 gabor_093     "2_43_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_134_018_180_093_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_093_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_43_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_067 gabor_126 gabor_141 gabor_096    gabor_067 gabor_126 gabor_141_alt gabor_096_alt     "2_44_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_067_126_141_096_target_position_1_2_retrieval_position_1"        gabor_017_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_44_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1742  2992  2442      fixation_cross    gabor_129 gabor_112 gabor_067 gabor_176    gabor_129 gabor_112 gabor_067_alt gabor_176_alt     "2_45_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_1750_3000_2450_gabor_patch_orientation_129_112_067_176_target_position_1_2_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_039_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_45_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_039_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2242      fixation_cross    gabor_025 gabor_052 gabor_160 gabor_178    gabor_025_alt gabor_052_alt gabor_160 gabor_178     "2_46_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_025_052_160_178_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_132_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_46_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_162 gabor_115 gabor_133 gabor_072    gabor_162 gabor_115_alt gabor_133 gabor_072_alt     "2_47_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_162_115_133_072_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_088_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_47_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2342      fixation_cross    gabor_022 gabor_005 gabor_172 gabor_093    gabor_022 gabor_005 gabor_172_alt gabor_093_alt     "2_48_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_022_005_172_093_target_position_1_2_retrieval_position_2"        gabor_circ gabor_005_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_48_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2042  2992  2042      fixation_cross    gabor_173 gabor_146 gabor_015 gabor_063    gabor_173_alt gabor_146_alt gabor_015 gabor_063     "2_49_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_2050_3000_2050_gabor_patch_orientation_173_146_015_063_target_position_3_4_retrieval_position_2"        gabor_circ gabor_098_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_49_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_098_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2342      fixation_cross    gabor_017 gabor_098 gabor_141 gabor_168    gabor_017_alt gabor_098 gabor_141_alt gabor_168     "2_50_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_017_098_141_168_target_position_2_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_168_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_50_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2292      fixation_cross    gabor_130 gabor_046 gabor_014 gabor_072    gabor_130 gabor_046 gabor_014_alt gabor_072_alt     "2_51_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_130_046_014_072_target_position_1_2_retrieval_position_1"        gabor_130_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_51_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2442      fixation_cross    gabor_068 gabor_095 gabor_179 gabor_040    gabor_068 gabor_095_alt gabor_179 gabor_040_alt     "2_52_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_068_095_179_040_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_52_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2242      fixation_cross    gabor_168 gabor_151 gabor_121 gabor_011    gabor_168 gabor_151_alt gabor_121_alt gabor_011     "2_53_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_168_151_121_011_target_position_1_4_retrieval_position_1"        gabor_168_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_53_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2392      fixation_cross    gabor_135 gabor_156 gabor_022 gabor_087    gabor_135_alt gabor_156 gabor_022_alt gabor_087     "2_54_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_135_156_022_087_target_position_2_4_retrieval_position_2"        gabor_circ gabor_106_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_54_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2492      fixation_cross    gabor_096 gabor_042 gabor_122 gabor_065    gabor_096_alt gabor_042 gabor_122 gabor_065_alt     "2_55_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_096_042_122_065_target_position_2_3_retrieval_position_2"        gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_55_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_147 gabor_168 gabor_087 gabor_003    gabor_147_alt gabor_168_alt gabor_087 gabor_003     "2_56_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_147_168_087_003_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_087_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_56_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2142      fixation_cross    gabor_111 gabor_036 gabor_071 gabor_005    gabor_111 gabor_036_alt gabor_071 gabor_005_alt     "2_57_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_111_036_071_005_target_position_1_3_retrieval_position_1"        gabor_156_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_57_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2092  2992  2392      fixation_cross    gabor_106 gabor_054 gabor_070 gabor_129    gabor_106_alt gabor_054 gabor_070_alt gabor_129     "2_58_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2100_3000_2400_gabor_patch_orientation_106_054_070_129_target_position_2_4_retrieval_position_3"        gabor_circ gabor_circ gabor_070_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_58_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_070_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2142      fixation_cross    gabor_139 gabor_093 gabor_008 gabor_033    gabor_139 gabor_093_alt gabor_008_alt gabor_033     "2_59_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_139_093_008_033_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_173_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_59_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1892  2992  2142      fixation_cross    gabor_175 gabor_030 gabor_097 gabor_056    gabor_175 gabor_030 gabor_097_alt gabor_056_alt     "2_60_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_1900_3000_2150_gabor_patch_orientation_175_030_097_056_target_position_1_2_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_056_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_60_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_056_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2442      fixation_cross    gabor_062 gabor_039 gabor_174 gabor_020    gabor_062_alt gabor_039_alt gabor_174 gabor_020     "2_61_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_062_039_174_020_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_174_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_61_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_103 gabor_172 gabor_146 gabor_024    gabor_103 gabor_172 gabor_146_alt gabor_024_alt     "2_62_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_103_172_146_024_target_position_1_2_retrieval_position_1"        gabor_103_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_62_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2092      fixation_cross    gabor_081 gabor_110 gabor_064 gabor_024    gabor_081 gabor_110_alt gabor_064_alt gabor_024     "2_63_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_081_110_064_024_target_position_1_4_retrieval_position_1"        gabor_081_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_63_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1842  2992  2192      fixation_cross    gabor_015 gabor_143 gabor_093 gabor_036    gabor_015_alt gabor_143 gabor_093_alt gabor_036     "2_64_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_1850_3000_2200_gabor_patch_orientation_015_143_093_036_target_position_2_4_retrieval_position_1"        gabor_015_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_64_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_015_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2192      fixation_cross    gabor_167 gabor_009 gabor_095 gabor_143    gabor_167 gabor_009_alt gabor_095_alt gabor_143     "2_65_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_167_009_095_143_target_position_1_4_retrieval_position_1"        gabor_120_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_65_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_026 gabor_114 gabor_135 gabor_094    gabor_026 gabor_114_alt gabor_135_alt gabor_094     "2_66_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_026_114_135_094_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_048_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_66_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2042      fixation_cross    gabor_061 gabor_106 gabor_083 gabor_025    gabor_061_alt gabor_106 gabor_083 gabor_025_alt     "2_67_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_061_106_083_025_target_position_2_3_retrieval_position_2"        gabor_circ gabor_151_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_67_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_096 gabor_121 gabor_072 gabor_045    gabor_096_alt gabor_121 gabor_072_alt gabor_045     "2_68_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_096_121_072_045_target_position_2_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_180_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_68_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2342      fixation_cross    gabor_132 gabor_095 gabor_016 gabor_065    gabor_132_alt gabor_095 gabor_016_alt gabor_065     "2_69_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_132_095_016_065_target_position_2_4_retrieval_position_2"        gabor_circ gabor_095_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_69_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1742  2992  2392      fixation_cross    gabor_062 gabor_152 gabor_176 gabor_036    gabor_062 gabor_152_alt gabor_176_alt gabor_036     "2_70_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_1750_3000_2400_gabor_patch_orientation_062_152_176_036_target_position_1_4_retrieval_position_2"        gabor_circ gabor_014_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_70_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_014_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  