# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   44    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_090 gabor_051 gabor_121 gabor_173    gabor_090 gabor_051_alt gabor_121_alt gabor_173      "1_1_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_090_051_121_173_target_position_1_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_173_framed    blank blank blank blank    fixation_cross_white     "1_1_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_165 gabor_045 gabor_125 gabor_108    gabor_165 gabor_045 gabor_125_alt gabor_108_alt      "1_2_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_165_045_125_108_target_position_1_2_retrieval_position_2"      gabor_circ gabor_045_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_2_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_088 gabor_160 gabor_002 gabor_114    gabor_088_alt gabor_160 gabor_002 gabor_114_alt      "1_3_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_088_160_002_114_target_position_2_3_retrieval_position_2"      gabor_circ gabor_160_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_3_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2092  2992  2342      fixation_cross    gabor_070 gabor_179 gabor_140 gabor_098    gabor_070_alt gabor_179_alt gabor_140 gabor_098      "1_4_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_070_179_140_098_target_position_3_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_098_framed    blank blank blank blank    fixation_cross_white     "1_4_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2142  2992  2292      fixation_cross    gabor_028 gabor_147 gabor_010 gabor_168    gabor_028 gabor_147_alt gabor_010_alt gabor_168      "1_5_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_028_147_010_168_target_position_1_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_118_framed    blank blank blank blank    fixation_cross_white     "1_5_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  2292      fixation_cross    gabor_071 gabor_013 gabor_031 gabor_136    gabor_071_alt gabor_013_alt gabor_031 gabor_136      "1_6_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_071_013_031_136_target_position_3_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_087_framed    blank blank blank blank    fixation_cross_white     "1_6_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  1992      fixation_cross    gabor_140 gabor_052 gabor_158 gabor_110    gabor_140 gabor_052_alt gabor_158 gabor_110_alt      "1_7_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_140_052_158_110_target_position_1_3_retrieval_position_1"      gabor_140_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_7_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2242  2992  2492      fixation_cross    gabor_111 gabor_092 gabor_034 gabor_059    gabor_111_alt gabor_092_alt gabor_034 gabor_059      "1_8_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_300_300_399_2250_3000_2500_gabor_patch_orientation_111_092_034_059_target_position_3_4_retrieval_position_2"      gabor_circ gabor_092_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_8_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_092_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  2042      fixation_cross    gabor_083 gabor_166 gabor_026 gabor_056    gabor_083_alt gabor_166_alt gabor_026 gabor_056      "1_9_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_083_166_026_056_target_position_3_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_056_framed    blank blank blank blank    fixation_cross_white     "1_9_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_146 gabor_162 gabor_033 gabor_076    gabor_146 gabor_162 gabor_033_alt gabor_076_alt     "1_10_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_146_162_033_076_target_position_1_2_retrieval_position_1"      gabor_096_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_10_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_105 gabor_017 gabor_129 gabor_044    gabor_105 gabor_017_alt gabor_129_alt gabor_044     "1_11_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_105_017_129_044_target_position_1_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_179_framed    blank blank blank blank    fixation_cross_white    "1_11_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1942  2992  2342      fixation_cross    gabor_128 gabor_161 gabor_019 gabor_055    gabor_128_alt gabor_161 gabor_019_alt gabor_055     "1_12_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_128_161_019_055_target_position_2_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_103_framed    blank blank blank blank    fixation_cross_white    "1_12_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1842  2992  2192      fixation_cross    gabor_113 gabor_171 gabor_048 gabor_064    gabor_113 gabor_171_alt gabor_048_alt gabor_064     "1_13_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_300_300_399_1850_3000_2200_gabor_patch_orientation_113_171_048_064_target_position_1_4_retrieval_position_2"      gabor_circ gabor_171_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_13_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_171_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  2492      fixation_cross    gabor_065 gabor_150 gabor_114 gabor_178    gabor_065_alt gabor_150 gabor_114_alt gabor_178     "1_14_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_065_150_114_178_target_position_2_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_178_framed    blank blank blank blank    fixation_cross_white    "1_14_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_032 gabor_047 gabor_166 gabor_122    gabor_032 gabor_047_alt gabor_166_alt gabor_122     "1_15_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_032_047_166_122_target_position_1_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_122_framed    blank blank blank blank    fixation_cross_white    "1_15_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_122_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2092      fixation_cross    gabor_142 gabor_111 gabor_167 gabor_055    gabor_142_alt gabor_111_alt gabor_167 gabor_055     "1_16_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_142_111_167_055_target_position_3_4_retrieval_position_3"      gabor_circ gabor_circ gabor_027_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_16_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2192      fixation_cross    gabor_067 gabor_136 gabor_084 gabor_102    gabor_067 gabor_136 gabor_084_alt gabor_102_alt     "1_17_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_067_136_084_102_target_position_1_2_retrieval_position_1"      gabor_022_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_17_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1842  2992  1992      fixation_cross    gabor_035 gabor_161 gabor_072 gabor_005    gabor_035 gabor_161 gabor_072_alt gabor_005_alt     "1_18_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_300_300_399_1850_3000_2000_gabor_patch_orientation_035_161_072_005_target_position_1_2_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_051_framed    blank blank blank blank    fixation_cross_white    "1_18_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_051_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  1992      fixation_cross    gabor_127 gabor_016 gabor_088 gabor_148    gabor_127 gabor_016_alt gabor_088 gabor_148_alt     "1_19_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_127_016_088_148_target_position_1_3_retrieval_position_3"      gabor_circ gabor_circ gabor_040_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_19_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2092  2992  2042      fixation_cross    gabor_110 gabor_049 gabor_020 gabor_134    gabor_110_alt gabor_049 gabor_020 gabor_134_alt     "1_20_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_110_049_020_134_target_position_2_3_retrieval_position_3"      gabor_circ gabor_circ gabor_020_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_20_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1842  2992  2492      fixation_cross    gabor_173 gabor_090 gabor_019 gabor_042    gabor_173_alt gabor_090 gabor_019 gabor_042_alt     "1_21_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_300_300_399_1850_3000_2500_gabor_patch_orientation_173_090_019_042_target_position_2_3_retrieval_position_1"      gabor_128_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_21_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_128_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2042      fixation_cross    gabor_121 gabor_034 gabor_103 gabor_015    gabor_121 gabor_034_alt gabor_103_alt gabor_015     "1_22_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_121_034_103_015_target_position_1_4_retrieval_position_1"      gabor_072_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_22_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  2342      fixation_cross    gabor_100 gabor_042 gabor_074 gabor_016    gabor_100_alt gabor_042 gabor_074_alt gabor_016     "1_23_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_100_042_074_016_target_position_2_4_retrieval_position_2"      gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_23_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_009 gabor_150 gabor_037 gabor_127    gabor_009_alt gabor_150 gabor_037_alt gabor_127     "1_24_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_009_150_037_127_target_position_2_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_082_framed    blank blank blank blank    fixation_cross_white    "1_24_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  2292      fixation_cross    gabor_044 gabor_087 gabor_176 gabor_102    gabor_044 gabor_087_alt gabor_176 gabor_102_alt     "1_25_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_044_087_176_102_target_position_1_3_retrieval_position_3"      gabor_circ gabor_circ gabor_176_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_25_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2092  2992  2392      fixation_cross    gabor_051 gabor_073 gabor_137 gabor_098    gabor_051_alt gabor_073 gabor_137 gabor_098_alt     "1_26_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_051_073_137_098_target_position_2_3_retrieval_position_2"      gabor_circ gabor_073_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_26_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1842  2992  2442      fixation_cross    gabor_129 gabor_063 gabor_087 gabor_111    gabor_129_alt gabor_063 gabor_087_alt gabor_111     "1_27_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_300_300_399_1850_3000_2450_gabor_patch_orientation_129_063_087_111_target_position_2_4_retrieval_position_3"      gabor_circ gabor_circ gabor_042_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_27_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_042_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2242  2992  2092      fixation_cross    gabor_157 gabor_067 gabor_126 gabor_097    gabor_157 gabor_067 gabor_126_alt gabor_097_alt     "1_28_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_157_067_126_097_target_position_1_2_retrieval_position_2"      gabor_circ gabor_067_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_28_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1942  2992  2392      fixation_cross    gabor_115 gabor_178 gabor_134 gabor_151    gabor_115 gabor_178_alt gabor_134 gabor_151_alt     "1_29_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_115_178_134_151_target_position_1_3_retrieval_position_3"      gabor_circ gabor_circ gabor_089_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_29_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2392      fixation_cross    gabor_135 gabor_013 gabor_178 gabor_056    gabor_135_alt gabor_013_alt gabor_178 gabor_056     "1_30_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_135_013_178_056_target_position_3_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_101_framed    blank blank blank blank    fixation_cross_white    "1_30_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_132 gabor_089 gabor_010 gabor_067    gabor_132 gabor_089_alt gabor_010 gabor_067_alt     "1_31_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_132_089_010_067_target_position_1_3_retrieval_position_3"      gabor_circ gabor_circ gabor_010_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_31_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2192  2992  2142      fixation_cross    gabor_067 gabor_091 gabor_048 gabor_007    gabor_067_alt gabor_091 gabor_048_alt gabor_007     "1_32_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_300_300_399_2200_3000_2150_gabor_patch_orientation_067_091_048_007_target_position_2_4_retrieval_position_1"      gabor_067_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_32_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_067_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2342      fixation_cross    gabor_094 gabor_158 gabor_031 gabor_053    gabor_094 gabor_158 gabor_031_alt gabor_053_alt     "1_33_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_094_158_031_053_target_position_1_2_retrieval_position_2"      gabor_circ gabor_112_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_33_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_053 gabor_032 gabor_117 gabor_097    gabor_053 gabor_032_alt gabor_117 gabor_097_alt     "1_34_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_053_032_117_097_target_position_1_3_retrieval_position_1"      gabor_008_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_34_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_128 gabor_019 gabor_047 gabor_089    gabor_128_alt gabor_019_alt gabor_047 gabor_089     "1_35_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_128_019_047_089_target_position_3_4_retrieval_position_3"      gabor_circ gabor_circ gabor_047_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_35_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_047_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2142  2992  2442      fixation_cross    gabor_104 gabor_155 gabor_049 gabor_078    gabor_104_alt gabor_155_alt gabor_049 gabor_078     "1_36_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_300_300_399_2150_3000_2450_gabor_patch_orientation_104_155_049_078_target_position_3_4_retrieval_position_2"      gabor_circ gabor_155_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_36_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_155_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  2292      fixation_cross    gabor_118 gabor_153 gabor_043 gabor_072    gabor_118_alt gabor_153 gabor_043 gabor_072_alt     "1_37_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_118_153_043_072_target_position_2_3_retrieval_position_3"      gabor_circ gabor_circ gabor_043_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_37_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2092      fixation_cross    gabor_060 gabor_175 gabor_014 gabor_090    gabor_060 gabor_175_alt gabor_014_alt gabor_090     "1_38_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_060_175_014_090_target_position_1_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_042_framed    blank blank blank blank    fixation_cross_white    "1_38_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2142  2992  2292      fixation_cross    gabor_127 gabor_147 gabor_015 gabor_085    gabor_127 gabor_147 gabor_015_alt gabor_085_alt     "1_39_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_300_300_399_2150_3000_2300_gabor_patch_orientation_127_147_015_085_target_position_1_2_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_037_framed    blank blank blank blank    fixation_cross_white    "1_39_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_037_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1942  2992  2192      fixation_cross    gabor_092 gabor_049 gabor_023 gabor_161    gabor_092_alt gabor_049 gabor_023_alt gabor_161     "1_40_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_092_049_023_161_target_position_2_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_112_framed    blank blank blank blank    fixation_cross_white    "1_40_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2342      fixation_cross    gabor_092 gabor_166 gabor_129 gabor_150    gabor_092_alt gabor_166_alt gabor_129 gabor_150     "1_41_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_092_166_129_150_target_position_3_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_014_framed    blank blank blank blank    fixation_cross_white    "1_41_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2442      fixation_cross    gabor_032 gabor_017 gabor_138 gabor_099    gabor_032_alt gabor_017 gabor_138 gabor_099_alt     "1_42_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_032_017_138_099_target_position_2_3_retrieval_position_2"      gabor_circ gabor_155_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_42_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2242      fixation_cross    gabor_079 gabor_035 gabor_158 gabor_006    gabor_079 gabor_035_alt gabor_158 gabor_006_alt     "1_43_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_079_035_158_006_target_position_1_3_retrieval_position_1"      gabor_079_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_43_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2392      fixation_cross    gabor_121 gabor_097 gabor_014 gabor_166    gabor_121 gabor_097 gabor_014_alt gabor_166_alt     "1_44_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_121_097_014_166_target_position_1_2_retrieval_position_2"      gabor_circ gabor_097_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_44_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1942  2992  2042      fixation_cross    gabor_069 gabor_087 gabor_156 gabor_001    gabor_069_alt gabor_087 gabor_156 gabor_001_alt     "1_45_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_300_300_399_1950_3000_2050_gabor_patch_orientation_069_087_156_001_target_position_2_3_retrieval_position_1"      gabor_022_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_45_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_022_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  1992      fixation_cross    gabor_049 gabor_087 gabor_029 gabor_112    gabor_049_alt gabor_087 gabor_029_alt gabor_112     "1_46_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_049_087_029_112_target_position_2_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_112_framed    blank blank blank blank    fixation_cross_white    "1_46_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  2192      fixation_cross    gabor_078 gabor_060 gabor_045 gabor_106    gabor_078 gabor_060 gabor_045_alt gabor_106_alt     "1_47_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_078_060_045_106_target_position_1_2_retrieval_position_1"      gabor_123_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_47_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  2092      fixation_cross    gabor_098 gabor_173 gabor_146 gabor_062    gabor_098_alt gabor_173_alt gabor_146 gabor_062     "1_48_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_098_173_146_062_target_position_3_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_016_framed    blank blank blank blank    fixation_cross_white    "1_48_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2192  2992  2342      fixation_cross    gabor_085 gabor_033 gabor_120 gabor_154    gabor_085 gabor_033 gabor_120_alt gabor_154_alt     "1_49_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_300_300_399_2200_3000_2350_gabor_patch_orientation_085_033_120_154_target_position_1_2_retrieval_position_3"      gabor_circ gabor_circ gabor_120_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_49_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_120_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_168 gabor_153 gabor_100 gabor_029    gabor_168 gabor_153 gabor_100_alt gabor_029_alt     "1_50_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_168_153_100_029_target_position_1_2_retrieval_position_1"      gabor_168_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_50_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_019 gabor_173 gabor_146 gabor_089    gabor_019_alt gabor_173 gabor_146 gabor_089_alt     "1_51_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_019_173_146_089_target_position_2_3_retrieval_position_2"      gabor_circ gabor_126_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_51_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  2242      fixation_cross    gabor_098 gabor_146 gabor_161 gabor_036    gabor_098_alt gabor_146 gabor_161_alt gabor_036     "1_52_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_098_146_161_036_target_position_2_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_036_framed    blank blank blank blank    fixation_cross_white    "1_52_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2492      fixation_cross    gabor_030 gabor_120 gabor_163 gabor_010    gabor_030_alt gabor_120 gabor_163_alt gabor_010     "1_53_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_030_120_163_010_target_position_2_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_010_framed    blank blank blank blank    fixation_cross_white    "1_53_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_056 gabor_121 gabor_013 gabor_077    gabor_056 gabor_121 gabor_013_alt gabor_077_alt     "1_54_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_056_121_013_077_target_position_1_2_retrieval_position_1"      gabor_103_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_54_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2042      fixation_cross    gabor_043 gabor_131 gabor_154 gabor_008    gabor_043 gabor_131_alt gabor_154 gabor_008_alt     "1_55_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_043_131_154_008_target_position_1_3_retrieval_position_1"      gabor_043_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_55_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2142  2992  2042      fixation_cross    gabor_049 gabor_137 gabor_029 gabor_064    gabor_049 gabor_137_alt gabor_029 gabor_064_alt     "1_56_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_300_300_399_2150_3000_2050_gabor_patch_orientation_049_137_029_064_target_position_1_3_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_114_framed    blank blank blank blank    fixation_cross_white    "1_56_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_114_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2492      fixation_cross    gabor_134 gabor_022 gabor_059 gabor_074    gabor_134 gabor_022_alt gabor_059_alt gabor_074     "1_57_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2200_3000_2500_gabor_patch_orientation_134_022_059_074_target_position_1_4_retrieval_position_1"      gabor_134_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_57_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2242      fixation_cross    gabor_179 gabor_099 gabor_144 gabor_014    gabor_179_alt gabor_099_alt gabor_144 gabor_014     "1_58_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_179_099_144_014_target_position_3_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_063_framed    blank blank blank blank    fixation_cross_white    "1_58_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2242  2992  2442      fixation_cross    gabor_156 gabor_123 gabor_016 gabor_051    gabor_156_alt gabor_123_alt gabor_016 gabor_051     "1_59_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_300_300_399_2250_3000_2450_gabor_patch_orientation_156_123_016_051_target_position_3_4_retrieval_position_2"      gabor_circ gabor_123_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_59_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_123_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_172 gabor_131 gabor_114 gabor_025    gabor_172_alt gabor_131 gabor_114_alt gabor_025     "1_60_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_172_131_114_025_target_position_2_4_retrieval_position_2"      gabor_circ gabor_082_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_60_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2042      fixation_cross    gabor_021 gabor_099 gabor_132 gabor_156    gabor_021 gabor_099 gabor_132_alt gabor_156_alt     "1_61_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_021_099_132_156_target_position_1_2_retrieval_position_2"      gabor_circ gabor_050_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_61_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2042  2992  2392      fixation_cross    gabor_092 gabor_148 gabor_007 gabor_131    gabor_092 gabor_148_alt gabor_007 gabor_131_alt     "1_62_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_092_148_007_131_target_position_1_3_retrieval_position_1"      gabor_092_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_62_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  2142      fixation_cross    gabor_170 gabor_148 gabor_103 gabor_132    gabor_170 gabor_148_alt gabor_103 gabor_132_alt     "1_63_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_170_148_103_132_target_position_1_3_retrieval_position_3"      gabor_circ gabor_circ gabor_103_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_63_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_007 gabor_167 gabor_134 gabor_048    gabor_007 gabor_167 gabor_134_alt gabor_048_alt     "1_64_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_007_167_134_048_target_position_1_2_retrieval_position_2"      gabor_circ gabor_028_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_64_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2242  2992  2392      fixation_cross    gabor_036 gabor_152 gabor_170 gabor_065    gabor_036_alt gabor_152 gabor_170 gabor_065_alt     "1_65_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_300_300_399_2250_3000_2400_gabor_patch_orientation_036_152_170_065_target_position_2_3_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_065_framed    blank blank blank blank    fixation_cross_white    "1_65_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_065_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2192      fixation_cross    gabor_120 gabor_001 gabor_084 gabor_058    gabor_120 gabor_001 gabor_084_alt gabor_058_alt     "1_66_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_120_001_084_058_target_position_1_2_retrieval_position_2"      gabor_circ gabor_138_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_66_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2092      fixation_cross    gabor_095 gabor_127 gabor_155 gabor_050    gabor_095 gabor_127_alt gabor_155_alt gabor_050     "1_67_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_095_127_155_050_target_position_1_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_050_framed    blank blank blank blank    fixation_cross_white    "1_67_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_078 gabor_044 gabor_130 gabor_060    gabor_078_alt gabor_044 gabor_130_alt gabor_060     "1_68_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_078_044_130_060_target_position_2_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_060_framed    blank blank blank blank    fixation_cross_white    "1_68_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_153 gabor_129 gabor_080 gabor_040    gabor_153 gabor_129_alt gabor_080_alt gabor_040     "1_69_Encoding_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_153_129_080_040_target_position_1_4_retrieval_position_1"      gabor_153_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_69_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_153_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1742  2992  2442      fixation_cross    gabor_093 gabor_175 gabor_005 gabor_070    gabor_093 gabor_175_alt gabor_005 gabor_070_alt     "1_70_Encoding_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_300_300_399_1750_3000_2450_gabor_patch_orientation_093_175_005_070_target_position_1_3_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_021_framed    blank blank blank blank    fixation_cross_white    "1_70_Retrieval_Working_Memory_MEG_Nonsalient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_021_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  