# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    61   292   292   399   125  2092  2992  2142      fixation_cross    gabor_088 gabor_019 gabor_034 gabor_150    gabor_088_alt gabor_019_alt gabor_034 gabor_150      "2_1_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_088_019_034_150_target_position_1_2_retrieval_position_2"         gabor_circ gabor_068_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_177 gabor_091 gabor_135 gabor_155    gabor_177 gabor_091 gabor_135_alt gabor_155_alt      "2_2_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_177_091_135_155_target_position_3_4_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_155_framed    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2042      fixation_cross    gabor_144 gabor_022 gabor_169 gabor_129    gabor_144 gabor_022_alt gabor_169 gabor_129_alt      "2_3_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_144_022_169_129_target_position_2_4_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_129_framed    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_002 gabor_085 gabor_030 gabor_067    gabor_002 gabor_085 gabor_030_alt gabor_067_alt      "2_4_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_002_085_030_067_target_position_3_4_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_112_framed    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2042      fixation_cross    gabor_069 gabor_039 gabor_127 gabor_088    gabor_069 gabor_039_alt gabor_127 gabor_088_alt      "2_5_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_069_039_127_088_target_position_2_4_retrieval_position_2"         gabor_circ gabor_177_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2292      fixation_cross    gabor_083 gabor_018 gabor_137 gabor_049    gabor_083 gabor_018_alt gabor_137_alt gabor_049      "2_6_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_083_018_137_049_target_position_2_3_retrieval_position_2"         gabor_circ gabor_065_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1942  2992  2292      fixation_cross    gabor_112 gabor_032 gabor_140 gabor_157    gabor_112 gabor_032_alt gabor_140 gabor_157_alt      "2_7_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_300_300_399_1950_3000_2300_gabor_patch_orientation_112_032_140_157_target_position_2_4_retrieval_position_1"         gabor_067_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_067_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_083 gabor_126 gabor_104 gabor_042    gabor_083 gabor_126_alt gabor_104_alt gabor_042      "2_8_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_083_126_104_042_target_position_2_3_retrieval_position_2"         gabor_circ gabor_171_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_039 gabor_008 gabor_128 gabor_069    gabor_039 gabor_008_alt gabor_128_alt gabor_069      "2_9_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_039_008_128_069_target_position_2_3_retrieval_position_2"         gabor_circ gabor_148_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  2492      fixation_cross    gabor_037 gabor_164 gabor_054 gabor_087    gabor_037 gabor_164_alt gabor_054 gabor_087_alt     "2_10_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_037_164_054_087_target_position_2_4_retrieval_position_2"         gabor_circ gabor_117_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2192      fixation_cross    gabor_090 gabor_055 gabor_134 gabor_117    gabor_090 gabor_055_alt gabor_134_alt gabor_117     "2_11_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_090_055_134_117_target_position_2_3_retrieval_position_3"         gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2492      fixation_cross    gabor_074 gabor_040 gabor_007 gabor_157    gabor_074_alt gabor_040 gabor_007 gabor_157_alt     "2_12_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_074_040_007_157_target_position_1_4_retrieval_position_1"         gabor_121_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_121_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1892  2992  2092      fixation_cross    gabor_002 gabor_025 gabor_058 gabor_139    gabor_002 gabor_025_alt gabor_058_alt gabor_139     "2_13_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_300_300_399_1900_3000_2100_gabor_patch_orientation_002_025_058_139_target_position_2_3_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_139_framed    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_139_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_106 gabor_064 gabor_153 gabor_137    gabor_106 gabor_064_alt gabor_153_alt gabor_137     "2_14_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_106_064_153_137_target_position_2_3_retrieval_position_3"         gabor_circ gabor_circ gabor_016_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1892  2992  2492      fixation_cross    gabor_136 gabor_110 gabor_180 gabor_091    gabor_136 gabor_110_alt gabor_180 gabor_091_alt     "2_15_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_300_300_399_1900_3000_2500_gabor_patch_orientation_136_110_180_091_target_position_2_4_retrieval_position_1"         gabor_136_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_136_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2292      fixation_cross    gabor_064 gabor_014 gabor_093 gabor_123    gabor_064_alt gabor_014 gabor_093_alt gabor_123     "2_16_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_064_014_093_123_target_position_1_3_retrieval_position_3"         gabor_circ gabor_circ gabor_140_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2292      fixation_cross    gabor_094 gabor_174 gabor_031 gabor_113    gabor_094_alt gabor_174 gabor_031 gabor_113_alt     "2_17_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_094_174_031_113_target_position_1_4_retrieval_position_1"         gabor_144_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  2442      fixation_cross    gabor_078 gabor_114 gabor_058 gabor_027    gabor_078 gabor_114_alt gabor_058 gabor_027_alt     "2_18_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2000_3000_2450_gabor_patch_orientation_078_114_058_027_target_position_2_4_retrieval_position_2"         gabor_circ gabor_164_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_140 gabor_070 gabor_180 gabor_054    gabor_140 gabor_070_alt gabor_180 gabor_054_alt     "2_19_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_140_070_180_054_target_position_2_4_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_054_framed    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_101 gabor_170 gabor_143 gabor_022    gabor_101_alt gabor_170_alt gabor_143 gabor_022     "2_20_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_101_170_143_022_target_position_1_2_retrieval_position_1"         gabor_101_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1742  2992  2142      fixation_cross    gabor_179 gabor_056 gabor_112 gabor_094    gabor_179_alt gabor_056_alt gabor_112 gabor_094     "2_21_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_300_300_399_1750_3000_2150_gabor_patch_orientation_179_056_112_094_target_position_1_2_retrieval_position_3"         gabor_circ gabor_circ gabor_162_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_162_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_146 gabor_170 gabor_092 gabor_061    gabor_146 gabor_170_alt gabor_092 gabor_061_alt     "2_22_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_146_170_092_061_target_position_2_4_retrieval_position_2"         gabor_circ gabor_170_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2442      fixation_cross    gabor_047 gabor_082 gabor_116 gabor_162    gabor_047_alt gabor_082 gabor_116_alt gabor_162     "2_23_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_047_082_116_162_target_position_1_3_retrieval_position_1"         gabor_002_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  2392      fixation_cross    gabor_165 gabor_080 gabor_107 gabor_148    gabor_165 gabor_080_alt gabor_107_alt gabor_148     "2_24_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_165_080_107_148_target_position_2_3_retrieval_position_3"         gabor_circ gabor_circ gabor_107_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_107_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_094 gabor_179 gabor_126 gabor_018    gabor_094 gabor_179_alt gabor_126 gabor_018_alt     "2_25_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_094_179_126_018_target_position_2_4_retrieval_position_2"         gabor_circ gabor_179_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1792  2992  2092      fixation_cross    gabor_025 gabor_068 gabor_158 gabor_040    gabor_025_alt gabor_068 gabor_158_alt gabor_040     "2_26_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_300_300_399_1800_3000_2100_gabor_patch_orientation_025_068_158_040_target_position_1_3_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_180_framed    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_180_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_080 gabor_007 gabor_116 gabor_053    gabor_080_alt gabor_007 gabor_116 gabor_053_alt     "2_27_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_080_007_116_053_target_position_1_4_retrieval_position_1"         gabor_080_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2292      fixation_cross    gabor_161 gabor_042 gabor_089 gabor_021    gabor_161_alt gabor_042_alt gabor_089 gabor_021     "2_28_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_161_042_089_021_target_position_1_2_retrieval_position_1"         gabor_161_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1992  2992  2042      fixation_cross    gabor_164 gabor_020 gabor_044 gabor_133    gabor_164 gabor_020_alt gabor_044 gabor_133_alt     "2_29_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_300_300_399_2000_3000_2050_gabor_patch_orientation_164_020_044_133_target_position_2_4_retrieval_position_3"         gabor_circ gabor_circ gabor_091_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_091_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2492      fixation_cross    gabor_034 gabor_016 gabor_100 gabor_174    gabor_034 gabor_016 gabor_100_alt gabor_174_alt     "2_30_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_034_016_100_174_target_position_3_4_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_124_framed    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_003 gabor_093 gabor_165 gabor_029    gabor_003_alt gabor_093 gabor_165_alt gabor_029     "2_31_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_003_093_165_029_target_position_1_3_retrieval_position_3"         gabor_circ gabor_circ gabor_165_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2342      fixation_cross    gabor_031 gabor_148 gabor_103 gabor_076    gabor_031 gabor_148_alt gabor_103_alt gabor_076     "2_32_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_031_148_103_076_target_position_2_3_retrieval_position_2"         gabor_circ gabor_148_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2342      fixation_cross    gabor_007 gabor_169 gabor_139 gabor_049    gabor_007 gabor_169 gabor_139_alt gabor_049_alt     "2_33_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_007_169_139_049_target_position_3_4_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_049_framed    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1792  2992  2442      fixation_cross    gabor_072 gabor_126 gabor_146 gabor_038    gabor_072_alt gabor_126_alt gabor_146 gabor_038     "2_34_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_300_300_399_1800_3000_2450_gabor_patch_orientation_072_126_146_038_target_position_1_2_retrieval_position_3"         gabor_circ gabor_circ gabor_146_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_146_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2192      fixation_cross    gabor_039 gabor_059 gabor_012 gabor_164    gabor_039 gabor_059_alt gabor_012_alt gabor_164     "2_35_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_039_059_012_164_target_position_2_3_retrieval_position_3"         gabor_circ gabor_circ gabor_147_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_147_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2442      fixation_cross    gabor_170 gabor_132 gabor_062 gabor_151    gabor_170_alt gabor_132 gabor_062 gabor_151_alt     "2_36_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_170_132_062_151_target_position_1_4_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_151_framed    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_139 gabor_061 gabor_120 gabor_015    gabor_139_alt gabor_061 gabor_120_alt gabor_015     "2_37_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_139_061_120_015_target_position_1_3_retrieval_position_3"         gabor_circ gabor_circ gabor_120_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2292      fixation_cross    gabor_147 gabor_039 gabor_077 gabor_058    gabor_147 gabor_039 gabor_077_alt gabor_058_alt     "2_38_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_147_039_077_058_target_position_3_4_retrieval_position_3"         gabor_circ gabor_circ gabor_123_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2492      fixation_cross    gabor_042 gabor_173 gabor_111 gabor_149    gabor_042 gabor_173_alt gabor_111_alt gabor_149     "2_39_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_042_173_111_149_target_position_2_3_retrieval_position_2"         gabor_circ gabor_127_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_123 gabor_179 gabor_105 gabor_163    gabor_123 gabor_179_alt gabor_105 gabor_163_alt     "2_40_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_123_179_105_163_target_position_2_4_retrieval_position_2"         gabor_circ gabor_179_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  2092      fixation_cross    gabor_170 gabor_024 gabor_099 gabor_138    gabor_170_alt gabor_024 gabor_099_alt gabor_138     "2_41_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_170_024_099_138_target_position_1_3_retrieval_position_3"         gabor_circ gabor_circ gabor_049_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2342      fixation_cross    gabor_038 gabor_162 gabor_099 gabor_115    gabor_038 gabor_162 gabor_099_alt gabor_115_alt     "2_42_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_038_162_099_115_target_position_3_4_retrieval_position_3"         gabor_circ gabor_circ gabor_099_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2092  2992  2242      fixation_cross    gabor_050 gabor_162 gabor_076 gabor_017    gabor_050_alt gabor_162 gabor_076 gabor_017_alt     "2_43_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_300_300_399_2100_3000_2250_gabor_patch_orientation_050_162_076_017_target_position_1_4_retrieval_position_3"         gabor_circ gabor_circ gabor_124_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_124_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_155 gabor_009 gabor_091 gabor_173    gabor_155 gabor_009 gabor_091_alt gabor_173_alt     "2_44_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_155_009_091_173_target_position_3_4_retrieval_position_3"         gabor_circ gabor_circ gabor_091_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  1992      fixation_cross    gabor_042 gabor_129 gabor_164 gabor_015    gabor_042_alt gabor_129_alt gabor_164 gabor_015     "2_45_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_042_129_164_015_target_position_1_2_retrieval_position_1"         gabor_092_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2342      fixation_cross    gabor_164 gabor_130 gabor_083 gabor_101    gabor_164_alt gabor_130 gabor_083 gabor_101_alt     "2_46_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_164_130_083_101_target_position_1_4_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_101_framed    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2392      fixation_cross    gabor_140 gabor_155 gabor_173 gabor_085    gabor_140 gabor_155_alt gabor_173_alt gabor_085     "2_47_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_140_155_173_085_target_position_2_3_retrieval_position_3"         gabor_circ gabor_circ gabor_173_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2242  2992  2442      fixation_cross    gabor_077 gabor_134 gabor_154 gabor_093    gabor_077_alt gabor_134_alt gabor_154 gabor_093     "2_48_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_300_300_399_2250_3000_2450_gabor_patch_orientation_077_134_154_093_target_position_1_2_retrieval_position_3"         gabor_circ gabor_circ gabor_154_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_154_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_171 gabor_091 gabor_054 gabor_113    gabor_171_alt gabor_091 gabor_054_alt gabor_113     "2_49_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_171_091_054_113_target_position_1_3_retrieval_position_1"         gabor_032_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1992  2992  2342      fixation_cross    gabor_032 gabor_171 gabor_102 gabor_137    gabor_032 gabor_171 gabor_102_alt gabor_137_alt     "2_50_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_300_300_399_2000_3000_2350_gabor_patch_orientation_032_171_102_137_target_position_3_4_retrieval_position_1"         gabor_032_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_032_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_007 gabor_113 gabor_137 gabor_165    gabor_007_alt gabor_113 gabor_137_alt gabor_165     "2_51_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_007_113_137_165_target_position_1_3_retrieval_position_1"         gabor_007_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_165 gabor_009 gabor_136 gabor_075    gabor_165_alt gabor_009 gabor_136 gabor_075_alt     "2_52_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_165_009_136_075_target_position_1_4_retrieval_position_1"         gabor_165_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2242      fixation_cross    gabor_057 gabor_168 gabor_028 gabor_139    gabor_057 gabor_168 gabor_028_alt gabor_139_alt     "2_53_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_057_168_028_139_target_position_3_4_retrieval_position_3"         gabor_circ gabor_circ gabor_078_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2392      fixation_cross    gabor_079 gabor_029 gabor_014 gabor_104    gabor_079_alt gabor_029_alt gabor_014 gabor_104     "2_54_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_079_029_014_104_target_position_1_2_retrieval_position_2"         gabor_circ gabor_167_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2192  2992  2242      fixation_cross    gabor_158 gabor_090 gabor_136 gabor_117    gabor_158_alt gabor_090 gabor_136 gabor_117_alt     "2_55_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_300_300_399_2200_3000_2250_gabor_patch_orientation_158_090_136_117_target_position_1_4_retrieval_position_3"         gabor_circ gabor_circ gabor_136_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_136_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2392      fixation_cross    gabor_016 gabor_093 gabor_177 gabor_038    gabor_016_alt gabor_093 gabor_177_alt gabor_038     "2_56_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_016_093_177_038_target_position_1_3_retrieval_position_1"         gabor_016_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_077 gabor_013 gabor_059 gabor_143    gabor_077_alt gabor_013 gabor_059 gabor_143_alt     "2_57_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_077_013_059_143_target_position_1_4_retrieval_position_1"         gabor_029_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_019 gabor_132 gabor_177 gabor_053    gabor_019_alt gabor_132_alt gabor_177 gabor_053     "2_58_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_019_132_177_053_target_position_1_2_retrieval_position_2"         gabor_circ gabor_132_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2392      fixation_cross    gabor_074 gabor_100 gabor_021 gabor_041    gabor_074_alt gabor_100 gabor_021_alt gabor_041     "2_59_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_074_100_021_041_target_position_1_3_retrieval_position_3"         gabor_circ gabor_circ gabor_161_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1842  2992  2042      fixation_cross    gabor_095 gabor_134 gabor_027 gabor_062    gabor_095_alt gabor_134_alt gabor_027 gabor_062     "2_60_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_300_300_399_1850_3000_2050_gabor_patch_orientation_095_134_027_062_target_position_1_2_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_112_framed    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_112_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2092      fixation_cross    gabor_125 gabor_160 gabor_080 gabor_005    gabor_125 gabor_160_alt gabor_080_alt gabor_005     "2_61_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_125_160_080_005_target_position_2_3_retrieval_position_3"         gabor_circ gabor_circ gabor_035_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2192      fixation_cross    gabor_038 gabor_009 gabor_128 gabor_165    gabor_038 gabor_009_alt gabor_128 gabor_165_alt     "2_62_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_038_009_128_165_target_position_2_4_retrieval_position_2"         gabor_circ gabor_148_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  1992      fixation_cross    gabor_075 gabor_157 gabor_141 gabor_091    gabor_075_alt gabor_157_alt gabor_141 gabor_091     "2_63_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_075_157_141_091_target_position_1_2_retrieval_position_1"         gabor_075_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_075_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2342      fixation_cross    gabor_145 gabor_166 gabor_102 gabor_123    gabor_145_alt gabor_166 gabor_102 gabor_123_alt     "2_64_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_145_166_102_123_target_position_1_4_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_123_framed    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  1992      fixation_cross    gabor_153 gabor_083 gabor_114 gabor_006    gabor_153 gabor_083 gabor_114_alt gabor_006_alt     "2_65_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_153_083_114_006_target_position_3_4_retrieval_position_3"         gabor_circ gabor_circ gabor_066_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_021 gabor_080 gabor_047 gabor_104    gabor_021 gabor_080_alt gabor_047_alt gabor_104     "2_66_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_021_080_047_104_target_position_2_3_retrieval_position_2"         gabor_circ gabor_080_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1792  2992  2442      fixation_cross    gabor_024 gabor_137 gabor_099 gabor_053    gabor_024 gabor_137 gabor_099_alt gabor_053_alt     "2_67_Encoding_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_300_300_399_1800_3000_2450_gabor_patch_orientation_024_137_099_053_target_position_3_4_retrieval_position_1"         gabor_161_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_Salient_Uncued_DoChange_UncuedRetriev_retrieval_patch_orientation_161_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  1992      fixation_cross    gabor_002 gabor_107 gabor_020 gabor_157    gabor_002_alt gabor_107 gabor_020 gabor_157_alt     "2_68_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_002_107_020_157_target_position_1_4_retrieval_position_1"         gabor_002_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1892  2992  2042      fixation_cross    gabor_030 gabor_101 gabor_012 gabor_118    gabor_030 gabor_101_alt gabor_012 gabor_118_alt     "2_69_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_300_300_399_1900_3000_2050_gabor_patch_orientation_030_101_012_118_target_position_2_4_retrieval_position_3"         gabor_circ gabor_circ gabor_012_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_UncuedRetriev_retrieval_patch_orientation_012_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_009 gabor_091 gabor_071 gabor_129    gabor_009 gabor_091_alt gabor_071 gabor_129_alt     "2_70_Encoding_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_009_091_071_129_target_position_2_4_retrieval_position_4"         gabor_circ gabor_circ gabor_circ gabor_129_framed    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_Salient_Uncued_NoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 