# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;

# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    62   292   292   399   125  2092  2992  2492      fixation_cross    gabor_173 gabor_093 gabor_020 gabor_003    gabor_173 gabor_093_alt gabor_020 gabor_003_alt      "1_1_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_173_093_020_003_target_position_2_4_retrieval_position_2"          gabor_circ gabor_093_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_1_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  1942      fixation_cross    gabor_131 gabor_043 gabor_160 gabor_026    gabor_131 gabor_043 gabor_160_alt gabor_026_alt      "1_2_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_131_043_160_026_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_026_framed    blank blank blank blank    fixation_cross_white     "1_2_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2342      fixation_cross    gabor_170 gabor_150 gabor_116 gabor_135    gabor_170 gabor_150 gabor_116_alt gabor_135_alt      "1_3_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_170_150_116_135_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_135_framed    blank blank blank blank    fixation_cross_white     "1_3_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1892  2992  2442      fixation_cross    gabor_179 gabor_142 gabor_112 gabor_036    gabor_179_alt gabor_142 gabor_112 gabor_036_alt      "1_4_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2450_gabor_patch_orientation_179_142_112_036_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_158_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_4_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_158_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  2092      fixation_cross    gabor_018 gabor_064 gabor_134 gabor_044    gabor_018_alt gabor_064 gabor_134_alt gabor_044      "1_5_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_018_064_134_044_target_position_1_3_retrieval_position_1"          gabor_018_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_5_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_018_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1792  2992  2592      fixation_cross    gabor_040 gabor_056 gabor_145 gabor_083    gabor_040_alt gabor_056 gabor_145 gabor_083_alt      "1_6_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_040_056_145_083_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_129_framed    blank blank blank blank    fixation_cross_white     "1_6_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_155 gabor_021 gabor_004 gabor_094    gabor_155_alt gabor_021 gabor_004 gabor_094_alt      "1_7_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_155_021_004_094_target_position_1_4_retrieval_position_1"          gabor_110_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_7_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_110_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_122 gabor_047 gabor_076 gabor_153    gabor_122_alt gabor_047_alt gabor_076 gabor_153      "1_8_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_122_047_076_153_target_position_1_2_retrieval_position_2"          gabor_circ gabor_047_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_8_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_047_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2592      fixation_cross    gabor_091 gabor_015 gabor_038 gabor_144    gabor_091 gabor_015_alt gabor_038_alt gabor_144      "1_9_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_091_015_038_144_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_173_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_9_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_061 gabor_173 gabor_086 gabor_144    gabor_061 gabor_173_alt gabor_086_alt gabor_144     "1_10_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_061_173_086_144_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_086_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_10_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_086_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_094 gabor_155 gabor_006 gabor_044    gabor_094 gabor_155 gabor_006_alt gabor_044_alt     "1_11_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_094_155_006_044_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_044_framed    blank blank blank blank    fixation_cross_white    "1_11_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1842  2992  2292      fixation_cross    gabor_040 gabor_013 gabor_068 gabor_092    gabor_040_alt gabor_013 gabor_068 gabor_092_alt     "1_12_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2300_gabor_patch_orientation_040_013_068_092_target_position_1_4_retrieval_position_2"          gabor_circ gabor_013_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_12_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_013_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_178 gabor_053 gabor_141 gabor_033    gabor_178 gabor_053 gabor_141_alt gabor_033_alt     "1_13_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_178_053_141_033_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_005_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_13_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  1992      fixation_cross    gabor_019 gabor_124 gabor_176 gabor_143    gabor_019 gabor_124 gabor_176_alt gabor_143_alt     "1_14_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_019_124_176_143_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_036_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_14_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  2392      fixation_cross    gabor_149 gabor_018 gabor_105 gabor_178    gabor_149 gabor_018_alt gabor_105_alt gabor_178     "1_15_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_149_018_105_178_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_105_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_15_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1892  2992  1942      fixation_cross    gabor_075 gabor_048 gabor_030 gabor_107    gabor_075 gabor_048_alt gabor_030 gabor_107_alt     "1_16_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_1950_gabor_patch_orientation_075_048_030_107_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_030_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_16_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_030_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2492      fixation_cross    gabor_112 gabor_026 gabor_043 gabor_007    gabor_112_alt gabor_026_alt gabor_043 gabor_007     "1_17_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_112_026_043_007_target_position_1_2_retrieval_position_2"          gabor_circ gabor_164_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_17_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2192      fixation_cross    gabor_091 gabor_045 gabor_114 gabor_178    gabor_091 gabor_045 gabor_114_alt gabor_178_alt     "1_18_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_091_045_114_178_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_114_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_18_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_156 gabor_093 gabor_013 gabor_067    gabor_156_alt gabor_093_alt gabor_013 gabor_067     "1_19_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_156_093_013_067_target_position_1_2_retrieval_position_2"          gabor_circ gabor_093_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_19_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2192  2992  1942      fixation_cross    gabor_099 gabor_131 gabor_170 gabor_150    gabor_099_alt gabor_131 gabor_170 gabor_150_alt     "1_20_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_1950_gabor_patch_orientation_099_131_170_150_target_position_1_4_retrieval_position_2"          gabor_circ gabor_131_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_20_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_131_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  2242      fixation_cross    gabor_065 gabor_005 gabor_091 gabor_021    gabor_065_alt gabor_005 gabor_091_alt gabor_021     "1_21_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_065_005_091_021_target_position_1_3_retrieval_position_1"          gabor_065_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_21_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2342      fixation_cross    gabor_094 gabor_057 gabor_176 gabor_127    gabor_094_alt gabor_057_alt gabor_176 gabor_127     "1_22_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_094_057_176_127_target_position_1_2_retrieval_position_2"          gabor_circ gabor_010_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_22_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_039 gabor_075 gabor_054 gabor_012    gabor_039 gabor_075 gabor_054_alt gabor_012_alt     "1_23_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_039_075_054_012_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_102_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_23_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_102_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1942  2992  2442      fixation_cross    gabor_107 gabor_084 gabor_138 gabor_172    gabor_107 gabor_084 gabor_138_alt gabor_172_alt     "1_24_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2450_gabor_patch_orientation_107_084_138_172_target_position_3_4_retrieval_position_1"          gabor_107_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_24_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_107_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2042      fixation_cross    gabor_116 gabor_180 gabor_100 gabor_141    gabor_116 gabor_180_alt gabor_100_alt gabor_141     "1_25_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_116_180_100_141_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_100_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_25_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_100_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2092  2992  2042      fixation_cross    gabor_063 gabor_142 gabor_169 gabor_122    gabor_063_alt gabor_142 gabor_169 gabor_122_alt     "1_26_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_063_142_169_122_target_position_1_4_retrieval_position_1"          gabor_014_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_26_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  2342      fixation_cross    gabor_093 gabor_115 gabor_070 gabor_007    gabor_093_alt gabor_115 gabor_070_alt gabor_007     "1_27_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_093_115_070_007_target_position_1_3_retrieval_position_1"          gabor_093_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_27_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_101 gabor_039 gabor_163 gabor_083    gabor_101 gabor_039_alt gabor_163_alt gabor_083     "1_28_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_101_039_163_083_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_118_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_28_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2142      fixation_cross    gabor_056 gabor_010 gabor_072 gabor_038    gabor_056 gabor_010_alt gabor_072 gabor_038_alt     "1_29_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_056_010_072_038_target_position_2_4_retrieval_position_2"          gabor_circ gabor_145_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_29_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_145_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_111 gabor_090 gabor_147 gabor_162    gabor_111 gabor_090_alt gabor_147 gabor_162_alt     "1_30_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_111_090_147_162_target_position_2_4_retrieval_position_2"          gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_30_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2092  2992  1892      fixation_cross    gabor_011 gabor_071 gabor_091 gabor_147    gabor_011 gabor_071_alt gabor_091_alt gabor_147     "1_31_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_1900_gabor_patch_orientation_011_071_091_147_target_position_2_3_retrieval_position_2"          gabor_circ gabor_118_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_31_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_016 gabor_145 gabor_082 gabor_061    gabor_016 gabor_145_alt gabor_082_alt gabor_061     "1_32_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_016_145_082_061_target_position_2_3_retrieval_position_2"          gabor_circ gabor_099_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_32_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2242  2992  1992      fixation_cross    gabor_070 gabor_149 gabor_100 gabor_032    gabor_070 gabor_149 gabor_100_alt gabor_032_alt     "1_33_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2000_gabor_patch_orientation_070_149_100_032_target_position_3_4_retrieval_position_2"          gabor_circ gabor_149_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_33_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_149_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  2592      fixation_cross    gabor_137 gabor_178 gabor_108 gabor_027    gabor_137_alt gabor_178 gabor_108_alt gabor_027     "1_34_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_137_178_108_027_target_position_1_3_retrieval_position_1"          gabor_137_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_34_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_174 gabor_089 gabor_051 gabor_002    gabor_174_alt gabor_089_alt gabor_051 gabor_002     "1_35_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_174_089_051_002_target_position_1_2_retrieval_position_1"          gabor_174_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_35_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2192  2992  2392      fixation_cross    gabor_041 gabor_006 gabor_121 gabor_176    gabor_041 gabor_006 gabor_121_alt gabor_176_alt     "1_36_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2400_gabor_patch_orientation_041_006_121_176_target_position_3_4_retrieval_position_1"          gabor_091_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_36_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_091_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2342      fixation_cross    gabor_128 gabor_022 gabor_169 gabor_007    gabor_128 gabor_022 gabor_169_alt gabor_007_alt     "1_37_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_128_022_169_007_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_053_framed    blank blank blank blank    fixation_cross_white    "1_37_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1992  2992  2042      fixation_cross    gabor_084 gabor_043 gabor_107 gabor_157    gabor_084_alt gabor_043 gabor_107 gabor_157_alt     "1_38_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_084_043_107_157_target_position_1_4_retrieval_position_1"          gabor_084_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_38_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_073 gabor_046 gabor_152 gabor_016    gabor_073_alt gabor_046 gabor_152_alt gabor_016     "1_39_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_073_046_152_016_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_152_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_39_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2392      fixation_cross    gabor_044 gabor_015 gabor_061 gabor_099    gabor_044 gabor_015_alt gabor_061_alt gabor_099     "1_40_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_044_015_061_099_target_position_2_3_retrieval_position_2"          gabor_circ gabor_150_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_40_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  2342      fixation_cross    gabor_168 gabor_078 gabor_032 gabor_095    gabor_168_alt gabor_078 gabor_032_alt gabor_095     "1_41_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_168_078_032_095_target_position_1_3_retrieval_position_1"          gabor_168_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_41_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2142  2992  2492      fixation_cross    gabor_005 gabor_021 gabor_173 gabor_149    gabor_005 gabor_021_alt gabor_173 gabor_149_alt     "1_42_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_2150_3000_2500_gabor_patch_orientation_005_021_173_149_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_127_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_42_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_127_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2242  2992  2192      fixation_cross    gabor_098 gabor_080 gabor_035 gabor_113    gabor_098_alt gabor_080 gabor_035 gabor_113_alt     "1_43_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_098_080_035_113_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_159_framed    blank blank blank blank    fixation_cross_white    "1_43_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_136 gabor_082 gabor_030 gabor_048    gabor_136 gabor_082 gabor_030_alt gabor_048_alt     "1_44_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_136_082_030_048_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_030_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_44_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  1942      fixation_cross    gabor_015 gabor_031 gabor_060 gabor_083    gabor_015 gabor_031 gabor_060_alt gabor_083_alt     "1_45_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_015_031_060_083_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_060_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_45_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  1892      fixation_cross    gabor_091 gabor_004 gabor_180 gabor_162    gabor_091_alt gabor_004 gabor_180_alt gabor_162     "1_46_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_1900_gabor_patch_orientation_091_004_180_162_target_position_1_3_retrieval_position_1"          gabor_140_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_46_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1942  2992  1892      fixation_cross    gabor_098 gabor_008 gabor_150 gabor_128    gabor_098 gabor_008_alt gabor_150_alt gabor_128     "1_47_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_1900_gabor_patch_orientation_098_008_150_128_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_128_framed    blank blank blank blank    fixation_cross_white    "1_47_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_128_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  2242      fixation_cross    gabor_002 gabor_136 gabor_029 gabor_112    gabor_002 gabor_136_alt gabor_029 gabor_112_alt     "1_48_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_002_136_029_112_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_112_framed    blank blank blank blank    fixation_cross_white    "1_48_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_063 gabor_044 gabor_118 gabor_029    gabor_063_alt gabor_044 gabor_118 gabor_029_alt     "1_49_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_063_044_118_029_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_079_framed    blank blank blank blank    fixation_cross_white    "1_49_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1892  2992  1992      fixation_cross    gabor_032 gabor_056 gabor_101 gabor_080    gabor_032 gabor_056_alt gabor_101 gabor_080_alt     "1_50_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2000_gabor_patch_orientation_032_056_101_080_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_101_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_50_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_101_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  2092      fixation_cross    gabor_063 gabor_172 gabor_096 gabor_117    gabor_063_alt gabor_172 gabor_096_alt gabor_117     "1_51_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_063_172_096_117_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_096_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_51_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2242  2992  2192      fixation_cross    gabor_003 gabor_179 gabor_089 gabor_118    gabor_003_alt gabor_179 gabor_089_alt gabor_118     "1_52_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_003_179_089_118_target_position_1_3_retrieval_position_1"          gabor_138_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_52_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  2242      fixation_cross    gabor_060 gabor_031 gabor_148 gabor_168    gabor_060_alt gabor_031 gabor_148 gabor_168_alt     "1_53_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_060_031_148_168_target_position_1_4_retrieval_position_1"          gabor_060_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_53_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2092  2992  2392      fixation_cross    gabor_092 gabor_032 gabor_113 gabor_149    gabor_092_alt gabor_032_alt gabor_113 gabor_149     "1_54_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_092_032_113_149_target_position_1_2_retrieval_position_2"          gabor_circ gabor_171_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_54_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2042      fixation_cross    gabor_144 gabor_169 gabor_033 gabor_006    gabor_144_alt gabor_169_alt gabor_033 gabor_006     "1_55_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_144_169_033_006_target_position_1_2_retrieval_position_1"          gabor_095_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_55_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_070 gabor_014 gabor_122 gabor_092    gabor_070 gabor_014_alt gabor_122_alt gabor_092     "1_56_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_070_014_122_092_target_position_2_3_retrieval_position_2"          gabor_circ gabor_014_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_56_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2242  2992  2092      fixation_cross    gabor_078 gabor_037 gabor_164 gabor_105    gabor_078_alt gabor_037_alt gabor_164 gabor_105     "1_57_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_2100_gabor_patch_orientation_078_037_164_105_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_058_framed    blank blank blank blank    fixation_cross_white    "1_57_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_058_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2242  2992  2192      fixation_cross    gabor_011 gabor_179 gabor_073 gabor_139    gabor_011_alt gabor_179 gabor_073_alt gabor_139     "1_58_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_011_179_073_139_target_position_1_3_retrieval_position_1"          gabor_057_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_58_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_057_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  2542      fixation_cross    gabor_176 gabor_023 gabor_093 gabor_134    gabor_176 gabor_023_alt gabor_093_alt gabor_134     "1_59_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_176_023_093_134_target_position_2_3_retrieval_position_2"          gabor_circ gabor_160_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_59_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1742  2992  2592      fixation_cross    gabor_151 gabor_037 gabor_093 gabor_066    gabor_151 gabor_037_alt gabor_093 gabor_066_alt     "1_60_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2600_gabor_patch_orientation_151_037_093_066_target_position_2_4_retrieval_position_1"          gabor_012_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_60_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_012_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2192      fixation_cross    gabor_126 gabor_073 gabor_096 gabor_016    gabor_126_alt gabor_073 gabor_096_alt gabor_016     "1_61_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_126_073_096_016_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_049_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_61_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_013 gabor_153 gabor_126 gabor_036    gabor_013 gabor_153_alt gabor_126 gabor_036_alt     "1_62_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_013_153_126_036_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_172_framed    blank blank blank blank    fixation_cross_white    "1_62_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_071 gabor_160 gabor_133 gabor_091    gabor_071 gabor_160_alt gabor_133 gabor_091_alt     "1_63_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_071_160_133_091_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_045_framed    blank blank blank blank    fixation_cross_white    "1_63_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2142  2992  1992      fixation_cross    gabor_163 gabor_078 gabor_008 gabor_142    gabor_163 gabor_078_alt gabor_008 gabor_142_alt     "1_64_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_2150_3000_2000_gabor_patch_orientation_163_078_008_142_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_053_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_64_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_053_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_073 gabor_098 gabor_050 gabor_131    gabor_073 gabor_098 gabor_050_alt gabor_131_alt     "1_65_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_073_098_050_131_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_131_framed    blank blank blank blank    fixation_cross_white    "1_65_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  2292      fixation_cross    gabor_109 gabor_176 gabor_002 gabor_128    gabor_109_alt gabor_176 gabor_002_alt gabor_128     "1_66_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_109_176_002_128_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_002_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_66_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_037 gabor_009 gabor_152 gabor_115    gabor_037 gabor_009 gabor_152_alt gabor_115_alt     "1_67_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_037_009_152_115_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_070_framed    blank blank blank blank    fixation_cross_white    "1_67_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  2542      fixation_cross    gabor_027 gabor_155 gabor_011 gabor_092    gabor_027_alt gabor_155 gabor_011 gabor_092_alt     "1_68_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_027_155_011_092_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_092_framed    blank blank blank blank    fixation_cross_white    "1_68_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1842  2992  2542      fixation_cross    gabor_035 gabor_003 gabor_112 gabor_141    gabor_035_alt gabor_003 gabor_112 gabor_141_alt     "1_69_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2550_gabor_patch_orientation_035_003_112_141_target_position_1_4_retrieval_position_2"          gabor_circ gabor_052_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_69_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_052_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  1892      fixation_cross    gabor_071 gabor_017 gabor_180 gabor_136    gabor_071_alt gabor_017_alt gabor_180 gabor_136     "1_70_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_071_017_180_136_target_position_1_2_retrieval_position_2"          gabor_circ gabor_017_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_70_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 