# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    62   292   292   399   125  1792  2992  2242      fixation_cross    gabor_176 gabor_048 gabor_135 gabor_070    gabor_176 gabor_048_alt gabor_135 gabor_070_alt      "2_1_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_176_048_135_070_target_position_2_4_retrieval_position_2"          gabor_circ gabor_048_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  2492      fixation_cross    gabor_111 gabor_052 gabor_141 gabor_180    gabor_111_alt gabor_052 gabor_141 gabor_180_alt      "2_2_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2500_gabor_patch_orientation_111_052_141_180_target_position_1_4_retrieval_position_1"          gabor_111_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_169 gabor_109 gabor_081 gabor_144    gabor_169 gabor_109_alt gabor_081 gabor_144_alt      "2_3_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_169_109_081_144_target_position_2_4_retrieval_position_2"          gabor_circ gabor_109_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  2342      fixation_cross    gabor_111 gabor_049 gabor_066 gabor_031    gabor_111_alt gabor_049 gabor_066 gabor_031_alt      "2_4_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_111_049_066_031_target_position_1_4_retrieval_position_1"          gabor_156_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1792  2992  2142      fixation_cross    gabor_068 gabor_156 gabor_138 gabor_175    gabor_068 gabor_156_alt gabor_138 gabor_175_alt      "2_5_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1800_3000_2150_gabor_patch_orientation_068_156_138_175_target_position_2_4_retrieval_position_1"          gabor_068_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_068_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2342      fixation_cross    gabor_068 gabor_048 gabor_127 gabor_086    gabor_068 gabor_048_alt gabor_127_alt gabor_086      "2_6_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_068_048_127_086_target_position_2_3_retrieval_position_2"          gabor_circ gabor_002_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2192  2992  2442      fixation_cross    gabor_159 gabor_003 gabor_113 gabor_041    gabor_159 gabor_003 gabor_113_alt gabor_041_alt      "2_7_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_159_003_113_041_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_086_framed    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_086_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  1942      fixation_cross    gabor_054 gabor_031 gabor_142 gabor_164    gabor_054 gabor_031 gabor_142_alt gabor_164_alt      "2_8_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_054_031_142_164_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_118_framed    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2092  2992  2492      fixation_cross    gabor_174 gabor_119 gabor_035 gabor_052    gabor_174_alt gabor_119 gabor_035_alt gabor_052      "2_9_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2500_gabor_patch_orientation_174_119_035_052_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_052_framed    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_052_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  2342      fixation_cross    gabor_169 gabor_113 gabor_058 gabor_005    gabor_169_alt gabor_113 gabor_058 gabor_005_alt     "2_10_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_169_113_058_005_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_005_framed    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_163 gabor_147 gabor_096 gabor_123    gabor_163_alt gabor_147_alt gabor_096 gabor_123     "2_11_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_163_147_096_123_target_position_1_2_retrieval_position_2"          gabor_circ gabor_147_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_147_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2242      fixation_cross    gabor_096 gabor_019 gabor_147 gabor_178    gabor_096 gabor_019_alt gabor_147_alt gabor_178     "2_12_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_096_019_147_178_target_position_2_3_retrieval_position_2"          gabor_circ gabor_069_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_074 gabor_159 gabor_095 gabor_013    gabor_074 gabor_159_alt gabor_095_alt gabor_013     "2_13_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_074_159_095_013_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_095_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_135 gabor_048 gabor_066 gabor_027    gabor_135 gabor_048_alt gabor_066_alt gabor_027     "2_14_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_135_048_066_027_target_position_2_3_retrieval_position_2"          gabor_circ gabor_048_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2142  2992  1992      fixation_cross    gabor_042 gabor_023 gabor_112 gabor_156    gabor_042_alt gabor_023_alt gabor_112 gabor_156     "2_15_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_2150_3000_2000_gabor_patch_orientation_042_023_112_156_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_067_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_067_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_140 gabor_172 gabor_056 gabor_116    gabor_140_alt gabor_172 gabor_056_alt gabor_116     "2_16_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_140_172_056_116_target_position_1_3_retrieval_position_1"          gabor_001_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2292      fixation_cross    gabor_102 gabor_164 gabor_044 gabor_018    gabor_102 gabor_164_alt gabor_044_alt gabor_018     "2_17_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_102_164_044_018_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_180_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  1892      fixation_cross    gabor_164 gabor_130 gabor_101 gabor_017    gabor_164 gabor_130_alt gabor_101_alt gabor_017     "2_18_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_164_130_101_017_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_101_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2292      fixation_cross    gabor_022 gabor_174 gabor_157 gabor_046    gabor_022 gabor_174 gabor_157_alt gabor_046_alt     "2_19_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_022_174_157_046_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_109_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1742  2992  2242      fixation_cross    gabor_064 gabor_179 gabor_094 gabor_154    gabor_064_alt gabor_179 gabor_094 gabor_154_alt     "2_20_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2250_gabor_patch_orientation_064_179_094_154_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_094_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_094_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2242  2992  2142      fixation_cross    gabor_049 gabor_169 gabor_139 gabor_106    gabor_049 gabor_169_alt gabor_139_alt gabor_106     "2_21_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_049_169_139_106_target_position_2_3_retrieval_position_2"          gabor_circ gabor_029_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_131 gabor_101 gabor_158 gabor_077    gabor_131_alt gabor_101_alt gabor_158 gabor_077     "2_22_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_131_101_158_077_target_position_1_2_retrieval_position_2"          gabor_circ gabor_052_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  2592      fixation_cross    gabor_175 gabor_140 gabor_009 gabor_117    gabor_175_alt gabor_140 gabor_009_alt gabor_117     "2_23_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_175_140_009_117_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_009_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2042  2992  1942      fixation_cross    gabor_039 gabor_091 gabor_054 gabor_075    gabor_039_alt gabor_091 gabor_054_alt gabor_075     "2_24_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_2050_3000_1950_gabor_patch_orientation_039_091_054_075_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_121_framed    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_121_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_069 gabor_125 gabor_144 gabor_007    gabor_069_alt gabor_125 gabor_144_alt gabor_007     "2_25_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_069_125_144_007_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_144_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2142      fixation_cross    gabor_172 gabor_063 gabor_023 gabor_043    gabor_172 gabor_063 gabor_023_alt gabor_043_alt     "2_26_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_172_063_023_043_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_092_framed    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  2592      fixation_cross    gabor_033 gabor_152 gabor_120 gabor_169    gabor_033 gabor_152_alt gabor_120 gabor_169_alt     "2_27_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_033_152_120_169_target_position_2_4_retrieval_position_2"          gabor_circ gabor_152_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2192  2992  1992      fixation_cross    gabor_109 gabor_179 gabor_134 gabor_065    gabor_109_alt gabor_179 gabor_134 gabor_065_alt     "2_28_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_109_179_134_065_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_019_framed    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_019_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2092      fixation_cross    gabor_176 gabor_038 gabor_150 gabor_127    gabor_176_alt gabor_038_alt gabor_150 gabor_127     "2_29_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_176_038_150_127_target_position_1_2_retrieval_position_2"          gabor_circ gabor_086_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_086_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  1992      fixation_cross    gabor_133 gabor_003 gabor_023 gabor_179    gabor_133_alt gabor_003_alt gabor_023 gabor_179     "2_30_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_133_003_023_179_target_position_1_2_retrieval_position_2"          gabor_circ gabor_003_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  1892      fixation_cross    gabor_174 gabor_065 gabor_041 gabor_010    gabor_174_alt gabor_065 gabor_041_alt gabor_010     "2_31_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_174_065_041_010_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_041_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2342      fixation_cross    gabor_098 gabor_052 gabor_076 gabor_157    gabor_098 gabor_052_alt gabor_076 gabor_157_alt     "2_32_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_098_052_076_157_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_018_framed    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_018_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2042  2992  2392      fixation_cross    gabor_166 gabor_011 gabor_082 gabor_143    gabor_166_alt gabor_011 gabor_082 gabor_143_alt     "2_33_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_2050_3000_2400_gabor_patch_orientation_166_011_082_143_target_position_1_4_retrieval_position_2"          gabor_circ gabor_057_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_057_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  1892      fixation_cross    gabor_040 gabor_061 gabor_121 gabor_168    gabor_040_alt gabor_061_alt gabor_121 gabor_168     "2_34_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_040_061_121_168_target_position_1_2_retrieval_position_1"          gabor_040_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  2242      fixation_cross    gabor_046 gabor_133 gabor_161 gabor_028    gabor_046 gabor_133_alt gabor_161 gabor_028_alt     "2_35_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_046_133_161_028_target_position_2_4_retrieval_position_2"          gabor_circ gabor_133_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_133_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2492      fixation_cross    gabor_067 gabor_025 gabor_049 gabor_180    gabor_067 gabor_025_alt gabor_049_alt gabor_180     "2_36_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_067_025_049_180_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_049_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2192  2992  2192      fixation_cross    gabor_013 gabor_124 gabor_159 gabor_049    gabor_013_alt gabor_124_alt gabor_159 gabor_049     "2_37_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2200_gabor_patch_orientation_013_124_159_049_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_096_framed    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_096_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2192      fixation_cross    gabor_074 gabor_095 gabor_053 gabor_027    gabor_074 gabor_095_alt gabor_053_alt gabor_027     "2_38_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_074_095_053_027_target_position_2_3_retrieval_position_2"          gabor_circ gabor_141_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1792  2992  2542      fixation_cross    gabor_169 gabor_086 gabor_111 gabor_043    gabor_169 gabor_086 gabor_111_alt gabor_043_alt     "2_39_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1800_3000_2550_gabor_patch_orientation_169_086_111_043_target_position_3_4_retrieval_position_2"          gabor_circ gabor_086_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_086_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2392      fixation_cross    gabor_135 gabor_165 gabor_026 gabor_005    gabor_135 gabor_165_alt gabor_026 gabor_005_alt     "2_40_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_135_165_026_005_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_050_framed    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2092      fixation_cross    gabor_052 gabor_157 gabor_080 gabor_120    gabor_052 gabor_157 gabor_080_alt gabor_120_alt     "2_41_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_052_157_080_120_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_032_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_012 gabor_063 gabor_093 gabor_130    gabor_012_alt gabor_063 gabor_093 gabor_130_alt     "2_42_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_012_063_093_130_target_position_1_4_retrieval_position_1"          gabor_012_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2292      fixation_cross    gabor_062 gabor_172 gabor_105 gabor_024    gabor_062 gabor_172_alt gabor_105_alt gabor_024     "2_43_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_062_172_105_024_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_150_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  2392      fixation_cross    gabor_043 gabor_073 gabor_151 gabor_027    gabor_043 gabor_073 gabor_151_alt gabor_027_alt     "2_44_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_043_073_151_027_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_151_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1742  2992  2442      fixation_cross    gabor_110 gabor_026 gabor_046 gabor_079    gabor_110_alt gabor_026 gabor_046 gabor_079_alt     "2_45_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2450_gabor_patch_orientation_110_026_046_079_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_046_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_046_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_007 gabor_135 gabor_112 gabor_051    gabor_007_alt gabor_135 gabor_112_alt gabor_051     "2_46_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_007_135_112_051_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_112_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_013 gabor_169 gabor_099 gabor_039    gabor_013 gabor_169_alt gabor_099_alt gabor_039     "2_47_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_013_169_099_039_target_position_2_3_retrieval_position_2"          gabor_circ gabor_169_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2042      fixation_cross    gabor_072 gabor_134 gabor_001 gabor_161    gabor_072 gabor_134_alt gabor_001_alt gabor_161     "2_48_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_072_134_001_161_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_001_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2192      fixation_cross    gabor_122 gabor_143 gabor_009 gabor_170    gabor_122 gabor_143_alt gabor_009 gabor_170_alt     "2_49_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_122_143_009_170_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_032_framed    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2492      fixation_cross    gabor_001 gabor_173 gabor_035 gabor_148    gabor_001 gabor_173_alt gabor_035_alt gabor_148     "2_50_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_001_173_035_148_target_position_2_3_retrieval_position_2"          gabor_circ gabor_125_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2092  2992  2292      fixation_cross    gabor_042 gabor_170 gabor_100 gabor_151    gabor_042 gabor_170 gabor_100_alt gabor_151_alt     "2_51_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_042_170_100_151_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_015_framed    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2592      fixation_cross    gabor_144 gabor_099 gabor_125 gabor_084    gabor_144 gabor_099 gabor_125_alt gabor_084_alt     "2_52_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2600_gabor_patch_orientation_144_099_125_084_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_174_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1742  2992  2092      fixation_cross    gabor_061 gabor_177 gabor_014 gabor_124    gabor_061 gabor_177 gabor_014_alt gabor_124_alt     "2_53_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2100_gabor_patch_orientation_061_177_014_124_target_position_3_4_retrieval_position_2"          gabor_circ gabor_177_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_177_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2542      fixation_cross    gabor_044 gabor_095 gabor_158 gabor_125    gabor_044_alt gabor_095 gabor_158 gabor_125_alt     "2_54_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_044_095_158_125_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_125_framed    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1792  2992  2592      fixation_cross    gabor_100 gabor_040 gabor_022 gabor_062    gabor_100_alt gabor_040_alt gabor_022 gabor_062     "2_55_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_100_040_022_062_target_position_1_2_retrieval_position_2"          gabor_circ gabor_179_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  1992      fixation_cross    gabor_129 gabor_050 gabor_003 gabor_109    gabor_129 gabor_050_alt gabor_003 gabor_109_alt     "2_56_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_129_050_003_109_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_109_framed    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1842  2992  2392      fixation_cross    gabor_057 gabor_108 gabor_133 gabor_163    gabor_057 gabor_108_alt gabor_133_alt gabor_163     "2_57_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2400_gabor_patch_orientation_057_108_133_163_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_163_framed    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_163_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  1942      fixation_cross    gabor_180 gabor_120 gabor_096 gabor_161    gabor_180 gabor_120_alt gabor_096 gabor_161_alt     "2_58_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_180_120_096_161_target_position_2_4_retrieval_position_2"          gabor_circ gabor_120_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_038 gabor_003 gabor_168 gabor_061    gabor_038 gabor_003 gabor_168_alt gabor_061_alt     "2_59_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_038_003_168_061_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_111_framed    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2242  2992  1942      fixation_cross    gabor_005 gabor_143 gabor_082 gabor_028    gabor_005 gabor_143_alt gabor_082 gabor_028_alt     "2_60_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_1950_gabor_patch_orientation_005_143_082_028_target_position_2_4_retrieval_position_1"          gabor_055_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_055_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  2342      fixation_cross    gabor_172 gabor_155 gabor_098 gabor_033    gabor_172 gabor_155_alt gabor_098 gabor_033_alt     "2_61_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_172_155_098_033_target_position_2_4_retrieval_position_2"          gabor_circ gabor_015_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1992  2992  2542      fixation_cross    gabor_049 gabor_074 gabor_160 gabor_179    gabor_049_alt gabor_074 gabor_160_alt gabor_179     "2_62_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_049_074_160_179_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_160_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2542      fixation_cross    gabor_071 gabor_180 gabor_154 gabor_011    gabor_071_alt gabor_180 gabor_154_alt gabor_011     "2_63_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_071_180_154_011_target_position_1_3_retrieval_position_1"          gabor_121_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_121_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  1942      fixation_cross    gabor_109 gabor_137 gabor_171 gabor_019    gabor_109_alt gabor_137 gabor_171_alt gabor_019     "2_64_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_109_137_171_019_target_position_1_3_retrieval_position_1"          gabor_109_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1792  2992  2442      fixation_cross    gabor_077 gabor_061 gabor_043 gabor_028    gabor_077 gabor_061 gabor_043_alt gabor_028_alt     "2_65_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2450_gabor_patch_orientation_077_061_043_028_target_position_3_4_retrieval_position_2"          gabor_circ gabor_107_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_107_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_147 gabor_007 gabor_171 gabor_026    gabor_147_alt gabor_007_alt gabor_171 gabor_026     "2_66_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_147_007_171_026_target_position_1_2_retrieval_position_2"          gabor_circ gabor_057_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_057_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2142      fixation_cross    gabor_116 gabor_057 gabor_097 gabor_034    gabor_116 gabor_057_alt gabor_097 gabor_034_alt     "2_67_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_116_057_097_034_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_173_framed    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  2042      fixation_cross    gabor_058 gabor_094 gabor_163 gabor_147    gabor_058 gabor_094_alt gabor_163_alt gabor_147     "2_68_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_058_094_163_147_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_163_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1992  2992  2042      fixation_cross    gabor_158 gabor_086 gabor_120 gabor_047    gabor_158_alt gabor_086 gabor_120 gabor_047_alt     "2_69_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_2000_3000_2050_gabor_patch_orientation_158_086_120_047_target_position_1_4_retrieval_position_2"          gabor_circ gabor_136_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_136_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1992  2992  2092      fixation_cross    gabor_010 gabor_139 gabor_173 gabor_115    gabor_010 gabor_139_alt gabor_173 gabor_115_alt     "2_70_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_010_139_173_115_target_position_2_4_retrieval_position_2"          gabor_circ gabor_139_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 