# ATWM1 MRI Experiment
                         
scenario = "ATWM1_Working_Memory_MRI_nonsalient_cued_run1";
scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
#scenario_type = trials;
scan_period = 2000; # TR
pulses_per_scan = 1;
pulse_code = 1;
#pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
#write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;



# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 9400;
   mri_pulse = 1;
   code = "BaselinePre"; 	
   #port_code = 1;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MRI.tem" {
trigger_volume_encoding trigger_volume_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
    6    11   292   292   399   125  9543  2992 12342      fixation_cross    gabor_125 gabor_180 gabor_140 gabor_097    gabor_125 gabor_180_alt gabor_140_alt gabor_097      "1_1_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_9601_3000_12400_gabor_patch_orientation_125_180_140_097_target_position_1_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_052_framed    blank blank blank blank    fixation_cross_target_position_1_4     "1_1_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   19    25   292   292   399   125 11543  2992 12342      fixation_cross    gabor_036 gabor_141 gabor_013 gabor_126    gabor_036 gabor_141 gabor_013_alt gabor_126_alt      "1_2_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_11601_3000_12400_gabor_patch_orientation_036_141_013_126_target_position_1_2_retrieval_position_1"     gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_2_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   33    38   292   292   399   125  9543  2992 14342      fixation_cross    gabor_089 gabor_154 gabor_043 gabor_021    gabor_089_alt gabor_154_alt gabor_043 gabor_021      "1_3_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_9601_3000_14400_gabor_patch_orientation_089_154_043_021_target_position_3_4_retrieval_position_4"      gabor_circ gabor_circ gabor_circ gabor_070_framed    blank blank blank blank    fixation_cross_target_position_3_4     "1_3_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   47    53   292   292   399   125 11543  2992 14342      fixation_cross    gabor_091 gabor_151 gabor_027 gabor_011    gabor_091 gabor_151 gabor_027_alt gabor_011_alt      "1_4_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_11601_3000_14400_gabor_patch_orientation_091_151_027_011_target_position_1_2_retrieval_position_1"     gabor_091_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_4_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   62    68   292   292   399   125 11543  2992 14342      fixation_cross    gabor_042 gabor_007 gabor_064 gabor_180    gabor_042_alt gabor_007_alt gabor_064 gabor_180      "1_5_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_11601_3000_14400_gabor_patch_orientation_042_007_064_180_target_position_3_4_retrieval_position_4"     gabor_circ gabor_circ gabor_circ gabor_131_framed    blank blank blank blank    fixation_cross_target_position_3_4     "1_5_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   77    82   292   292   399   125  9543  2992 12342      fixation_cross    gabor_143 gabor_012 gabor_122 gabor_094    gabor_143_alt gabor_012 gabor_122_alt gabor_094      "1_6_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_9601_3000_12400_gabor_patch_orientation_143_012_122_094_target_position_2_4_retrieval_position_3"      gabor_circ gabor_circ gabor_122_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "1_6_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_122_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   90    95   292   292   399   125  9543  2992 12342      fixation_cross    gabor_010 gabor_030 gabor_138 gabor_057    gabor_010_alt gabor_030 gabor_138 gabor_057_alt      "1_7_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_9601_3000_12400_gabor_patch_orientation_010_030_138_057_target_position_2_3_retrieval_position_3"      gabor_circ gabor_circ gabor_138_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_7_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
  103   108   292   292   399   125  9543  2992 14342      fixation_cross    gabor_039 gabor_068 gabor_156 gabor_085    gabor_039_alt gabor_068 gabor_156 gabor_085_alt      "1_8_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_9601_3000_14400_gabor_patch_orientation_039_068_156_085_target_position_2_3_retrieval_position_2"      gabor_circ gabor_018_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_8_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_018_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
  117   123   292   292   399   125 11543  2992 14342      fixation_cross    gabor_085 gabor_117 gabor_046 gabor_163    gabor_085_alt gabor_117_alt gabor_046 gabor_163      "1_9_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_11601_3000_14400_gabor_patch_orientation_085_117_046_163_target_position_3_4_retrieval_position_3"     gabor_circ gabor_circ gabor_046_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_9_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
  132   138   292   292   399   125 11543  2992 12342      fixation_cross    gabor_176 gabor_107 gabor_140 gabor_050    gabor_176_alt gabor_107 gabor_140_alt gabor_050     "1_10_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_11601_3000_12400_gabor_patch_orientation_176_107_140_050_target_position_2_4_retrieval_position_3"     gabor_circ gabor_circ gabor_140_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_10_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_140_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
  146   151   292   292   399   125  9543  2992 12342      fixation_cross    gabor_101 gabor_086 gabor_176 gabor_023    gabor_101_alt gabor_086 gabor_176 gabor_023_alt     "1_11_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_9601_3000_12400_gabor_patch_orientation_101_086_176_023_target_position_2_3_retrieval_position_2"      gabor_circ gabor_135_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_11_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
  159   164   292   292   399   125  9543  2992 14342      fixation_cross    gabor_125 gabor_084 gabor_106 gabor_017    gabor_125 gabor_084_alt gabor_106 gabor_017_alt     "1_12_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_9601_3000_14400_gabor_patch_orientation_125_084_106_017_target_position_1_3_retrieval_position_1"      gabor_171_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_12_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
  173   179   292   292   399   125 11543  2992 12342      fixation_cross    gabor_073 gabor_115 gabor_141 gabor_009    gabor_073 gabor_115 gabor_141_alt gabor_009_alt     "1_13_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_11601_3000_12400_gabor_patch_orientation_073_115_141_009_target_position_1_2_retrieval_position_4"     gabor_circ gabor_circ gabor_circ gabor_055_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_13_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_055_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
  187   192   292   292   399   125  9543  2992 14342      fixation_cross    gabor_010 gabor_050 gabor_127 gabor_177    gabor_010 gabor_050 gabor_127_alt gabor_177_alt     "1_14_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_9601_3000_14400_gabor_patch_orientation_010_050_127_177_target_position_1_2_retrieval_position_2"      gabor_circ gabor_050_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_14_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
  201   207   292   292   399   125 11543  2992 14342      fixation_cross    gabor_086 gabor_113 gabor_004 gabor_071    gabor_086_alt gabor_113 gabor_004 gabor_071_alt     "1_15_Encoding_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_11601_3000_14400_gabor_patch_orientation_086_113_004_071_target_position_2_3_retrieval_position_2"     gabor_circ gabor_113_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_15_Retrieval_Working_Memory_MRI_P8_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 20600;  
   code = "BaselinePost"; 	 
   #port_code = 2;  
};  