# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    62   292   292   399   125  2142  2992  2192      fixation_cross    gabor_026 gabor_135 gabor_177 gabor_098    gabor_026 gabor_135_alt gabor_177_alt gabor_098      "2_1_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_026_135_177_098_target_position_1_4_retrieval_position_1"       gabor_026_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_1_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  2442      fixation_cross    gabor_044 gabor_114 gabor_026 gabor_076    gabor_044 gabor_114 gabor_026_alt gabor_076_alt      "2_2_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2450_gabor_patch_orientation_044_114_026_076_target_position_1_2_retrieval_position_1"       gabor_044_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_2_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_029 gabor_013 gabor_099 gabor_160    gabor_029_alt gabor_013 gabor_099 gabor_160_alt      "2_3_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_029_013_099_160_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_099_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_3_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2342      fixation_cross    gabor_107 gabor_177 gabor_158 gabor_092    gabor_107_alt gabor_177_alt gabor_158 gabor_092      "2_4_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_107_177_158_092_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_092_framed    blank blank blank blank    fixation_cross_target_position_3_4     "2_4_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  2542      fixation_cross    gabor_100 gabor_137 gabor_056 gabor_166    gabor_100 gabor_137_alt gabor_056 gabor_166_alt      "2_5_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_100_137_056_166_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_010_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_5_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2092  2992  2392      fixation_cross    gabor_178 gabor_015 gabor_151 gabor_127    gabor_178_alt gabor_015_alt gabor_151 gabor_127      "2_6_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2400_gabor_patch_orientation_178_015_151_127_target_position_3_4_retrieval_position_1"       gabor_178_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_6_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_178_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  1942      fixation_cross    gabor_002 gabor_085 gabor_114 gabor_174    gabor_002 gabor_085 gabor_114_alt gabor_174_alt      "2_7_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_002_085_114_174_target_position_1_2_retrieval_position_1"       gabor_002_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_7_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_067 gabor_179 gabor_002 gabor_148    gabor_067_alt gabor_179 gabor_002 gabor_148_alt      "2_8_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_067_179_002_148_target_position_2_3_retrieval_position_2"       gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_8_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1942  2992  2092      fixation_cross    gabor_150 gabor_173 gabor_087 gabor_122    gabor_150 gabor_173 gabor_087_alt gabor_122_alt      "2_9_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_150_173_087_122_target_position_1_2_retrieval_position_2"       gabor_circ gabor_173_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_9_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_135 gabor_164 gabor_006 gabor_092    gabor_135 gabor_164 gabor_006_alt gabor_092_alt     "2_10_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_135_164_006_092_target_position_1_2_retrieval_position_1"       gabor_180_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_10_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1942  2992  1892      fixation_cross    gabor_069 gabor_149 gabor_177 gabor_024    gabor_069_alt gabor_149 gabor_177 gabor_024_alt     "2_11_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_069_149_177_024_target_position_2_3_retrieval_position_2"       gabor_circ gabor_149_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_11_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1742  2992  1892      fixation_cross    gabor_143 gabor_081 gabor_012 gabor_065    gabor_143_alt gabor_081 gabor_012 gabor_065_alt     "2_12_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_1900_gabor_patch_orientation_143_081_012_065_target_position_2_3_retrieval_position_1"       gabor_097_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_12_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_097_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2342      fixation_cross    gabor_101 gabor_147 gabor_128 gabor_014    gabor_101_alt gabor_147 gabor_128 gabor_014_alt     "2_13_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_101_147_128_014_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_13_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_040 gabor_067 gabor_097 gabor_174    gabor_040_alt gabor_067_alt gabor_097 gabor_174     "2_14_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_040_067_097_174_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_147_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_14_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_147_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  1992      fixation_cross    gabor_060 gabor_012 gabor_095 gabor_172    gabor_060 gabor_012_alt gabor_095_alt gabor_172     "2_15_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_060_012_095_172_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_172_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_15_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_089 gabor_030 gabor_148 gabor_072    gabor_089_alt gabor_030_alt gabor_148 gabor_072     "2_16_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_089_030_148_072_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_119_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_16_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1842  2992  2092      fixation_cross    gabor_100 gabor_158 gabor_048 gabor_021    gabor_100 gabor_158 gabor_048_alt gabor_021_alt     "2_17_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2100_gabor_patch_orientation_100_158_048_021_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_071_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_17_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_071_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_049 gabor_027 gabor_137 gabor_068    gabor_049 gabor_027_alt gabor_137 gabor_068_alt     "2_18_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_049_027_137_068_target_position_1_3_retrieval_position_1"       gabor_049_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_18_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2592      fixation_cross    gabor_095 gabor_055 gabor_039 gabor_169    gabor_095 gabor_055_alt gabor_039_alt gabor_169     "2_19_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_095_055_039_169_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_169_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_19_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1942  2992  2142      fixation_cross    gabor_083 gabor_066 gabor_004 gabor_021    gabor_083_alt gabor_066 gabor_004 gabor_021_alt     "2_20_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_083_066_004_021_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_004_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_20_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2042      fixation_cross    gabor_172 gabor_034 gabor_053 gabor_017    gabor_172_alt gabor_034 gabor_053 gabor_017_alt     "2_21_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_172_034_053_017_target_position_2_3_retrieval_position_2"       gabor_circ gabor_084_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_21_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1742  2992  2492      fixation_cross    gabor_021 gabor_174 gabor_090 gabor_068    gabor_021_alt gabor_174 gabor_090_alt gabor_068     "2_22_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2500_gabor_patch_orientation_021_174_090_068_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_044_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_22_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_044_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2042      fixation_cross    gabor_123 gabor_099 gabor_014 gabor_174    gabor_123_alt gabor_099 gabor_014 gabor_174_alt     "2_23_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_123_099_014_174_target_position_2_3_retrieval_position_2"       gabor_circ gabor_144_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_23_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2042      fixation_cross    gabor_114 gabor_051 gabor_099 gabor_072    gabor_114 gabor_051 gabor_099_alt gabor_072_alt     "2_24_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_114_051_099_072_target_position_1_2_retrieval_position_1"       gabor_161_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_24_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2442      fixation_cross    gabor_090 gabor_067 gabor_131 gabor_113    gabor_090 gabor_067_alt gabor_131 gabor_113_alt     "2_25_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_090_067_131_113_target_position_1_3_retrieval_position_1"       gabor_043_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_25_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1942  2992  2442      fixation_cross    gabor_145 gabor_162 gabor_093 gabor_129    gabor_145 gabor_162_alt gabor_093_alt gabor_129     "2_26_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1950_3000_2450_gabor_patch_orientation_145_162_093_129_target_position_1_4_retrieval_position_2"       gabor_circ gabor_162_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_26_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_162_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2392      fixation_cross    gabor_037 gabor_149 gabor_016 gabor_074    gabor_037 gabor_149 gabor_016_alt gabor_074_alt     "2_27_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_037_149_016_074_target_position_1_2_retrieval_position_2"       gabor_circ gabor_149_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_27_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_176 gabor_142 gabor_093 gabor_055    gabor_176 gabor_142 gabor_093_alt gabor_055_alt     "2_28_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_176_142_093_055_target_position_1_2_retrieval_position_1"       gabor_176_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_28_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_158 gabor_006 gabor_030 gabor_141    gabor_158_alt gabor_006 gabor_030 gabor_141_alt     "2_29_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_158_006_030_141_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_030_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_29_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2092  2992  2292      fixation_cross    gabor_134 gabor_119 gabor_176 gabor_104    gabor_134_alt gabor_119_alt gabor_176 gabor_104     "2_30_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2300_gabor_patch_orientation_134_119_176_104_target_position_3_4_retrieval_position_2"       gabor_circ gabor_119_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_30_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_119_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2392      fixation_cross    gabor_089 gabor_161 gabor_071 gabor_001    gabor_089 gabor_161 gabor_071_alt gabor_001_alt     "2_31_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_089_161_071_001_target_position_1_2_retrieval_position_2"       gabor_circ gabor_161_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_31_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_056 gabor_123 gabor_017 gabor_093    gabor_056_alt gabor_123 gabor_017 gabor_093_alt     "2_32_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_056_123_017_093_target_position_2_3_retrieval_position_2"       gabor_circ gabor_169_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_32_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2542      fixation_cross    gabor_043 gabor_079 gabor_122 gabor_008    gabor_043_alt gabor_079 gabor_122 gabor_008_alt     "2_33_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_043_079_122_008_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_168_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_33_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2142      fixation_cross    gabor_067 gabor_126 gabor_096 gabor_153    gabor_067_alt gabor_126 gabor_096_alt gabor_153     "2_34_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_067_126_096_153_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_016_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_34_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2292      fixation_cross    gabor_078 gabor_094 gabor_151 gabor_134    gabor_078 gabor_094 gabor_151_alt gabor_134_alt     "2_35_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_078_094_151_134_target_position_1_2_retrieval_position_1"       gabor_028_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_35_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1792  2992  1942      fixation_cross    gabor_006 gabor_168 gabor_094 gabor_028    gabor_006_alt gabor_168 gabor_094_alt gabor_028     "2_36_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_1950_gabor_patch_orientation_006_168_094_028_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_094_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_36_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_094_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  1942      fixation_cross    gabor_173 gabor_148 gabor_026 gabor_106    gabor_173 gabor_148_alt gabor_026_alt gabor_106     "2_37_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_173_148_026_106_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_106_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_37_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  1942      fixation_cross    gabor_146 gabor_172 gabor_037 gabor_016    gabor_146_alt gabor_172_alt gabor_037 gabor_016     "2_38_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_146_172_037_016_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_063_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_38_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2092      fixation_cross    gabor_096 gabor_007 gabor_067 gabor_024    gabor_096_alt gabor_007 gabor_067 gabor_024_alt     "2_39_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_096_007_067_024_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_067_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_39_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2242      fixation_cross    gabor_145 gabor_167 gabor_107 gabor_030    gabor_145 gabor_167_alt gabor_107 gabor_030_alt     "2_40_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_145_167_107_030_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_061_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_40_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_120 gabor_007 gabor_042 gabor_060    gabor_120 gabor_007_alt gabor_042 gabor_060_alt     "2_41_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_120_007_042_060_target_position_1_3_retrieval_position_1"       gabor_168_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_41_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2092      fixation_cross    gabor_081 gabor_134 gabor_051 gabor_160    gabor_081_alt gabor_134 gabor_051_alt gabor_160     "2_42_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_081_134_051_160_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_160_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_42_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1792  2992  2592      fixation_cross    gabor_111 gabor_094 gabor_176 gabor_057    gabor_111 gabor_094_alt gabor_176_alt gabor_057     "2_43_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2600_gabor_patch_orientation_111_094_176_057_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_036_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_43_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_036_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  2492      fixation_cross    gabor_062 gabor_150 gabor_116 gabor_177    gabor_062_alt gabor_150 gabor_116 gabor_177_alt     "2_44_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2500_gabor_patch_orientation_062_150_116_177_target_position_2_3_retrieval_position_2"       gabor_circ gabor_010_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_44_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2592      fixation_cross    gabor_148 gabor_024 gabor_111 gabor_096    gabor_148_alt gabor_024_alt gabor_111 gabor_096     "2_45_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_148_024_111_096_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_063_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_45_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1892  2992  2042      fixation_cross    gabor_111 gabor_145 gabor_093 gabor_055    gabor_111 gabor_145 gabor_093_alt gabor_055_alt     "2_46_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2050_gabor_patch_orientation_111_145_093_055_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_055_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_46_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_055_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2142      fixation_cross    gabor_022 gabor_159 gabor_096 gabor_049    gabor_022 gabor_159 gabor_096_alt gabor_049_alt     "2_47_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_022_159_096_049_target_position_1_2_retrieval_position_2"       gabor_circ gabor_159_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_47_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_116 gabor_156 gabor_134 gabor_068    gabor_116 gabor_156_alt gabor_134 gabor_068_alt     "2_48_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_116_156_134_068_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_48_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2492      fixation_cross    gabor_012 gabor_156 gabor_067 gabor_135    gabor_012_alt gabor_156 gabor_067_alt gabor_135     "2_49_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_012_156_067_135_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_087_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_49_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_003 gabor_159 gabor_043 gabor_085    gabor_003_alt gabor_159 gabor_043_alt gabor_085     "2_50_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_003_159_043_085_target_position_2_4_retrieval_position_2"       gabor_circ gabor_111_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_50_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1842  2992  2542      fixation_cross    gabor_010 gabor_126 gabor_157 gabor_040    gabor_010_alt gabor_126 gabor_157 gabor_040_alt     "2_51_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2550_gabor_patch_orientation_010_126_157_040_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_085_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_51_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_085_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2242      fixation_cross    gabor_093 gabor_044 gabor_078 gabor_164    gabor_093_alt gabor_044 gabor_078 gabor_164_alt     "2_52_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_093_044_078_164_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_078_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_52_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_071 gabor_124 gabor_055 gabor_001    gabor_071_alt gabor_124 gabor_055_alt gabor_001     "2_53_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_071_124_055_001_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_141_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_53_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2142      fixation_cross    gabor_105 gabor_162 gabor_056 gabor_073    gabor_105 gabor_162 gabor_056_alt gabor_073_alt     "2_54_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_105_162_056_073_target_position_1_2_retrieval_position_2"       gabor_circ gabor_162_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_54_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_162_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2542      fixation_cross    gabor_098 gabor_031 gabor_149 gabor_060    gabor_098_alt gabor_031 gabor_149 gabor_060_alt     "2_55_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_098_031_149_060_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_149_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_55_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1892  2992  2292      fixation_cross    gabor_077 gabor_162 gabor_049 gabor_099    gabor_077_alt gabor_162 gabor_049 gabor_099_alt     "2_56_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1900_3000_2300_gabor_patch_orientation_077_162_049_099_target_position_2_3_retrieval_position_1"       gabor_028_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_56_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_028_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2392      fixation_cross    gabor_140 gabor_163 gabor_024 gabor_081    gabor_140_alt gabor_163 gabor_024_alt gabor_081     "2_57_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_140_163_024_081_target_position_2_4_retrieval_position_2"       gabor_circ gabor_114_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_57_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2192      fixation_cross    gabor_009 gabor_070 gabor_115 gabor_041    gabor_009 gabor_070_alt gabor_115 gabor_041_alt     "2_58_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_009_070_115_041_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_160_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_58_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_011 gabor_085 gabor_122 gabor_064    gabor_011 gabor_085_alt gabor_122_alt gabor_064     "2_59_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_011_085_122_064_target_position_1_4_retrieval_position_1"       gabor_149_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_59_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1792  2992  2192      fixation_cross    gabor_139 gabor_110 gabor_077 gabor_157    gabor_139_alt gabor_110 gabor_077 gabor_157_alt     "2_60_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2200_gabor_patch_orientation_139_110_077_157_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_157_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_60_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_157_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2242      fixation_cross    gabor_091 gabor_148 gabor_112 gabor_132    gabor_091 gabor_148_alt gabor_112_alt gabor_132     "2_61_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_091_148_112_132_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_180_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_61_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  2292      fixation_cross    gabor_148 gabor_064 gabor_177 gabor_038    gabor_148 gabor_064 gabor_177_alt gabor_038_alt     "2_62_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_148_064_177_038_target_position_1_2_retrieval_position_2"       gabor_circ gabor_064_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_62_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2592      fixation_cross    gabor_076 gabor_045 gabor_157 gabor_111    gabor_076_alt gabor_045 gabor_157 gabor_111_alt     "2_63_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_076_045_157_111_target_position_2_3_retrieval_position_2"       gabor_circ gabor_045_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_63_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2142  2992  2292      fixation_cross    gabor_029 gabor_057 gabor_116 gabor_005    gabor_029 gabor_057 gabor_116_alt gabor_005_alt     "2_64_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2300_gabor_patch_orientation_029_057_116_005_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_005_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_64_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_005_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  2342      fixation_cross    gabor_018 gabor_095 gabor_079 gabor_034    gabor_018 gabor_095_alt gabor_079_alt gabor_034     "2_65_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_018_095_079_034_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_169_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_65_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2192      fixation_cross    gabor_116 gabor_178 gabor_026 gabor_053    gabor_116_alt gabor_178 gabor_026_alt gabor_053     "2_66_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_116_178_026_053_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_053_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_66_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2342      fixation_cross    gabor_005 gabor_170 gabor_114 gabor_138    gabor_005 gabor_170 gabor_114_alt gabor_138_alt     "2_67_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_005_170_114_138_target_position_1_2_retrieval_position_2"       gabor_circ gabor_170_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_67_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_170 gabor_012 gabor_048 gabor_086    gabor_170 gabor_012 gabor_048_alt gabor_086_alt     "2_68_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_170_012_048_086_target_position_1_2_retrieval_position_1"       gabor_120_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_68_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  1992      fixation_cross    gabor_148 gabor_124 gabor_064 gabor_108    gabor_148_alt gabor_124 gabor_064 gabor_108_alt     "2_69_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_148_124_064_108_target_position_2_3_retrieval_position_2"       gabor_circ gabor_124_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_69_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2092  2992  2242      fixation_cross    gabor_147 gabor_080 gabor_007 gabor_058    gabor_147_alt gabor_080_alt gabor_007 gabor_058     "2_70_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2250_gabor_patch_orientation_147_080_007_058_target_position_3_4_retrieval_position_2"       gabor_circ gabor_126_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_70_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_126_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  