# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    62   292   292   399   125  1742  2992  1892      fixation_cross    gabor_179 gabor_015 gabor_123 gabor_161    gabor_179_alt gabor_015 gabor_123_alt gabor_161      "2_1_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_179_015_123_161_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_123_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2292      fixation_cross    gabor_042 gabor_108 gabor_086 gabor_059    gabor_042 gabor_108 gabor_086_alt gabor_059_alt      "2_2_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_042_108_086_059_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_132_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  2192      fixation_cross    gabor_104 gabor_155 gabor_049 gabor_132    gabor_104_alt gabor_155_alt gabor_049 gabor_132      "2_3_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_104_155_049_132_target_position_1_2_retrieval_position_2"          gabor_circ gabor_155_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2592      fixation_cross    gabor_032 gabor_093 gabor_166 gabor_149    gabor_032 gabor_093 gabor_166_alt gabor_149_alt      "2_4_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2600_gabor_patch_orientation_032_093_166_149_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_012_framed    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2192  2992  2492      fixation_cross    gabor_110 gabor_140 gabor_092 gabor_027    gabor_110 gabor_140_alt gabor_092_alt gabor_027      "2_5_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_2500_gabor_patch_orientation_110_140_092_027_target_position_2_3_retrieval_position_1"          gabor_110_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_110_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_106 gabor_161 gabor_125 gabor_051    gabor_106 gabor_161 gabor_125_alt gabor_051_alt      "2_6_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_106_161_125_051_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_077_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_080 gabor_109 gabor_064 gabor_047    gabor_080_alt gabor_109_alt gabor_064 gabor_047      "2_7_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_080_109_064_047_target_position_1_2_retrieval_position_2"          gabor_circ gabor_109_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2092  2992  2342      fixation_cross    gabor_065 gabor_144 gabor_086 gabor_003    gabor_065_alt gabor_144_alt gabor_086 gabor_003      "2_8_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_065_144_086_003_target_position_1_2_retrieval_position_1"          gabor_112_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  2292      fixation_cross    gabor_042 gabor_011 gabor_101 gabor_070    gabor_042 gabor_011_alt gabor_101 gabor_070_alt      "2_9_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_042_011_101_070_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_070_framed    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_092 gabor_145 gabor_063 gabor_127    gabor_092_alt gabor_145 gabor_063 gabor_127_alt     "2_10_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_092_145_063_127_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_176_framed    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_117 gabor_059 gabor_032 gabor_141    gabor_117 gabor_059 gabor_032_alt gabor_141_alt     "2_11_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_117_059_032_141_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_005_framed    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2192  2992  1892      fixation_cross    gabor_002 gabor_081 gabor_164 gabor_122    gabor_002_alt gabor_081 gabor_164 gabor_122_alt     "2_12_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_1900_gabor_patch_orientation_002_081_164_122_target_position_1_4_retrieval_position_2"          gabor_circ gabor_081_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_081_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  1942      fixation_cross    gabor_135 gabor_094 gabor_049 gabor_173    gabor_135_alt gabor_094 gabor_049_alt gabor_173     "2_13_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_135_094_049_173_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_004_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  2342      fixation_cross    gabor_150 gabor_167 gabor_110 gabor_087    gabor_150 gabor_167_alt gabor_110_alt gabor_087     "2_14_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_150_167_110_087_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_110_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_110_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1992  2992  2442      fixation_cross    gabor_159 gabor_008 gabor_053 gabor_093    gabor_159 gabor_008_alt gabor_053 gabor_093_alt     "2_15_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2450_gabor_patch_orientation_159_008_053_093_target_position_2_4_retrieval_position_2"          gabor_circ gabor_008_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1792  2992  2042      fixation_cross    gabor_007 gabor_170 gabor_026 gabor_138    gabor_007_alt gabor_170 gabor_026 gabor_138_alt     "2_16_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_007_170_026_138_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_093_framed    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_162 gabor_099 gabor_031 gabor_011    gabor_162 gabor_099 gabor_031_alt gabor_011_alt     "2_17_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_162_099_031_011_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_011_framed    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1892  2992  2392      fixation_cross    gabor_002 gabor_144 gabor_079 gabor_118    gabor_002 gabor_144_alt gabor_079_alt gabor_118     "2_18_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2400_gabor_patch_orientation_002_144_079_118_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_118_framed    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_118_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  1892      fixation_cross    gabor_127 gabor_013 gabor_100 gabor_174    gabor_127_alt gabor_013 gabor_100_alt gabor_174     "2_19_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_127_013_100_174_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_100_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_100_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_158 gabor_089 gabor_119 gabor_052    gabor_158 gabor_089 gabor_119_alt gabor_052_alt     "2_20_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_158_089_119_052_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_119_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1842  2992  2142      fixation_cross    gabor_167 gabor_121 gabor_103 gabor_137    gabor_167 gabor_121 gabor_103_alt gabor_137_alt     "2_21_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2150_gabor_patch_orientation_167_121_103_137_target_position_3_4_retrieval_position_1"          gabor_031_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_031_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2192  2992  1942      fixation_cross    gabor_171 gabor_035 gabor_066 gabor_146    gabor_171_alt gabor_035 gabor_066 gabor_146_alt     "2_22_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_171_035_066_146_target_position_1_4_retrieval_position_1"          gabor_123_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2442      fixation_cross    gabor_015 gabor_098 gabor_176 gabor_066    gabor_015_alt gabor_098 gabor_176_alt gabor_066     "2_23_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2450_gabor_patch_orientation_015_098_176_066_target_position_1_3_retrieval_position_1"          gabor_015_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2242  2992  2442      fixation_cross    gabor_100 gabor_116 gabor_171 gabor_142    gabor_100 gabor_116_alt gabor_171 gabor_142_alt     "2_24_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_2450_gabor_patch_orientation_100_116_171_142_target_position_2_4_retrieval_position_1"          gabor_055_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_055_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1792  2992  2542      fixation_cross    gabor_168 gabor_038 gabor_095 gabor_079    gabor_168_alt gabor_038 gabor_095 gabor_079_alt     "2_25_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_168_038_095_079_target_position_1_4_retrieval_position_1"          gabor_120_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2542      fixation_cross    gabor_180 gabor_090 gabor_026 gabor_142    gabor_180 gabor_090 gabor_026_alt gabor_142_alt     "2_26_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_180_090_026_142_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_162_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_162_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  2542      fixation_cross    gabor_003 gabor_164 gabor_074 gabor_142    gabor_003 gabor_164_alt gabor_074 gabor_142_alt     "2_27_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_003_164_074_142_target_position_2_4_retrieval_position_2"          gabor_circ gabor_164_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_061 gabor_078 gabor_167 gabor_116    gabor_061_alt gabor_078_alt gabor_167 gabor_116     "2_28_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_061_078_167_116_target_position_1_2_retrieval_position_2"          gabor_circ gabor_078_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2242  2992  2042      fixation_cross    gabor_167 gabor_061 gabor_139 gabor_032    gabor_167 gabor_061_alt gabor_139 gabor_032_alt     "2_29_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_2050_gabor_patch_orientation_167_061_139_032_target_position_2_4_retrieval_position_1"          gabor_118_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_118_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2092  2992  1992      fixation_cross    gabor_036 gabor_100 gabor_143 gabor_084    gabor_036_alt gabor_100 gabor_143_alt gabor_084     "2_30_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_036_100_143_084_target_position_1_3_retrieval_position_1"          gabor_172_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  1942      fixation_cross    gabor_161 gabor_134 gabor_050 gabor_104    gabor_161_alt gabor_134 gabor_050 gabor_104_alt     "2_31_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_161_134_050_104_target_position_1_4_retrieval_position_1"          gabor_161_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_117 gabor_102 gabor_027 gabor_152    gabor_117_alt gabor_102 gabor_027_alt gabor_152     "2_32_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_117_102_027_152_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_073_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2192      fixation_cross    gabor_056 gabor_026 gabor_113 gabor_132    gabor_056_alt gabor_026_alt gabor_113 gabor_132     "2_33_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_056_026_113_132_target_position_1_2_retrieval_position_2"          gabor_circ gabor_072_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1842  2992  2392      fixation_cross    gabor_136 gabor_054 gabor_011 gabor_170    gabor_136_alt gabor_054 gabor_011_alt gabor_170     "2_34_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2400_gabor_patch_orientation_136_054_011_170_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_170_framed    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_170_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  2192      fixation_cross    gabor_168 gabor_097 gabor_059 gabor_030    gabor_168 gabor_097_alt gabor_059_alt gabor_030     "2_35_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_168_097_059_030_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_011_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_094 gabor_079 gabor_121 gabor_063    gabor_094 gabor_079_alt gabor_121 gabor_063_alt     "2_36_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_094_079_121_063_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_063_framed    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2392      fixation_cross    gabor_001 gabor_072 gabor_140 gabor_023    gabor_001 gabor_072 gabor_140_alt gabor_023_alt     "2_37_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_001_072_140_023_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_023_framed    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1792  2992  2042      fixation_cross    gabor_134 gabor_106 gabor_085 gabor_026    gabor_134 gabor_106_alt gabor_085_alt gabor_026     "2_38_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_134_106_085_026_target_position_2_3_retrieval_position_2"          gabor_circ gabor_152_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  2492      fixation_cross    gabor_139 gabor_100 gabor_076 gabor_049    gabor_139 gabor_100 gabor_076_alt gabor_049_alt     "2_39_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_139_100_076_049_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_076_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_180 gabor_065 gabor_012 gabor_124    gabor_180 gabor_065_alt gabor_012_alt gabor_124     "2_40_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_180_065_012_124_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_012_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_166 gabor_076 gabor_118 gabor_057    gabor_166 gabor_076_alt gabor_118 gabor_057_alt     "2_41_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_166_076_118_057_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_010_framed    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1992  2992  2092      fixation_cross    gabor_165 gabor_128 gabor_106 gabor_001    gabor_165 gabor_128_alt gabor_106_alt gabor_001     "2_42_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_165_128_106_001_target_position_2_3_retrieval_position_2"          gabor_circ gabor_128_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1892  2992  1942      fixation_cross    gabor_077 gabor_047 gabor_006 gabor_130    gabor_077_alt gabor_047 gabor_006_alt gabor_130     "2_43_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_1950_gabor_patch_orientation_077_047_006_130_target_position_1_3_retrieval_position_2"          gabor_circ gabor_094_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_094_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  1892      fixation_cross    gabor_068 gabor_154 gabor_046 gabor_129    gabor_068 gabor_154_alt gabor_046 gabor_129_alt     "2_44_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_068_154_046_129_target_position_2_4_retrieval_position_2"          gabor_circ gabor_015_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1842  2992  2242      fixation_cross    gabor_007 gabor_062 gabor_121 gabor_095    gabor_007_alt gabor_062 gabor_121 gabor_095_alt     "2_45_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2250_gabor_patch_orientation_007_062_121_095_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_168_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_168_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_013 gabor_062 gabor_123 gabor_169    gabor_013_alt gabor_062_alt gabor_123 gabor_169     "2_46_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_013_062_123_169_target_position_1_2_retrieval_position_1"          gabor_152_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2192  2992  2092      fixation_cross    gabor_077 gabor_098 gabor_128 gabor_150    gabor_077 gabor_098_alt gabor_128 gabor_150_alt     "2_47_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_077_098_128_150_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_010_framed    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2492      fixation_cross    gabor_143 gabor_035 gabor_016 gabor_180    gabor_143_alt gabor_035_alt gabor_016 gabor_180     "2_48_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_143_035_016_180_target_position_1_2_retrieval_position_1"          gabor_143_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2192      fixation_cross    gabor_152 gabor_018 gabor_127 gabor_099    gabor_152 gabor_018 gabor_127_alt gabor_099_alt     "2_49_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_152_018_127_099_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_082_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2142  2992  2542      fixation_cross    gabor_050 gabor_160 gabor_121 gabor_139    gabor_050 gabor_160 gabor_121_alt gabor_139_alt     "2_50_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_2150_3000_2550_gabor_patch_orientation_050_160_121_139_target_position_3_4_retrieval_position_1"          gabor_099_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_099_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2592      fixation_cross    gabor_137 gabor_004 gabor_117 gabor_157    gabor_137_alt gabor_004 gabor_117_alt gabor_157     "2_51_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_137_004_117_157_target_position_1_3_retrieval_position_1"          gabor_091_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2292      fixation_cross    gabor_055 gabor_092 gabor_111 gabor_034    gabor_055_alt gabor_092 gabor_111_alt gabor_034     "2_52_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_055_092_111_034_target_position_1_3_retrieval_position_1"          gabor_005_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2242      fixation_cross    gabor_028 gabor_012 gabor_084 gabor_118    gabor_028 gabor_012 gabor_084_alt gabor_118_alt     "2_53_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_028_012_084_118_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_134_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_169 gabor_008 gabor_128 gabor_143    gabor_169 gabor_008 gabor_128_alt gabor_143_alt     "2_54_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_169_008_128_143_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2192  2992  2492      fixation_cross    gabor_012 gabor_117 gabor_056 gabor_141    gabor_012_alt gabor_117 gabor_056 gabor_141_alt     "2_55_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_2500_gabor_patch_orientation_012_117_056_141_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_056_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_056_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2242  2992  2242      fixation_cross    gabor_168 gabor_085 gabor_028 gabor_100    gabor_168_alt gabor_085 gabor_028 gabor_100_alt     "2_56_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_168_085_028_100_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_054_framed    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2292      fixation_cross    gabor_071 gabor_012 gabor_044 gabor_129    gabor_071 gabor_012 gabor_044_alt gabor_129_alt     "2_57_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_071_012_044_129_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_177_framed    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_091 gabor_157 gabor_009 gabor_119    gabor_091_alt gabor_157 gabor_009_alt gabor_119     "2_58_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_091_157_009_119_target_position_1_3_retrieval_position_1"          gabor_091_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  2592      fixation_cross    gabor_078 gabor_144 gabor_114 gabor_004    gabor_078 gabor_144_alt gabor_114 gabor_004_alt     "2_59_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2600_gabor_patch_orientation_078_144_114_004_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_004_framed    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1992  2992  2392      fixation_cross    gabor_166 gabor_123 gabor_098 gabor_035    gabor_166_alt gabor_123 gabor_098_alt gabor_035     "2_60_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_166_123_098_035_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_098_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  2342      fixation_cross    gabor_001 gabor_070 gabor_141 gabor_090    gabor_001_alt gabor_070_alt gabor_141 gabor_090     "2_61_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_001_070_141_090_target_position_1_2_retrieval_position_2"          gabor_circ gabor_070_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1892  2992  2292      fixation_cross    gabor_020 gabor_089 gabor_153 gabor_065    gabor_020_alt gabor_089 gabor_153 gabor_065_alt     "2_62_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2300_gabor_patch_orientation_020_089_153_065_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_153_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_153_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  2142      fixation_cross    gabor_066 gabor_152 gabor_036 gabor_104    gabor_066 gabor_152_alt gabor_036_alt gabor_104     "2_63_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_066_152_036_104_target_position_2_3_retrieval_position_2"          gabor_circ gabor_152_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  2242      fixation_cross    gabor_097 gabor_065 gabor_122 gabor_174    gabor_097 gabor_065_alt gabor_122 gabor_174_alt     "2_64_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_097_065_122_174_target_position_2_4_retrieval_position_2"          gabor_circ gabor_065_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2342      fixation_cross    gabor_071 gabor_006 gabor_045 gabor_116    gabor_071_alt gabor_006 gabor_045_alt gabor_116     "2_65_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_071_006_045_116_target_position_1_3_retrieval_position_1"          gabor_071_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1992  2992  2042      fixation_cross    gabor_006 gabor_087 gabor_149 gabor_172    gabor_006_alt gabor_087_alt gabor_149 gabor_172     "2_66_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_300_300_399_2000_3000_2050_gabor_patch_orientation_006_087_149_172_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_034_framed    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_034_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2342      fixation_cross    gabor_078 gabor_037 gabor_093 gabor_126    gabor_078 gabor_037_alt gabor_093_alt gabor_126     "2_67_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_078_037_093_126_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_143_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_111 gabor_177 gabor_150 gabor_039    gabor_111 gabor_177_alt gabor_150 gabor_039_alt     "2_68_Encoding_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_111_177_150_039_target_position_2_4_retrieval_position_2"          gabor_circ gabor_129_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P3_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  2242      fixation_cross    gabor_072 gabor_098 gabor_149 gabor_044    gabor_072 gabor_098 gabor_149_alt gabor_044_alt     "2_69_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_072_098_149_044_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_044_framed    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1792  2992  2142      fixation_cross    gabor_111 gabor_052 gabor_133 gabor_078    gabor_111_alt gabor_052 gabor_133 gabor_078_alt     "2_70_Encoding_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_300_300_399_1800_3000_2150_gabor_patch_orientation_111_052_133_078_target_position_1_4_retrieval_position_2"          gabor_circ gabor_052_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P3_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_052_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 