# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    62   292   292   399   125  1792  2992  2192      fixation_cross    gabor_084 gabor_002 gabor_035 gabor_058    gabor_084_alt gabor_002_alt gabor_035 gabor_058      "1_1_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_084_002_035_058_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_035_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_1_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_090 gabor_075 gabor_107 gabor_147    gabor_090 gabor_075_alt gabor_107 gabor_147_alt      "1_2_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_090_075_107_147_target_position_1_3_retrieval_position_1"       gabor_090_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_2_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2392      fixation_cross    gabor_072 gabor_046 gabor_179 gabor_117    gabor_072_alt gabor_046_alt gabor_179 gabor_117      "1_3_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_072_046_179_117_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_3_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  1892      fixation_cross    gabor_119 gabor_055 gabor_137 gabor_161    gabor_119_alt gabor_055 gabor_137_alt gabor_161      "1_4_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_1900_gabor_patch_orientation_119_055_137_161_target_position_2_4_retrieval_position_2"       gabor_circ gabor_005_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "1_4_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2292      fixation_cross    gabor_114 gabor_075 gabor_048 gabor_092    gabor_114_alt gabor_075 gabor_048 gabor_092_alt      "1_5_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_114_075_048_092_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_003_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_5_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2442      fixation_cross    gabor_172 gabor_050 gabor_067 gabor_017    gabor_172 gabor_050_alt gabor_067_alt gabor_017      "1_6_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_172_050_067_017_target_position_1_4_retrieval_position_1"       gabor_125_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "1_6_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2392      fixation_cross    gabor_054 gabor_069 gabor_132 gabor_174    gabor_054 gabor_069_alt gabor_132 gabor_174_alt      "1_7_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_054_069_132_174_target_position_1_3_retrieval_position_1"       gabor_054_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_7_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1742  2992  2542      fixation_cross    gabor_075 gabor_106 gabor_164 gabor_042    gabor_075_alt gabor_106 gabor_164 gabor_042_alt      "1_8_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2550_gabor_patch_orientation_075_106_164_042_target_position_2_3_retrieval_position_1"       gabor_075_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_8_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_075_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2242      fixation_cross    gabor_127 gabor_014 gabor_088 gabor_151    gabor_127 gabor_014_alt gabor_088 gabor_151_alt      "1_9_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_127_014_088_151_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_088_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_9_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_126 gabor_038 gabor_058 gabor_102    gabor_126 gabor_038_alt gabor_058 gabor_102_alt     "1_10_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_126_038_058_102_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_013_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_10_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_013_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2492      fixation_cross    gabor_166 gabor_036 gabor_080 gabor_061    gabor_166 gabor_036_alt gabor_080_alt gabor_061     "1_11_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_166_036_080_061_target_position_1_4_retrieval_position_1"       gabor_118_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_11_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2542      fixation_cross    gabor_123 gabor_104 gabor_172 gabor_083    gabor_123_alt gabor_104 gabor_172_alt gabor_083     "1_12_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_123_104_172_083_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_083_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_12_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2092  2992  1992      fixation_cross    gabor_134 gabor_167 gabor_019 gabor_003    gabor_134_alt gabor_167_alt gabor_019 gabor_003     "1_13_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2000_gabor_patch_orientation_134_167_019_003_target_position_3_4_retrieval_position_1"       gabor_134_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_13_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_134_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  1892      fixation_cross    gabor_108 gabor_129 gabor_051 gabor_022    gabor_108 gabor_129_alt gabor_051_alt gabor_022     "1_14_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_108_129_051_022_target_position_1_4_retrieval_position_1"       gabor_108_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_14_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_108_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1842  2992  2442      fixation_cross    gabor_023 gabor_091 gabor_174 gabor_111    gabor_023_alt gabor_091 gabor_174 gabor_111_alt     "1_15_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_2450_gabor_patch_orientation_023_091_174_111_target_position_2_3_retrieval_position_1"       gabor_023_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_15_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_023_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2392      fixation_cross    gabor_113 gabor_083 gabor_058 gabor_169    gabor_113_alt gabor_083 gabor_058_alt gabor_169     "1_16_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_113_083_058_169_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_029_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_16_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2492      fixation_cross    gabor_013 gabor_045 gabor_172 gabor_120    gabor_013_alt gabor_045 gabor_172 gabor_120_alt     "1_17_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_013_045_172_120_target_position_2_3_retrieval_position_2"       gabor_circ gabor_045_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_17_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_029 gabor_142 gabor_168 gabor_056    gabor_029 gabor_142_alt gabor_168 gabor_056_alt     "1_18_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_029_142_168_056_target_position_1_3_retrieval_position_1"       gabor_078_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_18_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2242  2992  2092      fixation_cross    gabor_136 gabor_081 gabor_062 gabor_119    gabor_136_alt gabor_081_alt gabor_062 gabor_119     "1_19_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2100_gabor_patch_orientation_136_081_062_119_target_position_3_4_retrieval_position_1"       gabor_001_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_19_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_001_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  2142      fixation_cross    gabor_119 gabor_136 gabor_088 gabor_030    gabor_119_alt gabor_136 gabor_088_alt gabor_030     "1_20_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_119_136_088_030_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_167_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_20_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  1992      fixation_cross    gabor_085 gabor_054 gabor_159 gabor_015    gabor_085_alt gabor_054 gabor_159_alt gabor_015     "1_21_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_085_054_159_015_target_position_2_4_retrieval_position_2"       gabor_circ gabor_104_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_21_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2492      fixation_cross    gabor_102 gabor_179 gabor_018 gabor_136    gabor_102 gabor_179_alt gabor_018 gabor_136_alt     "1_22_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_102_179_018_136_target_position_1_3_retrieval_position_1"       gabor_054_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_22_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_088 gabor_033 gabor_013 gabor_152    gabor_088_alt gabor_033 gabor_013 gabor_152_alt     "1_23_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_088_033_013_152_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_013_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_23_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_013_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1942  2992  1992      fixation_cross    gabor_064 gabor_169 gabor_101 gabor_154    gabor_064 gabor_169 gabor_101_alt gabor_154_alt     "1_24_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_064_169_101_154_target_position_1_2_retrieval_position_2"       gabor_circ gabor_169_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_24_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2192      fixation_cross    gabor_119 gabor_029 gabor_009 gabor_063    gabor_119 gabor_029_alt gabor_009_alt gabor_063     "1_25_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_119_029_009_063_target_position_1_4_retrieval_position_1"       gabor_169_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_25_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1792  2992  2042      fixation_cross    gabor_095 gabor_011 gabor_034 gabor_057    gabor_095_alt gabor_011_alt gabor_034 gabor_057     "1_26_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2050_gabor_patch_orientation_095_011_034_057_target_position_3_4_retrieval_position_1"       gabor_140_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_26_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_140_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  2092      fixation_cross    gabor_177 gabor_087 gabor_103 gabor_146    gabor_177_alt gabor_087 gabor_103 gabor_146_alt     "1_27_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_177_087_103_146_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_103_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_27_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2492      fixation_cross    gabor_130 gabor_099 gabor_155 gabor_019    gabor_130 gabor_099 gabor_155_alt gabor_019_alt     "1_28_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_130_099_155_019_target_position_1_2_retrieval_position_1"       gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_28_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_177 gabor_008 gabor_067 gabor_042    gabor_177 gabor_008_alt gabor_067 gabor_042_alt     "1_29_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_177_008_067_042_target_position_1_3_retrieval_position_1"       gabor_129_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_29_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_021 gabor_109 gabor_146 gabor_004    gabor_021 gabor_109 gabor_146_alt gabor_004_alt     "1_30_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_021_109_146_004_target_position_1_2_retrieval_position_1"       gabor_021_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_30_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_021_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2242      fixation_cross    gabor_023 gabor_062 gabor_170 gabor_134    gabor_023_alt gabor_062_alt gabor_170 gabor_134     "1_31_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_023_062_170_134_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_134_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_31_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2192  2992  1942      fixation_cross    gabor_151 gabor_178 gabor_071 gabor_022    gabor_151_alt gabor_178_alt gabor_071 gabor_022     "1_32_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_1950_gabor_patch_orientation_151_178_071_022_target_position_3_4_retrieval_position_1"       gabor_151_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_32_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_151_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2042      fixation_cross    gabor_019 gabor_061 gabor_170 gabor_040    gabor_019 gabor_061_alt gabor_170_alt gabor_040     "1_33_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_019_061_170_040_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_040_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_33_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1992  2992  2142      fixation_cross    gabor_099 gabor_123 gabor_009 gabor_066    gabor_099_alt gabor_123 gabor_009_alt gabor_066     "1_34_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2000_3000_2150_gabor_patch_orientation_099_123_009_066_target_position_2_4_retrieval_position_1"       gabor_145_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_34_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_145_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2242      fixation_cross    gabor_008 gabor_044 gabor_164 gabor_029    gabor_008 gabor_044 gabor_164_alt gabor_029_alt     "1_35_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_008_044_164_029_target_position_1_2_retrieval_position_2"       gabor_circ gabor_044_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_35_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2442      fixation_cross    gabor_143 gabor_076 gabor_034 gabor_058    gabor_143_alt gabor_076 gabor_034_alt gabor_058     "1_36_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2450_gabor_patch_orientation_143_076_034_058_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_009_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_36_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2342      fixation_cross    gabor_028 gabor_112 gabor_052 gabor_080    gabor_028_alt gabor_112_alt gabor_052 gabor_080     "1_37_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_028_112_052_080_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_052_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_37_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_085 gabor_123 gabor_159 gabor_144    gabor_085 gabor_123_alt gabor_159 gabor_144_alt     "1_38_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_085_123_159_144_target_position_1_3_retrieval_position_1"       gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_38_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1942  2992  1942      fixation_cross    gabor_107 gabor_141 gabor_056 gabor_028    gabor_107 gabor_141 gabor_056_alt gabor_028_alt     "1_39_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_107_141_056_028_target_position_1_2_retrieval_position_2"       gabor_circ gabor_141_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_39_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  1992      fixation_cross    gabor_040 gabor_062 gabor_176 gabor_106    gabor_040_alt gabor_062 gabor_176 gabor_106_alt     "1_40_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_040_062_176_106_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_127_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_40_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1892  2992  2592      fixation_cross    gabor_134 gabor_102 gabor_171 gabor_085    gabor_134 gabor_102_alt gabor_171_alt gabor_085     "1_41_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1900_3000_2600_gabor_patch_orientation_134_102_171_085_target_position_1_4_retrieval_position_2"       gabor_circ gabor_152_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_41_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_152_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  2592      fixation_cross    gabor_170 gabor_097 gabor_057 gabor_139    gabor_170 gabor_097_alt gabor_057 gabor_139_alt     "1_42_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_170_097_057_139_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_012_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_42_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_099 gabor_070 gabor_133 gabor_148    gabor_099_alt gabor_070 gabor_133_alt gabor_148     "1_43_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_099_070_133_148_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_148_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_43_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2242      fixation_cross    gabor_037 gabor_067 gabor_144 gabor_123    gabor_037 gabor_067 gabor_144_alt gabor_123_alt     "1_44_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_037_067_144_123_target_position_1_2_retrieval_position_2"       gabor_circ gabor_017_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_44_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2292      fixation_cross    gabor_118 gabor_102 gabor_148 gabor_180    gabor_118 gabor_102_alt gabor_148 gabor_180_alt     "1_45_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_118_102_148_180_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_148_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_45_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2142  2992  2092      fixation_cross    gabor_173 gabor_029 gabor_155 gabor_090    gabor_173 gabor_029 gabor_155_alt gabor_090_alt     "1_46_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_2100_gabor_patch_orientation_173_029_155_090_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_138_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_46_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_138_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  2442      fixation_cross    gabor_102 gabor_030 gabor_141 gabor_170    gabor_102_alt gabor_030 gabor_141_alt gabor_170     "1_47_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2450_gabor_patch_orientation_102_030_141_170_target_position_2_4_retrieval_position_2"       gabor_circ gabor_080_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_47_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2542      fixation_cross    gabor_161 gabor_114 gabor_075 gabor_136    gabor_161 gabor_114_alt gabor_075_alt gabor_136     "1_48_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_161_114_075_136_target_position_1_4_retrieval_position_1"       gabor_025_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_48_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_092 gabor_140 gabor_058 gabor_121    gabor_092 gabor_140 gabor_058_alt gabor_121_alt     "1_49_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_092_140_058_121_target_position_1_2_retrieval_position_2"       gabor_circ gabor_140_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_49_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  1892      fixation_cross    gabor_002 gabor_156 gabor_032 gabor_069    gabor_002_alt gabor_156_alt gabor_032 gabor_069     "1_50_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_002_156_032_069_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_117_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_50_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2292      fixation_cross    gabor_171 gabor_014 gabor_089 gabor_033    gabor_171 gabor_014 gabor_089_alt gabor_033_alt     "1_51_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_171_014_089_033_target_position_1_2_retrieval_position_2"       gabor_circ gabor_063_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_51_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2142      fixation_cross    gabor_106 gabor_091 gabor_065 gabor_152    gabor_106_alt gabor_091 gabor_065_alt gabor_152     "1_52_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_106_091_065_152_target_position_2_4_retrieval_position_2"       gabor_circ gabor_091_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_52_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2092  2992  1892      fixation_cross    gabor_058 gabor_023 gabor_110 gabor_004    gabor_058_alt gabor_023 gabor_110 gabor_004_alt     "1_53_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_1900_gabor_patch_orientation_058_023_110_004_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_004_framed    blank blank blank blank    fixation_cross_target_position_2_3    "1_53_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_004_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2192      fixation_cross    gabor_006 gabor_142 gabor_160 gabor_078    gabor_006 gabor_142_alt gabor_160 gabor_078_alt     "1_54_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_006_142_160_078_target_position_1_3_retrieval_position_1"       gabor_054_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_54_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2092  2992  2342      fixation_cross    gabor_009 gabor_117 gabor_027 gabor_087    gabor_009 gabor_117 gabor_027_alt gabor_087_alt     "1_55_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2350_gabor_patch_orientation_009_117_027_087_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_027_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_55_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_027_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_043 gabor_078 gabor_103 gabor_020    gabor_043_alt gabor_078 gabor_103_alt gabor_020     "1_56_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_043_078_103_020_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_159_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_56_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2392      fixation_cross    gabor_092 gabor_074 gabor_002 gabor_049    gabor_092_alt gabor_074 gabor_002_alt gabor_049     "1_57_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_092_074_002_049_target_position_2_4_retrieval_position_2"       gabor_circ gabor_123_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_57_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2592      fixation_cross    gabor_169 gabor_014 gabor_125 gabor_053    gabor_169_alt gabor_014 gabor_125_alt gabor_053     "1_58_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2600_gabor_patch_orientation_169_014_125_053_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_053_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_58_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_145 gabor_164 gabor_011 gabor_057    gabor_145_alt gabor_164 gabor_011 gabor_057_alt     "1_59_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_145_164_011_057_target_position_2_3_retrieval_position_2"       gabor_circ gabor_164_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_59_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  1942      fixation_cross    gabor_053 gabor_143 gabor_111 gabor_022    gabor_053_alt gabor_143_alt gabor_111 gabor_022     "1_60_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_053_143_111_022_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_022_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_60_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2542      fixation_cross    gabor_137 gabor_003 gabor_020 gabor_176    gabor_137 gabor_003_alt gabor_020 gabor_176_alt     "1_61_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_137_003_020_176_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_020_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_61_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2092  2992  2192      fixation_cross    gabor_027 gabor_061 gabor_137 gabor_004    gabor_027_alt gabor_061_alt gabor_137 gabor_004     "1_62_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2200_gabor_patch_orientation_027_061_137_004_target_position_3_4_retrieval_position_1"       gabor_077_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_62_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_077_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_088 gabor_034 gabor_018 gabor_103    gabor_088 gabor_034_alt gabor_018_alt gabor_103     "1_63_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_088_034_018_103_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_103_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_63_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1892  2992  1892      fixation_cross    gabor_160 gabor_091 gabor_137 gabor_009    gabor_160_alt gabor_091_alt gabor_137 gabor_009     "1_64_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_1900_gabor_patch_orientation_160_091_137_009_target_position_3_4_retrieval_position_1"       gabor_160_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_64_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_160_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  1942      fixation_cross    gabor_152 gabor_005 gabor_069 gabor_036    gabor_152_alt gabor_005_alt gabor_069 gabor_036     "1_65_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_152_005_069_036_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_114_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_65_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_171 gabor_155 gabor_046 gabor_009    gabor_171 gabor_155_alt gabor_046_alt gabor_009     "1_66_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_171_155_046_009_target_position_1_4_retrieval_position_1"       gabor_124_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_66_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_108 gabor_019 gabor_037 gabor_069    gabor_108 gabor_019 gabor_037_alt gabor_069_alt     "1_67_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_108_019_037_069_target_position_1_2_retrieval_position_1"       gabor_108_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_67_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_108_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_019 gabor_065 gabor_002 gabor_179    gabor_019 gabor_065_alt gabor_002 gabor_179_alt     "1_68_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_019_065_002_179_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_002_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_68_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_020 gabor_132 gabor_001 gabor_166    gabor_020 gabor_132_alt gabor_001 gabor_166_alt     "1_69_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_020_132_001_166_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_049_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_69_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1992  2992  2042      fixation_cross    gabor_138 gabor_026 gabor_007 gabor_050    gabor_138 gabor_026_alt gabor_007 gabor_050_alt     "1_70_Encoding_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2000_3000_2050_gabor_patch_orientation_138_026_007_050_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_097_framed    blank blank blank blank    fixation_cross_target_position_1_3    "1_70_Retrieval_Working_Memory_MEG_P2_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_097_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  