# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    62   292   292   399   125  1842  2992  2592      fixation_cross    gabor_081 gabor_104 gabor_019 gabor_170    gabor_081_alt gabor_104 gabor_019_alt gabor_170      "2_1_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_081_104_019_170_target_position_1_3_retrieval_position_1"          gabor_081_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_1_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_052 gabor_001 gabor_071 gabor_114    gabor_052_alt gabor_001 gabor_071_alt gabor_114      "2_2_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_052_001_071_114_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_024_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_2_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2342      fixation_cross    gabor_121 gabor_063 gabor_101 gabor_040    gabor_121 gabor_063_alt gabor_101 gabor_040_alt      "2_3_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_121_063_101_040_target_position_2_4_retrieval_position_2"          gabor_circ gabor_015_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_3_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_093 gabor_162 gabor_140 gabor_072    gabor_093 gabor_162_alt gabor_140 gabor_072_alt      "2_4_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_093_162_140_072_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_121_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_4_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_121_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2042      fixation_cross    gabor_085 gabor_100 gabor_022 gabor_041    gabor_085_alt gabor_100_alt gabor_022 gabor_041      "2_5_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_085_100_022_041_target_position_1_2_retrieval_position_2"          gabor_circ gabor_149_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_5_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_043 gabor_121 gabor_010 gabor_157    gabor_043_alt gabor_121 gabor_010 gabor_157_alt      "2_6_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_043_121_010_157_target_position_1_4_retrieval_position_1"          gabor_043_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_6_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2542      fixation_cross    gabor_119 gabor_094 gabor_051 gabor_168    gabor_119 gabor_094 gabor_051_alt gabor_168_alt      "2_7_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_119_094_051_168_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_030_framed    blank blank blank blank    fixation_cross_target_position_3_4     "2_7_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1942  2992  2042      fixation_cross    gabor_122 gabor_006 gabor_081 gabor_062    gabor_122 gabor_006 gabor_081_alt gabor_062_alt      "2_8_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2050_gabor_patch_orientation_122_006_081_062_target_position_3_4_retrieval_position_2"          gabor_circ gabor_006_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_8_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_006_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_023 gabor_112 gabor_140 gabor_006    gabor_023_alt gabor_112 gabor_140 gabor_006_alt      "2_9_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_023_112_140_006_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_006_framed    blank blank blank blank    fixation_cross_target_position_1_4     "2_9_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_093 gabor_010 gabor_032 gabor_138    gabor_093_alt gabor_010 gabor_032 gabor_138_alt     "2_10_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_093_010_032_138_target_position_1_4_retrieval_position_1"          gabor_048_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_10_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  2492      fixation_cross    gabor_046 gabor_100 gabor_167 gabor_084    gabor_046 gabor_100 gabor_167_alt gabor_084_alt     "2_11_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_046_100_167_084_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_134_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_11_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  2042  2992  2442      fixation_cross    gabor_064 gabor_021 gabor_111 gabor_140    gabor_064 gabor_021_alt gabor_111_alt gabor_140     "2_12_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_2050_3000_2450_gabor_patch_orientation_064_021_111_140_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_091_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_12_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_091_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2092      fixation_cross    gabor_104 gabor_177 gabor_022 gabor_087    gabor_104_alt gabor_177 gabor_022_alt gabor_087     "2_13_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_104_177_022_087_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_022_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_13_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2042  2992  1992      fixation_cross    gabor_010 gabor_119 gabor_174 gabor_056    gabor_010_alt gabor_119 gabor_174_alt gabor_056     "2_14_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_010_119_174_056_target_position_1_3_retrieval_position_1"          gabor_146_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_14_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_088 gabor_019 gabor_109 gabor_131    gabor_088 gabor_019_alt gabor_109 gabor_131_alt     "2_15_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_088_019_109_131_target_position_2_4_retrieval_position_2"          gabor_circ gabor_019_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_15_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_019_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  2092  2992  2542      fixation_cross    gabor_080 gabor_096 gabor_163 gabor_035    gabor_080_alt gabor_096_alt gabor_163 gabor_035     "2_16_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2550_gabor_patch_orientation_080_096_163_035_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_115_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_16_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_115_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2542      fixation_cross    gabor_168 gabor_062 gabor_085 gabor_022    gabor_168_alt gabor_062_alt gabor_085 gabor_022     "2_17_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_168_062_085_022_target_position_1_2_retrieval_position_2"          gabor_circ gabor_062_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_17_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_062_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  1892      fixation_cross    gabor_085 gabor_171 gabor_121 gabor_064    gabor_085_alt gabor_171_alt gabor_121 gabor_064     "2_18_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_085_171_121_064_target_position_1_2_retrieval_position_1"          gabor_038_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_18_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1992  2992  2442      fixation_cross    gabor_006 gabor_166 gabor_080 gabor_055    gabor_006_alt gabor_166 gabor_080 gabor_055_alt     "2_19_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_2000_3000_2450_gabor_patch_orientation_006_166_080_055_target_position_1_4_retrieval_position_2"          gabor_circ gabor_031_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_19_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_031_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  2042      fixation_cross    gabor_163 gabor_047 gabor_023 gabor_088    gabor_163_alt gabor_047 gabor_023_alt gabor_088     "2_20_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_163_047_023_088_target_position_1_3_retrieval_position_1"          gabor_113_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_20_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_003 gabor_140 gabor_171 gabor_110    gabor_003 gabor_140_alt gabor_171 gabor_110_alt     "2_21_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_003_140_171_110_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_110_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_21_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_110_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  2492      fixation_cross    gabor_140 gabor_002 gabor_109 gabor_170    gabor_140_alt gabor_002 gabor_109 gabor_170_alt     "2_22_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_140_002_109_170_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_031_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_22_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_091 gabor_137 gabor_162 gabor_118    gabor_091 gabor_137_alt gabor_162 gabor_118_alt     "2_23_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_091_137_162_118_target_position_2_4_retrieval_position_2"          gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_23_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2092      fixation_cross    gabor_044 gabor_062 gabor_173 gabor_022    gabor_044_alt gabor_062_alt gabor_173 gabor_022     "2_24_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_044_062_173_022_target_position_1_2_retrieval_position_1"          gabor_093_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_24_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  2342      fixation_cross    gabor_138 gabor_098 gabor_158 gabor_078    gabor_138 gabor_098_alt gabor_158 gabor_078_alt     "2_25_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_138_098_158_078_target_position_2_4_retrieval_position_2"          gabor_circ gabor_098_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_25_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  2192      fixation_cross    gabor_087 gabor_072 gabor_177 gabor_159    gabor_087 gabor_072_alt gabor_177_alt gabor_159     "2_26_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_087_072_177_159_target_position_2_3_retrieval_position_2"          gabor_circ gabor_121_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_26_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_121_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  1942      fixation_cross    gabor_109 gabor_050 gabor_091 gabor_024    gabor_109 gabor_050_alt gabor_091 gabor_024_alt     "2_27_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_109_050_091_024_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_024_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_27_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1742  2992  1992      fixation_cross    gabor_137 gabor_029 gabor_097 gabor_160    gabor_137_alt gabor_029_alt gabor_097 gabor_160     "2_28_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2000_gabor_patch_orientation_137_029_097_160_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_113_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_28_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_113_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  2042      fixation_cross    gabor_070 gabor_112 gabor_140 gabor_050    gabor_070 gabor_112_alt gabor_140 gabor_050_alt     "2_29_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_070_112_140_050_target_position_2_4_retrieval_position_2"          gabor_circ gabor_112_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_29_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1942  2992  2392      fixation_cross    gabor_116 gabor_174 gabor_148 gabor_041    gabor_116_alt gabor_174 gabor_148_alt gabor_041     "2_30_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_116_174_148_041_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_148_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_30_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_049 gabor_163 gabor_105 gabor_087    gabor_049_alt gabor_163 gabor_105 gabor_087_alt     "2_31_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_049_163_105_087_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_133_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_31_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_133_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2392      fixation_cross    gabor_060 gabor_170 gabor_094 gabor_124    gabor_060 gabor_170_alt gabor_094_alt gabor_124     "2_32_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_060_170_094_124_target_position_2_3_retrieval_position_2"          gabor_circ gabor_034_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_32_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  2142  2992  2592      fixation_cross    gabor_164 gabor_132 gabor_089 gabor_058    gabor_164 gabor_132_alt gabor_089_alt gabor_058     "2_33_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_2150_3000_2600_gabor_patch_orientation_164_132_089_058_target_position_2_3_retrieval_position_1"          gabor_024_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_33_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_024_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2192  2992  1992      fixation_cross    gabor_011 gabor_179 gabor_036 gabor_061    gabor_011_alt gabor_179 gabor_036_alt gabor_061     "2_34_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_011_179_036_061_target_position_1_3_retrieval_position_1"          gabor_011_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_34_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1992  2992  2192      fixation_cross    gabor_106 gabor_126 gabor_179 gabor_019    gabor_106_alt gabor_126_alt gabor_179 gabor_019     "2_35_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2200_gabor_patch_orientation_106_126_179_019_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_019_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_35_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_019_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2542      fixation_cross    gabor_058 gabor_179 gabor_022 gabor_041    gabor_058 gabor_179_alt gabor_022 gabor_041_alt     "2_36_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_058_179_022_041_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_041_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_36_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_169 gabor_105 gabor_146 gabor_126    gabor_169_alt gabor_105 gabor_146 gabor_126_alt     "2_37_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_169_105_146_126_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_126_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_37_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  2142      fixation_cross    gabor_001 gabor_039 gabor_155 gabor_086    gabor_001 gabor_039_alt gabor_155_alt gabor_086     "2_38_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_001_039_155_086_target_position_2_3_retrieval_position_2"          gabor_circ gabor_039_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_38_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1892  2992  2292      fixation_cross    gabor_179 gabor_018 gabor_055 gabor_145    gabor_179 gabor_018 gabor_055_alt gabor_145_alt     "2_39_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2300_gabor_patch_orientation_179_018_055_145_target_position_3_4_retrieval_position_1"          gabor_039_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_39_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_039_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  1892      fixation_cross    gabor_094 gabor_061 gabor_077 gabor_151    gabor_094_alt gabor_061 gabor_077_alt gabor_151     "2_40_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_094_061_077_151_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_077_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_40_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  2092      fixation_cross    gabor_097 gabor_038 gabor_017 gabor_070    gabor_097_alt gabor_038 gabor_017_alt gabor_070     "2_41_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_097_038_017_070_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_153_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_41_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_153_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  2442      fixation_cross    gabor_026 gabor_137 gabor_094 gabor_050    gabor_026_alt gabor_137 gabor_094_alt gabor_050     "2_42_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_026_137_094_050_target_position_1_3_retrieval_position_1"          gabor_026_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_42_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  1892      fixation_cross    gabor_156 gabor_024 gabor_113 gabor_050    gabor_156_alt gabor_024_alt gabor_113 gabor_050     "2_43_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_156_024_113_050_target_position_1_2_retrieval_position_2"          gabor_circ gabor_024_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_43_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  2392      fixation_cross    gabor_046 gabor_157 gabor_078 gabor_098    gabor_046_alt gabor_157 gabor_078_alt gabor_098     "2_44_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_046_157_078_098_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_078_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_44_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1942  2992  2592      fixation_cross    gabor_061 gabor_178 gabor_006 gabor_032    gabor_061 gabor_178_alt gabor_006_alt gabor_032     "2_45_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_061_178_006_032_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_006_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_45_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1942  2992  2342      fixation_cross    gabor_107 gabor_022 gabor_174 gabor_047    gabor_107_alt gabor_022 gabor_174 gabor_047_alt     "2_46_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2350_gabor_patch_orientation_107_022_174_047_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_46_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_128_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2492      fixation_cross    gabor_174 gabor_056 gabor_144 gabor_120    gabor_174 gabor_056_alt gabor_144 gabor_120_alt     "2_47_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_174_056_144_120_target_position_2_4_retrieval_position_2"          gabor_circ gabor_056_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_47_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2192  2992  2192      fixation_cross    gabor_070 gabor_004 gabor_027 gabor_156    gabor_070 gabor_004_alt gabor_027 gabor_156_alt     "2_48_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_070_004_027_156_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_156_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_48_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  2142      fixation_cross    gabor_132 gabor_098 gabor_015 gabor_058    gabor_132_alt gabor_098_alt gabor_015 gabor_058     "2_49_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_132_098_015_058_target_position_1_2_retrieval_position_2"          gabor_circ gabor_148_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_49_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1942  2992  1892      fixation_cross    gabor_029 gabor_044 gabor_101 gabor_161    gabor_029_alt gabor_044 gabor_101_alt gabor_161     "2_50_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_1900_gabor_patch_orientation_029_044_101_161_target_position_1_3_retrieval_position_2"          gabor_circ gabor_044_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_50_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_044_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_050 gabor_175 gabor_138 gabor_113    gabor_050_alt gabor_175 gabor_138 gabor_113_alt     "2_51_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_050_175_138_113_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_113_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_51_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  1892      fixation_cross    gabor_121 gabor_016 gabor_176 gabor_065    gabor_121 gabor_016_alt gabor_176_alt gabor_065     "2_52_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_121_016_176_065_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_038_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_52_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  2392      fixation_cross    gabor_090 gabor_139 gabor_179 gabor_028    gabor_090 gabor_139_alt gabor_179 gabor_028_alt     "2_53_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_090_139_179_028_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_073_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_53_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1842  2992  2242      fixation_cross    gabor_175 gabor_023 gabor_129 gabor_113    gabor_175 gabor_023_alt gabor_129 gabor_113_alt     "2_54_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2250_gabor_patch_orientation_175_023_129_113_target_position_2_4_retrieval_position_1"          gabor_175_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_54_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_175_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_094 gabor_072 gabor_047 gabor_012    gabor_094 gabor_072_alt gabor_047 gabor_012_alt     "2_55_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_094_072_047_012_target_position_2_4_retrieval_position_2"          gabor_circ gabor_072_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_55_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2192  2992  2142      fixation_cross    gabor_170 gabor_093 gabor_030 gabor_135    gabor_170_alt gabor_093_alt gabor_030 gabor_135     "2_56_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_170_093_030_135_target_position_1_2_retrieval_position_2"          gabor_circ gabor_093_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_56_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  2242      fixation_cross    gabor_134 gabor_045 gabor_099 gabor_024    gabor_134_alt gabor_045 gabor_099 gabor_024_alt     "2_57_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_134_045_099_024_target_position_1_4_retrieval_position_1"          gabor_134_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_57_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  2342      fixation_cross    gabor_080 gabor_009 gabor_054 gabor_124    gabor_080 gabor_009_alt gabor_054 gabor_124_alt     "2_58_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_080_009_054_124_target_position_2_4_retrieval_position_2"          gabor_circ gabor_144_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_58_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_168 gabor_146 gabor_038 gabor_001    gabor_168 gabor_146_alt gabor_038_alt gabor_001     "2_59_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_168_146_038_001_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_083_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_59_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  2092      fixation_cross    gabor_053 gabor_143 gabor_162 gabor_034    gabor_053_alt gabor_143_alt gabor_162 gabor_034     "2_60_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_053_143_162_034_target_position_1_2_retrieval_position_2"          gabor_circ gabor_004_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_60_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2592      fixation_cross    gabor_006 gabor_082 gabor_038 gabor_160    gabor_006_alt gabor_082_alt gabor_038 gabor_160     "2_61_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_006_082_038_160_target_position_1_2_retrieval_position_1"          gabor_006_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_61_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2242  2992  1942      fixation_cross    gabor_059 gabor_146 gabor_101 gabor_130    gabor_059 gabor_146 gabor_101_alt gabor_130_alt     "2_62_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_1950_gabor_patch_orientation_059_146_101_130_target_position_3_4_retrieval_position_1"          gabor_059_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_62_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_059_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_009 gabor_061 gabor_115 gabor_174    gabor_009_alt gabor_061_alt gabor_115 gabor_174     "2_63_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_009_061_115_174_target_position_1_2_retrieval_position_1"          gabor_144_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_63_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  2042      fixation_cross    gabor_048 gabor_090 gabor_115 gabor_157    gabor_048_alt gabor_090_alt gabor_115 gabor_157     "2_64_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_048_090_115_157_target_position_1_2_retrieval_position_1"          gabor_003_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_64_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  2142      fixation_cross    gabor_028 gabor_076 gabor_013 gabor_099    gabor_028_alt gabor_076_alt gabor_013 gabor_099     "2_65_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_028_076_013_099_target_position_1_2_retrieval_position_1"          gabor_166_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_65_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_128 gabor_094 gabor_146 gabor_023    gabor_128 gabor_094_alt gabor_146 gabor_023_alt     "2_66_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_128_094_146_023_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_071_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_66_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  1942      fixation_cross    gabor_168 gabor_110 gabor_127 gabor_041    gabor_168_alt gabor_110_alt gabor_127 gabor_041     "2_67_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_168_110_127_041_target_position_1_2_retrieval_position_2"          gabor_circ gabor_060_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_67_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2092  2992  2292      fixation_cross    gabor_072 gabor_110 gabor_157 gabor_178    gabor_072 gabor_110_alt gabor_157_alt gabor_178     "2_68_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2300_gabor_patch_orientation_072_110_157_178_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_178_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_68_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_178_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  2192      fixation_cross    gabor_172 gabor_109 gabor_144 gabor_067    gabor_172_alt gabor_109 gabor_144_alt gabor_067     "2_69_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_172_109_144_067_target_position_1_3_retrieval_position_1"          gabor_172_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_69_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2092  2992  2492      fixation_cross    gabor_114 gabor_150 gabor_077 gabor_165    gabor_114 gabor_150_alt gabor_077 gabor_165_alt     "2_70_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2500_gabor_patch_orientation_114_150_077_165_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_077_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_70_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_077_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  