# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;

# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    62   292   292   399   125  2242  2992  2492      fixation_cross    gabor_168 gabor_017 gabor_056 gabor_085    gabor_168_alt gabor_017_alt gabor_056 gabor_085      "1_1_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_168_017_056_085_target_position_1_2_retrieval_position_1"          gabor_168_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_1_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  1942      fixation_cross    gabor_069 gabor_107 gabor_050 gabor_088    gabor_069_alt gabor_107 gabor_050_alt gabor_088      "1_2_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_069_107_050_088_target_position_1_3_retrieval_position_1"          gabor_069_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_2_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2342      fixation_cross    gabor_064 gabor_143 gabor_081 gabor_006    gabor_064_alt gabor_143 gabor_081_alt gabor_006      "1_3_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_064_143_081_006_target_position_1_3_retrieval_position_1"          gabor_064_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_3_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  2192      fixation_cross    gabor_133 gabor_105 gabor_161 gabor_077    gabor_133 gabor_105 gabor_161_alt gabor_077_alt      "1_4_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_133_105_161_077_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_077_framed    blank blank blank blank    fixation_cross_white     "1_4_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_034 gabor_062 gabor_105 gabor_148    gabor_034 gabor_062_alt gabor_105_alt gabor_148      "1_5_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_034_062_105_148_target_position_2_3_retrieval_position_2"          gabor_circ gabor_062_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_5_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_062_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2292      fixation_cross    gabor_077 gabor_041 gabor_003 gabor_057    gabor_077_alt gabor_041 gabor_003_alt gabor_057      "1_6_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_077_041_003_057_target_position_1_3_retrieval_position_1"          gabor_126_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_6_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1892  2992  2342      fixation_cross    gabor_156 gabor_069 gabor_089 gabor_014    gabor_156_alt gabor_069 gabor_089 gabor_014_alt      "1_7_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2350_gabor_patch_orientation_156_069_089_014_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_089_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_7_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_089_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2542      fixation_cross    gabor_023 gabor_007 gabor_085 gabor_159    gabor_023_alt gabor_007 gabor_085_alt gabor_159      "1_8_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_023_007_085_159_target_position_1_3_retrieval_position_1"          gabor_069_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_8_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  1992      fixation_cross    gabor_043 gabor_112 gabor_178 gabor_163    gabor_043 gabor_112_alt gabor_178_alt gabor_163      "1_9_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_043_112_178_163_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_178_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_9_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_038 gabor_113 gabor_094 gabor_171    gabor_038 gabor_113_alt gabor_094_alt gabor_171     "1_10_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_038_113_094_171_target_position_2_3_retrieval_position_2"          gabor_circ gabor_065_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_10_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  1942      fixation_cross    gabor_091 gabor_150 gabor_118 gabor_002    gabor_091_alt gabor_150 gabor_118_alt gabor_002     "1_11_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_091_150_118_002_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_118_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_11_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1742  2992  2192      fixation_cross    gabor_001 gabor_162 gabor_026 gabor_089    gabor_001_alt gabor_162 gabor_026 gabor_089_alt     "1_12_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2200_gabor_patch_orientation_001_162_026_089_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_026_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_12_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_026_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2442      fixation_cross    gabor_036 gabor_089 gabor_008 gabor_055    gabor_036_alt gabor_089_alt gabor_008 gabor_055     "1_13_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_036_089_008_055_target_position_1_2_retrieval_position_1"          gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_13_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2342      fixation_cross    gabor_083 gabor_153 gabor_168 gabor_040    gabor_083_alt gabor_153_alt gabor_168 gabor_040     "1_14_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_083_153_168_040_target_position_1_2_retrieval_position_2"          gabor_circ gabor_106_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_14_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1842  2992  2492      fixation_cross    gabor_049 gabor_101 gabor_081 gabor_165    gabor_049_alt gabor_101 gabor_081 gabor_165_alt     "1_15_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2500_gabor_patch_orientation_049_101_081_165_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_081_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_15_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_081_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_114 gabor_159 gabor_028 gabor_085    gabor_114 gabor_159_alt gabor_028 gabor_085_alt     "1_16_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_114_159_028_085_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_134_framed    blank blank blank blank    fixation_cross_white    "1_16_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2542      fixation_cross    gabor_102 gabor_086 gabor_030 gabor_162    gabor_102 gabor_086_alt gabor_030 gabor_162_alt     "1_17_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_102_086_030_162_target_position_2_4_retrieval_position_2"          gabor_circ gabor_136_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_17_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2142      fixation_cross    gabor_104 gabor_070 gabor_089 gabor_045    gabor_104_alt gabor_070_alt gabor_089 gabor_045     "1_18_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_104_070_089_045_target_position_1_2_retrieval_position_2"          gabor_circ gabor_025_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_18_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2492      fixation_cross    gabor_031 gabor_121 gabor_097 gabor_167    gabor_031 gabor_121_alt gabor_097_alt gabor_167     "1_19_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_031_121_097_167_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_097_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_19_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2542      fixation_cross    gabor_031 gabor_153 gabor_084 gabor_004    gabor_031_alt gabor_153 gabor_084 gabor_004_alt     "1_20_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_031_153_084_004_target_position_1_4_retrieval_position_1"          gabor_031_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_20_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2392      fixation_cross    gabor_090 gabor_172 gabor_067 gabor_108    gabor_090 gabor_172_alt gabor_067 gabor_108_alt     "1_21_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_090_172_067_108_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_154_framed    blank blank blank blank    fixation_cross_white    "1_21_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2092  2992  1892      fixation_cross    gabor_047 gabor_028 gabor_088 gabor_111    gabor_047_alt gabor_028_alt gabor_088 gabor_111     "1_22_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_1900_gabor_patch_orientation_047_028_088_111_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_065_framed    blank blank blank blank    fixation_cross_white    "1_22_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_065_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2092      fixation_cross    gabor_142 gabor_158 gabor_087 gabor_034    gabor_142_alt gabor_158_alt gabor_087 gabor_034     "1_23_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_142_158_087_034_target_position_1_2_retrieval_position_1"          gabor_003_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_23_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2192  2992  2092      fixation_cross    gabor_033 gabor_123 gabor_097 gabor_054    gabor_033_alt gabor_123 gabor_097 gabor_054_alt     "1_24_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_2100_gabor_patch_orientation_033_123_097_054_target_position_1_4_retrieval_position_2"          gabor_circ gabor_123_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_24_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_123_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2242      fixation_cross    gabor_073 gabor_046 gabor_094 gabor_160    gabor_073 gabor_046 gabor_094_alt gabor_160_alt     "1_25_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_073_046_094_160_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_020_framed    blank blank blank blank    fixation_cross_white    "1_25_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_177 gabor_144 gabor_100 gabor_014    gabor_177_alt gabor_144 gabor_100 gabor_014_alt     "1_26_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_177_144_100_014_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_014_framed    blank blank blank blank    fixation_cross_white    "1_26_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  1942      fixation_cross    gabor_098 gabor_129 gabor_024 gabor_044    gabor_098 gabor_129_alt gabor_024_alt gabor_044     "1_27_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_098_129_024_044_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_024_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_27_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_001 gabor_123 gabor_036 gabor_157    gabor_001 gabor_123 gabor_036_alt gabor_157_alt     "1_28_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_001_123_036_157_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_107_framed    blank blank blank blank    fixation_cross_white    "1_28_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_107_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_003 gabor_178 gabor_142 gabor_062    gabor_003 gabor_178 gabor_142_alt gabor_062_alt     "1_29_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_003_178_142_062_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_093_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_29_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2342      fixation_cross    gabor_116 gabor_144 gabor_092 gabor_008    gabor_116_alt gabor_144 gabor_092 gabor_008_alt     "1_30_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_116_144_092_008_target_position_1_4_retrieval_position_1"          gabor_116_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_30_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2592      fixation_cross    gabor_022 gabor_150 gabor_127 gabor_061    gabor_022_alt gabor_150_alt gabor_127 gabor_061     "1_31_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2600_gabor_patch_orientation_022_150_127_061_target_position_1_2_retrieval_position_2"          gabor_circ gabor_150_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_31_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1892  2992  1892      fixation_cross    gabor_107 gabor_167 gabor_049 gabor_090    gabor_107_alt gabor_167 gabor_049 gabor_090_alt     "1_32_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_1900_gabor_patch_orientation_107_167_049_090_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_049_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_32_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_049_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2592      fixation_cross    gabor_107 gabor_069 gabor_086 gabor_138    gabor_107_alt gabor_069 gabor_086 gabor_138_alt     "1_33_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_107_069_086_138_target_position_1_4_retrieval_position_1"          gabor_154_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_33_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  2192      fixation_cross    gabor_036 gabor_079 gabor_012 gabor_160    gabor_036_alt gabor_079_alt gabor_012 gabor_160     "1_34_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_036_079_012_160_target_position_1_2_retrieval_position_2"          gabor_circ gabor_079_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_34_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_075 gabor_116 gabor_100 gabor_138    gabor_075 gabor_116_alt gabor_100_alt gabor_138     "1_35_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_075_116_100_138_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_100_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_35_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_100_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2292      fixation_cross    gabor_001 gabor_174 gabor_153 gabor_091    gabor_001_alt gabor_174 gabor_153_alt gabor_091     "1_36_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_001_174_153_091_target_position_1_3_retrieval_position_1"          gabor_001_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_36_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2042  2992  2592      fixation_cross    gabor_167 gabor_015 gabor_125 gabor_048    gabor_167_alt gabor_015_alt gabor_125 gabor_048     "1_37_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_2050_3000_2600_gabor_patch_orientation_167_015_125_048_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_094_framed    blank blank blank blank    fixation_cross_white    "1_37_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_094_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_151 gabor_020 gabor_130 gabor_104    gabor_151 gabor_020_alt gabor_130_alt gabor_104     "1_38_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_151_020_130_104_target_position_2_3_retrieval_position_2"          gabor_circ gabor_070_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_38_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_095 gabor_134 gabor_077 gabor_117    gabor_095 gabor_134 gabor_077_alt gabor_117_alt     "1_39_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_095_134_077_117_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_117_framed    blank blank blank blank    fixation_cross_white    "1_39_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2042      fixation_cross    gabor_066 gabor_031 gabor_096 gabor_013    gabor_066_alt gabor_031 gabor_096 gabor_013_alt     "1_40_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_066_031_096_013_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_152_framed    blank blank blank blank    fixation_cross_white    "1_40_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2442      fixation_cross    gabor_138 gabor_162 gabor_001 gabor_022    gabor_138_alt gabor_162 gabor_001_alt gabor_022     "1_41_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_138_162_001_022_target_position_1_3_retrieval_position_1"          gabor_089_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_41_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  2492      fixation_cross    gabor_158 gabor_107 gabor_029 gabor_050    gabor_158 gabor_107_alt gabor_029_alt gabor_050     "1_42_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_158_107_029_050_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_075_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_42_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_075_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2092  2992  2392      fixation_cross    gabor_100 gabor_075 gabor_163 gabor_046    gabor_100_alt gabor_075 gabor_163 gabor_046_alt     "1_43_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2400_gabor_patch_orientation_100_075_163_046_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_026_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_43_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_026_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  2192      fixation_cross    gabor_059 gabor_146 gabor_076 gabor_024    gabor_059_alt gabor_146_alt gabor_076 gabor_024     "1_44_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_059_146_076_024_target_position_1_2_retrieval_position_2"          gabor_circ gabor_146_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_44_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2242      fixation_cross    gabor_073 gabor_117 gabor_090 gabor_151    gabor_073_alt gabor_117 gabor_090 gabor_151_alt     "1_45_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_073_117_090_151_target_position_1_4_retrieval_position_1"          gabor_028_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_45_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_027 gabor_102 gabor_044 gabor_175    gabor_027 gabor_102_alt gabor_044_alt gabor_175     "1_46_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_027_102_044_175_target_position_2_3_retrieval_position_2"          gabor_circ gabor_151_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_46_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2192  2992  2292      fixation_cross    gabor_066 gabor_122 gabor_032 gabor_092    gabor_066 gabor_122_alt gabor_032_alt gabor_092     "1_47_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_2300_gabor_patch_orientation_066_122_032_092_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_092_framed    blank blank blank blank    fixation_cross_white    "1_47_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_092_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2442      fixation_cross    gabor_038 gabor_064 gabor_007 gabor_023    gabor_038_alt gabor_064 gabor_007_alt gabor_023     "1_48_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_038_064_007_023_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_144_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_48_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  1892      fixation_cross    gabor_046 gabor_005 gabor_178 gabor_160    gabor_046 gabor_005 gabor_178_alt gabor_160_alt     "1_49_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_046_005_178_160_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_133_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_49_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_133_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2242  2992  2442      fixation_cross    gabor_055 gabor_179 gabor_142 gabor_037    gabor_055 gabor_179_alt gabor_142 gabor_037_alt     "1_50_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_2450_gabor_patch_orientation_055_179_142_037_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_096_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_50_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_096_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_053 gabor_107 gabor_035 gabor_081    gabor_053_alt gabor_107 gabor_035_alt gabor_081     "1_51_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_053_107_035_081_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_035_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_51_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  1992      fixation_cross    gabor_112 gabor_025 gabor_174 gabor_067    gabor_112_alt gabor_025_alt gabor_174 gabor_067     "1_52_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_112_025_174_067_target_position_1_2_retrieval_position_1"          gabor_157_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_52_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_157_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  1892      fixation_cross    gabor_088 gabor_020 gabor_110 gabor_141    gabor_088 gabor_020_alt gabor_110 gabor_141_alt     "1_53_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_1900_gabor_patch_orientation_088_020_110_141_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_141_framed    blank blank blank blank    fixation_cross_white    "1_53_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2392      fixation_cross    gabor_034 gabor_077 gabor_098 gabor_163    gabor_034 gabor_077_alt gabor_098 gabor_163_alt     "1_54_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_034_077_098_163_target_position_2_4_retrieval_position_2"          gabor_circ gabor_124_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_54_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_172 gabor_130 gabor_091 gabor_055    gabor_172 gabor_130_alt gabor_091 gabor_055_alt     "1_55_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_172_130_091_055_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_009_framed    blank blank blank blank    fixation_cross_white    "1_55_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1942  2992  2242      fixation_cross    gabor_156 gabor_005 gabor_136 gabor_020    gabor_156_alt gabor_005 gabor_136_alt gabor_020     "1_56_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2250_gabor_patch_orientation_156_005_136_020_target_position_1_3_retrieval_position_2"          gabor_circ gabor_005_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_56_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_005_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2092      fixation_cross    gabor_131 gabor_158 gabor_102 gabor_017    gabor_131_alt gabor_158 gabor_102 gabor_017_alt     "1_57_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_131_158_102_017_target_position_1_4_retrieval_position_1"          gabor_178_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_57_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_098 gabor_024 gabor_083 gabor_065    gabor_098 gabor_024_alt gabor_083_alt gabor_065     "1_58_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_098_024_083_065_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_083_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_58_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2192  2992  2142      fixation_cross    gabor_147 gabor_025 gabor_010 gabor_040    gabor_147_alt gabor_025 gabor_010_alt gabor_040     "1_59_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2150_gabor_patch_orientation_147_025_010_040_target_position_1_3_retrieval_position_2"          gabor_circ gabor_163_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_59_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_163_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_111 gabor_095 gabor_165 gabor_027    gabor_111 gabor_095 gabor_165_alt gabor_027_alt     "1_60_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_111_095_165_027_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_076_framed    blank blank blank blank    fixation_cross_white    "1_60_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  2092      fixation_cross    gabor_138 gabor_086 gabor_027 gabor_008    gabor_138_alt gabor_086 gabor_027 gabor_008_alt     "1_61_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_138_086_027_008_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_008_framed    blank blank blank blank    fixation_cross_white    "1_61_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_027 gabor_144 gabor_171 gabor_092    gabor_027 gabor_144_alt gabor_171 gabor_092_alt     "1_62_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_027_144_171_092_target_position_2_4_retrieval_position_2"          gabor_circ gabor_006_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_62_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2542      fixation_cross    gabor_131 gabor_090 gabor_017 gabor_153    gabor_131 gabor_090 gabor_017_alt gabor_153_alt     "1_63_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_131_090_017_153_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_017_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_63_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  1992      fixation_cross    gabor_096 gabor_077 gabor_132 gabor_013    gabor_096_alt gabor_077 gabor_132 gabor_013_alt     "1_64_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_096_077_132_013_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_013_framed    blank blank blank blank    fixation_cross_white    "1_64_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_013_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2092  2992  2042      fixation_cross    gabor_048 gabor_180 gabor_161 gabor_129    gabor_048_alt gabor_180 gabor_161 gabor_129_alt     "1_65_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2050_gabor_patch_orientation_048_180_161_129_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_111_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_65_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_111_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  2292      fixation_cross    gabor_093 gabor_170 gabor_032 gabor_154    gabor_093_alt gabor_170 gabor_032 gabor_154_alt     "1_66_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_093_170_032_154_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_154_framed    blank blank blank blank    fixation_cross_white    "1_66_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2042      fixation_cross    gabor_171 gabor_099 gabor_141 gabor_035    gabor_171 gabor_099_alt gabor_141_alt gabor_035     "1_67_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_171_099_141_035_target_position_2_3_retrieval_position_2"          gabor_circ gabor_099_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_67_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2292      fixation_cross    gabor_019 gabor_001 gabor_130 gabor_064    gabor_019_alt gabor_001 gabor_130 gabor_064_alt     "1_68_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_019_001_130_064_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_109_framed    blank blank blank blank    fixation_cross_white    "1_68_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2042      fixation_cross    gabor_101 gabor_043 gabor_078 gabor_167    gabor_101 gabor_043 gabor_078_alt gabor_167_alt     "1_69_Encoding_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_101_043_078_167_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_078_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_69_Retrieval_Working_Memory_MEG_P2_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1742  2992  1942      fixation_cross    gabor_138 gabor_049 gabor_163 gabor_080    gabor_138 gabor_049 gabor_163_alt gabor_080_alt     "1_70_Encoding_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_1950_gabor_patch_orientation_138_049_163_080_target_position_3_4_retrieval_position_2"          gabor_circ gabor_002_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_70_Retrieval_Working_Memory_MEG_P2_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_002_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 