# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_049 gabor_065 gabor_034 gabor_155    gabor_049_alt gabor_065_alt gabor_034 gabor_155      "2_1_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_049_065_034_155_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_034_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_1_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2542      fixation_cross    gabor_048 gabor_114 gabor_161 gabor_177    gabor_048 gabor_114_alt gabor_161_alt gabor_177      "2_2_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_048_114_161_177_target_position_1_4_retrieval_position_1"       gabor_003_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_2_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2092      fixation_cross    gabor_138 gabor_088 gabor_072 gabor_056    gabor_138 gabor_088 gabor_072_alt gabor_056_alt      "2_3_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_138_088_072_056_target_position_1_2_retrieval_position_1"       gabor_138_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_3_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2192      fixation_cross    gabor_016 gabor_076 gabor_160 gabor_091    gabor_016_alt gabor_076 gabor_160_alt gabor_091      "2_4_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_016_076_160_091_target_position_2_4_retrieval_position_2"       gabor_circ gabor_076_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_4_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2242      fixation_cross    gabor_129 gabor_043 gabor_016 gabor_094    gabor_129 gabor_043_alt gabor_016 gabor_094_alt      "2_5_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_129_043_016_094_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_016_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_5_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  1992      fixation_cross    gabor_156 gabor_072 gabor_138 gabor_093    gabor_156 gabor_072_alt gabor_138_alt gabor_093      "2_6_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_156_072_138_093_target_position_1_4_retrieval_position_1"       gabor_156_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_6_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2142  2992  2342      fixation_cross    gabor_085 gabor_159 gabor_175 gabor_044    gabor_085 gabor_159_alt gabor_175_alt gabor_044      "2_7_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_2350_gabor_patch_orientation_085_159_175_044_target_position_1_4_retrieval_position_2"       gabor_circ gabor_110_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_7_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_110_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2542      fixation_cross    gabor_076 gabor_133 gabor_155 gabor_097    gabor_076 gabor_133_alt gabor_155_alt gabor_097      "2_8_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_076_133_155_097_target_position_1_4_retrieval_position_1"       gabor_027_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_8_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2142      fixation_cross    gabor_157 gabor_078 gabor_043 gabor_027    gabor_157 gabor_078_alt gabor_043_alt gabor_027      "2_9_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_157_078_043_027_target_position_1_4_retrieval_position_1"       gabor_112_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_9_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  1892      fixation_cross    gabor_168 gabor_112 gabor_049 gabor_034    gabor_168_alt gabor_112 gabor_049_alt gabor_034     "2_10_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_168_112_049_034_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_081_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_10_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2242      fixation_cross    gabor_057 gabor_116 gabor_093 gabor_078    gabor_057 gabor_116_alt gabor_093_alt gabor_078     "2_11_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_057_116_093_078_target_position_1_4_retrieval_position_1"       gabor_010_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_11_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1992  2992  2492      fixation_cross    gabor_116 gabor_170 gabor_149 gabor_094    gabor_116_alt gabor_170_alt gabor_149 gabor_094     "2_12_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2000_3000_2500_gabor_patch_orientation_116_170_149_094_target_position_3_4_retrieval_position_2"       gabor_circ gabor_170_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_12_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_170_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  1992      fixation_cross    gabor_045 gabor_116 gabor_132 gabor_090    gabor_045 gabor_116_alt gabor_132_alt gabor_090     "2_13_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_045_116_132_090_target_position_1_4_retrieval_position_1"       gabor_180_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_13_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  2442      fixation_cross    gabor_076 gabor_131 gabor_091 gabor_014    gabor_076_alt gabor_131 gabor_091 gabor_014_alt     "2_14_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_076_131_091_014_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_046_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_14_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1742  2992  1942      fixation_cross    gabor_012 gabor_166 gabor_142 gabor_122    gabor_012 gabor_166_alt gabor_142 gabor_122_alt     "2_15_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_1950_gabor_patch_orientation_012_166_142_122_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_122_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_15_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_122_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  2592      fixation_cross    gabor_109 gabor_179 gabor_003 gabor_064    gabor_109 gabor_179 gabor_003_alt gabor_064_alt     "2_16_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_109_179_003_064_target_position_1_2_retrieval_position_2"       gabor_circ gabor_129_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_16_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  2042      fixation_cross    gabor_172 gabor_045 gabor_086 gabor_063    gabor_172 gabor_045_alt gabor_086 gabor_063_alt     "2_17_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_172_045_086_063_target_position_1_3_retrieval_position_1"       gabor_127_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_17_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_169 gabor_061 gabor_022 gabor_043    gabor_169_alt gabor_061_alt gabor_022 gabor_043     "2_18_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_169_061_022_043_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_043_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_18_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2092      fixation_cross    gabor_016 gabor_047 gabor_079 gabor_164    gabor_016_alt gabor_047 gabor_079_alt gabor_164     "2_19_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_016_047_079_164_target_position_2_4_retrieval_position_2"       gabor_circ gabor_096_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_19_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2392      fixation_cross    gabor_098 gabor_133 gabor_081 gabor_061    gabor_098 gabor_133_alt gabor_081_alt gabor_061     "2_20_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_098_133_081_061_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_016_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_20_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2342      fixation_cross    gabor_029 gabor_155 gabor_103 gabor_119    gabor_029 gabor_155_alt gabor_103_alt gabor_119     "2_21_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_029_155_103_119_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_069_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_21_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2142  2992  2192      fixation_cross    gabor_090 gabor_141 gabor_029 gabor_156    gabor_090 gabor_141_alt gabor_029_alt gabor_156     "2_22_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2200_gabor_patch_orientation_090_141_029_156_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_029_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_22_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_029_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2342      fixation_cross    gabor_144 gabor_039 gabor_161 gabor_180    gabor_144_alt gabor_039 gabor_161 gabor_180_alt     "2_23_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_144_039_161_180_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_021_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_23_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_021_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_157 gabor_024 gabor_086 gabor_138    gabor_157_alt gabor_024_alt gabor_086 gabor_138     "2_24_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_157_024_086_138_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_138_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_24_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2592      fixation_cross    gabor_169 gabor_064 gabor_086 gabor_142    gabor_169_alt gabor_064_alt gabor_086 gabor_142     "2_25_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_169_064_086_142_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_036_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_25_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  1942      fixation_cross    gabor_034 gabor_155 gabor_102 gabor_077    gabor_034_alt gabor_155_alt gabor_102 gabor_077     "2_26_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_1950_gabor_patch_orientation_034_155_102_077_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_124_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_26_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_173 gabor_021 gabor_092 gabor_157    gabor_173_alt gabor_021_alt gabor_092 gabor_157     "2_27_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_173_021_092_157_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_046_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_27_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1892  2992  2392      fixation_cross    gabor_022 gabor_175 gabor_089 gabor_154    gabor_022 gabor_175 gabor_089_alt gabor_154_alt     "2_28_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1900_3000_2400_gabor_patch_orientation_022_175_089_154_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_044_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_28_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_044_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2042      fixation_cross    gabor_169 gabor_140 gabor_107 gabor_019    gabor_169_alt gabor_140 gabor_107_alt gabor_019     "2_29_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_169_140_107_019_target_position_2_4_retrieval_position_2"       gabor_circ gabor_091_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_29_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1942  2992  2342      fixation_cross    gabor_074 gabor_057 gabor_033 gabor_002    gabor_074_alt gabor_057 gabor_033 gabor_002_alt     "2_30_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1950_3000_2350_gabor_patch_orientation_074_057_033_002_target_position_2_3_retrieval_position_1"       gabor_074_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_30_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_074_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_059 gabor_078 gabor_021 gabor_126    gabor_059 gabor_078 gabor_021_alt gabor_126_alt     "2_31_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_059_078_021_126_target_position_1_2_retrieval_position_1"       gabor_059_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_31_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2142      fixation_cross    gabor_169 gabor_106 gabor_151 gabor_035    gabor_169 gabor_106 gabor_151_alt gabor_035_alt     "2_32_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_169_106_151_035_target_position_1_2_retrieval_position_1"       gabor_169_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_32_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_178 gabor_134 gabor_011 gabor_116    gabor_178_alt gabor_134 gabor_011 gabor_116_alt     "2_33_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_178_134_011_116_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_057_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_33_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_057_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  2042      fixation_cross    gabor_047 gabor_007 gabor_068 gabor_113    gabor_047_alt gabor_007_alt gabor_068 gabor_113     "2_34_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_047_007_068_113_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_113_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_34_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2542      fixation_cross    gabor_120 gabor_007 gabor_180 gabor_095    gabor_120 gabor_007_alt gabor_180_alt gabor_095     "2_35_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_120_007_180_095_target_position_1_4_retrieval_position_1"       gabor_074_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_35_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_150 gabor_134 gabor_077 gabor_105    gabor_150_alt gabor_134 gabor_077_alt gabor_105     "2_36_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_150_134_077_105_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_105_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_36_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  1942      fixation_cross    gabor_128 gabor_113 gabor_068 gabor_090    gabor_128 gabor_113 gabor_068_alt gabor_090_alt     "2_37_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_128_113_068_090_target_position_1_2_retrieval_position_2"       gabor_circ gabor_113_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_37_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1792  2992  2592      fixation_cross    gabor_120 gabor_088 gabor_178 gabor_145    gabor_120_alt gabor_088 gabor_178_alt gabor_145     "2_38_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2600_gabor_patch_orientation_120_088_178_145_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_039_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_38_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_039_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  1892      fixation_cross    gabor_143 gabor_128 gabor_054 gabor_091    gabor_143_alt gabor_128_alt gabor_054 gabor_091     "2_39_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_143_128_054_091_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_006_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_39_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2142  2992  1942      fixation_cross    gabor_155 gabor_072 gabor_135 gabor_097    gabor_155 gabor_072 gabor_135_alt gabor_097_alt     "2_40_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_1950_gabor_patch_orientation_155_072_135_097_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_135_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_40_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_135_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2542      fixation_cross    gabor_020 gabor_101 gabor_170 gabor_037    gabor_020 gabor_101 gabor_170_alt gabor_037_alt     "2_41_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_020_101_170_037_target_position_1_2_retrieval_position_2"       gabor_circ gabor_056_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_41_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_176 gabor_070 gabor_112 gabor_090    gabor_176_alt gabor_070_alt gabor_112 gabor_090     "2_42_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_176_070_112_090_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_160_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_42_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2042      fixation_cross    gabor_021 gabor_097 gabor_141 gabor_075    gabor_021_alt gabor_097 gabor_141_alt gabor_075     "2_43_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_021_097_141_075_target_position_2_4_retrieval_position_2"       gabor_circ gabor_097_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_43_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2292      fixation_cross    gabor_147 gabor_023 gabor_094 gabor_078    gabor_147_alt gabor_023 gabor_094 gabor_078_alt     "2_44_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_147_023_094_078_target_position_2_3_retrieval_position_2"       gabor_circ gabor_023_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_44_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  2392      fixation_cross    gabor_137 gabor_108 gabor_089 gabor_021    gabor_137_alt gabor_108 gabor_089_alt gabor_021     "2_45_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_137_108_089_021_target_position_2_4_retrieval_position_2"       gabor_circ gabor_108_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_45_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_108_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2442      fixation_cross    gabor_088 gabor_114 gabor_148 gabor_033    gabor_088_alt gabor_114 gabor_148 gabor_033_alt     "2_46_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_088_114_148_033_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_008_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_46_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_106 gabor_154 gabor_066 gabor_090    gabor_106_alt gabor_154 gabor_066 gabor_090_alt     "2_47_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_106_154_066_090_target_position_2_3_retrieval_position_2"       gabor_circ gabor_154_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_47_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1942  2992  2142      fixation_cross    gabor_093 gabor_039 gabor_076 gabor_024    gabor_093 gabor_039 gabor_076_alt gabor_024_alt     "2_48_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1950_3000_2150_gabor_patch_orientation_093_039_076_024_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_024_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_48_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_024_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2342      fixation_cross    gabor_150 gabor_094 gabor_008 gabor_122    gabor_150 gabor_094_alt gabor_008_alt gabor_122     "2_49_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_150_094_008_122_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_122_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_49_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_122_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_164 gabor_032 gabor_054 gabor_010    gabor_164 gabor_032_alt gabor_054 gabor_010_alt     "2_50_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_164_032_054_010_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_054_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_50_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1892  2992  1892      fixation_cross    gabor_091 gabor_001 gabor_018 gabor_179    gabor_091_alt gabor_001_alt gabor_018 gabor_179     "2_51_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1900_3000_1900_gabor_patch_orientation_091_001_018_179_target_position_3_4_retrieval_position_2"       gabor_circ gabor_136_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_51_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_136_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2492      fixation_cross    gabor_091 gabor_003 gabor_117 gabor_028    gabor_091 gabor_003_alt gabor_117 gabor_028_alt     "2_52_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_091_003_117_028_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_117_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_52_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  2192      fixation_cross    gabor_144 gabor_173 gabor_129 gabor_008    gabor_144_alt gabor_173 gabor_129_alt gabor_008     "2_53_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_144_173_129_008_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_008_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_53_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2242      fixation_cross    gabor_028 gabor_137 gabor_084 gabor_058    gabor_028_alt gabor_137 gabor_084_alt gabor_058     "2_54_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_028_137_084_058_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_105_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_54_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_180 gabor_092 gabor_042 gabor_016    gabor_180_alt gabor_092_alt gabor_042 gabor_016     "2_55_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_180_092_042_016_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_016_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_55_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2242      fixation_cross    gabor_153 gabor_073 gabor_047 gabor_119    gabor_153 gabor_073_alt gabor_047 gabor_119_alt     "2_56_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_153_073_047_119_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_095_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_56_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2592      fixation_cross    gabor_112 gabor_002 gabor_056 gabor_139    gabor_112 gabor_002_alt gabor_056_alt gabor_139     "2_57_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_112_002_056_139_target_position_1_4_retrieval_position_1"       gabor_112_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_57_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2092  2992  2042      fixation_cross    gabor_075 gabor_152 gabor_016 gabor_132    gabor_075 gabor_152_alt gabor_016_alt gabor_132     "2_58_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2050_gabor_patch_orientation_075_152_016_132_target_position_1_4_retrieval_position_2"       gabor_circ gabor_152_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_58_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_152_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2492      fixation_cross    gabor_157 gabor_005 gabor_095 gabor_078    gabor_157 gabor_005 gabor_095_alt gabor_078_alt     "2_59_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_157_005_095_078_target_position_1_2_retrieval_position_1"       gabor_022_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_59_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2092  2992  1992      fixation_cross    gabor_093 gabor_123 gabor_075 gabor_018    gabor_093_alt gabor_123 gabor_075_alt gabor_018     "2_60_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2000_gabor_patch_orientation_093_123_075_018_target_position_2_4_retrieval_position_1"       gabor_043_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_60_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_043_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2092      fixation_cross    gabor_061 gabor_135 gabor_076 gabor_105    gabor_061 gabor_135_alt gabor_076_alt gabor_105     "2_61_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_061_135_076_105_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_105_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_61_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2292      fixation_cross    gabor_167 gabor_036 gabor_007 gabor_077    gabor_167 gabor_036_alt gabor_007 gabor_077_alt     "2_62_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_167_036_007_077_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_007_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_62_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2292      fixation_cross    gabor_072 gabor_145 gabor_104 gabor_026    gabor_072_alt gabor_145 gabor_104 gabor_026_alt     "2_63_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_072_145_104_026_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_104_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_63_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  2492      fixation_cross    gabor_011 gabor_155 gabor_029 gabor_090    gabor_011_alt gabor_155 gabor_029_alt gabor_090     "2_64_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_011_155_029_090_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_137_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_64_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2392      fixation_cross    gabor_124 gabor_042 gabor_109 gabor_002    gabor_124_alt gabor_042 gabor_109 gabor_002_alt     "2_65_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_124_042_109_002_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_109_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_65_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_114 gabor_026 gabor_006 gabor_046    gabor_114_alt gabor_026 gabor_006_alt gabor_046     "2_66_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_114_026_006_046_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_046_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_66_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1992  2992  2142      fixation_cross    gabor_148 gabor_083 gabor_098 gabor_118    gabor_148_alt gabor_083_alt gabor_098 gabor_118     "2_67_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2000_3000_2150_gabor_patch_orientation_148_083_098_118_target_position_3_4_retrieval_position_2"       gabor_circ gabor_033_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_67_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_033_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  1992      fixation_cross    gabor_172 gabor_111 gabor_083 gabor_051    gabor_172_alt gabor_111_alt gabor_083 gabor_051     "2_68_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_172_111_083_051_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_68_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2192  2992  2292      fixation_cross    gabor_135 gabor_022 gabor_045 gabor_002    gabor_135_alt gabor_022 gabor_045 gabor_002_alt     "2_69_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2300_gabor_patch_orientation_135_022_045_002_target_position_2_3_retrieval_position_1"       gabor_089_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_69_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_089_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  1992      fixation_cross    gabor_091 gabor_002 gabor_130 gabor_045    gabor_091_alt gabor_002_alt gabor_130 gabor_045     "2_70_Encoding_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_091_002_130_045_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_130_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_70_Retrieval_Working_Memory_MEG_P6_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  