# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;	  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   44    61   292   292   399   125  2042  2992  2042      fixation_cross    gabor_036 gabor_147 gabor_090 gabor_126    gabor_036 gabor_147 gabor_090_alt gabor_126_alt      "2_1_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_036_147_090_126_target_position_1_2_retrieval_position_2"       gabor_circ gabor_009_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2592      fixation_cross    gabor_178 gabor_147 gabor_124 gabor_038    gabor_178_alt gabor_147_alt gabor_124 gabor_038      "2_2_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_178_147_124_038_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_038_framed    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2192  2992  2442      fixation_cross    gabor_046 gabor_069 gabor_088 gabor_118    gabor_046 gabor_069_alt gabor_088 gabor_118_alt      "2_3_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_046_069_088_118_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_135_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2592      fixation_cross    gabor_093 gabor_051 gabor_010 gabor_161    gabor_093 gabor_051_alt gabor_010 gabor_161_alt      "2_4_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_093_051_010_161_target_position_1_3_retrieval_position_1"       gabor_141_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2092  2992  2442      fixation_cross    gabor_168 gabor_045 gabor_134 gabor_078    gabor_168 gabor_045_alt gabor_134_alt gabor_078      "2_5_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2450_gabor_patch_orientation_168_045_134_078_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_028_framed    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  2042      fixation_cross    gabor_109 gabor_167 gabor_085 gabor_047    gabor_109_alt gabor_167 gabor_085_alt gabor_047      "2_6_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_109_167_085_047_target_position_2_4_retrieval_position_2"       gabor_circ gabor_167_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2292      fixation_cross    gabor_124 gabor_167 gabor_101 gabor_015    gabor_124_alt gabor_167_alt gabor_101 gabor_015      "2_7_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_124_167_101_015_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_053_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2242  2992  2392      fixation_cross    gabor_155 gabor_005 gabor_047 gabor_020    gabor_155 gabor_005_alt gabor_047_alt gabor_020      "2_8_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_2400_gabor_patch_orientation_155_005_047_020_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_047_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_047_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2542      fixation_cross    gabor_081 gabor_167 gabor_150 gabor_003    gabor_081 gabor_167_alt gabor_150_alt gabor_003      "2_9_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2550_gabor_patch_orientation_081_167_150_003_target_position_1_4_retrieval_position_1"       gabor_081_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_007 gabor_167 gabor_138 gabor_123    gabor_007_alt gabor_167_alt gabor_138 gabor_123     "2_10_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_007_167_138_123_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_123_framed    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_005 gabor_046 gabor_095 gabor_024    gabor_005_alt gabor_046_alt gabor_095 gabor_024     "2_11_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_005_046_095_024_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_024_framed    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  2342      fixation_cross    gabor_126 gabor_003 gabor_084 gabor_050    gabor_126 gabor_003 gabor_084_alt gabor_050_alt     "2_12_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_126_003_084_050_target_position_1_2_retrieval_position_1"       gabor_126_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2092  2992  2042      fixation_cross    gabor_084 gabor_127 gabor_165 gabor_101    gabor_084_alt gabor_127 gabor_165 gabor_101_alt     "2_13_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2050_gabor_patch_orientation_084_127_165_101_target_position_2_3_retrieval_position_1"       gabor_084_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_084_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_083 gabor_020 gabor_138 gabor_164    gabor_083_alt gabor_020 gabor_138 gabor_164_alt     "2_14_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_083_020_138_164_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_138_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2392      fixation_cross    gabor_091 gabor_175 gabor_156 gabor_023    gabor_091 gabor_175_alt gabor_156 gabor_023_alt     "2_15_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_091_175_156_023_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_107_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_107_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  2192      fixation_cross    gabor_018 gabor_049 gabor_167 gabor_083    gabor_018_alt gabor_049 gabor_167 gabor_083_alt     "2_16_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_018_049_167_083_target_position_2_3_retrieval_position_2"       gabor_circ gabor_099_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1792  2992  2592      fixation_cross    gabor_039 gabor_055 gabor_020 gabor_080    gabor_039 gabor_055 gabor_020_alt gabor_080_alt     "2_17_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2600_gabor_patch_orientation_039_055_020_080_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_129_framed    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_129_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2042      fixation_cross    gabor_164 gabor_093 gabor_078 gabor_139    gabor_164_alt gabor_093 gabor_078_alt gabor_139     "2_18_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_164_093_078_139_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_003_framed    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  2192      fixation_cross    gabor_113 gabor_097 gabor_025 gabor_148    gabor_113_alt gabor_097_alt gabor_025 gabor_148     "2_19_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_113_097_025_148_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_025_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1992  2992  2092      fixation_cross    gabor_161 gabor_088 gabor_030 gabor_010    gabor_161_alt gabor_088 gabor_030_alt gabor_010     "2_20_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_161_088_030_010_target_position_2_4_retrieval_position_2"       gabor_circ gabor_088_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2092  2992  2442      fixation_cross    gabor_139 gabor_115 gabor_155 gabor_074    gabor_139_alt gabor_115_alt gabor_155 gabor_074     "2_21_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2450_gabor_patch_orientation_139_115_155_074_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_029_framed    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1892  2992  2242      fixation_cross    gabor_131 gabor_104 gabor_015 gabor_168    gabor_131_alt gabor_104 gabor_015 gabor_168_alt     "2_22_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1900_3000_2250_gabor_patch_orientation_131_104_015_168_target_position_2_3_retrieval_position_1"       gabor_085_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_085_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_057 gabor_028 gabor_145 gabor_087    gabor_057 gabor_028_alt gabor_145_alt gabor_087     "2_23_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_057_028_145_087_target_position_1_4_retrieval_position_1"       gabor_103_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2292      fixation_cross    gabor_002 gabor_034 gabor_073 gabor_178    gabor_002 gabor_034_alt gabor_073_alt gabor_178     "2_24_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_002_034_073_178_target_position_1_4_retrieval_position_1"       gabor_002_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  1942      fixation_cross    gabor_086 gabor_031 gabor_058 gabor_148    gabor_086_alt gabor_031_alt gabor_058 gabor_148     "2_25_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_086_031_058_148_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_148_framed    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2242  2992  2542      fixation_cross    gabor_136 gabor_173 gabor_116 gabor_003    gabor_136 gabor_173 gabor_116_alt gabor_003_alt     "2_26_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_136_173_116_003_target_position_1_2_retrieval_position_1"       gabor_090_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2192  2992  2242      fixation_cross    gabor_022 gabor_048 gabor_068 gabor_135    gabor_022_alt gabor_048_alt gabor_068 gabor_135     "2_27_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_022_048_068_135_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_085_framed    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1842  2992  1892      fixation_cross    gabor_005 gabor_063 gabor_176 gabor_036    gabor_005_alt gabor_063 gabor_176 gabor_036_alt     "2_28_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_1900_gabor_patch_orientation_005_063_176_036_target_position_2_3_retrieval_position_1"       gabor_145_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_145_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2092      fixation_cross    gabor_074 gabor_143 gabor_057 gabor_120    gabor_074_alt gabor_143 gabor_057 gabor_120_alt     "2_29_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_074_143_057_120_target_position_2_3_retrieval_position_2"       gabor_circ gabor_143_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1742  2992  2142      fixation_cross    gabor_006 gabor_153 gabor_084 gabor_111    gabor_006 gabor_153 gabor_084_alt gabor_111_alt     "2_30_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2150_gabor_patch_orientation_006_153_084_111_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_111_framed    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_111_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  1942      fixation_cross    gabor_163 gabor_014 gabor_079 gabor_044    gabor_163 gabor_014_alt gabor_079 gabor_044_alt     "2_31_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_163_014_079_044_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_079_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_050 gabor_001 gabor_163 gabor_029    gabor_050 gabor_001_alt gabor_163_alt gabor_029     "2_32_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_050_001_163_029_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_075_framed    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_075_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2342      fixation_cross    gabor_082 gabor_138 gabor_121 gabor_016    gabor_082 gabor_138_alt gabor_121 gabor_016_alt     "2_33_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_082_138_121_016_target_position_1_3_retrieval_position_1"       gabor_082_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_089 gabor_015 gabor_074 gabor_054    gabor_089_alt gabor_015_alt gabor_074 gabor_054     "2_34_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_089_015_074_054_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_124_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_116 gabor_178 gabor_006 gabor_046    gabor_116_alt gabor_178 gabor_006_alt gabor_046     "2_35_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_116_178_006_046_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_093_framed    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_018 gabor_152 gabor_167 gabor_039    gabor_018_alt gabor_152 gabor_167_alt gabor_039     "2_36_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_018_152_167_039_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_039_framed    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2092  2992  2392      fixation_cross    gabor_147 gabor_119 gabor_100 gabor_063    gabor_147_alt gabor_119 gabor_100_alt gabor_063     "2_37_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_147_119_100_063_target_position_2_4_retrieval_position_2"       gabor_circ gabor_169_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1942  2992  1892      fixation_cross    gabor_012 gabor_175 gabor_059 gabor_044    gabor_012 gabor_175_alt gabor_059 gabor_044_alt     "2_38_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_1900_gabor_patch_orientation_012_175_059_044_target_position_1_3_retrieval_position_2"       gabor_circ gabor_130_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_130_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2292      fixation_cross    gabor_072 gabor_120 gabor_034 gabor_139    gabor_072_alt gabor_120 gabor_034_alt gabor_139     "2_39_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_072_120_034_139_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_139_framed    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2492      fixation_cross    gabor_177 gabor_155 gabor_123 gabor_107    gabor_177 gabor_155_alt gabor_123 gabor_107_alt     "2_40_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2500_gabor_patch_orientation_177_155_123_107_target_position_1_3_retrieval_position_1"       gabor_177_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1892  2992  2242      fixation_cross    gabor_175 gabor_155 gabor_140 gabor_013    gabor_175 gabor_155 gabor_140_alt gabor_013_alt     "2_41_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2250_gabor_patch_orientation_175_155_140_013_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_140_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_140_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2542      fixation_cross    gabor_036 gabor_072 gabor_013 gabor_144    gabor_036_alt gabor_072_alt gabor_013 gabor_144     "2_42_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_036_072_013_144_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_097_framed    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  1992      fixation_cross    gabor_024 gabor_133 gabor_107 gabor_151    gabor_024 gabor_133 gabor_107_alt gabor_151_alt     "2_43_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_024_133_107_151_target_position_1_2_retrieval_position_2"       gabor_circ gabor_133_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_133_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_023 gabor_174 gabor_089 gabor_056    gabor_023_alt gabor_174 gabor_089_alt gabor_056     "2_44_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_023_174_089_056_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_056_framed    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1942  2992  1892      fixation_cross    gabor_119 gabor_047 gabor_086 gabor_168    gabor_119_alt gabor_047 gabor_086 gabor_168_alt     "2_45_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_119_047_086_168_target_position_2_3_retrieval_position_2"       gabor_circ gabor_002_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_159 gabor_054 gabor_177 gabor_090    gabor_159 gabor_054_alt gabor_177_alt gabor_090     "2_46_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_159_054_177_090_target_position_1_4_retrieval_position_1"       gabor_024_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2242      fixation_cross    gabor_104 gabor_085 gabor_014 gabor_160    gabor_104 gabor_085_alt gabor_014 gabor_160_alt     "2_47_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_104_085_014_160_target_position_1_3_retrieval_position_1"       gabor_054_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1792  2992  1992      fixation_cross    gabor_165 gabor_124 gabor_085 gabor_047    gabor_165 gabor_124 gabor_085_alt gabor_047_alt     "2_48_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2000_gabor_patch_orientation_165_124_085_047_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_047_framed    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_047_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1942  2992  1942      fixation_cross    gabor_036 gabor_053 gabor_173 gabor_109    gabor_036_alt gabor_053_alt gabor_173 gabor_109     "2_49_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_036_053_173_109_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_125_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_103 gabor_165 gabor_133 gabor_078    gabor_103_alt gabor_165 gabor_133_alt gabor_078     "2_50_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_103_165_133_078_target_position_2_4_retrieval_position_2"       gabor_circ gabor_026_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_015 gabor_099 gabor_042 gabor_069    gabor_015_alt gabor_099_alt gabor_042 gabor_069     "2_51_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_015_099_042_069_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_178_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2142  2992  2192      fixation_cross    gabor_011 gabor_162 gabor_075 gabor_124    gabor_011_alt gabor_162 gabor_075_alt gabor_124     "2_52_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2200_gabor_patch_orientation_011_162_075_124_target_position_2_4_retrieval_position_1"       gabor_011_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_011_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  1892      fixation_cross    gabor_021 gabor_128 gabor_045 gabor_089    gabor_021_alt gabor_128 gabor_045 gabor_089_alt     "2_53_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_021_128_045_089_target_position_2_3_retrieval_position_2"       gabor_circ gabor_128_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1942  2992  1942      fixation_cross    gabor_141 gabor_063 gabor_014 gabor_029    gabor_141_alt gabor_063 gabor_014 gabor_029_alt     "2_54_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_1950_gabor_patch_orientation_141_063_014_029_target_position_2_3_retrieval_position_1"       gabor_096_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_096_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  2492      fixation_cross    gabor_034 gabor_067 gabor_104 gabor_085    gabor_034_alt gabor_067 gabor_104_alt gabor_085     "2_55_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_034_067_104_085_target_position_2_4_retrieval_position_2"       gabor_circ gabor_067_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  2492      fixation_cross    gabor_157 gabor_012 gabor_093 gabor_072    gabor_157_alt gabor_012_alt gabor_093 gabor_072     "2_56_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_157_012_093_072_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_093_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  1942      fixation_cross    gabor_026 gabor_094 gabor_175 gabor_011    gabor_026_alt gabor_094 gabor_175_alt gabor_011     "2_57_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_026_094_175_011_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_011_framed    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_023 gabor_174 gabor_066 gabor_130    gabor_023_alt gabor_174 gabor_066_alt gabor_130     "2_58_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_023_174_066_130_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_084_framed    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2192      fixation_cross    gabor_059 gabor_028 gabor_116 gabor_007    gabor_059_alt gabor_028 gabor_116 gabor_007_alt     "2_59_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_059_028_116_007_target_position_2_3_retrieval_position_2"       gabor_circ gabor_075_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_075_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2042  2992  2092      fixation_cross    gabor_014 gabor_168 gabor_145 gabor_037    gabor_014_alt gabor_168 gabor_145_alt gabor_037     "2_60_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2100_gabor_patch_orientation_014_168_145_037_target_position_2_4_retrieval_position_1"       gabor_062_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_062_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  2092      fixation_cross    gabor_177 gabor_021 gabor_001 gabor_128    gabor_177 gabor_021_alt gabor_001 gabor_128_alt     "2_61_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_177_021_001_128_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_001_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2142      fixation_cross    gabor_086 gabor_066 gabor_035 gabor_152    gabor_086_alt gabor_066 gabor_035 gabor_152_alt     "2_62_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_086_066_035_152_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_173_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2592      fixation_cross    gabor_046 gabor_100 gabor_061 gabor_169    gabor_046_alt gabor_100 gabor_061_alt gabor_169     "2_63_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_046_100_061_169_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_169_framed    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  2342      fixation_cross    gabor_101 gabor_160 gabor_013 gabor_122    gabor_101 gabor_160_alt gabor_013 gabor_122_alt     "2_64_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_101_160_013_122_target_position_1_3_retrieval_position_1"       gabor_101_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_006 gabor_053 gabor_122 gabor_084    gabor_006 gabor_053_alt gabor_122_alt gabor_084     "2_65_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_006_053_122_084_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_037_framed    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2192  2992  2342      fixation_cross    gabor_165 gabor_032 gabor_049 gabor_003    gabor_165_alt gabor_032 gabor_049 gabor_003_alt     "2_66_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2350_gabor_patch_orientation_165_032_049_003_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_139_framed    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_139_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2442      fixation_cross    gabor_132 gabor_020 gabor_162 gabor_097    gabor_132 gabor_020 gabor_162_alt gabor_097_alt     "2_67_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_132_020_162_097_target_position_1_2_retrieval_position_1"       gabor_132_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1942  2992  2542      fixation_cross    gabor_097 gabor_152 gabor_067 gabor_178    gabor_097 gabor_152_alt gabor_067_alt gabor_178     "2_68_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_097_152_067_178_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_132_framed    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1892  2992  2342      fixation_cross    gabor_027 gabor_107 gabor_169 gabor_001    gabor_027_alt gabor_107_alt gabor_169 gabor_001     "2_69_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2350_gabor_patch_orientation_027_107_169_001_target_position_3_4_retrieval_position_2"       gabor_circ gabor_107_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_107_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1992  2992  1992      fixation_cross    gabor_022 gabor_005 gabor_041 gabor_160    gabor_022_alt gabor_005_alt gabor_041 gabor_160     "2_70_Encoding_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_022_005_041_160_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_160_framed    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P4_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  