# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    62   292   292   399   125  2242  2992  1942      fixation_cross    gabor_168 gabor_051 gabor_078 gabor_133    gabor_168 gabor_051_alt gabor_078_alt gabor_133      "2_1_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_1950_gabor_patch_orientation_168_051_078_133_target_position_2_3_retrieval_position_2"          gabor_circ gabor_051_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_051_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_035 gabor_167 gabor_111 gabor_146    gabor_035_alt gabor_167_alt gabor_111 gabor_146      "2_2_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_035_167_111_146_target_position_1_2_retrieval_position_1"          gabor_084_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  2342      fixation_cross    gabor_070 gabor_110 gabor_151 gabor_093    gabor_070 gabor_110_alt gabor_151 gabor_093_alt      "2_3_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_070_110_151_093_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_093_framed    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  2342      fixation_cross    gabor_083 gabor_104 gabor_121 gabor_151    gabor_083_alt gabor_104 gabor_121_alt gabor_151      "2_4_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_083_104_121_151_target_position_1_3_retrieval_position_1"          gabor_083_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  2442      fixation_cross    gabor_097 gabor_129 gabor_172 gabor_055    gabor_097_alt gabor_129 gabor_172 gabor_055_alt      "2_5_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_097_129_172_055_target_position_1_4_retrieval_position_1"          gabor_097_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2092  2992  2092      fixation_cross    gabor_127 gabor_042 gabor_152 gabor_168    gabor_127 gabor_042_alt gabor_152 gabor_168_alt      "2_6_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2100_gabor_patch_orientation_127_042_152_168_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_013_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_013_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_061 gabor_014 gabor_037 gabor_091    gabor_061 gabor_014_alt gabor_037_alt gabor_091      "2_7_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_061_014_037_091_target_position_2_3_retrieval_position_2"          gabor_circ gabor_150_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  1892      fixation_cross    gabor_034 gabor_118 gabor_049 gabor_096    gabor_034_alt gabor_118 gabor_049 gabor_096_alt      "2_8_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_1900_gabor_patch_orientation_034_118_049_096_target_position_1_4_retrieval_position_1"          gabor_034_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2092  2992  1892      fixation_cross    gabor_112 gabor_074 gabor_179 gabor_049    gabor_112 gabor_074_alt gabor_179 gabor_049_alt      "2_9_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_1900_gabor_patch_orientation_112_074_179_049_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_179_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2242  2992  2342      fixation_cross    gabor_065 gabor_093 gabor_033 gabor_111    gabor_065 gabor_093_alt gabor_033_alt gabor_111     "2_10_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_065_093_033_111_target_position_2_3_retrieval_position_2"          gabor_circ gabor_093_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2192  2992  2092      fixation_cross    gabor_056 gabor_145 gabor_078 gabor_027    gabor_056 gabor_145_alt gabor_078_alt gabor_027     "2_11_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_056_145_078_027_target_position_2_3_retrieval_position_2"          gabor_circ gabor_010_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2092      fixation_cross    gabor_098 gabor_159 gabor_033 gabor_139    gabor_098_alt gabor_159 gabor_033 gabor_139_alt     "2_12_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_098_159_033_139_target_position_1_4_retrieval_position_1"          gabor_049_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_177 gabor_135 gabor_120 gabor_001    gabor_177 gabor_135_alt gabor_120_alt gabor_001     "2_13_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_177_135_120_001_target_position_2_3_retrieval_position_2"          gabor_circ gabor_089_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_155 gabor_002 gabor_088 gabor_048    gabor_155_alt gabor_002 gabor_088_alt gabor_048     "2_14_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_155_002_088_048_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_138_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  2492      fixation_cross    gabor_144 gabor_166 gabor_076 gabor_104    gabor_144 gabor_166_alt gabor_076 gabor_104_alt     "2_15_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_144_166_076_104_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_104_framed    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2392      fixation_cross    gabor_109 gabor_143 gabor_071 gabor_158    gabor_109 gabor_143 gabor_071_alt gabor_158_alt     "2_16_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_109_143_071_158_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_025_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2142  2992  2492      fixation_cross    gabor_059 gabor_084 gabor_099 gabor_014    gabor_059_alt gabor_084 gabor_099_alt gabor_014     "2_17_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_2150_3000_2500_gabor_patch_orientation_059_084_099_014_target_position_1_3_retrieval_position_2"          gabor_circ gabor_084_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_084_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_099 gabor_165 gabor_117 gabor_079    gabor_099_alt gabor_165 gabor_117_alt gabor_079     "2_18_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_099_165_117_079_target_position_1_3_retrieval_position_1"          gabor_144_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2092  2992  2192      fixation_cross    gabor_159 gabor_080 gabor_099 gabor_040    gabor_159_alt gabor_080 gabor_099_alt gabor_040     "2_19_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2200_gabor_patch_orientation_159_080_099_040_target_position_1_3_retrieval_position_2"          gabor_circ gabor_129_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_129_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_123 gabor_094 gabor_018 gabor_045    gabor_123_alt gabor_094 gabor_018_alt gabor_045     "2_20_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_123_094_018_045_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_018_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_018_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2242  2992  2292      fixation_cross    gabor_097 gabor_017 gabor_045 gabor_164    gabor_097_alt gabor_017 gabor_045_alt gabor_164     "2_21_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_097_017_045_164_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_180_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_071 gabor_093 gabor_029 gabor_048    gabor_071_alt gabor_093_alt gabor_029 gabor_048     "2_22_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_071_093_029_048_target_position_1_2_retrieval_position_1"          gabor_071_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_003 gabor_134 gabor_160 gabor_087    gabor_003_alt gabor_134 gabor_160 gabor_087_alt     "2_23_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_003_134_160_087_target_position_1_4_retrieval_position_1"          gabor_050_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2092  2992  2442      fixation_cross    gabor_024 gabor_161 gabor_056 gabor_087    gabor_024_alt gabor_161 gabor_056_alt gabor_087     "2_24_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2450_gabor_patch_orientation_024_161_056_087_target_position_1_3_retrieval_position_2"          gabor_circ gabor_112_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_112_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_161 gabor_142 gabor_083 gabor_119    gabor_161_alt gabor_142_alt gabor_083 gabor_119     "2_25_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_161_142_083_119_target_position_1_2_retrieval_position_2"          gabor_circ gabor_142_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2042      fixation_cross    gabor_117 gabor_091 gabor_059 gabor_032    gabor_117 gabor_091 gabor_059_alt gabor_032_alt     "2_26_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_117_091_059_032_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_059_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_037 gabor_143 gabor_060 gabor_174    gabor_037_alt gabor_143 gabor_060_alt gabor_174     "2_27_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_037_143_060_174_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_109_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_002 gabor_163 gabor_038 gabor_079    gabor_002_alt gabor_163 gabor_038 gabor_079_alt     "2_28_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_002_163_038_079_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_124_framed    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  2542      fixation_cross    gabor_024 gabor_152 gabor_086 gabor_111    gabor_024 gabor_152_alt gabor_086_alt gabor_111     "2_29_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_024_152_086_111_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_086_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_086_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2292      fixation_cross    gabor_180 gabor_028 gabor_161 gabor_013    gabor_180_alt gabor_028 gabor_161_alt gabor_013     "2_30_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_180_028_161_013_target_position_1_3_retrieval_position_1"          gabor_045_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2142  2992  2342      fixation_cross    gabor_074 gabor_089 gabor_122 gabor_147    gabor_074 gabor_089 gabor_122_alt gabor_147_alt     "2_31_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_2150_3000_2350_gabor_patch_orientation_074_089_122_147_target_position_3_4_retrieval_position_2"          gabor_circ gabor_089_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_089_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  2592      fixation_cross    gabor_082 gabor_161 gabor_110 gabor_003    gabor_082_alt gabor_161 gabor_110 gabor_003_alt     "2_32_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_082_161_110_003_target_position_1_4_retrieval_position_1"          gabor_082_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2192  2992  2592      fixation_cross    gabor_129 gabor_177 gabor_063 gabor_007    gabor_129_alt gabor_177 gabor_063 gabor_007_alt     "2_33_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_129_177_063_007_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_147_framed    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_147_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_007 gabor_160 gabor_178 gabor_054    gabor_007_alt gabor_160_alt gabor_178 gabor_054     "2_34_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_007_160_178_054_target_position_1_2_retrieval_position_2"          gabor_circ gabor_160_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2392      fixation_cross    gabor_165 gabor_051 gabor_138 gabor_106    gabor_165_alt gabor_051 gabor_138_alt gabor_106     "2_35_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_165_051_138_106_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_090_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2092      fixation_cross    gabor_178 gabor_050 gabor_130 gabor_073    gabor_178_alt gabor_050 gabor_130 gabor_073_alt     "2_36_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_178_050_130_073_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_023_framed    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  1792  2992  1992      fixation_cross    gabor_004 gabor_080 gabor_038 gabor_054    gabor_004 gabor_080_alt gabor_038_alt gabor_054     "2_37_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2000_gabor_patch_orientation_004_080_038_054_target_position_2_3_retrieval_position_1"          gabor_144_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_144_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2092  2992  2042      fixation_cross    gabor_019 gabor_095 gabor_051 gabor_178    gabor_019 gabor_095 gabor_051_alt gabor_178_alt     "2_38_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_019_095_051_178_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_178_framed    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_078 gabor_117 gabor_032 gabor_142    gabor_078 gabor_117_alt gabor_032_alt gabor_142     "2_39_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_078_117_032_142_target_position_2_3_retrieval_position_2"          gabor_circ gabor_117_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1842  2992  2242      fixation_cross    gabor_068 gabor_157 gabor_008 gabor_135    gabor_068 gabor_157 gabor_008_alt gabor_135_alt     "2_40_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2250_gabor_patch_orientation_068_157_008_135_target_position_3_4_retrieval_position_1"          gabor_068_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_068_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  1892      fixation_cross    gabor_155 gabor_048 gabor_094 gabor_125    gabor_155_alt gabor_048_alt gabor_094 gabor_125     "2_41_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_155_048_094_125_target_position_1_2_retrieval_position_1"          gabor_155_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_062 gabor_098 gabor_114 gabor_030    gabor_062 gabor_098_alt gabor_114 gabor_030_alt     "2_42_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_062_098_114_030_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_080_framed    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2192  2992  2292      fixation_cross    gabor_180 gabor_133 gabor_163 gabor_028    gabor_180_alt gabor_133 gabor_163_alt gabor_028     "2_43_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_180_133_163_028_target_position_1_3_retrieval_position_1"          gabor_044_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1992  2992  2192      fixation_cross    gabor_010 gabor_120 gabor_162 gabor_137    gabor_010_alt gabor_120_alt gabor_162 gabor_137     "2_44_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2200_gabor_patch_orientation_010_120_162_137_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_137_framed    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_137_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_164 gabor_104 gabor_030 gabor_135    gabor_164 gabor_104 gabor_030_alt gabor_135_alt     "2_45_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_164_104_030_135_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_087_framed    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1992  2992  2392      fixation_cross    gabor_106 gabor_125 gabor_086 gabor_055    gabor_106_alt gabor_125_alt gabor_086 gabor_055     "2_46_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_106_125_086_055_target_position_1_2_retrieval_position_2"          gabor_circ gabor_125_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1992  2992  2392      fixation_cross    gabor_175 gabor_047 gabor_010 gabor_156    gabor_175_alt gabor_047_alt gabor_010 gabor_156     "2_47_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_175_047_010_156_target_position_1_2_retrieval_position_2"          gabor_circ gabor_047_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_047_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_154 gabor_173 gabor_022 gabor_128    gabor_154_alt gabor_173 gabor_022 gabor_128_alt     "2_48_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_154_173_022_128_target_position_1_4_retrieval_position_1"          gabor_154_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  2192  2992  2192      fixation_cross    gabor_063 gabor_176 gabor_127 gabor_013    gabor_063 gabor_176_alt gabor_127_alt gabor_013     "2_49_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_2200_gabor_patch_orientation_063_176_127_013_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_013_framed    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_013_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2492      fixation_cross    gabor_001 gabor_170 gabor_090 gabor_047    gabor_001_alt gabor_170_alt gabor_090 gabor_047     "2_50_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_001_170_090_047_target_position_1_2_retrieval_position_1"          gabor_137_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1942  2992  1992      fixation_cross    gabor_117 gabor_072 gabor_137 gabor_032    gabor_117_alt gabor_072 gabor_137_alt gabor_032     "2_51_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_117_072_137_032_target_position_1_3_retrieval_position_1"          gabor_117_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_088 gabor_104 gabor_163 gabor_135    gabor_088 gabor_104 gabor_163_alt gabor_135_alt     "2_52_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_088_104_163_135_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_163_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_089 gabor_035 gabor_050 gabor_159    gabor_089_alt gabor_035_alt gabor_050 gabor_159     "2_53_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_089_035_050_159_target_position_1_2_retrieval_position_2"          gabor_circ gabor_035_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1892  2992  2092      fixation_cross    gabor_014 gabor_140 gabor_032 gabor_050    gabor_014_alt gabor_140 gabor_032_alt gabor_050     "2_54_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_014_140_032_050_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_032_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_093 gabor_145 gabor_115 gabor_010    gabor_093_alt gabor_145 gabor_115 gabor_010_alt     "2_55_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_093_145_115_010_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_010_framed    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  1942      fixation_cross    gabor_015 gabor_151 gabor_173 gabor_104    gabor_015_alt gabor_151_alt gabor_173 gabor_104     "2_56_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_015_151_173_104_target_position_1_2_retrieval_position_1"          gabor_065_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    64   292   292   399   125  1792  2992  1992      fixation_cross    gabor_010 gabor_077 gabor_033 gabor_056    gabor_010 gabor_077_alt gabor_033 gabor_056_alt     "2_57_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_1800_3000_2000_gabor_patch_orientation_010_077_033_056_target_position_2_4_retrieval_position_1"          gabor_010_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_010_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1892  2992  2192      fixation_cross    gabor_077 gabor_135 gabor_151 gabor_100    gabor_077 gabor_135_alt gabor_151_alt gabor_100     "2_58_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_077_135_151_100_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_015_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2242  2992  2592      fixation_cross    gabor_001 gabor_126 gabor_110 gabor_046    gabor_001_alt gabor_126 gabor_110_alt gabor_046     "2_59_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2600_gabor_patch_orientation_001_126_110_046_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_063_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  2092  2992  2542      fixation_cross    gabor_146 gabor_125 gabor_056 gabor_086    gabor_146 gabor_125 gabor_056_alt gabor_086_alt     "2_60_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_146_125_056_086_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_036_framed    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2142  2992  1942      fixation_cross    gabor_016 gabor_122 gabor_081 gabor_059    gabor_016_alt gabor_122_alt gabor_081 gabor_059     "2_61_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_2150_3000_1950_gabor_patch_orientation_016_122_081_059_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_036_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_036_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_117 gabor_100 gabor_076 gabor_034    gabor_117_alt gabor_100 gabor_076 gabor_034_alt     "2_62_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_117_100_076_034_target_position_1_4_retrieval_position_1"          gabor_117_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1792  2992  2042      fixation_cross    gabor_003 gabor_112 gabor_148 gabor_043    gabor_003_alt gabor_112 gabor_148 gabor_043_alt     "2_63_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_003_112_148_043_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_180_framed    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2242  2992  2542      fixation_cross    gabor_003 gabor_056 gabor_170 gabor_036    gabor_003_alt gabor_056_alt gabor_170 gabor_036     "2_64_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_2550_gabor_patch_orientation_003_056_170_036_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_122_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_122_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_025 gabor_043 gabor_148 gabor_094    gabor_025 gabor_043_alt gabor_148 gabor_094_alt     "2_65_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_025_043_148_094_target_position_2_4_retrieval_position_2"          gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1992  2992  2542      fixation_cross    gabor_157 gabor_020 gabor_142 gabor_088    gabor_157_alt gabor_020_alt gabor_142 gabor_088     "2_66_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_157_020_142_088_target_position_1_2_retrieval_position_1"          gabor_107_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_107_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1742  2992  1892      fixation_cross    gabor_041 gabor_147 gabor_057 gabor_017    gabor_041 gabor_147 gabor_057_alt gabor_017_alt     "2_67_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_041_147_057_017_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_057_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_057_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_110 gabor_177 gabor_040 gabor_153    gabor_110_alt gabor_177 gabor_040_alt gabor_153     "2_68_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_110_177_040_153_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_087_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    62   292   292   399   125  1792  2992  2242      fixation_cross    gabor_074 gabor_179 gabor_050 gabor_092    gabor_074_alt gabor_179_alt gabor_050 gabor_092     "2_69_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_074_179_050_092_target_position_1_2_retrieval_position_1"          gabor_074_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   42    63   292   292   399   125  2192  2992  2292      fixation_cross    gabor_171 gabor_046 gabor_018 gabor_105    gabor_171 gabor_046 gabor_018_alt gabor_105_alt     "2_70_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2300_gabor_patch_orientation_171_046_018_105_target_position_3_4_retrieval_position_1"          gabor_124_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_124_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 