# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;	  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   44    62   292   292   399   125  2192  2992  1992      fixation_cross    gabor_141 gabor_069 gabor_158 gabor_086    gabor_141 gabor_069_alt gabor_158_alt gabor_086      "2_1_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_141_069_158_086_target_position_1_4_retrieval_position_1"       gabor_141_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2542      fixation_cross    gabor_120 gabor_081 gabor_040 gabor_096    gabor_120 gabor_081_alt gabor_040_alt gabor_096      "2_2_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2550_gabor_patch_orientation_120_081_040_096_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_096_framed    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_167 gabor_002 gabor_049 gabor_083    gabor_167_alt gabor_002 gabor_049 gabor_083_alt      "2_3_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_167_002_049_083_target_position_2_3_retrieval_position_2"       gabor_circ gabor_138_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  2442      fixation_cross    gabor_003 gabor_130 gabor_164 gabor_058    gabor_003_alt gabor_130 gabor_164_alt gabor_058      "2_4_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_003_130_164_058_target_position_2_4_retrieval_position_2"       gabor_circ gabor_130_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_153 gabor_072 gabor_012 gabor_045    gabor_153 gabor_072 gabor_012_alt gabor_045_alt      "2_5_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_153_072_012_045_target_position_1_2_retrieval_position_2"       gabor_circ gabor_119_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1992  2992  2042      fixation_cross    gabor_148 gabor_130 gabor_010 gabor_085    gabor_148 gabor_130 gabor_010_alt gabor_085_alt      "2_6_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2000_3000_2050_gabor_patch_orientation_148_130_010_085_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_010_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_010_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2492      fixation_cross    gabor_070 gabor_134 gabor_001 gabor_111    gabor_070_alt gabor_134 gabor_001_alt gabor_111      "2_7_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_070_134_001_111_target_position_2_4_retrieval_position_2"       gabor_circ gabor_134_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2592      fixation_cross    gabor_049 gabor_070 gabor_027 gabor_177    gabor_049 gabor_070_alt gabor_027_alt gabor_177      "2_8_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2600_gabor_patch_orientation_049_070_027_177_target_position_1_4_retrieval_position_1"       gabor_096_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  1992      fixation_cross    gabor_124 gabor_104 gabor_145 gabor_040    gabor_124 gabor_104_alt gabor_145_alt gabor_040      "2_9_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_124_104_145_040_target_position_1_4_retrieval_position_1"       gabor_124_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  2342      fixation_cross    gabor_070 gabor_156 gabor_136 gabor_090    gabor_070_alt gabor_156 gabor_136_alt gabor_090     "2_10_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_070_156_136_090_target_position_2_4_retrieval_position_2"       gabor_circ gabor_156_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2542      fixation_cross    gabor_141 gabor_125 gabor_081 gabor_099    gabor_141_alt gabor_125 gabor_081_alt gabor_099     "2_11_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_141_125_081_099_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_099_framed    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1842  2992  2242      fixation_cross    gabor_054 gabor_097 gabor_022 gabor_073    gabor_054 gabor_097_alt gabor_022 gabor_073_alt     "2_12_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2250_gabor_patch_orientation_054_097_022_073_target_position_1_3_retrieval_position_2"       gabor_circ gabor_143_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_143_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2592      fixation_cross    gabor_058 gabor_083 gabor_169 gabor_022    gabor_058_alt gabor_083 gabor_169 gabor_022_alt     "2_13_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2600_gabor_patch_orientation_058_083_169_022_target_position_2_3_retrieval_position_2"       gabor_circ gabor_130_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2342      fixation_cross    gabor_112 gabor_085 gabor_167 gabor_129    gabor_112_alt gabor_085 gabor_167_alt gabor_129     "2_14_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_112_085_167_129_target_position_2_4_retrieval_position_2"       gabor_circ gabor_039_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1892  2992  1992      fixation_cross    gabor_046 gabor_119 gabor_075 gabor_095    gabor_046 gabor_119 gabor_075_alt gabor_095_alt     "2_15_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2000_gabor_patch_orientation_046_119_075_095_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_075_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_075_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_074 gabor_050 gabor_179 gabor_025    gabor_074 gabor_050 gabor_179_alt gabor_025_alt     "2_16_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_074_050_179_025_target_position_1_2_retrieval_position_2"       gabor_circ gabor_050_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  1892      fixation_cross    gabor_157 gabor_094 gabor_048 gabor_112    gabor_157 gabor_094_alt gabor_048 gabor_112_alt     "2_17_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_157_094_048_112_target_position_1_3_retrieval_position_1"       gabor_157_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_157_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  2492      fixation_cross    gabor_043 gabor_148 gabor_179 gabor_060    gabor_043_alt gabor_148 gabor_179 gabor_060_alt     "2_18_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_043_148_179_060_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_132_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1742  2992  2492      fixation_cross    gabor_077 gabor_093 gabor_160 gabor_007    gabor_077_alt gabor_093 gabor_160 gabor_007_alt     "2_19_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2500_gabor_patch_orientation_077_093_160_007_target_position_2_3_retrieval_position_1"       gabor_077_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_077_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1792  2992  2392      fixation_cross    gabor_118 gabor_039 gabor_063 gabor_005    gabor_118_alt gabor_039 gabor_063 gabor_005_alt     "2_20_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_118_039_063_005_target_position_2_3_retrieval_position_2"       gabor_circ gabor_039_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  2442      fixation_cross    gabor_017 gabor_153 gabor_078 gabor_042    gabor_017_alt gabor_153 gabor_078 gabor_042_alt     "2_21_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_017_153_078_042_target_position_2_3_retrieval_position_2"       gabor_circ gabor_105_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2242      fixation_cross    gabor_056 gabor_141 gabor_030 gabor_093    gabor_056 gabor_141 gabor_030_alt gabor_093_alt     "2_22_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_056_141_030_093_target_position_1_2_retrieval_position_1"       gabor_011_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2092      fixation_cross    gabor_044 gabor_179 gabor_012 gabor_158    gabor_044 gabor_179_alt gabor_012_alt gabor_158     "2_23_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_044_179_012_158_target_position_1_4_retrieval_position_1"       gabor_094_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_034 gabor_055 gabor_012 gabor_097    gabor_034 gabor_055 gabor_012_alt gabor_097_alt     "2_24_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_034_055_012_097_target_position_1_2_retrieval_position_1"       gabor_170_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2542      fixation_cross    gabor_120 gabor_039 gabor_101 gabor_059    gabor_120 gabor_039_alt gabor_101_alt gabor_059     "2_25_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_120_039_101_059_target_position_1_4_retrieval_position_1"       gabor_120_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2342      fixation_cross    gabor_107 gabor_050 gabor_174 gabor_021    gabor_107 gabor_050_alt gabor_174_alt gabor_021     "2_26_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_107_050_174_021_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_156_framed    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2142  2992  1942      fixation_cross    gabor_134 gabor_049 gabor_154 gabor_095    gabor_134_alt gabor_049 gabor_154_alt gabor_095     "2_27_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_1950_gabor_patch_orientation_134_049_154_095_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_015_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_015_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  2092      fixation_cross    gabor_081 gabor_052 gabor_102 gabor_119    gabor_081 gabor_052_alt gabor_102_alt gabor_119     "2_28_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_081_052_102_119_target_position_1_4_retrieval_position_1"       gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_083 gabor_144 gabor_018 gabor_108    gabor_083 gabor_144_alt gabor_018 gabor_108_alt     "2_29_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_083_144_018_108_target_position_1_3_retrieval_position_1"       gabor_083_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  1942      fixation_cross    gabor_049 gabor_155 gabor_002 gabor_027    gabor_049_alt gabor_155_alt gabor_002 gabor_027     "2_30_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_049_155_002_027_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_027_framed    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2092  2992  1992      fixation_cross    gabor_094 gabor_177 gabor_111 gabor_005    gabor_094_alt gabor_177 gabor_111_alt gabor_005     "2_31_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2000_gabor_patch_orientation_094_177_111_005_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_111_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_111_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  2392      fixation_cross    gabor_062 gabor_035 gabor_140 gabor_081    gabor_062_alt gabor_035 gabor_140 gabor_081_alt     "2_32_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_062_035_140_081_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_003_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  1892      fixation_cross    gabor_047 gabor_019 gabor_134 gabor_073    gabor_047_alt gabor_019 gabor_134 gabor_073_alt     "2_33_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_047_019_134_073_target_position_2_3_retrieval_position_2"       gabor_circ gabor_158_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_125 gabor_149 gabor_040 gabor_001    gabor_125_alt gabor_149 gabor_040 gabor_001_alt     "2_34_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_125_149_040_001_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_088_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2042      fixation_cross    gabor_095 gabor_074 gabor_052 gabor_113    gabor_095_alt gabor_074_alt gabor_052 gabor_113     "2_35_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_095_074_052_113_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_052_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2092  2992  1942      fixation_cross    gabor_070 gabor_091 gabor_129 gabor_007    gabor_070_alt gabor_091 gabor_129_alt gabor_007     "2_36_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_070_091_129_007_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_145_framed    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_145_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2092  2992  2392      fixation_cross    gabor_093 gabor_031 gabor_048 gabor_119    gabor_093_alt gabor_031 gabor_048_alt gabor_119     "2_37_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2400_gabor_patch_orientation_093_031_048_119_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_003_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_003_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2142      fixation_cross    gabor_004 gabor_112 gabor_082 gabor_136    gabor_004_alt gabor_112 gabor_082_alt gabor_136     "2_38_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_004_112_082_136_target_position_2_4_retrieval_position_2"       gabor_circ gabor_112_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1792  2992  1892      fixation_cross    gabor_159 gabor_072 gabor_111 gabor_089    gabor_159 gabor_072_alt gabor_111 gabor_089_alt     "2_39_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_1900_gabor_patch_orientation_159_072_111_089_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_135_framed    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_135_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2142      fixation_cross    gabor_043 gabor_081 gabor_065 gabor_002    gabor_043_alt gabor_081 gabor_065 gabor_002_alt     "2_40_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_043_081_065_002_target_position_2_3_retrieval_position_2"       gabor_circ gabor_081_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2092      fixation_cross    gabor_041 gabor_018 gabor_170 gabor_148    gabor_041 gabor_018_alt gabor_170 gabor_148_alt     "2_41_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_041_018_170_148_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_170_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2192      fixation_cross    gabor_088 gabor_018 gabor_107 gabor_158    gabor_088 gabor_018 gabor_107_alt gabor_158_alt     "2_42_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_088_018_107_158_target_position_1_2_retrieval_position_1"       gabor_088_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_048 gabor_129 gabor_157 gabor_110    gabor_048 gabor_129_alt gabor_157_alt gabor_110     "2_43_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_048_129_157_110_target_position_1_4_retrieval_position_1"       gabor_048_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1792  2992  1942      fixation_cross    gabor_129 gabor_148 gabor_165 gabor_015    gabor_129 gabor_148_alt gabor_165 gabor_015_alt     "2_44_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_1950_gabor_patch_orientation_129_148_165_015_target_position_1_3_retrieval_position_2"       gabor_circ gabor_101_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_101_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  1942      fixation_cross    gabor_135 gabor_007 gabor_160 gabor_117    gabor_135_alt gabor_007 gabor_160_alt gabor_117     "2_45_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_135_007_160_117_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_117_framed    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2342      fixation_cross    gabor_156 gabor_013 gabor_041 gabor_086    gabor_156 gabor_013_alt gabor_041 gabor_086_alt     "2_46_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_156_013_041_086_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_176_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_042 gabor_068 gabor_152 gabor_089    gabor_042 gabor_068_alt gabor_152 gabor_089_alt     "2_47_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_042_068_152_089_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_105_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  1892      fixation_cross    gabor_087 gabor_147 gabor_025 gabor_067    gabor_087 gabor_147 gabor_025_alt gabor_067_alt     "2_48_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_087_147_025_067_target_position_1_2_retrieval_position_1"       gabor_087_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2242  2992  2192      fixation_cross    gabor_060 gabor_036 gabor_108 gabor_088    gabor_060 gabor_036 gabor_108_alt gabor_088_alt     "2_49_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_060_036_108_088_target_position_1_2_retrieval_position_2"       gabor_circ gabor_175_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1742  2992  2442      fixation_cross    gabor_110 gabor_146 gabor_173 gabor_086    gabor_110_alt gabor_146 gabor_173 gabor_086_alt     "2_50_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2450_gabor_patch_orientation_110_146_173_086_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_086_framed    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_086_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_106 gabor_018 gabor_048 gabor_081    gabor_106 gabor_018 gabor_048_alt gabor_081_alt     "2_51_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_106_018_048_081_target_position_1_2_retrieval_position_1"       gabor_154_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  2292      fixation_cross    gabor_059 gabor_029 gabor_114 gabor_094    gabor_059_alt gabor_029_alt gabor_114 gabor_094     "2_52_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_059_029_114_094_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_094_framed    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1942  2992  1992      fixation_cross    gabor_019 gabor_043 gabor_075 gabor_097    gabor_019 gabor_043_alt gabor_075 gabor_097_alt     "2_53_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_019_043_075_097_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_125_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_108 gabor_164 gabor_148 gabor_080    gabor_108_alt gabor_164_alt gabor_148 gabor_080     "2_54_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_108_164_148_080_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_080_framed    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2242  2992  1892      fixation_cross    gabor_113 gabor_166 gabor_034 gabor_097    gabor_113 gabor_166_alt gabor_034_alt gabor_097     "2_55_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_1900_gabor_patch_orientation_113_166_034_097_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_034_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_034_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_044 gabor_152 gabor_063 gabor_001    gabor_044_alt gabor_152_alt gabor_063 gabor_001     "2_56_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_044_152_063_001_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_063_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2092  2992  2142      fixation_cross    gabor_085 gabor_021 gabor_066 gabor_106    gabor_085 gabor_021 gabor_066_alt gabor_106_alt     "2_57_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_085_021_066_106_target_position_1_2_retrieval_position_2"       gabor_circ gabor_156_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_145 gabor_009 gabor_040 gabor_130    gabor_145 gabor_009 gabor_040_alt gabor_130_alt     "2_58_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_145_009_040_130_target_position_1_2_retrieval_position_1"       gabor_145_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_145_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2192  2992  2392      fixation_cross    gabor_092 gabor_146 gabor_175 gabor_065    gabor_092 gabor_146 gabor_175_alt gabor_065_alt     "2_59_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_092_146_175_065_target_position_1_2_retrieval_position_2"       gabor_circ gabor_009_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1942  2992  2292      fixation_cross    gabor_177 gabor_130 gabor_159 gabor_101    gabor_177_alt gabor_130 gabor_159_alt gabor_101     "2_60_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_177_130_159_101_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_053_framed    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2042      fixation_cross    gabor_067 gabor_141 gabor_109 gabor_082    gabor_067_alt gabor_141 gabor_109_alt gabor_082     "2_61_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_067_141_109_082_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_082_framed    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1892  2992  2492      fixation_cross    gabor_037 gabor_022 gabor_053 gabor_127    gabor_037 gabor_022 gabor_053_alt gabor_127_alt     "2_62_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1900_3000_2500_gabor_patch_orientation_037_022_053_127_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_005_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_005_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  2542      fixation_cross    gabor_048 gabor_155 gabor_021 gabor_070    gabor_048 gabor_155 gabor_021_alt gabor_070_alt     "2_63_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_048_155_021_070_target_position_1_2_retrieval_position_2"       gabor_circ gabor_155_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2042  2992  2242      fixation_cross    gabor_149 gabor_023 gabor_084 gabor_062    gabor_149_alt gabor_023 gabor_084_alt gabor_062     "2_64_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_2250_gabor_patch_orientation_149_023_084_062_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_084_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_084_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2342      fixation_cross    gabor_177 gabor_068 gabor_127 gabor_155    gabor_177 gabor_068_alt gabor_127_alt gabor_155     "2_65_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_177_068_127_155_target_position_1_4_retrieval_position_1"       gabor_039_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2242  2992  2192      fixation_cross    gabor_096 gabor_176 gabor_161 gabor_112    gabor_096 gabor_176_alt gabor_161 gabor_112_alt     "2_66_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_096_176_161_112_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_026_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_085 gabor_112 gabor_053 gabor_003    gabor_085_alt gabor_112 gabor_053_alt gabor_003     "2_67_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_085_112_053_003_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_003_framed    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2442      fixation_cross    gabor_120 gabor_049 gabor_079 gabor_013    gabor_120_alt gabor_049 gabor_079 gabor_013_alt     "2_68_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2450_gabor_patch_orientation_120_049_079_013_target_position_2_3_retrieval_position_2"       gabor_circ gabor_096_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2042      fixation_cross    gabor_091 gabor_119 gabor_139 gabor_173    gabor_091 gabor_119_alt gabor_139 gabor_173_alt     "2_69_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_091_119_139_173_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_002_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2192  2992  2192      fixation_cross    gabor_170 gabor_104 gabor_121 gabor_089    gabor_170 gabor_104 gabor_121_alt gabor_089_alt     "2_70_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2200_gabor_patch_orientation_170_104_121_089_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_043_framed    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_043_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  