# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_099 gabor_132 gabor_073 gabor_024    gabor_099_alt gabor_132_alt gabor_073 gabor_024      "2_1_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_099_132_073_024_target_position_1_2_retrieval_position_1"          gabor_052_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_073 gabor_056 gabor_011 gabor_030    gabor_073 gabor_056_alt gabor_011_alt gabor_030      "2_2_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_073_056_011_030_target_position_2_3_retrieval_position_2"          gabor_circ gabor_056_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2042      fixation_cross    gabor_020 gabor_048 gabor_177 gabor_094    gabor_020_alt gabor_048_alt gabor_177 gabor_094      "2_3_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_020_048_177_094_target_position_1_2_retrieval_position_1"          gabor_158_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2242      fixation_cross    gabor_154 gabor_134 gabor_013 gabor_073    gabor_154_alt gabor_134_alt gabor_013 gabor_073      "2_4_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_154_134_013_073_target_position_1_2_retrieval_position_2"          gabor_circ gabor_134_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2592      fixation_cross    gabor_140 gabor_025 gabor_167 gabor_113    gabor_140_alt gabor_025 gabor_167 gabor_113_alt      "2_5_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2600_gabor_patch_orientation_140_025_167_113_target_position_1_4_retrieval_position_1"          gabor_140_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1892  2992  2092      fixation_cross    gabor_081 gabor_101 gabor_044 gabor_016    gabor_081_alt gabor_101_alt gabor_044 gabor_016      "2_6_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2100_gabor_patch_orientation_081_101_044_016_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_152_framed    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_152_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2392      fixation_cross    gabor_048 gabor_017 gabor_122 gabor_080    gabor_048 gabor_017 gabor_122_alt gabor_080_alt      "2_7_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_048_017_122_080_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_169_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_110 gabor_023 gabor_087 gabor_072    gabor_110_alt gabor_023_alt gabor_087 gabor_072      "2_8_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_110_023_087_072_target_position_1_2_retrieval_position_2"          gabor_circ gabor_023_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2492      fixation_cross    gabor_164 gabor_043 gabor_127 gabor_148    gabor_164_alt gabor_043 gabor_127_alt gabor_148      "2_9_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_164_043_127_148_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_127_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2392      fixation_cross    gabor_167 gabor_094 gabor_017 gabor_062    gabor_167_alt gabor_094_alt gabor_017 gabor_062     "2_10_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_167_094_017_062_target_position_1_2_retrieval_position_2"          gabor_circ gabor_141_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_044 gabor_149 gabor_066 gabor_006    gabor_044 gabor_149_alt gabor_066_alt gabor_006     "2_11_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_044_149_066_006_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_112_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1942  2992  2492      fixation_cross    gabor_061 gabor_178 gabor_013 gabor_130    gabor_061_alt gabor_178 gabor_013 gabor_130_alt     "2_12_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2500_gabor_patch_orientation_061_178_013_130_target_position_1_4_retrieval_position_2"          gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_040_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  1942      fixation_cross    gabor_125 gabor_148 gabor_104 gabor_080    gabor_125_alt gabor_148 gabor_104_alt gabor_080     "2_13_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_125_148_104_080_target_position_1_3_retrieval_position_1"          gabor_125_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2342      fixation_cross    gabor_113 gabor_025 gabor_072 gabor_051    gabor_113_alt gabor_025_alt gabor_072 gabor_051     "2_14_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_113_025_072_051_target_position_1_2_retrieval_position_1"          gabor_113_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2042  2992  2342      fixation_cross    gabor_123 gabor_018 gabor_039 gabor_096    gabor_123 gabor_018_alt gabor_039 gabor_096_alt     "2_15_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_2050_3000_2350_gabor_patch_orientation_123_018_039_096_target_position_2_4_retrieval_position_1"          gabor_172_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_172_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2142      fixation_cross    gabor_060 gabor_174 gabor_035 gabor_015    gabor_060_alt gabor_174_alt gabor_035 gabor_015     "2_16_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_060_174_035_015_target_position_1_2_retrieval_position_1"          gabor_105_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2342      fixation_cross    gabor_174 gabor_143 gabor_093 gabor_060    gabor_174_alt gabor_143 gabor_093_alt gabor_060     "2_17_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_174_143_093_060_target_position_1_3_retrieval_position_1"          gabor_126_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2542      fixation_cross    gabor_175 gabor_116 gabor_042 gabor_155    gabor_175_alt gabor_116 gabor_042_alt gabor_155     "2_18_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_175_116_042_155_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_042_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_176 gabor_161 gabor_093 gabor_030    gabor_176_alt gabor_161_alt gabor_093 gabor_030     "2_19_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_176_161_093_030_target_position_1_2_retrieval_position_2"          gabor_circ gabor_116_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1842  2992  2292      fixation_cross    gabor_018 gabor_085 gabor_068 gabor_126    gabor_018 gabor_085_alt gabor_068_alt gabor_126     "2_20_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2300_gabor_patch_orientation_018_085_068_126_target_position_2_3_retrieval_position_1"          gabor_155_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_155_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2242      fixation_cross    gabor_178 gabor_109 gabor_053 gabor_030    gabor_178 gabor_109 gabor_053_alt gabor_030_alt     "2_21_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_178_109_053_030_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_053_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_129 gabor_152 gabor_062 gabor_023    gabor_129 gabor_152_alt gabor_062 gabor_023_alt     "2_22_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_129_152_062_023_target_position_2_4_retrieval_position_2"          gabor_circ gabor_152_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2192      fixation_cross    gabor_044 gabor_130 gabor_110 gabor_095    gabor_044 gabor_130_alt gabor_110_alt gabor_095     "2_23_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_044_130_110_095_target_position_2_3_retrieval_position_2"          gabor_circ gabor_130_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2192      fixation_cross    gabor_067 gabor_082 gabor_002 gabor_031    gabor_067_alt gabor_082_alt gabor_002 gabor_031     "2_24_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_067_082_002_031_target_position_1_2_retrieval_position_1"          gabor_067_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2242      fixation_cross    gabor_101 gabor_058 gabor_034 gabor_118    gabor_101 gabor_058_alt gabor_034 gabor_118_alt     "2_25_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_101_058_034_118_target_position_2_4_retrieval_position_2"          gabor_circ gabor_058_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_058_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_018 gabor_077 gabor_037 gabor_062    gabor_018_alt gabor_077 gabor_037 gabor_062_alt     "2_26_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_018_077_037_062_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_062_framed    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_062_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_093 gabor_147 gabor_127 gabor_062    gabor_093 gabor_147_alt gabor_127_alt gabor_062     "2_27_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_093_147_127_062_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_176_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1792  2992  1942      fixation_cross    gabor_141 gabor_112 gabor_067 gabor_173    gabor_141_alt gabor_112_alt gabor_067 gabor_173     "2_28_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_1950_gabor_patch_orientation_141_112_067_173_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_022_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_022_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2542      fixation_cross    gabor_060 gabor_003 gabor_076 gabor_022    gabor_060_alt gabor_003_alt gabor_076 gabor_022     "2_29_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_060_003_076_022_target_position_1_2_retrieval_position_2"          gabor_circ gabor_003_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  1992      fixation_cross    gabor_093 gabor_128 gabor_075 gabor_056    gabor_093 gabor_128_alt gabor_075 gabor_056_alt     "2_30_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_093_128_075_056_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_011_framed    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2592      fixation_cross    gabor_054 gabor_094 gabor_122 gabor_033    gabor_054 gabor_094_alt gabor_122 gabor_033_alt     "2_31_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_054_094_122_033_target_position_2_4_retrieval_position_2"          gabor_circ gabor_139_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2242  2992  2042      fixation_cross    gabor_130 gabor_008 gabor_165 gabor_088    gabor_130_alt gabor_008 gabor_165_alt gabor_088     "2_32_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2050_gabor_patch_orientation_130_008_165_088_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_088_framed    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_088_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_091 gabor_030 gabor_012 gabor_165    gabor_091 gabor_030_alt gabor_012 gabor_165_alt     "2_33_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_091_030_012_165_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_119_framed    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_065 gabor_155 gabor_174 gabor_086    gabor_065_alt gabor_155 gabor_174 gabor_086_alt     "2_34_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_065_155_174_086_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_086_framed    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_086_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_151 gabor_037 gabor_111 gabor_176    gabor_151 gabor_037_alt gabor_111_alt gabor_176     "2_35_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_151_037_111_176_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_064_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_076 gabor_045 gabor_154 gabor_113    gabor_076_alt gabor_045 gabor_154 gabor_113_alt     "2_36_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_076_045_154_113_target_position_1_4_retrieval_position_1"          gabor_029_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2442      fixation_cross    gabor_166 gabor_089 gabor_004 gabor_109    gabor_166_alt gabor_089 gabor_004 gabor_109_alt     "2_37_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_166_089_004_109_target_position_1_4_retrieval_position_1"          gabor_166_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1942  2992  2542      fixation_cross    gabor_109 gabor_129 gabor_156 gabor_086    gabor_109_alt gabor_129 gabor_156_alt gabor_086     "2_38_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2550_gabor_patch_orientation_109_129_156_086_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_086_framed    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_086_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2392      fixation_cross    gabor_128 gabor_101 gabor_039 gabor_023    gabor_128_alt gabor_101 gabor_039 gabor_023_alt     "2_39_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_128_101_039_023_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_023_framed    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  2592      fixation_cross    gabor_152 gabor_020 gabor_043 gabor_078    gabor_152 gabor_020 gabor_043_alt gabor_078_alt     "2_40_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_152_020_043_078_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_128_framed    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2242  2992  2442      fixation_cross    gabor_031 gabor_055 gabor_076 gabor_104    gabor_031_alt gabor_055 gabor_076 gabor_104_alt     "2_41_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2450_gabor_patch_orientation_031_055_076_104_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_076_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_076_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  1892      fixation_cross    gabor_064 gabor_049 gabor_111 gabor_135    gabor_064 gabor_049_alt gabor_111_alt gabor_135     "2_42_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_064_049_111_135_target_position_2_3_retrieval_position_2"          gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_078 gabor_045 gabor_154 gabor_104    gabor_078_alt gabor_045_alt gabor_154 gabor_104     "2_43_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_078_045_154_104_target_position_1_2_retrieval_position_1"          gabor_128_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2542      fixation_cross    gabor_131 gabor_092 gabor_073 gabor_018    gabor_131_alt gabor_092 gabor_073 gabor_018_alt     "2_44_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_131_092_073_018_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_018_framed    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_018_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2242  2992  2092      fixation_cross    gabor_099 gabor_053 gabor_123 gabor_017    gabor_099 gabor_053_alt gabor_123 gabor_017_alt     "2_45_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2100_gabor_patch_orientation_099_053_123_017_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_123_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_123_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_178 gabor_037 gabor_015 gabor_068    gabor_178_alt gabor_037 gabor_015_alt gabor_068     "2_46_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_178_037_015_068_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_015_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_112 gabor_168 gabor_057 gabor_084    gabor_112 gabor_168_alt gabor_057_alt gabor_084     "2_47_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_112_168_057_084_target_position_2_3_retrieval_position_2"          gabor_circ gabor_029_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_116 gabor_145 gabor_062 gabor_082    gabor_116 gabor_145_alt gabor_062 gabor_082_alt     "2_48_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_116_145_062_082_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_082_framed    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_088 gabor_009 gabor_138 gabor_161    gabor_088 gabor_009 gabor_138_alt gabor_161_alt     "2_49_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_088_009_138_161_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_161_framed    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  1892      fixation_cross    gabor_003 gabor_080 gabor_062 gabor_027    gabor_003_alt gabor_080 gabor_062_alt gabor_027     "2_50_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_003_080_062_027_target_position_1_3_retrieval_position_1"          gabor_142_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2442      fixation_cross    gabor_013 gabor_174 gabor_101 gabor_126    gabor_013_alt gabor_174 gabor_101 gabor_126_alt     "2_51_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_013_174_101_126_target_position_1_4_retrieval_position_1"          gabor_061_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1992  2992  2142      fixation_cross    gabor_175 gabor_002 gabor_069 gabor_088    gabor_175 gabor_002_alt gabor_069_alt gabor_088     "2_52_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2150_gabor_patch_orientation_175_002_069_088_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_088_framed    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_088_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2042      fixation_cross    gabor_154 gabor_086 gabor_043 gabor_169    gabor_154 gabor_086_alt gabor_043 gabor_169_alt     "2_53_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_154_086_043_169_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_123_framed    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2192      fixation_cross    gabor_058 gabor_174 gabor_099 gabor_010    gabor_058 gabor_174_alt gabor_099_alt gabor_010     "2_54_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_058_174_099_010_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_147_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_147_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2242      fixation_cross    gabor_031 gabor_145 gabor_117 gabor_012    gabor_031 gabor_145 gabor_117_alt gabor_012_alt     "2_55_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_031_145_117_012_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_167_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  1892      fixation_cross    gabor_025 gabor_045 gabor_133 gabor_166    gabor_025 gabor_045_alt gabor_133 gabor_166_alt     "2_56_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_025_045_133_166_target_position_2_4_retrieval_position_2"          gabor_circ gabor_093_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1892  2992  2092      fixation_cross    gabor_122 gabor_012 gabor_160 gabor_102    gabor_122 gabor_012_alt gabor_160_alt gabor_102     "2_57_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2100_gabor_patch_orientation_122_012_160_102_target_position_2_3_retrieval_position_1"          gabor_077_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_077_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2192      fixation_cross    gabor_007 gabor_142 gabor_115 gabor_163    gabor_007 gabor_142 gabor_115_alt gabor_163_alt     "2_58_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_007_142_115_163_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_163_framed    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2592      fixation_cross    gabor_173 gabor_044 gabor_020 gabor_155    gabor_173 gabor_044_alt gabor_020_alt gabor_155     "2_59_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_173_044_020_155_target_position_2_3_retrieval_position_2"          gabor_circ gabor_044_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_043 gabor_075 gabor_103 gabor_155    gabor_043 gabor_075 gabor_103_alt gabor_155_alt     "2_60_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_043_075_103_155_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_016_framed    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  2492      fixation_cross    gabor_041 gabor_056 gabor_084 gabor_165    gabor_041_alt gabor_056 gabor_084_alt gabor_165     "2_61_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_041_056_084_165_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_084_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  1942      fixation_cross    gabor_067 gabor_176 gabor_051 gabor_009    gabor_067 gabor_176_alt gabor_051 gabor_009_alt     "2_62_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_067_176_051_009_target_position_2_4_retrieval_position_2"          gabor_circ gabor_127_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2092  2992  2292      fixation_cross    gabor_099 gabor_146 gabor_017 gabor_177    gabor_099_alt gabor_146 gabor_017_alt gabor_177     "2_63_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2300_gabor_patch_orientation_099_146_017_177_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_177_framed    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_177_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2192      fixation_cross    gabor_111 gabor_006 gabor_130 gabor_180    gabor_111_alt gabor_006_alt gabor_130 gabor_180     "2_64_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_111_006_130_180_target_position_1_2_retrieval_position_2"          gabor_circ gabor_006_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2392      fixation_cross    gabor_147 gabor_169 gabor_008 gabor_091    gabor_147 gabor_169_alt gabor_008 gabor_091_alt     "2_65_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_147_169_008_091_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_091_framed    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_154 gabor_048 gabor_169 gabor_011    gabor_154_alt gabor_048_alt gabor_169 gabor_011     "2_66_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_154_048_169_011_target_position_1_2_retrieval_position_2"          gabor_circ gabor_048_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2142      fixation_cross    gabor_176 gabor_063 gabor_095 gabor_128    gabor_176 gabor_063_alt gabor_095 gabor_128_alt     "2_67_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_176_063_095_128_target_position_2_4_retrieval_position_2"          gabor_circ gabor_016_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2142  2992  2292      fixation_cross    gabor_178 gabor_123 gabor_140 gabor_011    gabor_178 gabor_123_alt gabor_140 gabor_011_alt     "2_68_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2150_3000_2300_gabor_patch_orientation_178_123_140_011_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_140_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_140_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  1892      fixation_cross    gabor_146 gabor_165 gabor_103 gabor_033    gabor_146 gabor_165_alt gabor_103 gabor_033_alt     "2_69_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_1900_gabor_patch_orientation_146_165_103_033_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_083_framed    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1842  2992  1892      fixation_cross    gabor_166 gabor_048 gabor_025 gabor_081    gabor_166_alt gabor_048_alt gabor_025 gabor_081     "2_70_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_1900_gabor_patch_orientation_166_048_025_081_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_131_framed    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_131_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 