# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_176 gabor_058 gabor_116 gabor_005    gabor_176 gabor_058_alt gabor_116_alt gabor_005      "1_1_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_176_058_116_005_target_position_1_4_retrieval_position_1"        gabor_039_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "1_1_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_076 gabor_038 gabor_098 gabor_166    gabor_076 gabor_038_alt gabor_098 gabor_166_alt      "1_2_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_076_038_098_166_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_148_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_2_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2292      fixation_cross    gabor_158 gabor_013 gabor_048 gabor_081    gabor_158 gabor_013_alt gabor_048_alt gabor_081      "1_3_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_158_013_048_081_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_130_framed    blank blank blank blank    fixation_cross_target_position_1_4     "1_3_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2142      fixation_cross    gabor_020 gabor_145 gabor_070 gabor_127    gabor_020_alt gabor_145 gabor_070_alt gabor_127      "1_4_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_020_145_070_127_target_position_2_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_176_framed    blank blank blank blank    fixation_cross_target_position_2_4     "1_4_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2392      fixation_cross    gabor_133 gabor_044 gabor_065 gabor_082    gabor_133_alt gabor_044_alt gabor_065 gabor_082      "1_5_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_133_044_065_082_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_065_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_5_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_087 gabor_112 gabor_005 gabor_175    gabor_087 gabor_112_alt gabor_005 gabor_175_alt      "1_6_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_087_112_005_175_target_position_1_3_retrieval_position_1"        gabor_087_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_6_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2192      fixation_cross    gabor_067 gabor_090 gabor_021 gabor_004    gabor_067 gabor_090_alt gabor_021_alt gabor_004      "1_7_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_067_090_021_004_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_140_framed    blank blank blank blank    fixation_cross_target_position_1_4     "1_7_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1892  2992  2442      fixation_cross    gabor_020 gabor_060 gabor_168 gabor_004    gabor_020 gabor_060 gabor_168_alt gabor_004_alt      "1_8_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_1900_3000_2450_gabor_patch_orientation_020_060_168_004_target_position_1_2_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_139_framed    blank blank blank blank    fixation_cross_target_position_1_2     "1_8_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_139_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2442      fixation_cross    gabor_013 gabor_148 gabor_168 gabor_034    gabor_013 gabor_148_alt gabor_168 gabor_034_alt      "1_9_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_013_148_168_034_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_168_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_9_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_021 gabor_137 gabor_156 gabor_087    gabor_021_alt gabor_137 gabor_156 gabor_087_alt     "1_10_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_021_137_156_087_target_position_2_3_retrieval_position_3"        gabor_circ gabor_circ gabor_156_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_10_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2492      fixation_cross    gabor_147 gabor_087 gabor_006 gabor_029    gabor_147 gabor_087_alt gabor_006_alt gabor_029     "1_11_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_147_087_006_029_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_165_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_11_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2342      fixation_cross    gabor_025 gabor_143 gabor_164 gabor_008    gabor_025 gabor_143 gabor_164_alt gabor_008_alt     "1_12_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_025_143_164_008_target_position_1_2_retrieval_position_1"        gabor_025_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_12_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2142  2992  2342      fixation_cross    gabor_007 gabor_076 gabor_135 gabor_046    gabor_007 gabor_076_alt gabor_135 gabor_046_alt     "1_13_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2150_3000_2350_gabor_patch_orientation_007_076_135_046_target_position_1_3_retrieval_position_2"        gabor_circ gabor_076_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_13_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_076_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2192      fixation_cross    gabor_100 gabor_148 gabor_167 gabor_080    gabor_100_alt gabor_148 gabor_167_alt gabor_080     "1_14_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_100_148_167_080_target_position_2_4_retrieval_position_2"        gabor_circ gabor_012_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_14_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  1992      fixation_cross    gabor_159 gabor_128 gabor_003 gabor_019    gabor_159_alt gabor_128 gabor_003 gabor_019_alt     "1_15_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_159_128_003_019_target_position_2_3_retrieval_position_3"        gabor_circ gabor_circ gabor_050_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_15_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2092  2992  2492      fixation_cross    gabor_076 gabor_013 gabor_040 gabor_102    gabor_076_alt gabor_013_alt gabor_040 gabor_102     "1_16_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_2100_3000_2500_gabor_patch_orientation_076_013_040_102_target_position_3_4_retrieval_position_1"        gabor_125_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_16_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_125_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2092      fixation_cross    gabor_170 gabor_023 gabor_008 gabor_095    gabor_170 gabor_023_alt gabor_008 gabor_095_alt     "1_17_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_170_023_008_095_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_008_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_17_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_177 gabor_019 gabor_108 gabor_136    gabor_177_alt gabor_019_alt gabor_108 gabor_136     "1_18_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_177_019_108_136_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_060_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_18_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2242  2992  2142      fixation_cross    gabor_099 gabor_180 gabor_147 gabor_040    gabor_099_alt gabor_180 gabor_147_alt gabor_040     "1_19_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2250_3000_2150_gabor_patch_orientation_099_180_147_040_target_position_2_4_retrieval_position_3"        gabor_circ gabor_circ gabor_147_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_19_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_147_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2442      fixation_cross    gabor_064 gabor_172 gabor_082 gabor_007    gabor_064 gabor_172_alt gabor_082 gabor_007_alt     "1_20_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_064_172_082_007_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_082_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_20_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2342      fixation_cross    gabor_144 gabor_095 gabor_022 gabor_178    gabor_144 gabor_095_alt gabor_022 gabor_178_alt     "1_21_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_144_095_022_178_target_position_1_3_retrieval_position_1"        gabor_144_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_21_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_128 gabor_011 gabor_101 gabor_170    gabor_128 gabor_011 gabor_101_alt gabor_170_alt     "1_22_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_128_011_101_170_target_position_1_2_retrieval_position_1"        gabor_082_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_22_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2392      fixation_cross    gabor_050 gabor_180 gabor_005 gabor_116    gabor_050 gabor_180_alt gabor_005_alt gabor_116     "1_23_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_050_180_005_116_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_071_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_23_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  1992      fixation_cross    gabor_054 gabor_090 gabor_069 gabor_113    gabor_054 gabor_090 gabor_069_alt gabor_113_alt     "1_24_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_054_090_069_113_target_position_1_2_retrieval_position_1"        gabor_007_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_24_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_157 gabor_138 gabor_050 gabor_017    gabor_157 gabor_138_alt gabor_050 gabor_017_alt     "1_25_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_157_138_050_017_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_050_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_25_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2092  2992  2192      fixation_cross    gabor_128 gabor_007 gabor_042 gabor_180    gabor_128 gabor_007 gabor_042_alt gabor_180_alt     "1_26_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_2100_3000_2200_gabor_patch_orientation_128_007_042_180_target_position_1_2_retrieval_position_3"        gabor_circ gabor_circ gabor_090_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_26_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_090_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_042 gabor_018 gabor_065 gabor_096    gabor_042 gabor_018 gabor_065_alt gabor_096_alt     "1_27_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_042_018_065_096_target_position_1_2_retrieval_position_2"        gabor_circ gabor_018_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_27_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_018_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2492      fixation_cross    gabor_082 gabor_147 gabor_099 gabor_059    gabor_082 gabor_147_alt gabor_099_alt gabor_059     "1_28_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2500_gabor_patch_orientation_082_147_099_059_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_059_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_28_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_127 gabor_059 gabor_167 gabor_106    gabor_127 gabor_059_alt gabor_167_alt gabor_106     "1_29_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_127_059_167_106_target_position_1_4_retrieval_position_1"        gabor_127_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_29_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2092  2992  2142      fixation_cross    gabor_065 gabor_146 gabor_041 gabor_097    gabor_065 gabor_146_alt gabor_041_alt gabor_097     "1_30_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2100_3000_2150_gabor_patch_orientation_065_146_041_097_target_position_1_4_retrieval_position_3"        gabor_circ gabor_circ gabor_041_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_30_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_041_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2442      fixation_cross    gabor_026 gabor_092 gabor_131 gabor_148    gabor_026 gabor_092 gabor_131_alt gabor_148_alt     "1_31_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_026_092_131_148_target_position_1_2_retrieval_position_1"        gabor_026_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_31_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_116 gabor_149 gabor_030 gabor_067    gabor_116_alt gabor_149 gabor_030 gabor_067_alt     "1_32_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_116_149_030_067_target_position_2_3_retrieval_position_2"        gabor_circ gabor_099_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_32_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2242      fixation_cross    gabor_159 gabor_102 gabor_027 gabor_134    gabor_159_alt gabor_102 gabor_027_alt gabor_134     "1_33_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_159_102_027_134_target_position_2_4_retrieval_position_2"        gabor_circ gabor_053_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_33_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2242      fixation_cross    gabor_127 gabor_070 gabor_050 gabor_093    gabor_127 gabor_070 gabor_050_alt gabor_093_alt     "1_34_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_127_070_050_093_target_position_1_2_retrieval_position_2"        gabor_circ gabor_070_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_34_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2142      fixation_cross    gabor_142 gabor_180 gabor_059 gabor_111    gabor_142 gabor_180 gabor_059_alt gabor_111_alt     "1_35_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_142_180_059_111_target_position_1_2_retrieval_position_1"        gabor_093_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_35_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2242      fixation_cross    gabor_073 gabor_158 gabor_114 gabor_096    gabor_073_alt gabor_158_alt gabor_114 gabor_096     "1_36_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_073_158_114_096_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_096_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_36_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_108 gabor_173 gabor_001 gabor_040    gabor_108_alt gabor_173 gabor_001_alt gabor_040     "1_37_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_108_173_001_040_target_position_2_4_retrieval_position_2"        gabor_circ gabor_173_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_37_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1942  2992  2042      fixation_cross    gabor_085 gabor_036 gabor_143 gabor_171    gabor_085_alt gabor_036 gabor_143 gabor_171_alt     "1_38_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_1950_3000_2050_gabor_patch_orientation_085_036_143_171_target_position_2_3_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_171_framed    blank blank blank blank    fixation_cross_target_position_2_3    "1_38_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_171_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2442      fixation_cross    gabor_136 gabor_178 gabor_153 gabor_026    gabor_136_alt gabor_178_alt gabor_153 gabor_026     "1_39_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_136_178_153_026_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_026_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_39_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1992  2992  2192      fixation_cross    gabor_095 gabor_174 gabor_011 gabor_152    gabor_095 gabor_174_alt gabor_011 gabor_152_alt     "1_40_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2000_3000_2200_gabor_patch_orientation_095_174_011_152_target_position_1_3_retrieval_position_2"        gabor_circ gabor_174_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_40_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_174_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2042      fixation_cross    gabor_053 gabor_166 gabor_127 gabor_037    gabor_053_alt gabor_166_alt gabor_127 gabor_037     "1_41_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_053_166_127_037_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_037_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_41_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_163 gabor_047 gabor_029 gabor_135    gabor_163 gabor_047_alt gabor_029 gabor_135_alt     "1_42_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_163_047_029_135_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_076_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_42_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2292      fixation_cross    gabor_025 gabor_074 gabor_144 gabor_111    gabor_025 gabor_074 gabor_144_alt gabor_111_alt     "1_43_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_025_074_144_111_target_position_1_2_retrieval_position_1"        gabor_025_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_43_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1992  2992  2492      fixation_cross    gabor_071 gabor_096 gabor_007 gabor_158    gabor_071_alt gabor_096 gabor_007_alt gabor_158     "1_44_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_2000_3000_2500_gabor_patch_orientation_071_096_007_158_target_position_2_4_retrieval_position_3"        gabor_circ gabor_circ gabor_052_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_44_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_052_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_163 gabor_030 gabor_088 gabor_050    gabor_163_alt gabor_030_alt gabor_088 gabor_050     "1_45_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_163_030_088_050_target_position_3_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_001_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_45_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_039 gabor_100 gabor_177 gabor_154    gabor_039 gabor_100_alt gabor_177 gabor_154_alt     "1_46_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_039_100_177_154_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_46_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2492      fixation_cross    gabor_107 gabor_002 gabor_046 gabor_021    gabor_107_alt gabor_002 gabor_046 gabor_021_alt     "1_47_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_107_002_046_021_target_position_2_3_retrieval_position_3"        gabor_circ gabor_circ gabor_046_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_47_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_025 gabor_163 gabor_133 gabor_093    gabor_025 gabor_163_alt gabor_133_alt gabor_093     "1_48_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_025_163_133_093_target_position_1_4_retrieval_position_1"        gabor_025_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_48_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2042      fixation_cross    gabor_026 gabor_141 gabor_056 gabor_005    gabor_026 gabor_141 gabor_056_alt gabor_005_alt     "1_49_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_026_141_056_005_target_position_1_2_retrieval_position_1"        gabor_166_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_49_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2442      fixation_cross    gabor_022 gabor_067 gabor_044 gabor_177    gabor_022_alt gabor_067 gabor_044 gabor_177_alt     "1_50_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2450_gabor_patch_orientation_022_067_044_177_target_position_2_3_retrieval_position_3"        gabor_circ gabor_circ gabor_090_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_50_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_174 gabor_127 gabor_059 gabor_004    gabor_174 gabor_127 gabor_059_alt gabor_004_alt     "1_51_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_174_127_059_004_target_position_1_2_retrieval_position_1"        gabor_039_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_51_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2142  2992  2342      fixation_cross    gabor_003 gabor_085 gabor_130 gabor_175    gabor_003 gabor_085_alt gabor_130 gabor_175_alt     "1_52_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2150_3000_2350_gabor_patch_orientation_003_085_130_175_target_position_1_3_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_175_framed    blank blank blank blank    fixation_cross_target_position_1_3    "1_52_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_175_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_033 gabor_110 gabor_142 gabor_172    gabor_033 gabor_110 gabor_142_alt gabor_172_alt     "1_53_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_033_110_142_172_target_position_1_2_retrieval_position_2"        gabor_circ gabor_062_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_53_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_062_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_038 gabor_148 gabor_058 gabor_112    gabor_038 gabor_148_alt gabor_058_alt gabor_112     "1_54_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_038_148_058_112_target_position_1_4_retrieval_position_1"        gabor_175_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_54_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1742  2992  2192      fixation_cross    gabor_159 gabor_107 gabor_138 gabor_051    gabor_159_alt gabor_107_alt gabor_138 gabor_051     "1_55_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_1750_3000_2200_gabor_patch_orientation_159_107_138_051_target_position_3_4_retrieval_position_1"        gabor_019_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_55_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_019_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2492      fixation_cross    gabor_180 gabor_019 gabor_124 gabor_102    gabor_180_alt gabor_019_alt gabor_124 gabor_102     "1_56_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_180_019_124_102_target_position_3_4_retrieval_position_3"        gabor_circ gabor_circ gabor_074_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_56_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2092      fixation_cross    gabor_032 gabor_092 gabor_139 gabor_108    gabor_032 gabor_092 gabor_139_alt gabor_108_alt     "1_57_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_032_092_139_108_target_position_1_2_retrieval_position_1"        gabor_032_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_57_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2392      fixation_cross    gabor_130 gabor_149 gabor_115 gabor_088    gabor_130 gabor_149_alt gabor_115_alt gabor_088     "1_58_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_130_149_115_088_target_position_1_4_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_042_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_58_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2242      fixation_cross    gabor_012 gabor_120 gabor_155 gabor_035    gabor_012 gabor_120 gabor_155_alt gabor_035_alt     "1_59_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_012_120_155_035_target_position_1_2_retrieval_position_2"        gabor_circ gabor_120_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_59_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2042  2992  2042      fixation_cross    gabor_039 gabor_086 gabor_149 gabor_171    gabor_039_alt gabor_086 gabor_149_alt gabor_171     "1_60_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_300_300_399_2050_3000_2050_gabor_patch_orientation_039_086_149_171_target_position_2_4_retrieval_position_3"        gabor_circ gabor_circ gabor_149_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_60_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_149_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2042      fixation_cross    gabor_121 gabor_061 gabor_014 gabor_036    gabor_121 gabor_061_alt gabor_014 gabor_036_alt     "1_61_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_121_061_014_036_target_position_1_3_retrieval_position_3"        gabor_circ gabor_circ gabor_014_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_61_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2392      fixation_cross    gabor_097 gabor_169 gabor_123 gabor_057    gabor_097 gabor_169 gabor_123_alt gabor_057_alt     "1_62_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_097_169_123_057_target_position_1_2_retrieval_position_2"        gabor_circ gabor_169_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_62_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2092      fixation_cross    gabor_141 gabor_001 gabor_068 gabor_025    gabor_141 gabor_001 gabor_068_alt gabor_025_alt     "1_63_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_141_001_068_025_target_position_1_2_retrieval_position_1"        gabor_091_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_63_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1842  2992  2342      fixation_cross    gabor_074 gabor_157 gabor_111 gabor_179    gabor_074_alt gabor_157 gabor_111 gabor_179_alt     "1_64_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_1850_3000_2350_gabor_patch_orientation_074_157_111_179_target_position_2_3_retrieval_position_4"        gabor_circ gabor_circ gabor_circ gabor_043_framed    blank blank blank blank    fixation_cross_target_position_2_3    "1_64_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_043_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2392      fixation_cross    gabor_163 gabor_090 gabor_005 gabor_135    gabor_163_alt gabor_090 gabor_005 gabor_135_alt     "1_65_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_163_090_005_135_target_position_2_3_retrieval_position_3"        gabor_circ gabor_circ gabor_055_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_65_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_055_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_068 gabor_144 gabor_111 gabor_089    gabor_068 gabor_144_alt gabor_111 gabor_089_alt     "1_66_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_068_144_111_089_target_position_1_3_retrieval_position_1"        gabor_068_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_66_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2042      fixation_cross    gabor_106 gabor_076 gabor_129 gabor_163    gabor_106 gabor_076_alt gabor_129 gabor_163_alt     "1_67_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_106_076_129_163_target_position_1_3_retrieval_position_1"        gabor_106_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_67_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_125 gabor_065 gabor_082 gabor_038    gabor_125 gabor_065 gabor_082_alt gabor_038_alt     "1_68_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_125_065_082_038_target_position_1_2_retrieval_position_1"        gabor_172_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_68_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1792  2992  2192      fixation_cross    gabor_102 gabor_131 gabor_016 gabor_167    gabor_102 gabor_131_alt gabor_016_alt gabor_167     "1_69_Encoding_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_300_300_399_1800_3000_2200_gabor_patch_orientation_102_131_016_167_target_position_1_4_retrieval_position_3"        gabor_circ gabor_circ gabor_151_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_69_Retrieval_Working_Memory_MEG_Nonsalient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_151_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_179 gabor_025 gabor_007 gabor_072    gabor_179_alt gabor_025 gabor_007 gabor_072_alt     "1_70_Encoding_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_179_025_007_072_target_position_2_3_retrieval_position_2"        gabor_circ gabor_025_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_70_Retrieval_Working_Memory_MEG_Nonsalient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  