# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   #port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    61   292   292   399   125  2042  2992  2192      fixation_cross    gabor_113 gabor_150 gabor_081 gabor_165    gabor_113 gabor_150_alt gabor_081_alt gabor_165      "2_1_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_113_150_081_165_target_position_2_3_retrieval_position_3"           gabor_circ gabor_circ gabor_035_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_1_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2492      fixation_cross    gabor_096 gabor_180 gabor_020 gabor_156    gabor_096_alt gabor_180_alt gabor_020 gabor_156      "2_2_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_096_180_020_156_target_position_1_2_retrieval_position_2"           gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_2_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2192      fixation_cross    gabor_097 gabor_007 gabor_125 gabor_158    gabor_097_alt gabor_007_alt gabor_125 gabor_158      "2_3_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_097_007_125_158_target_position_1_2_retrieval_position_1"           gabor_097_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_3_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2042      fixation_cross    gabor_169 gabor_138 gabor_060 gabor_033    gabor_169 gabor_138_alt gabor_060 gabor_033_alt      "2_4_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_169_138_060_033_target_position_2_4_retrieval_position_2"           gabor_circ gabor_003_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_4_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2192      fixation_cross    gabor_017 gabor_169 gabor_149 gabor_123    gabor_017 gabor_169_alt gabor_149_alt gabor_123      "2_5_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_017_169_149_123_target_position_2_3_retrieval_position_2"           gabor_circ gabor_169_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_5_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2242      fixation_cross    gabor_013 gabor_177 gabor_038 gabor_057    gabor_013 gabor_177 gabor_038_alt gabor_057_alt      "2_6_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_013_177_038_057_target_position_3_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_102_framed    blank blank blank blank    fixation_cross_target_position_3_4     "2_6_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_102_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1892  2992  2242      fixation_cross    gabor_152 gabor_135 gabor_012 gabor_097    gabor_152 gabor_135_alt gabor_012 gabor_097_alt      "2_7_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_1900_3000_2250_gabor_patch_orientation_152_135_012_097_target_position_2_4_retrieval_position_3"           gabor_circ gabor_circ gabor_062_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_7_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_062_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_111 gabor_180 gabor_092 gabor_005    gabor_111_alt gabor_180 gabor_092 gabor_005_alt      "2_8_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_111_180_092_005_target_position_1_4_retrieval_position_1"           gabor_111_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_8_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_089 gabor_176 gabor_114 gabor_137    gabor_089_alt gabor_176 gabor_114_alt gabor_137      "2_9_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_089_176_114_137_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_069_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_9_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2392      fixation_cross    gabor_058 gabor_124 gabor_096 gabor_042    gabor_058 gabor_124_alt gabor_096 gabor_042_alt     "2_10_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_058_124_096_042_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_042_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_10_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1942  2992  1992      fixation_cross    gabor_074 gabor_090 gabor_048 gabor_117    gabor_074 gabor_090_alt gabor_048 gabor_117_alt     "2_11_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_1950_3000_2000_gabor_patch_orientation_074_090_048_117_target_position_2_4_retrieval_position_3"           gabor_circ gabor_circ gabor_002_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_11_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_002_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_083 gabor_017 gabor_158 gabor_140    gabor_083_alt gabor_017 gabor_158_alt gabor_140     "2_12_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_083_017_158_140_target_position_1_3_retrieval_position_1"           gabor_083_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_12_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2192      fixation_cross    gabor_002 gabor_038 gabor_176 gabor_118    gabor_002_alt gabor_038 gabor_176 gabor_118_alt     "2_13_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_002_038_176_118_target_position_1_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_118_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_13_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2092  2992  2242      fixation_cross    gabor_155 gabor_134 gabor_093 gabor_176    gabor_155 gabor_134_alt gabor_093 gabor_176_alt     "2_14_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_2100_3000_2250_gabor_patch_orientation_155_134_093_176_target_position_2_4_retrieval_position_3"           gabor_circ gabor_circ gabor_093_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_14_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_093_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2292      fixation_cross    gabor_020 gabor_110 gabor_174 gabor_095    gabor_020 gabor_110 gabor_174_alt gabor_095_alt     "2_15_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_020_110_174_095_target_position_3_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_095_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_15_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2442      fixation_cross    gabor_172 gabor_067 gabor_008 gabor_034    gabor_172 gabor_067_alt gabor_008 gabor_034_alt     "2_16_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_172_067_008_034_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_034_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_16_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_041 gabor_128 gabor_057 gabor_007    gabor_041 gabor_128_alt gabor_057 gabor_007_alt     "2_17_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_041_128_057_007_target_position_2_4_retrieval_position_2"           gabor_circ gabor_128_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_17_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2242      fixation_cross    gabor_137 gabor_154 gabor_024 gabor_110    gabor_137_alt gabor_154 gabor_024_alt gabor_110     "2_18_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_137_154_024_110_target_position_1_3_retrieval_position_1"           gabor_090_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_18_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2342      fixation_cross    gabor_084 gabor_014 gabor_099 gabor_147    gabor_084 gabor_014_alt gabor_099 gabor_147_alt     "2_19_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_084_014_099_147_target_position_2_4_retrieval_position_2"           gabor_circ gabor_061_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_19_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_084 gabor_104 gabor_015 gabor_126    gabor_084_alt gabor_104 gabor_015_alt gabor_126     "2_20_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_084_104_015_126_target_position_1_3_retrieval_position_1"           gabor_084_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_20_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1792  2992  2042      fixation_cross    gabor_141 gabor_121 gabor_092 gabor_065    gabor_141_alt gabor_121 gabor_092 gabor_065_alt     "2_21_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_1800_3000_2050_gabor_patch_orientation_141_121_092_065_target_position_1_4_retrieval_position_2"           gabor_circ gabor_121_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_21_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_121_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_053 gabor_081 gabor_030 gabor_169    gabor_053 gabor_081_alt gabor_030 gabor_169_alt     "2_22_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_053_081_030_169_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_119_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_22_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  2392      fixation_cross    gabor_057 gabor_164 gabor_135 gabor_088    gabor_057_alt gabor_164_alt gabor_135 gabor_088     "2_23_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_057_164_135_088_target_position_1_2_retrieval_position_1"           gabor_009_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_23_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  1992      fixation_cross    gabor_063 gabor_151 gabor_170 gabor_033    gabor_063 gabor_151_alt gabor_170_alt gabor_033     "2_24_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_063_151_170_033_target_position_2_3_retrieval_position_3"           gabor_circ gabor_circ gabor_170_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_24_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  2042      fixation_cross    gabor_123 gabor_004 gabor_078 gabor_055    gabor_123_alt gabor_004_alt gabor_078 gabor_055     "2_25_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_123_004_078_055_target_position_1_2_retrieval_position_1"           gabor_123_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_25_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2492      fixation_cross    gabor_120 gabor_152 gabor_013 gabor_074    gabor_120 gabor_152_alt gabor_013 gabor_074_alt     "2_26_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_120_152_013_074_target_position_2_4_retrieval_position_2"           gabor_circ gabor_152_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_26_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2242  2992  2292      fixation_cross    gabor_042 gabor_113 gabor_087 gabor_177    gabor_042_alt gabor_113 gabor_087 gabor_177_alt     "2_27_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_2250_3000_2300_gabor_patch_orientation_042_113_087_177_target_position_1_4_retrieval_position_3"           gabor_circ gabor_circ gabor_132_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_27_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_132_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_087 gabor_039 gabor_126 gabor_145    gabor_087 gabor_039_alt gabor_126_alt gabor_145     "2_28_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_087_039_126_145_target_position_2_3_retrieval_position_3"           gabor_circ gabor_circ gabor_126_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_28_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1742  2992  2392      fixation_cross    gabor_084 gabor_166 gabor_036 gabor_055    gabor_084 gabor_166 gabor_036_alt gabor_055_alt     "2_29_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_1750_3000_2400_gabor_patch_orientation_084_166_036_055_target_position_3_4_retrieval_position_2"           gabor_circ gabor_118_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_29_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_118_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2342      fixation_cross    gabor_065 gabor_080 gabor_145 gabor_025    gabor_065_alt gabor_080 gabor_145_alt gabor_025     "2_30_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_065_080_145_025_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_005_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_30_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2442      fixation_cross    gabor_143 gabor_158 gabor_021 gabor_174    gabor_143_alt gabor_158_alt gabor_021 gabor_174     "2_31_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_143_158_021_174_target_position_1_2_retrieval_position_2"           gabor_circ gabor_158_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_31_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2092      fixation_cross    gabor_122 gabor_061 gabor_081 gabor_150    gabor_122_alt gabor_061 gabor_081_alt gabor_150     "2_32_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_122_061_081_150_target_position_1_3_retrieval_position_1"           gabor_168_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_32_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2042      fixation_cross    gabor_005 gabor_094 gabor_071 gabor_135    gabor_005 gabor_094_alt gabor_071_alt gabor_135     "2_33_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_005_094_071_135_target_position_2_3_retrieval_position_2"           gabor_circ gabor_049_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_33_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  2192      fixation_cross    gabor_175 gabor_155 gabor_044 gabor_114    gabor_175_alt gabor_155 gabor_044_alt gabor_114     "2_34_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_175_155_044_114_target_position_1_3_retrieval_position_1"           gabor_130_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_34_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2392      fixation_cross    gabor_131 gabor_150 gabor_026 gabor_082    gabor_131 gabor_150 gabor_026_alt gabor_082_alt     "2_35_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_131_150_026_082_target_position_3_4_retrieval_position_3"           gabor_circ gabor_circ gabor_166_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_35_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_075 gabor_102 gabor_118 gabor_041    gabor_075_alt gabor_102 gabor_118_alt gabor_041     "2_36_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_075_102_118_041_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_118_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_36_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2042      fixation_cross    gabor_132 gabor_115 gabor_026 gabor_166    gabor_132 gabor_115_alt gabor_026_alt gabor_166     "2_37_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_132_115_026_166_target_position_2_3_retrieval_position_3"           gabor_circ gabor_circ gabor_076_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_37_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2192  2992  1992      fixation_cross    gabor_093 gabor_021 gabor_069 gabor_043    gabor_093 gabor_021 gabor_069_alt gabor_043_alt     "2_38_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_2200_3000_2000_gabor_patch_orientation_093_021_069_043_target_position_3_4_retrieval_position_2"           gabor_circ gabor_021_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_38_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_021_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_122 gabor_140 gabor_086 gabor_055    gabor_122_alt gabor_140 gabor_086_alt gabor_055     "2_39_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_122_140_086_055_target_position_1_3_retrieval_position_1"           gabor_170_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_39_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2242  2992  2142      fixation_cross    gabor_087 gabor_164 gabor_114 gabor_130    gabor_087 gabor_164_alt gabor_114 gabor_130_alt     "2_40_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_2250_3000_2150_gabor_patch_orientation_087_164_114_130_target_position_2_4_retrieval_position_1"           gabor_040_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_40_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_040_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_115 gabor_085 gabor_169 gabor_151    gabor_115 gabor_085_alt gabor_169 gabor_151_alt     "2_41_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_115_085_169_151_target_position_2_4_retrieval_position_2"           gabor_circ gabor_037_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_41_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2492      fixation_cross    gabor_114 gabor_157 gabor_096 gabor_025    gabor_114 gabor_157_alt gabor_096 gabor_025_alt     "2_42_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_114_157_096_025_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_075_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_42_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_075_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  2492      fixation_cross    gabor_005 gabor_141 gabor_033 gabor_069    gabor_005_alt gabor_141 gabor_033 gabor_069_alt     "2_43_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_005_141_033_069_target_position_1_4_retrieval_position_1"           gabor_005_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_43_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_074 gabor_161 gabor_044 gabor_134    gabor_074_alt gabor_161 gabor_044 gabor_134_alt     "2_44_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_074_161_044_134_target_position_1_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_134_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_44_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2042  2992  2342      fixation_cross    gabor_007 gabor_134 gabor_097 gabor_079    gabor_007_alt gabor_134 gabor_097 gabor_079_alt     "2_45_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_2050_3000_2350_gabor_patch_orientation_007_134_097_079_target_position_1_4_retrieval_position_3"           gabor_circ gabor_circ gabor_049_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_45_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_049_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2392      fixation_cross    gabor_146 gabor_040 gabor_106 gabor_173    gabor_146 gabor_040 gabor_106_alt gabor_173_alt     "2_46_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_146_040_106_173_target_position_3_4_retrieval_position_3"           gabor_circ gabor_circ gabor_106_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_46_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_150 gabor_087 gabor_032 gabor_011    gabor_150 gabor_087_alt gabor_032 gabor_011_alt     "2_47_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_150_087_032_011_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_011_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_47_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2042      fixation_cross    gabor_165 gabor_089 gabor_006 gabor_126    gabor_165 gabor_089 gabor_006_alt gabor_126_alt     "2_48_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_165_089_006_126_target_position_3_4_retrieval_position_3"           gabor_circ gabor_circ gabor_051_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_48_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_051_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_140 gabor_050 gabor_155 gabor_082    gabor_140 gabor_050_alt gabor_155_alt gabor_082     "2_49_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_140_050_155_082_target_position_2_3_retrieval_position_2"           gabor_circ gabor_002_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_49_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_137 gabor_051 gabor_016 gabor_163    gabor_137_alt gabor_051_alt gabor_016 gabor_163     "2_50_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_137_051_016_163_target_position_1_2_retrieval_position_2"           gabor_circ gabor_051_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_50_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_051_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2342      fixation_cross    gabor_161 gabor_024 gabor_093 gabor_114    gabor_161_alt gabor_024 gabor_093_alt gabor_114     "2_51_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_161_024_093_114_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_138_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_51_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_170 gabor_082 gabor_104 gabor_135    gabor_170_alt gabor_082 gabor_104_alt gabor_135     "2_52_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_170_082_104_135_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_057_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_52_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_057_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1842  2992  2442      fixation_cross    gabor_064 gabor_122 gabor_097 gabor_143    gabor_064 gabor_122 gabor_097_alt gabor_143_alt     "2_53_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_1850_3000_2450_gabor_patch_orientation_064_122_097_143_target_position_3_4_retrieval_position_1"           gabor_064_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_53_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_064_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_171 gabor_016 gabor_081 gabor_098    gabor_171 gabor_016 gabor_081_alt gabor_098_alt     "2_54_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_171_016_081_098_target_position_3_4_retrieval_position_3"           gabor_circ gabor_circ gabor_034_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_54_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_108 gabor_164 gabor_075 gabor_140    gabor_108_alt gabor_164 gabor_075 gabor_140_alt     "2_55_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_108_164_075_140_target_position_1_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_001_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_55_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_095 gabor_029 gabor_057 gabor_078    gabor_095 gabor_029_alt gabor_057_alt gabor_078     "2_56_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_095_029_057_078_target_position_2_3_retrieval_position_3"           gabor_circ gabor_circ gabor_007_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_56_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1942  2992  2142      fixation_cross    gabor_174 gabor_120 gabor_085 gabor_001    gabor_174 gabor_120_alt gabor_085 gabor_001_alt     "2_57_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_1950_3000_2150_gabor_patch_orientation_174_120_085_001_target_position_2_4_retrieval_position_3"           gabor_circ gabor_circ gabor_085_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_57_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_085_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2342      fixation_cross    gabor_081 gabor_063 gabor_029 gabor_008    gabor_081 gabor_063 gabor_029_alt gabor_008_alt     "2_58_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_081_063_029_008_target_position_3_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_008_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_58_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2092  2992  2142      fixation_cross    gabor_030 gabor_146 gabor_008 gabor_057    gabor_030 gabor_146_alt gabor_008_alt gabor_057     "2_59_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_2100_3000_2150_gabor_patch_orientation_030_146_008_057_target_position_2_3_retrieval_position_1"           gabor_030_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_59_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_030_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2292      fixation_cross    gabor_143 gabor_111 gabor_072 gabor_034    gabor_143 gabor_111_alt gabor_072 gabor_034_alt     "2_60_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_143_111_072_034_target_position_2_4_retrieval_position_2"           gabor_circ gabor_111_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_60_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_069 gabor_130 gabor_114 gabor_174    gabor_069_alt gabor_130_alt gabor_114 gabor_174     "2_61_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_069_130_114_174_target_position_1_2_retrieval_position_2"           gabor_circ gabor_085_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_61_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2242      fixation_cross    gabor_160 gabor_005 gabor_093 gabor_177    gabor_160 gabor_005 gabor_093_alt gabor_177_alt     "2_62_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_160_005_093_177_target_position_3_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_177_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_62_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2442      fixation_cross    gabor_005 gabor_163 gabor_030 gabor_137    gabor_005 gabor_163_alt gabor_030 gabor_137_alt     "2_63_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_005_163_030_137_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_137_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_63_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2042  2992  2392      fixation_cross    gabor_001 gabor_044 gabor_107 gabor_164    gabor_001_alt gabor_044 gabor_107_alt gabor_164     "2_64_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_300_300_399_2050_3000_2400_gabor_patch_orientation_001_044_107_164_target_position_1_3_retrieval_position_2"           gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_64_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_UncuedRetriev_retrieval_patch_orientation_180_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_063 gabor_085 gabor_033 gabor_010    gabor_063_alt gabor_085 gabor_033_alt gabor_010     "2_65_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_063_085_033_010_target_position_1_3_retrieval_position_3"           gabor_circ gabor_circ gabor_173_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_65_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2092      fixation_cross    gabor_070 gabor_147 gabor_093 gabor_025    gabor_070 gabor_147_alt gabor_093 gabor_025_alt     "2_66_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_070_147_093_025_target_position_2_4_retrieval_position_2"           gabor_circ gabor_009_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_66_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_097 gabor_024 gabor_041 gabor_163    gabor_097 gabor_024_alt gabor_041 gabor_163_alt     "2_67_Encoding_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_097_024_041_163_target_position_2_4_retrieval_position_4"           gabor_circ gabor_circ gabor_circ gabor_114_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_67_Retrieval_Working_Memory_MEG_Salient_Cued_DoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_036 gabor_126 gabor_067 gabor_003    gabor_036 gabor_126_alt gabor_067 gabor_003_alt     "2_68_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_036_126_067_003_target_position_2_4_retrieval_position_2"           gabor_circ gabor_126_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_68_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2092      fixation_cross    gabor_067 gabor_110 gabor_002 gabor_140    gabor_067_alt gabor_110_alt gabor_002 gabor_140     "2_69_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_067_110_002_140_target_position_1_2_retrieval_position_2"           gabor_circ gabor_110_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_69_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_CuedRetrieval_retrieval_patch_orientation_110_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2142  2992  2042      fixation_cross    gabor_051 gabor_156 gabor_023 gabor_128    gabor_051_alt gabor_156 gabor_023 gabor_128_alt     "2_70_Encoding_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_300_300_399_2150_3000_2050_gabor_patch_orientation_051_156_023_128_target_position_1_4_retrieval_position_3"           gabor_circ gabor_circ gabor_023_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_70_Retrieval_Working_Memory_MEG_Salient_Cued_NoChange_UncuedRetriev_retrieval_patch_orientation_023_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
 
};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  