# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;   
	  bitmap fixation_cross_black; x=0; y=0;   
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   44    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_151 gabor_124 gabor_109 gabor_086    gabor_151 gabor_124 gabor_109_alt gabor_086_alt      "1_1_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_151_124_109_086_target_position_1_2_retrieval_position_2"       gabor_circ gabor_124_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_1_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  2392      fixation_cross    gabor_010 gabor_147 gabor_087 gabor_026    gabor_010_alt gabor_147 gabor_087_alt gabor_026      "1_2_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_010_147_087_026_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_026_framed    blank blank blank blank    fixation_cross_white     "1_2_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  1892      fixation_cross    gabor_050 gabor_001 gabor_158 gabor_025    gabor_050 gabor_001 gabor_158_alt gabor_025_alt      "1_3_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_050_001_158_025_target_position_1_2_retrieval_position_2"       gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_3_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  2142      fixation_cross    gabor_003 gabor_019 gabor_139 gabor_174    gabor_003 gabor_019 gabor_139_alt gabor_174_alt      "1_4_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_003_019_139_174_target_position_1_2_retrieval_position_2"       gabor_circ gabor_156_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_4_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  2442      fixation_cross    gabor_088 gabor_178 gabor_115 gabor_162    gabor_088_alt gabor_178 gabor_115_alt gabor_162      "1_5_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_088_178_115_162_target_position_2_4_retrieval_position_2"       gabor_circ gabor_178_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_5_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_090 gabor_053 gabor_017 gabor_170    gabor_090_alt gabor_053_alt gabor_017 gabor_170      "1_6_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_090_053_017_170_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_123_framed    blank blank blank blank    fixation_cross_white     "1_6_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2192  2992  2442      fixation_cross    gabor_111 gabor_175 gabor_043 gabor_021    gabor_111_alt gabor_175 gabor_043_alt gabor_021      "1_7_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_2450_gabor_patch_orientation_111_175_043_021_target_position_2_4_retrieval_position_1"       gabor_111_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_7_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_111_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1792  2992  2192      fixation_cross    gabor_118 gabor_060 gabor_039 gabor_093    gabor_118_alt gabor_060 gabor_039_alt gabor_093      "1_8_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_118_060_039_093_target_position_2_4_retrieval_position_2"       gabor_circ gabor_060_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_8_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2542      fixation_cross    gabor_094 gabor_063 gabor_009 gabor_039    gabor_094_alt gabor_063_alt gabor_009 gabor_039      "1_9_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_094_063_009_039_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_039_framed    blank blank blank blank    fixation_cross_white     "1_9_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2492      fixation_cross    gabor_016 gabor_122 gabor_081 gabor_149    gabor_016_alt gabor_122 gabor_081_alt gabor_149     "1_10_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_016_122_081_149_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_100_framed    blank blank blank blank    fixation_cross_white    "1_10_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_100_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2042      fixation_cross    gabor_159 gabor_110 gabor_020 gabor_088    gabor_159_alt gabor_110 gabor_020 gabor_088_alt     "1_11_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_159_110_020_088_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_069_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_11_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2242  2992  2492      fixation_cross    gabor_087 gabor_166 gabor_138 gabor_055    gabor_087_alt gabor_166 gabor_138 gabor_055_alt     "1_12_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_2500_gabor_patch_orientation_087_166_138_055_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_055_framed    blank blank blank blank    fixation_cross_white    "1_12_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_055_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  2192      fixation_cross    gabor_007 gabor_069 gabor_030 gabor_140    gabor_007 gabor_069_alt gabor_030 gabor_140_alt     "1_13_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_007_069_030_140_target_position_1_3_retrieval_position_1"       gabor_053_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_13_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1742  2992  2392      fixation_cross    gabor_175 gabor_097 gabor_011 gabor_062    gabor_175 gabor_097_alt gabor_011_alt gabor_062     "1_14_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2400_gabor_patch_orientation_175_097_011_062_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_148_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_14_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_148_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1992  2992  2442      fixation_cross    gabor_117 gabor_043 gabor_170 gabor_010    gabor_117_alt gabor_043_alt gabor_170 gabor_010     "1_15_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2450_gabor_patch_orientation_117_043_170_010_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_010_framed    blank blank blank blank    fixation_cross_white    "1_15_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  2292      fixation_cross    gabor_037 gabor_110 gabor_177 gabor_021    gabor_037 gabor_110 gabor_177_alt gabor_021_alt     "1_16_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_037_110_177_021_target_position_1_2_retrieval_position_1"       gabor_037_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_16_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2042      fixation_cross    gabor_014 gabor_160 gabor_177 gabor_097    gabor_014_alt gabor_160_alt gabor_177 gabor_097     "1_17_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_014_160_177_097_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_097_framed    blank blank blank blank    fixation_cross_white    "1_17_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1992  2992  2042      fixation_cross    gabor_011 gabor_120 gabor_088 gabor_032    gabor_011_alt gabor_120 gabor_088_alt gabor_032     "1_18_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_011_120_088_032_target_position_2_4_retrieval_position_2"       gabor_circ gabor_120_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_18_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  2342      fixation_cross    gabor_084 gabor_167 gabor_149 gabor_023    gabor_084_alt gabor_167_alt gabor_149 gabor_023     "1_19_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_084_167_149_023_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_149_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_19_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_097 gabor_061 gabor_010 gabor_175    gabor_097_alt gabor_061 gabor_010 gabor_175_alt     "1_20_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_097_061_010_175_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_149_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_20_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2092  2992  2492      fixation_cross    gabor_161 gabor_136 gabor_093 gabor_072    gabor_161_alt gabor_136_alt gabor_093 gabor_072     "1_21_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2500_gabor_patch_orientation_161_136_093_072_target_position_3_4_retrieval_position_1"       gabor_161_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_21_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_161_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_130 gabor_056 gabor_168 gabor_022    gabor_130 gabor_056_alt gabor_168 gabor_022_alt     "1_22_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_130_056_168_022_target_position_1_3_retrieval_position_1"       gabor_080_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_22_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2092      fixation_cross    gabor_067 gabor_084 gabor_015 gabor_140    gabor_067_alt gabor_084 gabor_015_alt gabor_140     "1_23_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_067_084_015_140_target_position_2_4_retrieval_position_2"       gabor_circ gabor_034_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_23_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  2392      fixation_cross    gabor_154 gabor_015 gabor_042 gabor_081    gabor_154_alt gabor_015_alt gabor_042 gabor_081     "1_24_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_154_015_042_081_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_129_framed    blank blank blank blank    fixation_cross_white    "1_24_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1842  2992  2292      fixation_cross    gabor_133 gabor_161 gabor_178 gabor_027    gabor_133_alt gabor_161_alt gabor_178 gabor_027     "1_25_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_2300_gabor_patch_orientation_133_161_178_027_target_position_3_4_retrieval_position_2"       gabor_circ gabor_161_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_25_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_161_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_012 gabor_039 gabor_077 gabor_144    gabor_012 gabor_039_alt gabor_077_alt gabor_144     "1_26_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_012_039_077_144_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_144_framed    blank blank blank blank    fixation_cross_white    "1_26_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2592      fixation_cross    gabor_008 gabor_072 gabor_117 gabor_044    gabor_008_alt gabor_072 gabor_117 gabor_044_alt     "1_27_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_008_072_117_044_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_117_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_27_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  2092      fixation_cross    gabor_030 gabor_011 gabor_059 gabor_087    gabor_030_alt gabor_011 gabor_059 gabor_087_alt     "1_28_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_030_011_059_087_target_position_2_3_retrieval_position_2"       gabor_circ gabor_011_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_28_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_069 gabor_084 gabor_140 gabor_026    gabor_069 gabor_084_alt gabor_140 gabor_026_alt     "1_29_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_069_084_140_026_target_position_1_3_retrieval_position_1"       gabor_115_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_29_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_042 gabor_178 gabor_065 gabor_147    gabor_042 gabor_178_alt gabor_065 gabor_147_alt     "1_30_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_042_178_065_147_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_114_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_30_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2092      fixation_cross    gabor_045 gabor_066 gabor_180 gabor_004    gabor_045 gabor_066 gabor_180_alt gabor_004_alt     "1_31_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_045_066_180_004_target_position_1_2_retrieval_position_2"       gabor_circ gabor_111_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_31_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2242  2992  2292      fixation_cross    gabor_160 gabor_105 gabor_044 gabor_020    gabor_160_alt gabor_105 gabor_044_alt gabor_020     "1_32_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_2300_gabor_patch_orientation_160_105_044_020_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_044_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_32_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_044_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2092      fixation_cross    gabor_145 gabor_039 gabor_071 gabor_009    gabor_145_alt gabor_039 gabor_071_alt gabor_009     "1_33_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_145_039_071_009_target_position_2_4_retrieval_position_2"       gabor_circ gabor_087_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_33_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2042      fixation_cross    gabor_121 gabor_150 gabor_072 gabor_102    gabor_121_alt gabor_150 gabor_072 gabor_102_alt     "1_34_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_121_150_072_102_target_position_2_3_retrieval_position_2"       gabor_circ gabor_150_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_34_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  2392      fixation_cross    gabor_139 gabor_114 gabor_027 gabor_168    gabor_139 gabor_114_alt gabor_027_alt gabor_168     "1_35_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_139_114_027_168_target_position_1_4_retrieval_position_1"       gabor_139_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_35_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2442      fixation_cross    gabor_135 gabor_095 gabor_180 gabor_063    gabor_135 gabor_095_alt gabor_180 gabor_063_alt     "1_36_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2450_gabor_patch_orientation_135_095_180_063_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_180_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_36_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1942  2992  2192      fixation_cross    gabor_078 gabor_023 gabor_140 gabor_062    gabor_078_alt gabor_023_alt gabor_140 gabor_062     "1_37_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_078_023_140_062_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_002_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_37_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1792  2992  1992      fixation_cross    gabor_099 gabor_126 gabor_041 gabor_065    gabor_099_alt gabor_126 gabor_041_alt gabor_065     "1_38_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2000_gabor_patch_orientation_099_126_041_065_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_178_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_38_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_178_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2342      fixation_cross    gabor_155 gabor_117 gabor_097 gabor_037    gabor_155_alt gabor_117_alt gabor_097 gabor_037     "1_39_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_155_117_097_037_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_177_framed    blank blank blank blank    fixation_cross_white    "1_39_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2192  2992  1992      fixation_cross    gabor_100 gabor_064 gabor_021 gabor_041    gabor_100_alt gabor_064 gabor_021 gabor_041_alt     "1_40_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2000_gabor_patch_orientation_100_064_021_041_target_position_2_3_retrieval_position_1"       gabor_148_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_40_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_148_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2192  2992  2592      fixation_cross    gabor_066 gabor_136 gabor_151 gabor_176    gabor_066 gabor_136_alt gabor_151_alt gabor_176     "1_41_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_066_136_151_176_target_position_1_4_retrieval_position_1"       gabor_113_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_41_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  2542      fixation_cross    gabor_044 gabor_065 gabor_126 gabor_106    gabor_044_alt gabor_065_alt gabor_126 gabor_106     "1_42_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_044_065_126_106_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_106_framed    blank blank blank blank    fixation_cross_white    "1_42_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_045 gabor_124 gabor_088 gabor_109    gabor_045_alt gabor_124 gabor_088 gabor_109_alt     "1_43_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_045_124_088_109_target_position_2_3_retrieval_position_2"       gabor_circ gabor_124_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_43_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  2542      fixation_cross    gabor_118 gabor_146 gabor_167 gabor_084    gabor_118 gabor_146 gabor_167_alt gabor_084_alt     "1_44_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_118_146_167_084_target_position_1_2_retrieval_position_2"       gabor_circ gabor_146_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_44_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2142      fixation_cross    gabor_131 gabor_014 gabor_044 gabor_088    gabor_131_alt gabor_014 gabor_044_alt gabor_088     "1_45_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_131_014_044_088_target_position_2_4_retrieval_position_2"       gabor_circ gabor_014_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_45_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1992  2992  1892      fixation_cross    gabor_047 gabor_125 gabor_179 gabor_158    gabor_047_alt gabor_125 gabor_179_alt gabor_158     "1_46_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2000_3000_1900_gabor_patch_orientation_047_125_179_158_target_position_2_4_retrieval_position_1"       gabor_001_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_46_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_001_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2592      fixation_cross    gabor_093 gabor_156 gabor_074 gabor_135    gabor_093_alt gabor_156_alt gabor_074 gabor_135     "1_47_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_093_156_074_135_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_135_framed    blank blank blank blank    fixation_cross_white    "1_47_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  1892      fixation_cross    gabor_069 gabor_131 gabor_095 gabor_152    gabor_069 gabor_131_alt gabor_095 gabor_152_alt     "1_48_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_1900_gabor_patch_orientation_069_131_095_152_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_095_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_48_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_105 gabor_135 gabor_065 gabor_085    gabor_105 gabor_135 gabor_065_alt gabor_085_alt     "1_49_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_105_135_065_085_target_position_1_2_retrieval_position_1"       gabor_105_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_49_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_122 gabor_065 gabor_036 gabor_080    gabor_122_alt gabor_065 gabor_036_alt gabor_080     "1_50_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_122_065_036_080_target_position_2_4_retrieval_position_2"       gabor_circ gabor_065_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_50_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2042      fixation_cross    gabor_045 gabor_025 gabor_102 gabor_080    gabor_045_alt gabor_025 gabor_102_alt gabor_080     "1_51_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_045_025_102_080_target_position_2_4_retrieval_position_2"       gabor_circ gabor_025_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_51_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2042  2992  2242      fixation_cross    gabor_004 gabor_089 gabor_042 gabor_110    gabor_004 gabor_089 gabor_042_alt gabor_110_alt     "1_52_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2250_gabor_patch_orientation_004_089_042_110_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_160_framed    blank blank blank blank    fixation_cross_white    "1_52_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_160_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_144 gabor_159 gabor_129 gabor_093    gabor_144 gabor_159_alt gabor_129 gabor_093_alt     "1_53_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_144_159_129_093_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_177_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_53_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2242      fixation_cross    gabor_146 gabor_180 gabor_096 gabor_033    gabor_146 gabor_180_alt gabor_096 gabor_033_alt     "1_54_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_146_180_096_033_target_position_1_3_retrieval_position_1"       gabor_009_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_54_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_093 gabor_076 gabor_137 gabor_008    gabor_093_alt gabor_076 gabor_137_alt gabor_008     "1_55_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_093_076_137_008_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_055_framed    blank blank blank blank    fixation_cross_white    "1_55_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_055_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2142  2992  2292      fixation_cross    gabor_081 gabor_170 gabor_004 gabor_044    gabor_081 gabor_170_alt gabor_004_alt gabor_044     "1_56_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_2300_gabor_patch_orientation_081_170_004_044_target_position_1_4_retrieval_position_2"       gabor_circ gabor_120_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_56_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_120_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_129 gabor_173 gabor_109 gabor_003    gabor_129_alt gabor_173_alt gabor_109 gabor_003     "1_57_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_129_173_109_003_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_156_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_57_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2292      fixation_cross    gabor_162 gabor_138 gabor_008 gabor_120    gabor_162_alt gabor_138 gabor_008_alt gabor_120     "1_58_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_162_138_008_120_target_position_2_4_retrieval_position_2"       gabor_circ gabor_138_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_58_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2092      fixation_cross    gabor_085 gabor_029 gabor_113 gabor_008    gabor_085_alt gabor_029 gabor_113_alt gabor_008     "1_59_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_085_029_113_008_target_position_2_4_retrieval_position_2"       gabor_circ gabor_029_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_59_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  1942      fixation_cross    gabor_055 gabor_101 gabor_130 gabor_171    gabor_055_alt gabor_101_alt gabor_130 gabor_171     "1_60_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_055_101_130_171_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_082_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_60_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2092  2992  2342      fixation_cross    gabor_166 gabor_003 gabor_089 gabor_109    gabor_166 gabor_003_alt gabor_089 gabor_109_alt     "1_61_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2350_gabor_patch_orientation_166_003_089_109_target_position_1_3_retrieval_position_2"       gabor_circ gabor_143_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_61_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_143_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2242      fixation_cross    gabor_127 gabor_168 gabor_059 gabor_099    gabor_127_alt gabor_168_alt gabor_059 gabor_099     "1_62_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_127_168_059_099_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_146_framed    blank blank blank blank    fixation_cross_white    "1_62_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2342      fixation_cross    gabor_088 gabor_068 gabor_113 gabor_176    gabor_088 gabor_068_alt gabor_113 gabor_176_alt     "1_63_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_088_068_113_176_target_position_1_3_retrieval_position_1"       gabor_135_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_63_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2242      fixation_cross    gabor_081 gabor_107 gabor_151 gabor_171    gabor_081 gabor_107_alt gabor_151 gabor_171_alt     "1_64_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_081_107_151_171_target_position_1_3_retrieval_position_1"       gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_64_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2192  2992  1892      fixation_cross    gabor_083 gabor_060 gabor_031 gabor_006    gabor_083 gabor_060_alt gabor_031 gabor_006_alt     "1_65_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_1900_gabor_patch_orientation_083_060_031_006_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_006_framed    blank blank blank blank    fixation_cross_white    "1_65_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_006_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2592      fixation_cross    gabor_170 gabor_099 gabor_019 gabor_124    gabor_170_alt gabor_099 gabor_019 gabor_124_alt     "1_66_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2600_gabor_patch_orientation_170_099_019_124_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_064_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_66_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1942  2992  1942      fixation_cross    gabor_175 gabor_108 gabor_040 gabor_070    gabor_175 gabor_108_alt gabor_040 gabor_070_alt     "1_67_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_175_108_040_070_target_position_1_3_retrieval_position_1"       gabor_130_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_67_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_012 gabor_066 gabor_089 gabor_128    gabor_012 gabor_066_alt gabor_089_alt gabor_128     "1_68_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_012_066_089_128_target_position_1_4_retrieval_position_1"       gabor_150_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_68_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2192  2992  2142      fixation_cross    gabor_057 gabor_129 gabor_042 gabor_010    gabor_057_alt gabor_129 gabor_042 gabor_010_alt     "1_69_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2150_gabor_patch_orientation_057_129_042_010_target_position_2_3_retrieval_position_2"       gabor_circ gabor_176_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_69_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2092  2992  2192      fixation_cross    gabor_151 gabor_045 gabor_016 gabor_084    gabor_151 gabor_045_alt gabor_016 gabor_084_alt     "1_70_Encoding_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2200_gabor_patch_orientation_151_045_016_084_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_084_framed    blank blank blank blank    fixation_cross_white    "1_70_Retrieval_Working_Memory_MEG_P2_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_084_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
 
};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  