# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;

# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    61   292   292   399   125  2142  2992  2592      fixation_cross    gabor_063 gabor_126 gabor_040 gabor_081    gabor_063 gabor_126_alt gabor_040 gabor_081_alt      "1_1_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_063_126_040_081_target_position_2_4_retrieval_position_2"          gabor_circ gabor_171_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "1_1_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2492      fixation_cross    gabor_158 gabor_142 gabor_023 gabor_092    gabor_158_alt gabor_142 gabor_023_alt gabor_092      "1_2_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_158_142_023_092_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_070_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_2_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2292      fixation_cross    gabor_057 gabor_023 gabor_087 gabor_175    gabor_057 gabor_023_alt gabor_087 gabor_175_alt      "1_3_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_057_023_087_175_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_039_framed    blank blank blank blank    fixation_cross_target_position_2_4     "1_3_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2142      fixation_cross    gabor_178 gabor_053 gabor_068 gabor_098    gabor_178_alt gabor_053_alt gabor_068 gabor_098      "1_4_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_178_053_068_098_target_position_1_2_retrieval_position_1"          gabor_178_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_4_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1742  2992  2192      fixation_cross    gabor_084 gabor_172 gabor_066 gabor_028    gabor_084 gabor_172 gabor_066_alt gabor_028_alt      "1_5_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2200_gabor_patch_orientation_084_172_066_028_target_position_3_4_retrieval_position_1"          gabor_084_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_5_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_084_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2142      fixation_cross    gabor_002 gabor_174 gabor_117 gabor_030    gabor_002_alt gabor_174_alt gabor_117 gabor_030      "1_6_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_002_174_117_030_target_position_1_2_retrieval_position_1"          gabor_049_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_6_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2092      fixation_cross    gabor_152 gabor_029 gabor_111 gabor_135    gabor_152_alt gabor_029_alt gabor_111 gabor_135      "1_7_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_152_029_111_135_target_position_1_2_retrieval_position_2"          gabor_circ gabor_079_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_7_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_032 gabor_005 gabor_076 gabor_141    gabor_032 gabor_005 gabor_076_alt gabor_141_alt      "1_8_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_032_005_076_141_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_076_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_8_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  2542      fixation_cross    gabor_113 gabor_095 gabor_153 gabor_176    gabor_113 gabor_095_alt gabor_153 gabor_176_alt      "1_9_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_113_095_153_176_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_176_framed    blank blank blank blank    fixation_cross_target_position_2_4     "1_9_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2442      fixation_cross    gabor_056 gabor_141 gabor_166 gabor_027    gabor_056_alt gabor_141_alt gabor_166 gabor_027     "1_10_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_056_141_166_027_target_position_1_2_retrieval_position_2"          gabor_circ gabor_141_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_10_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2442      fixation_cross    gabor_115 gabor_131 gabor_150 gabor_008    gabor_115_alt gabor_131 gabor_150_alt gabor_008     "1_11_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_115_131_150_008_target_position_1_3_retrieval_position_1"          gabor_115_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_11_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2342      fixation_cross    gabor_086 gabor_111 gabor_028 gabor_167    gabor_086 gabor_111_alt gabor_028 gabor_167_alt     "1_12_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_086_111_028_167_target_position_2_4_retrieval_position_2"          gabor_circ gabor_061_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_12_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2092  2992  2042      fixation_cross    gabor_129 gabor_161 gabor_006 gabor_083    gabor_129_alt gabor_161_alt gabor_006 gabor_083     "1_13_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2050_gabor_patch_orientation_129_161_006_083_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_145_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_13_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_145_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  1942      fixation_cross    gabor_115 gabor_044 gabor_178 gabor_161    gabor_115 gabor_044_alt gabor_178_alt gabor_161     "1_14_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_115_044_178_161_target_position_2_3_retrieval_position_2"          gabor_circ gabor_090_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_14_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2392      fixation_cross    gabor_142 gabor_164 gabor_035 gabor_081    gabor_142 gabor_164_alt gabor_035 gabor_081_alt     "1_15_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_142_164_035_081_target_position_2_4_retrieval_position_2"          gabor_circ gabor_164_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_15_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1842  2992  2242      fixation_cross    gabor_131 gabor_096 gabor_172 gabor_016    gabor_131 gabor_096 gabor_172_alt gabor_016_alt     "1_16_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2250_gabor_patch_orientation_131_096_172_016_target_position_3_4_retrieval_position_2"          gabor_circ gabor_096_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_16_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_096_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_139 gabor_098 gabor_058 gabor_121    gabor_139_alt gabor_098 gabor_058 gabor_121_alt     "1_17_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_139_098_058_121_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_171_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_17_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2392      fixation_cross    gabor_078 gabor_126 gabor_042 gabor_148    gabor_078 gabor_126_alt gabor_042 gabor_148_alt     "1_18_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_078_126_042_148_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_098_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_18_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_026 gabor_011 gabor_099 gabor_068    gabor_026 gabor_011_alt gabor_099 gabor_068_alt     "1_19_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_026_011_099_068_target_position_2_4_retrieval_position_2"          gabor_circ gabor_011_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_19_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_067 gabor_180 gabor_144 gabor_039    gabor_067_alt gabor_180 gabor_144 gabor_039_alt     "1_20_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_067_180_144_039_target_position_1_4_retrieval_position_1"          gabor_067_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_20_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2442      fixation_cross    gabor_016 gabor_062 gabor_078 gabor_123    gabor_016_alt gabor_062_alt gabor_078 gabor_123     "1_21_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2450_gabor_patch_orientation_016_062_078_123_target_position_1_2_retrieval_position_1"          gabor_016_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_21_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  1942      fixation_cross    gabor_062 gabor_040 gabor_147 gabor_091    gabor_062_alt gabor_040 gabor_147 gabor_091_alt     "1_22_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_062_040_147_091_target_position_1_4_retrieval_position_1"          gabor_062_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_22_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_062_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1792  2992  2192      fixation_cross    gabor_078 gabor_012 gabor_034 gabor_094    gabor_078_alt gabor_012 gabor_034_alt gabor_094     "1_23_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2200_gabor_patch_orientation_078_012_034_094_target_position_1_3_retrieval_position_2"          gabor_circ gabor_151_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_23_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_151_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2342      fixation_cross    gabor_167 gabor_023 gabor_108 gabor_046    gabor_167 gabor_023 gabor_108_alt gabor_046_alt     "1_24_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_167_023_108_046_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_046_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_24_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_046_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2442      fixation_cross    gabor_151 gabor_103 gabor_072 gabor_041    gabor_151 gabor_103_alt gabor_072 gabor_041_alt     "1_25_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_151_103_072_041_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_041_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_25_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2242      fixation_cross    gabor_179 gabor_109 gabor_064 gabor_048    gabor_179_alt gabor_109_alt gabor_064 gabor_048     "1_26_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_179_109_064_048_target_position_1_2_retrieval_position_1"          gabor_134_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_26_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_018 gabor_150 gabor_127 gabor_037    gabor_018 gabor_150_alt gabor_127_alt gabor_037     "1_27_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_018_150_127_037_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_077_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_27_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1792  2992  2342      fixation_cross    gabor_138 gabor_167 gabor_100 gabor_118    gabor_138 gabor_167 gabor_100_alt gabor_118_alt     "1_28_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2350_gabor_patch_orientation_138_167_100_118_target_position_3_4_retrieval_position_2"          gabor_circ gabor_031_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_28_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_031_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2142      fixation_cross    gabor_115 gabor_170 gabor_138 gabor_100    gabor_115 gabor_170_alt gabor_138 gabor_100_alt     "1_29_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_115_170_138_100_target_position_2_4_retrieval_position_2"          gabor_circ gabor_170_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_29_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2542      fixation_cross    gabor_022 gabor_159 gabor_053 gabor_176    gabor_022_alt gabor_159 gabor_053 gabor_176_alt     "1_30_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_022_159_053_176_target_position_1_4_retrieval_position_1"          gabor_022_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_30_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1892  2992  1942      fixation_cross    gabor_163 gabor_098 gabor_075 gabor_039    gabor_163 gabor_098_alt gabor_075 gabor_039_alt     "1_31_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_1950_gabor_patch_orientation_163_098_075_039_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_123_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_31_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_123_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  1992      fixation_cross    gabor_180 gabor_143 gabor_006 gabor_115    gabor_180 gabor_143_alt gabor_006 gabor_115_alt     "1_32_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_180_143_006_115_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_069_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_32_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2042      fixation_cross    gabor_007 gabor_089 gabor_173 gabor_024    gabor_007_alt gabor_089_alt gabor_173 gabor_024     "1_33_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_007_089_173_024_target_position_1_2_retrieval_position_1"          gabor_007_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_33_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_039 gabor_148 gabor_058 gabor_073    gabor_039_alt gabor_148 gabor_058_alt gabor_073     "1_34_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_039_148_058_073_target_position_1_3_retrieval_position_1"          gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_34_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2192      fixation_cross    gabor_166 gabor_141 gabor_080 gabor_010    gabor_166_alt gabor_141 gabor_080_alt gabor_010     "1_35_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_166_141_080_010_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_035_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_35_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  2092      fixation_cross    gabor_118 gabor_052 gabor_160 gabor_086    gabor_118_alt gabor_052 gabor_160 gabor_086_alt     "1_36_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_118_052_160_086_target_position_1_4_retrieval_position_1"          gabor_118_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_36_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2192      fixation_cross    gabor_027 gabor_087 gabor_053 gabor_143    gabor_027_alt gabor_087 gabor_053 gabor_143_alt     "1_37_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_027_087_053_143_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_143_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_37_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1742  2992  2342      fixation_cross    gabor_001 gabor_154 gabor_065 gabor_039    gabor_001_alt gabor_154 gabor_065 gabor_039_alt     "1_38_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2350_gabor_patch_orientation_001_154_065_039_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_065_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_38_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_065_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2492      fixation_cross    gabor_005 gabor_062 gabor_169 gabor_039    gabor_005_alt gabor_062 gabor_169_alt gabor_039     "1_39_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_005_062_169_039_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_121_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_39_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_121_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2542      fixation_cross    gabor_152 gabor_046 gabor_115 gabor_131    gabor_152 gabor_046_alt gabor_115_alt gabor_131     "1_40_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_152_046_115_131_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_070_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_40_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2192  2992  2142      fixation_cross    gabor_178 gabor_137 gabor_098 gabor_008    gabor_178 gabor_137_alt gabor_098_alt gabor_008     "1_41_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2150_gabor_patch_orientation_178_137_098_008_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_056_framed    blank blank blank blank    fixation_cross_target_position_2_3    "1_41_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_056_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2142      fixation_cross    gabor_082 gabor_016 gabor_142 gabor_105    gabor_082 gabor_016_alt gabor_142 gabor_105_alt     "1_42_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_082_016_142_105_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_105_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_42_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2292      fixation_cross    gabor_022 gabor_105 gabor_038 gabor_154    gabor_022_alt gabor_105 gabor_038_alt gabor_154     "1_43_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_022_105_038_154_target_position_1_3_retrieval_position_1"          gabor_022_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_43_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_123 gabor_095 gabor_018 gabor_037    gabor_123 gabor_095 gabor_018_alt gabor_037_alt     "1_44_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_123_095_018_037_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_176_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_44_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  1892      fixation_cross    gabor_154 gabor_048 gabor_133 gabor_026    gabor_154_alt gabor_048 gabor_133 gabor_026_alt     "1_45_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_154_048_133_026_target_position_1_4_retrieval_position_1"          gabor_105_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_45_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_105_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2042  2992  2592      fixation_cross    gabor_077 gabor_127 gabor_096 gabor_021    gabor_077_alt gabor_127_alt gabor_096 gabor_021     "1_46_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_2600_gabor_patch_orientation_077_127_096_021_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_021_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_46_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_021_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2092      fixation_cross    gabor_151 gabor_179 gabor_091 gabor_063    gabor_151 gabor_179 gabor_091_alt gabor_063_alt     "1_47_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_151_179_091_063_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_041_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_47_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  1892      fixation_cross    gabor_167 gabor_149 gabor_134 gabor_009    gabor_167 gabor_149_alt gabor_134_alt gabor_009     "1_48_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_167_149_134_009_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_134_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_48_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_093 gabor_013 gabor_051 gabor_159    gabor_093_alt gabor_013_alt gabor_051 gabor_159     "1_49_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_093_013_051_159_target_position_1_2_retrieval_position_1"          gabor_093_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_49_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2292      fixation_cross    gabor_173 gabor_037 gabor_062 gabor_124    gabor_173_alt gabor_037 gabor_062_alt gabor_124     "1_50_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_173_037_062_124_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_014_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_50_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2542      fixation_cross    gabor_141 gabor_085 gabor_124 gabor_160    gabor_141 gabor_085_alt gabor_124_alt gabor_160     "1_51_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_141_085_124_160_target_position_2_3_retrieval_position_2"          gabor_circ gabor_035_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_51_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1892  2992  1892      fixation_cross    gabor_092 gabor_074 gabor_138 gabor_161    gabor_092_alt gabor_074 gabor_138 gabor_161_alt     "1_52_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_1900_gabor_patch_orientation_092_074_138_161_target_position_1_4_retrieval_position_2"          gabor_circ gabor_027_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_52_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_027_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2092      fixation_cross    gabor_018 gabor_153 gabor_138 gabor_123    gabor_018 gabor_153_alt gabor_138 gabor_123_alt     "1_53_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_018_153_138_123_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_075_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_53_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_075_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  2242      fixation_cross    gabor_162 gabor_107 gabor_177 gabor_046    gabor_162_alt gabor_107_alt gabor_177 gabor_046     "1_54_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_162_107_177_046_target_position_1_2_retrieval_position_1"          gabor_162_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_54_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_162_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1992  2992  2092      fixation_cross    gabor_131 gabor_098 gabor_023 gabor_045    gabor_131 gabor_098 gabor_023_alt gabor_045_alt     "1_55_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_300_300_399_2000_3000_2100_gabor_patch_orientation_131_098_023_045_target_position_3_4_retrieval_position_1"          gabor_180_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_55_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_180_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2042      fixation_cross    gabor_141 gabor_054 gabor_113 gabor_028    gabor_141 gabor_054 gabor_113_alt gabor_028_alt     "1_56_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_141_054_113_028_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_028_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_56_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_028_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_067 gabor_137 gabor_016 gabor_093    gabor_067_alt gabor_137 gabor_016_alt gabor_093     "1_57_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_067_137_016_093_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_154_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_57_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2192      fixation_cross    gabor_151 gabor_136 gabor_088 gabor_169    gabor_151 gabor_136_alt gabor_088 gabor_169_alt     "1_58_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_151_136_088_169_target_position_2_4_retrieval_position_2"          gabor_circ gabor_136_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_58_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  1992      fixation_cross    gabor_005 gabor_134 gabor_113 gabor_152    gabor_005 gabor_134_alt gabor_113 gabor_152_alt     "1_59_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_005_134_113_152_target_position_2_4_retrieval_position_2"          gabor_circ gabor_088_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_59_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  1942      fixation_cross    gabor_087 gabor_060 gabor_177 gabor_138    gabor_087 gabor_060_alt gabor_177 gabor_138_alt     "1_60_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_087_060_177_138_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_003_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_60_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2192  2992  1892      fixation_cross    gabor_121 gabor_104 gabor_076 gabor_166    gabor_121_alt gabor_104 gabor_076_alt gabor_166     "1_61_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_1900_gabor_patch_orientation_121_104_076_166_target_position_1_3_retrieval_position_2"          gabor_circ gabor_104_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_61_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_104_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2292      fixation_cross    gabor_180 gabor_064 gabor_136 gabor_018    gabor_180 gabor_064 gabor_136_alt gabor_018_alt     "1_62_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_180_064_136_018_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_136_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_62_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2592      fixation_cross    gabor_175 gabor_154 gabor_065 gabor_026    gabor_175_alt gabor_154_alt gabor_065 gabor_026     "1_63_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_175_154_065_026_target_position_1_2_retrieval_position_2"          gabor_circ gabor_107_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_63_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_107_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1842  2992  2492      fixation_cross    gabor_126 gabor_069 gabor_040 gabor_004    gabor_126 gabor_069_alt gabor_040_alt gabor_004     "1_64_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2500_gabor_patch_orientation_126_069_040_004_target_position_2_3_retrieval_position_1"          gabor_126_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_64_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_126_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_085 gabor_173 gabor_008 gabor_143    gabor_085 gabor_173_alt gabor_008_alt gabor_143     "1_65_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_085_173_008_143_target_position_2_3_retrieval_position_2"          gabor_circ gabor_173_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_65_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  1892      fixation_cross    gabor_085 gabor_166 gabor_061 gabor_029    gabor_085_alt gabor_166 gabor_061_alt gabor_029     "1_66_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_085_166_061_029_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_011_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_66_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2392      fixation_cross    gabor_088 gabor_047 gabor_113 gabor_028    gabor_088_alt gabor_047_alt gabor_113 gabor_028     "1_67_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_088_047_113_028_target_position_1_2_retrieval_position_1"          gabor_088_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_67_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_079 gabor_006 gabor_115 gabor_168    gabor_079_alt gabor_006 gabor_115 gabor_168_alt     "1_68_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_079_006_115_168_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_168_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_68_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1892  2992  2592      fixation_cross    gabor_034 gabor_001 gabor_152 gabor_177    gabor_034_alt gabor_001_alt gabor_152 gabor_177     "1_69_Encoding_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2600_gabor_patch_orientation_034_001_152_177_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_152_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_69_Retrieval_Working_Memory_MEG_P3_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_152_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2042      fixation_cross    gabor_109 gabor_040 gabor_085 gabor_172    gabor_109_alt gabor_040 gabor_085 gabor_172_alt     "1_70_Encoding_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_109_040_085_172_target_position_1_4_retrieval_position_1"          gabor_154_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_70_Retrieval_Working_Memory_MEG_P3_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  