# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;	  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   44    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_171 gabor_058 gabor_144 gabor_033    gabor_171_alt gabor_058 gabor_144 gabor_033_alt      "2_1_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_171_058_144_033_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_144_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  1892      fixation_cross    gabor_176 gabor_131 gabor_065 gabor_093    gabor_176_alt gabor_131_alt gabor_065 gabor_093      "2_2_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_176_131_065_093_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_045_framed    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_006 gabor_058 gabor_120 gabor_096    gabor_006 gabor_058 gabor_120_alt gabor_096_alt      "2_3_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_006_058_120_096_target_position_1_2_retrieval_position_1"       gabor_006_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2542      fixation_cross    gabor_176 gabor_001 gabor_024 gabor_160    gabor_176 gabor_001 gabor_024_alt gabor_160_alt      "2_4_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_176_001_024_160_target_position_1_2_retrieval_position_2"       gabor_circ gabor_141_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  1942      fixation_cross    gabor_180 gabor_060 gabor_096 gabor_030    gabor_180 gabor_060_alt gabor_096 gabor_030_alt      "2_5_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_180_060_096_030_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_096_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1992  2992  1942      fixation_cross    gabor_058 gabor_040 gabor_168 gabor_004    gabor_058 gabor_040_alt gabor_168 gabor_004_alt      "2_6_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_058_040_168_004_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_168_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2492      fixation_cross    gabor_036 gabor_096 gabor_009 gabor_115    gabor_036_alt gabor_096 gabor_009 gabor_115_alt      "2_7_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_036_096_009_115_target_position_2_3_retrieval_position_2"       gabor_circ gabor_096_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2242  2992  2242      fixation_cross    gabor_058 gabor_145 gabor_035 gabor_019    gabor_058_alt gabor_145 gabor_035_alt gabor_019      "2_8_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2250_gabor_patch_orientation_058_145_035_019_target_position_2_4_retrieval_position_1"       gabor_103_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_103_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2242      fixation_cross    gabor_007 gabor_094 gabor_173 gabor_120    gabor_007_alt gabor_094 gabor_173_alt gabor_120      "2_9_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_007_094_173_120_target_position_2_4_retrieval_position_2"       gabor_circ gabor_049_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_140 gabor_034 gabor_011 gabor_056    gabor_140_alt gabor_034_alt gabor_011 gabor_056     "2_10_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_140_034_011_056_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_056_framed    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1992  2992  2192      fixation_cross    gabor_013 gabor_091 gabor_030 gabor_070    gabor_013_alt gabor_091 gabor_030_alt gabor_070     "2_11_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_013_091_030_070_target_position_2_4_retrieval_position_2"       gabor_circ gabor_091_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2042  2992  2242      fixation_cross    gabor_129 gabor_076 gabor_145 gabor_161    gabor_129 gabor_076_alt gabor_145 gabor_161_alt     "2_12_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_2250_gabor_patch_orientation_129_076_145_161_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_161_framed    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_161_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  1992      fixation_cross    gabor_085 gabor_024 gabor_059 gabor_130    gabor_085 gabor_024_alt gabor_059_alt gabor_130     "2_13_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_085_024_059_130_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_130_framed    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1942  2992  2542      fixation_cross    gabor_165 gabor_044 gabor_132 gabor_114    gabor_165 gabor_044_alt gabor_132 gabor_114_alt     "2_14_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_165_044_132_114_target_position_1_3_retrieval_position_1"       gabor_026_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2242      fixation_cross    gabor_152 gabor_129 gabor_063 gabor_078    gabor_152_alt gabor_129_alt gabor_063 gabor_078     "2_15_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_152_129_063_078_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_015_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1742  2992  2042      fixation_cross    gabor_087 gabor_120 gabor_056 gabor_105    gabor_087_alt gabor_120 gabor_056 gabor_105_alt     "2_16_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2050_gabor_patch_orientation_087_120_056_105_target_position_2_3_retrieval_position_1"       gabor_087_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_087_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_099 gabor_126 gabor_151 gabor_046    gabor_099_alt gabor_126 gabor_151_alt gabor_046     "2_17_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_099_126_151_046_target_position_2_4_retrieval_position_2"       gabor_circ gabor_078_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_131 gabor_104 gabor_063 gabor_042    gabor_131 gabor_104 gabor_063_alt gabor_042_alt     "2_18_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_131_104_063_042_target_position_1_2_retrieval_position_2"       gabor_circ gabor_104_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1942  2992  1892      fixation_cross    gabor_119 gabor_009 gabor_053 gabor_141    gabor_119_alt gabor_009 gabor_053_alt gabor_141     "2_19_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1950_3000_1900_gabor_patch_orientation_119_009_053_141_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_053_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_053_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2292      fixation_cross    gabor_112 gabor_176 gabor_133 gabor_159    gabor_112_alt gabor_176 gabor_133_alt gabor_159     "2_20_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_112_176_133_159_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_022_framed    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2142      fixation_cross    gabor_110 gabor_020 gabor_039 gabor_054    gabor_110_alt gabor_020 gabor_039_alt gabor_054     "2_21_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_110_020_039_054_target_position_2_4_retrieval_position_2"       gabor_circ gabor_070_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_004 gabor_110 gabor_157 gabor_172    gabor_004_alt gabor_110_alt gabor_157 gabor_172     "2_22_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_004_110_157_172_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_172_framed    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2092      fixation_cross    gabor_073 gabor_004 gabor_128 gabor_109    gabor_073_alt gabor_004 gabor_128_alt gabor_109     "2_23_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_073_004_128_109_target_position_2_4_retrieval_position_2"       gabor_circ gabor_004_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2242  2992  2442      fixation_cross    gabor_098 gabor_066 gabor_008 gabor_125    gabor_098 gabor_066_alt gabor_008 gabor_125_alt     "2_24_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_098_066_008_125_target_position_1_3_retrieval_position_1"       gabor_049_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_149 gabor_079 gabor_060 gabor_027    gabor_149_alt gabor_079_alt gabor_060 gabor_027     "2_25_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_149_079_060_027_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_027_framed    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_142 gabor_093 gabor_023 gabor_157    gabor_142 gabor_093_alt gabor_023 gabor_157_alt     "2_26_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_142_093_023_157_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_071_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1742  2992  2192      fixation_cross    gabor_084 gabor_165 gabor_020 gabor_060    gabor_084 gabor_165 gabor_020_alt gabor_060_alt     "2_27_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2200_gabor_patch_orientation_084_165_020_060_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_060_framed    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_060_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2192      fixation_cross    gabor_054 gabor_002 gabor_024 gabor_092    gabor_054 gabor_002_alt gabor_024 gabor_092_alt     "2_28_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_054_002_024_092_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_024_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2092  2992  1992      fixation_cross    gabor_007 gabor_173 gabor_068 gabor_128    gabor_007_alt gabor_173 gabor_068 gabor_128_alt     "2_29_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_007_173_068_128_target_position_2_3_retrieval_position_2"       gabor_circ gabor_038_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2242  2992  2392      fixation_cross    gabor_004 gabor_032 gabor_061 gabor_180    gabor_004 gabor_032_alt gabor_061_alt gabor_180     "2_30_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_004_032_061_180_target_position_1_4_retrieval_position_1"       gabor_143_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_147 gabor_041 gabor_020 gabor_110    gabor_147_alt gabor_041 gabor_020_alt gabor_110     "2_31_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_147_041_020_110_target_position_2_4_retrieval_position_2"       gabor_circ gabor_178_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1892  2992  1942      fixation_cross    gabor_032 gabor_163 gabor_106 gabor_049    gabor_032_alt gabor_163_alt gabor_106 gabor_049     "2_32_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_1950_gabor_patch_orientation_032_163_106_049_target_position_3_4_retrieval_position_1"       gabor_032_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_032_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  2042      fixation_cross    gabor_059 gabor_124 gabor_008 gabor_170    gabor_059_alt gabor_124 gabor_008_alt gabor_170     "2_33_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_059_124_008_170_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_170_framed    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2592      fixation_cross    gabor_140 gabor_031 gabor_156 gabor_002    gabor_140_alt gabor_031 gabor_156_alt gabor_002     "2_34_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_140_031_156_002_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_002_framed    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  1892      fixation_cross    gabor_084 gabor_173 gabor_038 gabor_103    gabor_084 gabor_173 gabor_038_alt gabor_103_alt     "2_35_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_084_173_038_103_target_position_1_2_retrieval_position_2"       gabor_circ gabor_173_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2392      fixation_cross    gabor_160 gabor_026 gabor_140 gabor_095    gabor_160 gabor_026_alt gabor_140_alt gabor_095     "2_36_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_160_026_140_095_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_095_framed    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_130 gabor_095 gabor_059 gabor_074    gabor_130_alt gabor_095_alt gabor_059 gabor_074     "2_37_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_130_095_059_074_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_074_framed    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1792  2992  1992      fixation_cross    gabor_001 gabor_016 gabor_121 gabor_139    gabor_001 gabor_016_alt gabor_121 gabor_139_alt     "2_38_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2000_gabor_patch_orientation_001_016_121_139_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_089_framed    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_089_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  1892      fixation_cross    gabor_160 gabor_035 gabor_019 gabor_053    gabor_160 gabor_035 gabor_019_alt gabor_053_alt     "2_39_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_160_035_019_053_target_position_1_2_retrieval_position_2"       gabor_circ gabor_035_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  1992      fixation_cross    gabor_149 gabor_124 gabor_169 gabor_015    gabor_149_alt gabor_124_alt gabor_169 gabor_015     "2_40_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_149_124_169_015_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_169_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1742  2992  2292      fixation_cross    gabor_121 gabor_177 gabor_042 gabor_161    gabor_121 gabor_177_alt gabor_042_alt gabor_161     "2_41_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2300_gabor_patch_orientation_121_177_042_161_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_087_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_087_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2392      fixation_cross    gabor_048 gabor_073 gabor_004 gabor_026    gabor_048_alt gabor_073 gabor_004_alt gabor_026     "2_42_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_048_073_004_026_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_026_framed    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2192  2992  2492      fixation_cross    gabor_109 gabor_175 gabor_021 gabor_149    gabor_109 gabor_175 gabor_021_alt gabor_149_alt     "2_43_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2500_gabor_patch_orientation_109_175_021_149_target_position_1_2_retrieval_position_1"       gabor_061_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2442      fixation_cross    gabor_010 gabor_147 gabor_040 gabor_083    gabor_010 gabor_147_alt gabor_040_alt gabor_083     "2_44_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_010_147_040_083_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_083_framed    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  2542      fixation_cross    gabor_135 gabor_172 gabor_008 gabor_064    gabor_135 gabor_172_alt gabor_008_alt gabor_064     "2_45_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_135_172_008_064_target_position_1_4_retrieval_position_1"       gabor_135_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2242      fixation_cross    gabor_073 gabor_133 gabor_158 gabor_096    gabor_073 gabor_133 gabor_158_alt gabor_096_alt     "2_46_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_073_133_158_096_target_position_1_2_retrieval_position_1"       gabor_026_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1842  2992  2542      fixation_cross    gabor_070 gabor_136 gabor_095 gabor_008    gabor_070_alt gabor_136 gabor_095 gabor_008_alt     "2_47_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2550_gabor_patch_orientation_070_136_095_008_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_053_framed    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_053_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_062 gabor_103 gabor_170 gabor_151    gabor_062_alt gabor_103_alt gabor_170 gabor_151     "2_48_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_062_103_170_151_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_016_framed    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2442      fixation_cross    gabor_154 gabor_068 gabor_048 gabor_015    gabor_154 gabor_068_alt gabor_048 gabor_015_alt     "2_49_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_154_068_048_015_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_094_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1792  2992  2442      fixation_cross    gabor_006 gabor_121 gabor_038 gabor_086    gabor_006_alt gabor_121_alt gabor_038 gabor_086     "2_50_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_006_121_038_086_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_038_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2492      fixation_cross    gabor_117 gabor_175 gabor_089 gabor_038    gabor_117 gabor_175 gabor_089_alt gabor_038_alt     "2_51_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_117_175_089_038_target_position_1_2_retrieval_position_1"       gabor_068_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1942  2992  2042      fixation_cross    gabor_142 gabor_092 gabor_068 gabor_028    gabor_142_alt gabor_092 gabor_068_alt gabor_028     "2_52_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2050_gabor_patch_orientation_142_092_068_028_target_position_2_4_retrieval_position_1"       gabor_007_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_007_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1792  2992  2342      fixation_cross    gabor_162 gabor_128 gabor_039 gabor_144    gabor_162_alt gabor_128 gabor_039_alt gabor_144     "2_53_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_162_128_039_144_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_144_framed    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_177 gabor_133 gabor_025 gabor_007    gabor_177_alt gabor_133 gabor_025_alt gabor_007     "2_54_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_177_133_025_007_target_position_2_4_retrieval_position_2"       gabor_circ gabor_087_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2142  2992  2092      fixation_cross    gabor_153 gabor_131 gabor_096 gabor_116    gabor_153_alt gabor_131_alt gabor_096 gabor_116     "2_55_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2100_gabor_patch_orientation_153_131_096_116_target_position_3_4_retrieval_position_2"       gabor_circ gabor_131_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_131_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2342      fixation_cross    gabor_101 gabor_081 gabor_155 gabor_040    gabor_101 gabor_081 gabor_155_alt gabor_040_alt     "2_56_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_101_081_155_040_target_position_1_2_retrieval_position_2"       gabor_circ gabor_126_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  2292      fixation_cross    gabor_100 gabor_154 gabor_085 gabor_125    gabor_100 gabor_154_alt gabor_085 gabor_125_alt     "2_57_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_100_154_085_125_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_085_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  2042      fixation_cross    gabor_064 gabor_179 gabor_091 gabor_037    gabor_064 gabor_179_alt gabor_091 gabor_037_alt     "2_58_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_064_179_091_037_target_position_1_3_retrieval_position_1"       gabor_112_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1742  2992  1992      fixation_cross    gabor_001 gabor_117 gabor_085 gabor_037    gabor_001 gabor_117_alt gabor_085_alt gabor_037     "2_59_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2000_gabor_patch_orientation_001_117_085_037_target_position_1_4_retrieval_position_2"       gabor_circ gabor_162_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_162_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_006 gabor_143 gabor_062 gabor_175    gabor_006 gabor_143 gabor_062_alt gabor_175_alt     "2_60_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_006_143_062_175_target_position_1_2_retrieval_position_2"       gabor_circ gabor_143_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2192  2992  2342      fixation_cross    gabor_058 gabor_178 gabor_099 gabor_034    gabor_058 gabor_178_alt gabor_099_alt gabor_034     "2_61_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_058_178_099_034_target_position_1_4_retrieval_position_1"       gabor_012_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  1892      fixation_cross    gabor_066 gabor_109 gabor_046 gabor_002    gabor_066 gabor_109 gabor_046_alt gabor_002_alt     "2_62_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_1900_gabor_patch_orientation_066_109_046_002_target_position_1_2_retrieval_position_2"       gabor_circ gabor_155_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2592      fixation_cross    gabor_098 gabor_035 gabor_150 gabor_175    gabor_098 gabor_035_alt gabor_150 gabor_175_alt     "2_63_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_098_035_150_175_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_011_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2092  2992  1942      fixation_cross    gabor_132 gabor_109 gabor_003 gabor_049    gabor_132_alt gabor_109 gabor_003_alt gabor_049     "2_64_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_1950_gabor_patch_orientation_132_109_003_049_target_position_2_4_retrieval_position_1"       gabor_180_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_180_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2292      fixation_cross    gabor_170 gabor_128 gabor_085 gabor_147    gabor_170 gabor_128_alt gabor_085_alt gabor_147     "2_65_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_170_128_085_147_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_147_framed    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_147_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_116 gabor_131 gabor_172 gabor_001    gabor_116 gabor_131 gabor_172_alt gabor_001_alt     "2_66_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_116_131_172_001_target_position_1_2_retrieval_position_2"       gabor_circ gabor_082_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_159 gabor_136 gabor_114 gabor_099    gabor_159 gabor_136_alt gabor_114 gabor_099_alt     "2_67_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_159_136_114_099_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_069_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2192  2992  2192      fixation_cross    gabor_143 gabor_029 gabor_053 gabor_073    gabor_143_alt gabor_029 gabor_053_alt gabor_073     "2_68_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_143_029_053_073_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_118_framed    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1992  2992  2592      fixation_cross    gabor_031 gabor_004 gabor_110 gabor_160    gabor_031_alt gabor_004 gabor_110_alt gabor_160     "2_69_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2000_3000_2600_gabor_patch_orientation_031_004_110_160_target_position_2_4_retrieval_position_1"       gabor_031_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_031_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  2392      fixation_cross    gabor_157 gabor_042 gabor_094 gabor_069    gabor_157 gabor_042_alt gabor_094_alt gabor_069     "2_70_Encoding_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_157_042_094_069_target_position_1_4_retrieval_position_1"       gabor_112_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P3_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  