# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;

# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    61   292   292   399   125  1892  2992  2192      fixation_cross    gabor_096 gabor_010 gabor_056 gabor_173    gabor_096 gabor_010_alt gabor_056 gabor_173_alt      "1_1_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_096_010_056_173_target_position_2_4_retrieval_position_2"          gabor_circ gabor_146_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "1_1_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  2542      fixation_cross    gabor_004 gabor_064 gabor_082 gabor_127    gabor_004_alt gabor_064 gabor_082 gabor_127_alt      "1_2_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_004_064_082_127_target_position_1_4_retrieval_position_1"          gabor_004_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "1_2_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  2592      fixation_cross    gabor_036 gabor_065 gabor_175 gabor_146    gabor_036_alt gabor_065_alt gabor_175 gabor_146      "1_3_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_036_065_175_146_target_position_1_2_retrieval_position_1"          gabor_085_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_3_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_094 gabor_007 gabor_116 gabor_150    gabor_094_alt gabor_007 gabor_116_alt gabor_150      "1_4_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_094_007_116_150_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_068_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_4_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  2492      fixation_cross    gabor_172 gabor_041 gabor_154 gabor_124    gabor_172 gabor_041_alt gabor_154_alt gabor_124      "1_5_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_172_041_154_124_target_position_2_3_retrieval_position_2"          gabor_circ gabor_090_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_5_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2342      fixation_cross    gabor_057 gabor_172 gabor_140 gabor_023    gabor_057_alt gabor_172 gabor_140 gabor_023_alt      "1_6_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_057_172_140_023_target_position_1_4_retrieval_position_1"          gabor_057_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "1_6_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_057_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1992  2992  2092      fixation_cross    gabor_018 gabor_147 gabor_059 gabor_176    gabor_018_alt gabor_147_alt gabor_059 gabor_176      "1_7_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_2000_3000_2100_gabor_patch_orientation_018_147_059_176_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_105_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_7_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_105_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2142      fixation_cross    gabor_148 gabor_043 gabor_124 gabor_175    gabor_148_alt gabor_043_alt gabor_124 gabor_175      "1_8_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_148_043_124_175_target_position_1_2_retrieval_position_2"          gabor_circ gabor_043_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_8_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2042  2992  2542      fixation_cross    gabor_057 gabor_127 gabor_086 gabor_009    gabor_057_alt gabor_127 gabor_086_alt gabor_009      "1_9_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_2550_gabor_patch_orientation_057_127_086_009_target_position_1_3_retrieval_position_2"          gabor_circ gabor_127_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_9_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_127_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2092  2992  2592      fixation_cross    gabor_079 gabor_064 gabor_129 gabor_019    gabor_079_alt gabor_064 gabor_129 gabor_019_alt     "1_10_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2600_gabor_patch_orientation_079_064_129_019_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_019_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_10_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_019_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  1992      fixation_cross    gabor_106 gabor_150 gabor_132 gabor_042    gabor_106 gabor_150_alt gabor_132 gabor_042_alt     "1_11_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_106_150_132_042_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_042_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_11_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_169 gabor_006 gabor_028 gabor_046    gabor_169 gabor_006 gabor_028_alt gabor_046_alt     "1_12_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_169_006_028_046_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_092_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_12_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2342      fixation_cross    gabor_180 gabor_092 gabor_131 gabor_063    gabor_180 gabor_092 gabor_131_alt gabor_063_alt     "1_13_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_180_092_131_063_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_063_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_13_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_177 gabor_095 gabor_161 gabor_110    gabor_177 gabor_095 gabor_161_alt gabor_110_alt     "1_14_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_177_095_161_110_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_024_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_14_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  1892      fixation_cross    gabor_072 gabor_100 gabor_020 gabor_045    gabor_072 gabor_100 gabor_020_alt gabor_045_alt     "1_15_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_072_100_020_045_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_158_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_15_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_178 gabor_038 gabor_151 gabor_004    gabor_178 gabor_038_alt gabor_151 gabor_004_alt     "1_16_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_178_038_151_004_target_position_2_4_retrieval_position_2"          gabor_circ gabor_038_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_16_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2192  2992  2092      fixation_cross    gabor_005 gabor_151 gabor_094 gabor_133    gabor_005 gabor_151_alt gabor_094 gabor_133_alt     "1_17_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_2100_gabor_patch_orientation_005_151_094_133_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_094_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_17_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_094_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  2442      fixation_cross    gabor_003 gabor_055 gabor_134 gabor_026    gabor_003 gabor_055 gabor_134_alt gabor_026_alt     "1_18_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_003_055_134_026_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_088_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_18_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2492      fixation_cross    gabor_062 gabor_180 gabor_091 gabor_027    gabor_062_alt gabor_180 gabor_091_alt gabor_027     "1_19_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_062_180_091_027_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_091_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_19_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2092  2992  2392      fixation_cross    gabor_034 gabor_081 gabor_110 gabor_003    gabor_034_alt gabor_081 gabor_110_alt gabor_003     "1_20_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_034_081_110_003_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_110_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_20_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_110_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  2192  2992  1992      fixation_cross    gabor_024 gabor_112 gabor_045 gabor_097    gabor_024 gabor_112_alt gabor_045_alt gabor_097     "1_21_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2000_gabor_patch_orientation_024_112_045_097_target_position_2_3_retrieval_position_1"          gabor_162_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_21_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_162_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_042 gabor_179 gabor_125 gabor_066    gabor_042 gabor_179 gabor_125_alt gabor_066_alt     "1_22_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_042_179_125_066_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_017_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_22_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_129 gabor_176 gabor_088 gabor_112    gabor_129 gabor_176_alt gabor_088 gabor_112_alt     "1_23_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_129_176_088_112_target_position_2_4_retrieval_position_2"          gabor_circ gabor_176_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_23_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1742  2992  2192      fixation_cross    gabor_083 gabor_128 gabor_009 gabor_156    gabor_083_alt gabor_128 gabor_009 gabor_156_alt     "1_24_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2200_gabor_patch_orientation_083_128_009_156_target_position_1_4_retrieval_position_2"          gabor_circ gabor_173_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_24_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_173_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_170 gabor_057 gabor_097 gabor_117    gabor_170 gabor_057_alt gabor_097 gabor_117_alt     "1_25_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_170_057_097_117_target_position_2_4_retrieval_position_2"          gabor_circ gabor_057_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_25_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_057_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2042      fixation_cross    gabor_106 gabor_030 gabor_080 gabor_151    gabor_106 gabor_030_alt gabor_080_alt gabor_151     "1_26_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_106_030_080_151_target_position_2_3_retrieval_position_2"          gabor_circ gabor_167_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_26_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_157 gabor_017 gabor_083 gabor_037    gabor_157_alt gabor_017_alt gabor_083 gabor_037     "1_27_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_157_017_083_037_target_position_1_2_retrieval_position_2"          gabor_circ gabor_017_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_27_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2542      fixation_cross    gabor_089 gabor_166 gabor_149 gabor_025    gabor_089_alt gabor_166_alt gabor_149 gabor_025     "1_28_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_089_166_149_025_target_position_1_2_retrieval_position_1"          gabor_043_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_28_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2242  2992  2192      fixation_cross    gabor_116 gabor_009 gabor_026 gabor_054    gabor_116 gabor_009 gabor_026_alt gabor_054_alt     "1_29_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2200_gabor_patch_orientation_116_009_026_054_target_position_3_4_retrieval_position_1"          gabor_116_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_29_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_116_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  2142      fixation_cross    gabor_141 gabor_013 gabor_032 gabor_098    gabor_141 gabor_013_alt gabor_032 gabor_098_alt     "1_30_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_141_013_032_098_target_position_2_4_retrieval_position_2"          gabor_circ gabor_061_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_30_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2542      fixation_cross    gabor_092 gabor_180 gabor_128 gabor_009    gabor_092_alt gabor_180 gabor_128 gabor_009_alt     "1_31_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_092_180_128_009_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_054_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_31_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  2392      fixation_cross    gabor_049 gabor_081 gabor_111 gabor_006    gabor_049_alt gabor_081 gabor_111_alt gabor_006     "1_32_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2400_gabor_patch_orientation_049_081_111_006_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_158_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_32_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  2242      fixation_cross    gabor_049 gabor_118 gabor_013 gabor_168    gabor_049_alt gabor_118_alt gabor_013 gabor_168     "1_33_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_049_118_013_168_target_position_1_2_retrieval_position_1"          gabor_049_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_33_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  1892      fixation_cross    gabor_033 gabor_115 gabor_009 gabor_091    gabor_033_alt gabor_115 gabor_009 gabor_091_alt     "1_34_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_033_115_009_091_target_position_1_4_retrieval_position_1"          gabor_170_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_34_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1892  2992  2192      fixation_cross    gabor_109 gabor_130 gabor_001 gabor_020    gabor_109_alt gabor_130 gabor_001 gabor_020_alt     "1_35_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2200_gabor_patch_orientation_109_130_001_020_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_046_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_35_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_046_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_134 gabor_113 gabor_088 gabor_023    gabor_134_alt gabor_113_alt gabor_088 gabor_023     "1_36_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_134_113_088_023_target_position_1_2_retrieval_position_2"          gabor_circ gabor_113_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_36_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  1892      fixation_cross    gabor_039 gabor_092 gabor_059 gabor_175    gabor_039 gabor_092_alt gabor_059_alt gabor_175     "1_37_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_039_092_059_175_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_010_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_37_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1942  2992  2092      fixation_cross    gabor_063 gabor_148 gabor_001 gabor_078    gabor_063 gabor_148_alt gabor_001 gabor_078_alt     "1_38_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_063_148_001_078_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_078_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_38_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  2142      fixation_cross    gabor_095 gabor_175 gabor_021 gabor_060    gabor_095 gabor_175_alt gabor_021_alt gabor_060     "1_39_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_095_175_021_060_target_position_2_3_retrieval_position_2"          gabor_circ gabor_127_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_39_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_123 gabor_072 gabor_092 gabor_016    gabor_123 gabor_072 gabor_092_alt gabor_016_alt     "1_40_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_123_072_092_016_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_141_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_40_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  2442      fixation_cross    gabor_025 gabor_112 gabor_077 gabor_002    gabor_025 gabor_112 gabor_077_alt gabor_002_alt     "1_41_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2450_gabor_patch_orientation_025_112_077_002_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_047_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_41_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_047_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1742  2992  1942      fixation_cross    gabor_171 gabor_115 gabor_005 gabor_083    gabor_171 gabor_115_alt gabor_005 gabor_083_alt     "1_42_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_1950_gabor_patch_orientation_171_115_005_083_target_position_2_4_retrieval_position_1"          gabor_032_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_42_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_032_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  2492      fixation_cross    gabor_061 gabor_041 gabor_005 gabor_178    gabor_061_alt gabor_041 gabor_005 gabor_178_alt     "1_43_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_061_041_005_178_target_position_1_4_retrieval_position_1"          gabor_111_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_43_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_172 gabor_095 gabor_123 gabor_035    gabor_172_alt gabor_095_alt gabor_123 gabor_035     "1_44_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_172_095_123_035_target_position_1_2_retrieval_position_2"          gabor_circ gabor_144_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_44_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1742  2992  2492      fixation_cross    gabor_179 gabor_136 gabor_121 gabor_051    gabor_179 gabor_136_alt gabor_121 gabor_051_alt     "1_45_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2500_gabor_patch_orientation_179_136_121_051_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_121_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_45_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_121_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  1942      fixation_cross    gabor_025 gabor_135 gabor_059 gabor_172    gabor_025_alt gabor_135_alt gabor_059 gabor_172     "1_46_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_025_135_059_172_target_position_1_2_retrieval_position_2"          gabor_circ gabor_135_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_46_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2092  2992  2042      fixation_cross    gabor_073 gabor_040 gabor_056 gabor_093    gabor_073 gabor_040_alt gabor_056 gabor_093_alt     "1_47_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_073_040_056_093_target_position_2_4_retrieval_position_2"          gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_47_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2342      fixation_cross    gabor_146 gabor_010 gabor_088 gabor_124    gabor_146 gabor_010_alt gabor_088_alt gabor_124     "1_48_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_146_010_088_124_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_088_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_48_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1742  2992  1942      fixation_cross    gabor_158 gabor_041 gabor_115 gabor_071    gabor_158 gabor_041_alt gabor_115_alt gabor_071     "1_49_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_1950_gabor_patch_orientation_158_041_115_071_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_025_framed    blank blank blank blank    fixation_cross_target_position_2_3    "1_49_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_025_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2042  2992  2292      fixation_cross    gabor_077 gabor_110 gabor_165 gabor_043    gabor_077 gabor_110_alt gabor_165 gabor_043_alt     "1_50_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_077_110_165_043_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_093_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_50_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  1892      fixation_cross    gabor_004 gabor_077 gabor_134 gabor_111    gabor_004_alt gabor_077_alt gabor_134 gabor_111     "1_51_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_004_077_134_111_target_position_1_2_retrieval_position_1"          gabor_004_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_51_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  2042      fixation_cross    gabor_083 gabor_066 gabor_033 gabor_142    gabor_083 gabor_066_alt gabor_033 gabor_142_alt     "1_52_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_083_066_033_142_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_003_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_52_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2592      fixation_cross    gabor_074 gabor_120 gabor_096 gabor_012    gabor_074 gabor_120 gabor_096_alt gabor_012_alt     "1_53_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_074_120_096_012_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_049_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_53_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_167 gabor_058 gabor_144 gabor_027    gabor_167_alt gabor_058 gabor_144 gabor_027_alt     "1_54_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_167_058_144_027_target_position_1_4_retrieval_position_1"          gabor_167_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_54_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_027 gabor_148 gabor_106 gabor_133    gabor_027 gabor_148 gabor_106_alt gabor_133_alt     "1_55_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_027_148_106_133_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_133_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_55_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_133_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  2342      fixation_cross    gabor_102 gabor_034 gabor_178 gabor_071    gabor_102_alt gabor_034 gabor_178 gabor_071_alt     "1_56_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_102_034_178_071_target_position_1_4_retrieval_position_1"          gabor_150_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_56_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  2292      fixation_cross    gabor_149 gabor_015 gabor_174 gabor_061    gabor_149 gabor_015_alt gabor_174_alt gabor_061     "1_57_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_149_015_174_061_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_038_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_57_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1892  2992  2442      fixation_cross    gabor_094 gabor_174 gabor_017 gabor_126    gabor_094 gabor_174 gabor_017_alt gabor_126_alt     "1_58_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2450_gabor_patch_orientation_094_174_017_126_target_position_3_4_retrieval_position_2"          gabor_circ gabor_174_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_58_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_174_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  1942      fixation_cross    gabor_134 gabor_075 gabor_151 gabor_094    gabor_134 gabor_075 gabor_151_alt gabor_094_alt     "1_59_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_134_075_151_094_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_151_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_59_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_180 gabor_130 gabor_150 gabor_013    gabor_180 gabor_130 gabor_150_alt gabor_013_alt     "1_60_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_180_130_150_013_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_013_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_60_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_013_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2042      fixation_cross    gabor_008 gabor_069 gabor_038 gabor_095    gabor_008 gabor_069 gabor_038_alt gabor_095_alt     "1_61_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_008_069_038_095_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_038_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_61_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1942  2992  2442      fixation_cross    gabor_043 gabor_163 gabor_089 gabor_107    gabor_043_alt gabor_163 gabor_089_alt gabor_107     "1_62_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2450_gabor_patch_orientation_043_163_089_107_target_position_1_3_retrieval_position_2"          gabor_circ gabor_024_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_62_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_024_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  2392      fixation_cross    gabor_086 gabor_163 gabor_002 gabor_017    gabor_086_alt gabor_163_alt gabor_002 gabor_017     "1_63_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_086_163_002_017_target_position_1_2_retrieval_position_1"          gabor_086_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_63_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_086_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  1892      fixation_cross    gabor_163 gabor_131 gabor_105 gabor_018    gabor_163_alt gabor_131_alt gabor_105 gabor_018     "1_64_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_163_131_105_018_target_position_1_2_retrieval_position_2"          gabor_circ gabor_131_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_64_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_077 gabor_156 gabor_046 gabor_102    gabor_077_alt gabor_156_alt gabor_046 gabor_102     "1_65_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_077_156_046_102_target_position_1_2_retrieval_position_2"          gabor_circ gabor_156_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_65_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2142  2992  2342      fixation_cross    gabor_084 gabor_051 gabor_174 gabor_135    gabor_084 gabor_051 gabor_174_alt gabor_135_alt     "1_66_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2150_3000_2350_gabor_patch_orientation_084_051_174_135_target_position_3_4_retrieval_position_2"          gabor_circ gabor_051_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_66_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_051_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  2042      fixation_cross    gabor_033 gabor_146 gabor_101 gabor_164    gabor_033_alt gabor_146 gabor_101 gabor_164_alt     "1_67_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_033_146_101_164_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_117_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_67_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  1992      fixation_cross    gabor_035 gabor_123 gabor_068 gabor_092    gabor_035 gabor_123 gabor_068_alt gabor_092_alt     "1_68_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_035_123_068_092_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_141_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_68_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2092  2992  2142      fixation_cross    gabor_093 gabor_075 gabor_180 gabor_052    gabor_093 gabor_075_alt gabor_180_alt gabor_052     "1_69_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2150_gabor_patch_orientation_093_075_180_052_target_position_2_3_retrieval_position_1"          gabor_093_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_69_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_093_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2192      fixation_cross    gabor_047 gabor_166 gabor_116 gabor_135    gabor_047_alt gabor_166 gabor_116 gabor_135_alt     "1_70_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_047_166_116_135_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_135_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_70_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  