# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_061 gabor_120 gabor_015 gabor_043    gabor_061_alt gabor_120_alt gabor_015 gabor_043      "2_1_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_061_120_015_043_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_151_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_1_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_147 gabor_041 gabor_070 gabor_110    gabor_147_alt gabor_041_alt gabor_070 gabor_110      "2_2_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_147_041_070_110_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_020_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_2_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  2492      fixation_cross    gabor_156 gabor_091 gabor_134 gabor_011    gabor_156_alt gabor_091 gabor_134 gabor_011_alt      "2_3_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2500_gabor_patch_orientation_156_091_134_011_target_position_2_3_retrieval_position_2"       gabor_circ gabor_044_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_3_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  1942      fixation_cross    gabor_057 gabor_168 gabor_037 gabor_009    gabor_057_alt gabor_168 gabor_037 gabor_009_alt      "2_4_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_057_168_037_009_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_084_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_4_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  1892      fixation_cross    gabor_064 gabor_039 gabor_124 gabor_086    gabor_064_alt gabor_039_alt gabor_124 gabor_086      "2_5_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_064_039_124_086_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_124_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_5_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1942  2992  2342      fixation_cross    gabor_026 gabor_139 gabor_116 gabor_063    gabor_026_alt gabor_139 gabor_116 gabor_063_alt      "2_6_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_026_139_116_063_target_position_2_3_retrieval_position_2"       gabor_circ gabor_139_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_6_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2142  2992  2442      fixation_cross    gabor_022 gabor_065 gabor_148 gabor_041    gabor_022 gabor_065_alt gabor_148 gabor_041_alt      "2_7_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_2450_gabor_patch_orientation_022_065_148_041_target_position_1_3_retrieval_position_2"       gabor_circ gabor_112_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_7_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_112_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  1892      fixation_cross    gabor_117 gabor_011 gabor_144 gabor_079    gabor_117 gabor_011_alt gabor_144_alt gabor_079      "2_8_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_117_011_144_079_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_034_framed    blank blank blank blank    fixation_cross_target_position_1_4     "2_8_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1892  2992  1892      fixation_cross    gabor_106 gabor_127 gabor_048 gabor_086    gabor_106_alt gabor_127_alt gabor_048 gabor_086      "2_9_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_1900_gabor_patch_orientation_106_127_048_086_target_position_3_4_retrieval_position_2"       gabor_circ gabor_127_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_9_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_127_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_113 gabor_091 gabor_034 gabor_141    gabor_113_alt gabor_091_alt gabor_034 gabor_141     "2_10_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_113_091_034_141_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_141_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_10_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2242      fixation_cross    gabor_043 gabor_112 gabor_127 gabor_061    gabor_043 gabor_112_alt gabor_127 gabor_061_alt     "2_11_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_043_112_127_061_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_127_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_11_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  1892      fixation_cross    gabor_059 gabor_088 gabor_144 gabor_112    gabor_059 gabor_088 gabor_144_alt gabor_112_alt     "2_12_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_059_088_144_112_target_position_1_2_retrieval_position_2"       gabor_circ gabor_038_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_12_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_097 gabor_032 gabor_154 gabor_007    gabor_097 gabor_032_alt gabor_154_alt gabor_007     "2_13_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_097_032_154_007_target_position_1_4_retrieval_position_1"       gabor_048_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_13_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2142      fixation_cross    gabor_089 gabor_110 gabor_047 gabor_177    gabor_089_alt gabor_110_alt gabor_047 gabor_177     "2_14_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_089_110_047_177_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_177_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_14_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2092      fixation_cross    gabor_043 gabor_008 gabor_148 gabor_025    gabor_043_alt gabor_008 gabor_148 gabor_025_alt     "2_15_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_043_008_148_025_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_098_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_15_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2142  2992  2242      fixation_cross    gabor_177 gabor_155 gabor_071 gabor_047    gabor_177_alt gabor_155_alt gabor_071 gabor_047     "2_16_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2250_gabor_patch_orientation_177_155_071_047_target_position_3_4_retrieval_position_1"       gabor_177_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_16_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_177_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2042  2992  2142      fixation_cross    gabor_136 gabor_026 gabor_048 gabor_089    gabor_136 gabor_026_alt gabor_048_alt gabor_089     "2_17_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_136_026_048_089_target_position_1_4_retrieval_position_1"       gabor_001_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_17_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2192      fixation_cross    gabor_047 gabor_003 gabor_064 gabor_128    gabor_047_alt gabor_003 gabor_064 gabor_128_alt     "2_18_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_047_003_064_128_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_112_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_18_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1792  2992  2192      fixation_cross    gabor_139 gabor_011 gabor_095 gabor_074    gabor_139 gabor_011 gabor_095_alt gabor_074_alt     "2_19_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2200_gabor_patch_orientation_139_011_095_074_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_095_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_19_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_095_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  2392      fixation_cross    gabor_135 gabor_093 gabor_049 gabor_027    gabor_135 gabor_093_alt gabor_049 gabor_027_alt     "2_20_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_135_093_049_027_target_position_1_3_retrieval_position_1"       gabor_135_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_20_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  2592      fixation_cross    gabor_097 gabor_081 gabor_164 gabor_025    gabor_097 gabor_081 gabor_164_alt gabor_025_alt     "2_21_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_097_081_164_025_target_position_1_2_retrieval_position_1"       gabor_050_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_21_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2092      fixation_cross    gabor_006 gabor_036 gabor_152 gabor_115    gabor_006 gabor_036 gabor_152_alt gabor_115_alt     "2_22_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_006_036_152_115_target_position_1_2_retrieval_position_2"       gabor_circ gabor_081_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_22_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_113 gabor_001 gabor_059 gabor_174    gabor_113_alt gabor_001 gabor_059 gabor_174_alt     "2_23_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_113_001_059_174_target_position_2_3_retrieval_position_2"       gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_23_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1942  2992  2592      fixation_cross    gabor_144 gabor_068 gabor_124 gabor_001    gabor_144 gabor_068 gabor_124_alt gabor_001_alt     "2_24_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_144_068_124_001_target_position_1_2_retrieval_position_2"       gabor_circ gabor_068_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_24_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1742  2992  2292      fixation_cross    gabor_048 gabor_116 gabor_003 gabor_172    gabor_048_alt gabor_116 gabor_003_alt gabor_172     "2_25_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2300_gabor_patch_orientation_048_116_003_172_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_003_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_25_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_003_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  1992      fixation_cross    gabor_098 gabor_177 gabor_062 gabor_047    gabor_098_alt gabor_177 gabor_062 gabor_047_alt     "2_26_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_098_177_062_047_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_062_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_26_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_062_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  2342      fixation_cross    gabor_008 gabor_137 gabor_156 gabor_068    gabor_008_alt gabor_137 gabor_156_alt gabor_068     "2_27_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_008_137_156_068_target_position_2_4_retrieval_position_2"       gabor_circ gabor_092_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_27_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  1942      fixation_cross    gabor_099 gabor_157 gabor_027 gabor_067    gabor_099_alt gabor_157_alt gabor_027 gabor_067     "2_28_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_1950_gabor_patch_orientation_099_157_027_067_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_067_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_28_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  1992      fixation_cross    gabor_031 gabor_173 gabor_118 gabor_144    gabor_031_alt gabor_173_alt gabor_118 gabor_144     "2_29_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_031_173_118_144_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_095_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_29_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1942  2992  1942      fixation_cross    gabor_144 gabor_116 gabor_088 gabor_172    gabor_144 gabor_116_alt gabor_088 gabor_172_alt     "2_30_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1950_3000_1950_gabor_patch_orientation_144_116_088_172_target_position_1_3_retrieval_position_2"       gabor_circ gabor_116_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_30_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_116_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  2242      fixation_cross    gabor_019 gabor_142 gabor_081 gabor_052    gabor_019 gabor_142 gabor_081_alt gabor_052_alt     "2_31_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_019_142_081_052_target_position_1_2_retrieval_position_2"       gabor_circ gabor_002_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_31_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  2392      fixation_cross    gabor_172 gabor_116 gabor_002 gabor_043    gabor_172_alt gabor_116 gabor_002 gabor_043_alt     "2_32_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_172_116_002_043_target_position_2_3_retrieval_position_2"       gabor_circ gabor_066_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_32_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  2442      fixation_cross    gabor_051 gabor_027 gabor_139 gabor_113    gabor_051 gabor_027_alt gabor_139 gabor_113_alt     "2_33_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_051_027_139_113_target_position_1_3_retrieval_position_1"       gabor_005_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_33_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2242      fixation_cross    gabor_098 gabor_072 gabor_145 gabor_115    gabor_098_alt gabor_072 gabor_145_alt gabor_115     "2_34_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_098_072_145_115_target_position_2_4_retrieval_position_2"       gabor_circ gabor_025_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_34_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  1942      fixation_cross    gabor_150 gabor_026 gabor_066 gabor_084    gabor_150_alt gabor_026_alt gabor_066 gabor_084     "2_35_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_150_026_066_084_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_084_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_35_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_156 gabor_087 gabor_129 gabor_111    gabor_156_alt gabor_087 gabor_129_alt gabor_111     "2_36_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_156_087_129_111_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_111_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_36_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_034 gabor_147 gabor_099 gabor_121    gabor_034 gabor_147_alt gabor_099_alt gabor_121     "2_37_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_034_147_099_121_target_position_1_4_retrieval_position_1"       gabor_034_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_37_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1742  2992  2042      fixation_cross    gabor_078 gabor_049 gabor_136 gabor_162    gabor_078 gabor_049 gabor_136_alt gabor_162_alt     "2_38_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2050_gabor_patch_orientation_078_049_136_162_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_001_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_38_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_001_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2542      fixation_cross    gabor_129 gabor_085 gabor_047 gabor_172    gabor_129 gabor_085_alt gabor_047 gabor_172_alt     "2_39_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_129_085_047_172_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_047_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_39_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_047_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2042      fixation_cross    gabor_140 gabor_001 gabor_170 gabor_059    gabor_140 gabor_001_alt gabor_170 gabor_059_alt     "2_40_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_140_001_170_059_target_position_1_3_retrieval_position_1"       gabor_091_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_40_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2192  2992  2292      fixation_cross    gabor_004 gabor_048 gabor_029 gabor_065    gabor_004_alt gabor_048_alt gabor_029 gabor_065     "2_41_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2300_gabor_patch_orientation_004_048_029_065_target_position_3_4_retrieval_position_2"       gabor_circ gabor_094_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_41_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_094_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_024 gabor_133 gabor_152 gabor_072    gabor_024_alt gabor_133 gabor_152 gabor_072_alt     "2_42_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_024_133_152_072_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_152_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_42_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  1892      fixation_cross    gabor_117 gabor_072 gabor_137 gabor_089    gabor_117 gabor_072_alt gabor_137 gabor_089_alt     "2_43_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_1900_gabor_patch_orientation_117_072_137_089_target_position_1_3_retrieval_position_1"       gabor_117_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_43_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_118 gabor_168 gabor_093 gabor_142    gabor_118 gabor_168 gabor_093_alt gabor_142_alt     "2_44_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_118_168_093_142_target_position_1_2_retrieval_position_2"       gabor_circ gabor_029_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_44_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_118 gabor_029 gabor_091 gabor_161    gabor_118 gabor_029_alt gabor_091 gabor_161_alt     "2_45_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_118_029_091_161_target_position_1_3_retrieval_position_1"       gabor_071_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_45_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1942  2992  2342      fixation_cross    gabor_110 gabor_086 gabor_161 gabor_125    gabor_110 gabor_086_alt gabor_161 gabor_125_alt     "2_46_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1950_3000_2350_gabor_patch_orientation_110_086_161_125_target_position_1_3_retrieval_position_2"       gabor_circ gabor_086_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_46_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_086_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2192      fixation_cross    gabor_145 gabor_064 gabor_030 gabor_117    gabor_145_alt gabor_064_alt gabor_030 gabor_117     "2_47_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_145_064_030_117_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_030_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_47_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2142      fixation_cross    gabor_098 gabor_059 gabor_031 gabor_074    gabor_098 gabor_059_alt gabor_031_alt gabor_074     "2_48_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_098_059_031_074_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_074_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_48_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_041 gabor_001 gabor_109 gabor_064    gabor_041 gabor_001 gabor_109_alt gabor_064_alt     "2_49_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_041_001_109_064_target_position_1_2_retrieval_position_1"       gabor_041_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_49_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2592      fixation_cross    gabor_157 gabor_002 gabor_082 gabor_113    gabor_157 gabor_002 gabor_082_alt gabor_113_alt     "2_50_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_157_002_082_113_target_position_1_2_retrieval_position_2"       gabor_circ gabor_137_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_50_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2542      fixation_cross    gabor_163 gabor_130 gabor_077 gabor_045    gabor_163 gabor_130_alt gabor_077 gabor_045_alt     "2_51_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_163_130_077_045_target_position_1_3_retrieval_position_1"       gabor_024_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_51_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2192  2992  2142      fixation_cross    gabor_155 gabor_033 gabor_085 gabor_101    gabor_155_alt gabor_033_alt gabor_085 gabor_101     "2_52_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_2150_gabor_patch_orientation_155_033_085_101_target_position_3_4_retrieval_position_1"       gabor_015_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_52_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_015_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2492      fixation_cross    gabor_097 gabor_119 gabor_143 gabor_031    gabor_097 gabor_119_alt gabor_143 gabor_031_alt     "2_53_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2500_gabor_patch_orientation_097_119_143_031_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_143_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_53_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_130 gabor_157 gabor_051 gabor_109    gabor_130 gabor_157_alt gabor_051 gabor_109_alt     "2_54_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_130_157_051_109_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_051_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_54_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_051_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2442      fixation_cross    gabor_166 gabor_031 gabor_084 gabor_100    gabor_166 gabor_031_alt gabor_084_alt gabor_100     "2_55_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_166_031_084_100_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_145_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_55_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_145_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2492      fixation_cross    gabor_106 gabor_082 gabor_158 gabor_049    gabor_106_alt gabor_082 gabor_158 gabor_049_alt     "2_56_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_106_082_158_049_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_158_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_56_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1942  2992  2092      fixation_cross    gabor_078 gabor_016 gabor_100 gabor_032    gabor_078_alt gabor_016_alt gabor_100 gabor_032     "2_57_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2100_gabor_patch_orientation_078_016_100_032_target_position_3_4_retrieval_position_2"       gabor_circ gabor_061_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_57_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_061_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2392      fixation_cross    gabor_067 gabor_101 gabor_173 gabor_131    gabor_067 gabor_101 gabor_173_alt gabor_131_alt     "2_58_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_067_101_173_131_target_position_1_2_retrieval_position_2"       gabor_circ gabor_101_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_58_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_009 gabor_025 gabor_178 gabor_163    gabor_009 gabor_025_alt gabor_178 gabor_163_alt     "2_59_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_009_025_178_163_target_position_1_3_retrieval_position_1"       gabor_009_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_59_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  1992      fixation_cross    gabor_130 gabor_024 gabor_041 gabor_078    gabor_130_alt gabor_024 gabor_041_alt gabor_078     "2_60_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_130_024_041_078_target_position_2_4_retrieval_position_2"       gabor_circ gabor_024_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_60_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2142  2992  2242      fixation_cross    gabor_123 gabor_072 gabor_159 gabor_139    gabor_123_alt gabor_072 gabor_159 gabor_139_alt     "2_61_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_2250_gabor_patch_orientation_123_072_159_139_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_090_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_61_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_090_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2042      fixation_cross    gabor_126 gabor_056 gabor_162 gabor_089    gabor_126_alt gabor_056_alt gabor_162 gabor_089     "2_62_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_126_056_162_089_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_089_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_62_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  2542      fixation_cross    gabor_131 gabor_020 gabor_090 gabor_002    gabor_131_alt gabor_020 gabor_090 gabor_002_alt     "2_63_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_131_020_090_002_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_045_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_63_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2342      fixation_cross    gabor_167 gabor_100 gabor_150 gabor_045    gabor_167 gabor_100_alt gabor_150_alt gabor_045     "2_64_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_167_100_150_045_target_position_1_4_retrieval_position_1"       gabor_119_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_64_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_152 gabor_066 gabor_177 gabor_036    gabor_152_alt gabor_066 gabor_177_alt gabor_036     "2_65_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_152_066_177_036_target_position_2_4_retrieval_position_2"       gabor_circ gabor_112_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_65_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2392      fixation_cross    gabor_050 gabor_066 gabor_029 gabor_092    gabor_050_alt gabor_066 gabor_029 gabor_092_alt     "2_66_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_050_066_029_092_target_position_2_3_retrieval_position_2"       gabor_circ gabor_066_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_66_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  2042      fixation_cross    gabor_031 gabor_139 gabor_066 gabor_003    gabor_031_alt gabor_139 gabor_066 gabor_003_alt     "2_67_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_031_139_066_003_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_066_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_67_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2092  2992  2592      fixation_cross    gabor_015 gabor_064 gabor_047 gabor_130    gabor_015_alt gabor_064 gabor_047 gabor_130_alt     "2_68_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2600_gabor_patch_orientation_015_064_047_130_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_085_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_68_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_085_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2542      fixation_cross    gabor_046 gabor_021 gabor_005 gabor_091    gabor_046 gabor_021 gabor_005_alt gabor_091_alt     "2_69_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2550_gabor_patch_orientation_046_021_005_091_target_position_1_2_retrieval_position_2"       gabor_circ gabor_157_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_69_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_157_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2242  2992  2192      fixation_cross    gabor_045 gabor_016 gabor_105 gabor_090    gabor_045_alt gabor_016 gabor_105_alt gabor_090     "2_70_Encoding_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_2200_gabor_patch_orientation_045_016_105_090_target_position_2_4_retrieval_position_1"       gabor_045_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_70_Retrieval_Working_Memory_MEG_P5_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_045_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  