# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;

# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    61   292   292   399   125  2192  2992  2542      fixation_cross    gabor_047 gabor_134 gabor_178 gabor_021    gabor_047_alt gabor_134 gabor_178_alt gabor_021      "1_1_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_047_134_178_021_target_position_1_3_retrieval_position_1"          gabor_096_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_1_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  2192      fixation_cross    gabor_087 gabor_114 gabor_172 gabor_053    gabor_087_alt gabor_114 gabor_172_alt gabor_053      "1_2_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_087_114_172_053_target_position_1_3_retrieval_position_1"          gabor_087_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_2_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_143 gabor_167 gabor_127 gabor_083    gabor_143_alt gabor_167 gabor_127 gabor_083_alt      "1_3_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_143_167_127_083_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_083_framed    blank blank blank blank    fixation_cross_white     "1_3_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2442      fixation_cross    gabor_037 gabor_143 gabor_099 gabor_060    gabor_037 gabor_143_alt gabor_099 gabor_060_alt      "1_4_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_037_143_099_060_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_011_framed    blank blank blank blank    fixation_cross_white     "1_4_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2092  2992  2292      fixation_cross    gabor_032 gabor_162 gabor_137 gabor_052    gabor_032 gabor_162_alt gabor_137_alt gabor_052      "1_5_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2300_gabor_patch_orientation_032_162_137_052_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_052_framed    blank blank blank blank    fixation_cross_white     "1_5_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_052_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  1892      fixation_cross    gabor_147 gabor_113 gabor_040 gabor_074    gabor_147 gabor_113 gabor_040_alt gabor_074_alt      "1_6_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_147_113_040_074_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_024_framed    blank blank blank blank    fixation_cross_white     "1_6_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  2192      fixation_cross    gabor_116 gabor_057 gabor_136 gabor_080    gabor_116 gabor_057 gabor_136_alt gabor_080_alt      "1_7_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_116_057_136_080_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_136_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_7_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2542      fixation_cross    gabor_135 gabor_072 gabor_048 gabor_155    gabor_135 gabor_072_alt gabor_048_alt gabor_155      "1_8_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_135_072_048_155_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_094_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_8_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2192  2992  2292      fixation_cross    gabor_162 gabor_103 gabor_078 gabor_051    gabor_162 gabor_103 gabor_078_alt gabor_051_alt      "1_9_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2300_gabor_patch_orientation_162_103_078_051_target_position_3_4_retrieval_position_1"          gabor_027_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_9_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_027_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  1892      fixation_cross    gabor_092 gabor_108 gabor_137 gabor_064    gabor_092_alt gabor_108_alt gabor_137 gabor_064     "1_10_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_092_108_137_064_target_position_1_2_retrieval_position_2"          gabor_circ gabor_108_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_10_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_108_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  2592      fixation_cross    gabor_073 gabor_106 gabor_128 gabor_155    gabor_073 gabor_106_alt gabor_128 gabor_155_alt     "1_11_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2600_gabor_patch_orientation_073_106_128_155_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_017_framed    blank blank blank blank    fixation_cross_white    "1_11_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2492      fixation_cross    gabor_072 gabor_138 gabor_162 gabor_019    gabor_072_alt gabor_138_alt gabor_162 gabor_019     "1_12_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_072_138_162_019_target_position_1_2_retrieval_position_2"          gabor_circ gabor_138_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_12_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_024 gabor_099 gabor_160 gabor_129    gabor_024 gabor_099_alt gabor_160 gabor_129_alt     "1_13_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_024_099_160_129_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_178_framed    blank blank blank blank    fixation_cross_white    "1_13_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2092      fixation_cross    gabor_064 gabor_019 gabor_144 gabor_037    gabor_064 gabor_019_alt gabor_144 gabor_037_alt     "1_14_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_064_019_144_037_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_037_framed    blank blank blank blank    fixation_cross_white    "1_14_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2142      fixation_cross    gabor_110 gabor_091 gabor_135 gabor_168    gabor_110 gabor_091 gabor_135_alt gabor_168_alt     "1_15_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_110_091_135_168_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_029_framed    blank blank blank blank    fixation_cross_white    "1_15_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1942  2992  2342      fixation_cross    gabor_033 gabor_079 gabor_140 gabor_119    gabor_033_alt gabor_079 gabor_140_alt gabor_119     "1_16_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2350_gabor_patch_orientation_033_079_140_119_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_119_framed    blank blank blank blank    fixation_cross_white    "1_16_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_119_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_047 gabor_093 gabor_127 gabor_164    gabor_047 gabor_093 gabor_127_alt gabor_164_alt     "1_17_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_047_093_127_164_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_127_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_17_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2592      fixation_cross    gabor_113 gabor_073 gabor_097 gabor_044    gabor_113 gabor_073_alt gabor_097_alt gabor_044     "1_18_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_113_073_097_044_target_position_2_3_retrieval_position_2"          gabor_circ gabor_023_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_18_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  1942      fixation_cross    gabor_120 gabor_006 gabor_162 gabor_052    gabor_120_alt gabor_006_alt gabor_162 gabor_052     "1_19_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_120_006_162_052_target_position_1_2_retrieval_position_2"          gabor_circ gabor_141_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_19_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2492      fixation_cross    gabor_154 gabor_029 gabor_088 gabor_104    gabor_154_alt gabor_029 gabor_088_alt gabor_104     "1_20_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_154_029_088_104_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_135_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_20_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2042      fixation_cross    gabor_040 gabor_158 gabor_127 gabor_106    gabor_040 gabor_158 gabor_127_alt gabor_106_alt     "1_21_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_040_158_127_106_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_174_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_21_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1992  2992  2342      fixation_cross    gabor_081 gabor_043 gabor_159 gabor_002    gabor_081 gabor_043_alt gabor_159_alt gabor_002     "1_22_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2350_gabor_patch_orientation_081_043_159_002_target_position_2_3_retrieval_position_1"          gabor_081_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_22_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_081_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2142      fixation_cross    gabor_008 gabor_124 gabor_079 gabor_153    gabor_008 gabor_124 gabor_079_alt gabor_153_alt     "1_23_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_008_124_079_153_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_034_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_23_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2242  2992  1892      fixation_cross    gabor_121 gabor_160 gabor_088 gabor_048    gabor_121 gabor_160_alt gabor_088 gabor_048_alt     "1_24_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_1900_gabor_patch_orientation_121_160_088_048_target_position_2_4_retrieval_position_1"          gabor_121_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_24_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_121_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_163 gabor_050 gabor_023 gabor_100    gabor_163 gabor_050_alt gabor_023_alt gabor_100     "1_25_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_163_050_023_100_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_073_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_25_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2542      fixation_cross    gabor_178 gabor_138 gabor_098 gabor_116    gabor_178 gabor_138 gabor_098_alt gabor_116_alt     "1_26_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_178_138_098_116_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_098_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_26_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2042      fixation_cross    gabor_002 gabor_074 gabor_043 gabor_163    gabor_002 gabor_074_alt gabor_043_alt gabor_163     "1_27_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_002_074_043_163_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_043_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_27_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2442      fixation_cross    gabor_130 gabor_146 gabor_114 gabor_024    gabor_130_alt gabor_146 gabor_114_alt gabor_024     "1_28_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2450_gabor_patch_orientation_130_146_114_024_target_position_1_3_retrieval_position_1"          gabor_130_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_28_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1892  2992  2242      fixation_cross    gabor_138 gabor_122 gabor_101 gabor_156    gabor_138 gabor_122_alt gabor_101_alt gabor_156     "1_29_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2250_gabor_patch_orientation_138_122_101_156_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_156_framed    blank blank blank blank    fixation_cross_white    "1_29_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_156_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2392      fixation_cross    gabor_116 gabor_098 gabor_155 gabor_031    gabor_116 gabor_098_alt gabor_155_alt gabor_031     "1_30_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_116_098_155_031_target_position_2_3_retrieval_position_2"          gabor_circ gabor_098_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_30_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  1992      fixation_cross    gabor_039 gabor_092 gabor_163 gabor_111    gabor_039_alt gabor_092 gabor_163 gabor_111_alt     "1_31_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_039_092_163_111_target_position_1_4_retrieval_position_1"          gabor_039_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_31_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  1892      fixation_cross    gabor_169 gabor_152 gabor_110 gabor_132    gabor_169 gabor_152_alt gabor_110_alt gabor_132     "1_32_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_169_152_110_132_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_110_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_32_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_110_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2242      fixation_cross    gabor_063 gabor_006 gabor_031 gabor_089    gabor_063_alt gabor_006 gabor_031_alt gabor_089     "1_33_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_063_006_031_089_target_position_1_3_retrieval_position_1"          gabor_063_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_33_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2092      fixation_cross    gabor_113 gabor_060 gabor_033 gabor_138    gabor_113 gabor_060 gabor_033_alt gabor_138_alt     "1_34_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_113_060_033_138_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_091_framed    blank blank blank blank    fixation_cross_white    "1_34_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2242      fixation_cross    gabor_164 gabor_059 gabor_114 gabor_132    gabor_164_alt gabor_059_alt gabor_114 gabor_132     "1_35_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_164_059_114_132_target_position_1_2_retrieval_position_1"          gabor_025_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_35_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_042 gabor_130 gabor_104 gabor_070    gabor_042 gabor_130_alt gabor_104_alt gabor_070     "1_36_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_042_130_104_070_target_position_2_3_retrieval_position_2"          gabor_circ gabor_178_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_36_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2192      fixation_cross    gabor_003 gabor_049 gabor_034 gabor_164    gabor_003 gabor_049_alt gabor_034 gabor_164_alt     "1_37_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_003_049_034_164_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_164_framed    blank blank blank blank    fixation_cross_white    "1_37_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2042  2992  2142      fixation_cross    gabor_014 gabor_067 gabor_087 gabor_042    gabor_014 gabor_067_alt gabor_087_alt gabor_042     "1_38_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_2050_3000_2150_gabor_patch_orientation_014_067_087_042_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_177_framed    blank blank blank blank    fixation_cross_white    "1_38_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_177_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2592      fixation_cross    gabor_162 gabor_042 gabor_130 gabor_096    gabor_162 gabor_042_alt gabor_130 gabor_096_alt     "1_39_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2600_gabor_patch_orientation_162_042_130_096_target_position_2_4_retrieval_position_2"          gabor_circ gabor_042_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_39_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_051 gabor_173 gabor_109 gabor_034    gabor_051 gabor_173_alt gabor_109 gabor_034_alt     "1_40_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_051_173_109_034_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_034_framed    blank blank blank blank    fixation_cross_white    "1_40_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2142      fixation_cross    gabor_040 gabor_092 gabor_014 gabor_060    gabor_040 gabor_092_alt gabor_014_alt gabor_060     "1_41_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_040_092_014_060_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_150_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_41_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_173 gabor_146 gabor_086 gabor_056    gabor_173 gabor_146 gabor_086_alt gabor_056_alt     "1_42_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_173_146_086_056_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_039_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_42_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1792  2992  2042      fixation_cross    gabor_008 gabor_074 gabor_119 gabor_092    gabor_008_alt gabor_074 gabor_119_alt gabor_092     "1_43_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2050_gabor_patch_orientation_008_074_119_092_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_137_framed    blank blank blank blank    fixation_cross_white    "1_43_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_137_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2392      fixation_cross    gabor_132 gabor_111 gabor_173 gabor_096    gabor_132_alt gabor_111_alt gabor_173 gabor_096     "1_44_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_132_111_173_096_target_position_1_2_retrieval_position_2"          gabor_circ gabor_111_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_44_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1792  2992  1992      fixation_cross    gabor_102 gabor_141 gabor_168 gabor_123    gabor_102_alt gabor_141 gabor_168_alt gabor_123     "1_45_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2000_gabor_patch_orientation_102_141_168_123_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_078_framed    blank blank blank blank    fixation_cross_white    "1_45_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_078_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2492      fixation_cross    gabor_152 gabor_098 gabor_045 gabor_168    gabor_152_alt gabor_098_alt gabor_045 gabor_168     "1_46_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_152_098_045_168_target_position_1_2_retrieval_position_1"          gabor_152_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_46_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  2092      fixation_cross    gabor_112 gabor_050 gabor_030 gabor_082    gabor_112_alt gabor_050 gabor_030_alt gabor_082     "1_47_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_112_050_030_082_target_position_1_3_retrieval_position_1"          gabor_112_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_47_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2392      fixation_cross    gabor_011 gabor_100 gabor_059 gabor_033    gabor_011 gabor_100 gabor_059_alt gabor_033_alt     "1_48_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_011_100_059_033_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_171_framed    blank blank blank blank    fixation_cross_white    "1_48_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_143 gabor_158 gabor_037 gabor_070    gabor_143_alt gabor_158_alt gabor_037 gabor_070     "1_49_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_143_158_037_070_target_position_1_2_retrieval_position_1"          gabor_143_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_49_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2542      fixation_cross    gabor_053 gabor_161 gabor_136 gabor_021    gabor_053 gabor_161_alt gabor_136_alt gabor_021     "1_50_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2550_gabor_patch_orientation_053_161_136_021_target_position_2_3_retrieval_position_2"          gabor_circ gabor_111_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_50_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1992  2992  1942      fixation_cross    gabor_126 gabor_179 gabor_056 gabor_099    gabor_126 gabor_179_alt gabor_056 gabor_099_alt     "1_51_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_2000_3000_1950_gabor_patch_orientation_126_179_056_099_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_010_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_51_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_010_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2292      fixation_cross    gabor_128 gabor_065 gabor_042 gabor_090    gabor_128 gabor_065_alt gabor_042 gabor_090_alt     "1_52_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_128_065_042_090_target_position_2_4_retrieval_position_2"          gabor_circ gabor_019_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_52_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_019_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2592      fixation_cross    gabor_092 gabor_060 gabor_013 gabor_173    gabor_092_alt gabor_060 gabor_013_alt gabor_173     "1_53_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_092_060_013_173_target_position_1_3_retrieval_position_1"          gabor_092_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_53_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1892  2992  2342      fixation_cross    gabor_004 gabor_059 gabor_132 gabor_093    gabor_004_alt gabor_059 gabor_132 gabor_093_alt     "1_54_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_004_059_132_093_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_043_framed    blank blank blank blank    fixation_cross_white    "1_54_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2342      fixation_cross    gabor_153 gabor_085 gabor_175 gabor_040    gabor_153 gabor_085_alt gabor_175_alt gabor_040     "1_55_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_153_085_175_040_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_126_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_55_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2392      fixation_cross    gabor_113 gabor_032 gabor_051 gabor_161    gabor_113 gabor_032_alt gabor_051 gabor_161_alt     "1_56_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_113_032_051_161_target_position_2_4_retrieval_position_2"          gabor_circ gabor_081_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_56_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1842  2992  2042      fixation_cross    gabor_042 gabor_128 gabor_088 gabor_003    gabor_042 gabor_128_alt gabor_088_alt gabor_003     "1_57_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2050_gabor_patch_orientation_042_128_088_003_target_position_2_3_retrieval_position_1"          gabor_042_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_57_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_042_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2242      fixation_cross    gabor_089 gabor_008 gabor_117 gabor_144    gabor_089 gabor_008_alt gabor_117 gabor_144_alt     "1_58_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_089_008_117_144_target_position_2_4_retrieval_position_2"          gabor_circ gabor_008_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_58_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_008_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_180 gabor_029 gabor_141 gabor_115    gabor_180 gabor_029_alt gabor_141 gabor_115_alt     "1_59_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_180_029_141_115_target_position_2_4_retrieval_position_2"          gabor_circ gabor_029_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_59_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_132 gabor_158 gabor_053 gabor_105    gabor_132_alt gabor_158 gabor_053_alt gabor_105     "1_60_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_132_158_053_105_target_position_1_3_retrieval_position_1"          gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_60_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_011 gabor_099 gabor_156 gabor_172    gabor_011 gabor_099_alt gabor_156_alt gabor_172     "1_61_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_011_099_156_172_target_position_2_3_retrieval_position_2"          gabor_circ gabor_049_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_61_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2242  2992  2192      fixation_cross    gabor_092 gabor_121 gabor_066 gabor_013    gabor_092 gabor_121 gabor_066_alt gabor_013_alt     "1_62_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_2200_gabor_patch_orientation_092_121_066_013_target_position_3_4_retrieval_position_1"          gabor_043_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_62_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_043_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2442      fixation_cross    gabor_122 gabor_048 gabor_162 gabor_106    gabor_122_alt gabor_048_alt gabor_162 gabor_106     "1_63_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_122_048_162_106_target_position_1_2_retrieval_position_1"          gabor_122_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_63_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_122_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2092  2992  2342      fixation_cross    gabor_088 gabor_015 gabor_144 gabor_038    gabor_088 gabor_015 gabor_144_alt gabor_038_alt     "1_64_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2350_gabor_patch_orientation_088_015_144_038_target_position_3_4_retrieval_position_2"          gabor_circ gabor_015_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_64_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_015_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  1942      fixation_cross    gabor_112 gabor_004 gabor_130 gabor_176    gabor_112_alt gabor_004 gabor_130 gabor_176_alt     "1_65_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_112_004_130_176_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_041_framed    blank blank blank blank    fixation_cross_white    "1_65_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2042      fixation_cross    gabor_025 gabor_132 gabor_072 gabor_099    gabor_025_alt gabor_132 gabor_072 gabor_099_alt     "1_66_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_025_132_072_099_target_position_1_4_retrieval_position_1"          gabor_161_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_66_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_161_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  2442      fixation_cross    gabor_165 gabor_128 gabor_005 gabor_083    gabor_165 gabor_128_alt gabor_005 gabor_083_alt     "1_67_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2450_gabor_patch_orientation_165_128_005_083_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_083_framed    blank blank blank blank    fixation_cross_white    "1_67_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_094 gabor_167 gabor_035 gabor_079    gabor_094 gabor_167 gabor_035_alt gabor_079_alt     "1_68_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_094_167_035_079_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_079_framed    blank blank blank blank    fixation_cross_white    "1_68_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1992  2992  2492      fixation_cross    gabor_061 gabor_040 gabor_125 gabor_003    gabor_061_alt gabor_040 gabor_125 gabor_003_alt     "1_69_Encoding_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_300_300_399_2000_3000_2500_gabor_patch_orientation_061_040_125_003_target_position_1_4_retrieval_position_2"          gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_69_Retrieval_Working_Memory_MEG_P5_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_180_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  1942      fixation_cross    gabor_110 gabor_139 gabor_175 gabor_065    gabor_110_alt gabor_139 gabor_175_alt gabor_065     "1_70_Encoding_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_110_139_175_065_target_position_1_3_retrieval_position_1"          gabor_110_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_70_Retrieval_Working_Memory_MEG_P5_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_110_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 