# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    62   292   292   399   125  2192  2992  2542      fixation_cross    gabor_061 gabor_011 gabor_122 gabor_084    gabor_061 gabor_011_alt gabor_122 gabor_084_alt      "2_1_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_061_011_122_084_target_position_2_4_retrieval_position_2"          gabor_circ gabor_011_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_1_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_043 gabor_176 gabor_071 gabor_095    gabor_043 gabor_176 gabor_071_alt gabor_095_alt      "2_2_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_043_176_071_095_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_021_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_2_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_021_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_116 gabor_139 gabor_027 gabor_097    gabor_116_alt gabor_139 gabor_027 gabor_097_alt      "2_3_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_116_139_027_097_target_position_1_4_retrieval_position_1"          gabor_068_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_3_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_039 gabor_174 gabor_112 gabor_003    gabor_039 gabor_174_alt gabor_112_alt gabor_003      "2_4_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_039_174_112_003_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_063_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_4_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1942  2992  2542      fixation_cross    gabor_104 gabor_124 gabor_063 gabor_080    gabor_104 gabor_124 gabor_063_alt gabor_080_alt      "2_5_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2550_gabor_patch_orientation_104_124_063_080_target_position_3_4_retrieval_position_1"          gabor_151_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_5_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_151_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2192      fixation_cross    gabor_061 gabor_007 gabor_026 gabor_133    gabor_061_alt gabor_007 gabor_026 gabor_133_alt      "2_6_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_061_007_026_133_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_133_framed    blank blank blank blank    fixation_cross_target_position_1_4     "2_6_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_133_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  2342      fixation_cross    gabor_008 gabor_152 gabor_068 gabor_025    gabor_008 gabor_152_alt gabor_068_alt gabor_025      "2_7_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_008_152_068_025_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_068_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_7_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_015 gabor_179 gabor_148 gabor_129    gabor_015_alt gabor_179 gabor_148_alt gabor_129      "2_8_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_015_179_148_129_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_148_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_8_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  2542      fixation_cross    gabor_044 gabor_087 gabor_027 gabor_172    gabor_044 gabor_087_alt gabor_027 gabor_172_alt      "2_9_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_044_087_027_172_target_position_2_4_retrieval_position_2"          gabor_circ gabor_087_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_9_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  2242      fixation_cross    gabor_067 gabor_052 gabor_017 gabor_082    gabor_067_alt gabor_052_alt gabor_017 gabor_082     "2_10_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_067_052_017_082_target_position_1_2_retrieval_position_2"          gabor_circ gabor_098_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_10_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1942  2992  1992      fixation_cross    gabor_098 gabor_161 gabor_075 gabor_120    gabor_098 gabor_161_alt gabor_075_alt gabor_120     "2_11_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2000_gabor_patch_orientation_098_161_075_120_target_position_2_3_retrieval_position_1"          gabor_053_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_11_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_053_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  2392      fixation_cross    gabor_168 gabor_062 gabor_131 gabor_151    gabor_168 gabor_062 gabor_131_alt gabor_151_alt     "2_12_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_168_062_131_151_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_131_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_12_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_015 gabor_127 gabor_146 gabor_081    gabor_015 gabor_127_alt gabor_146_alt gabor_081     "2_13_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_015_127_146_081_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_100_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_13_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_100_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2092  2992  2492      fixation_cross    gabor_068 gabor_173 gabor_001 gabor_153    gabor_068 gabor_173_alt gabor_001 gabor_153_alt     "2_14_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_068_173_001_153_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_153_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_14_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_153_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2192  2992  2592      fixation_cross    gabor_088 gabor_058 gabor_123 gabor_107    gabor_088_alt gabor_058 gabor_123_alt gabor_107     "2_15_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_088_058_123_107_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_123_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_15_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2392      fixation_cross    gabor_089 gabor_178 gabor_001 gabor_160    gabor_089 gabor_178_alt gabor_001 gabor_160_alt     "2_16_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_089_178_001_160_target_position_2_4_retrieval_position_2"          gabor_circ gabor_178_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_16_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  2292      fixation_cross    gabor_095 gabor_005 gabor_123 gabor_163    gabor_095 gabor_005_alt gabor_123 gabor_163_alt     "2_17_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_095_005_123_163_target_position_2_4_retrieval_position_2"          gabor_circ gabor_142_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_17_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1792  2992  2592      fixation_cross    gabor_079 gabor_053 gabor_010 gabor_137    gabor_079_alt gabor_053 gabor_010 gabor_137_alt     "2_18_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2600_gabor_patch_orientation_079_053_010_137_target_position_1_4_retrieval_position_2"          gabor_circ gabor_099_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_18_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_099_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  1992      fixation_cross    gabor_080 gabor_063 gabor_148 gabor_103    gabor_080 gabor_063_alt gabor_148 gabor_103_alt     "2_19_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_080_063_148_103_target_position_2_4_retrieval_position_2"          gabor_circ gabor_018_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_19_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_018_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  2492      fixation_cross    gabor_022 gabor_042 gabor_068 gabor_098    gabor_022_alt gabor_042 gabor_068 gabor_098_alt     "2_20_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_022_042_068_098_target_position_1_4_retrieval_position_1"          gabor_158_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_20_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_075 gabor_116 gabor_037 gabor_146    gabor_075_alt gabor_116_alt gabor_037 gabor_146     "2_21_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_075_116_037_146_target_position_1_2_retrieval_position_2"          gabor_circ gabor_116_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_21_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  2242      fixation_cross    gabor_059 gabor_026 gabor_095 gabor_132    gabor_059 gabor_026_alt gabor_095_alt gabor_132     "2_22_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_059_026_095_132_target_position_2_3_retrieval_position_2"          gabor_circ gabor_166_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_22_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1992  2992  2142      fixation_cross    gabor_054 gabor_166 gabor_115 gabor_094    gabor_054 gabor_166 gabor_115_alt gabor_094_alt     "2_23_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2150_gabor_patch_orientation_054_166_115_094_target_position_3_4_retrieval_position_1"          gabor_054_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_23_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_054_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2042      fixation_cross    gabor_035 gabor_148 gabor_175 gabor_001    gabor_035 gabor_148 gabor_175_alt gabor_001_alt     "2_24_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_035_148_175_001_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_175_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_24_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  2192      fixation_cross    gabor_031 gabor_178 gabor_159 gabor_091    gabor_031_alt gabor_178 gabor_159 gabor_091_alt     "2_25_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_031_178_159_091_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_091_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_25_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2142      fixation_cross    gabor_170 gabor_132 gabor_109 gabor_084    gabor_170 gabor_132 gabor_109_alt gabor_084_alt     "2_26_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_170_132_109_084_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_109_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_26_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  1942      fixation_cross    gabor_075 gabor_042 gabor_002 gabor_108    gabor_075_alt gabor_042_alt gabor_002 gabor_108     "2_27_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_075_042_002_108_target_position_1_2_retrieval_position_2"          gabor_circ gabor_091_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_27_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2242  2992  1992      fixation_cross    gabor_165 gabor_079 gabor_009 gabor_045    gabor_165 gabor_079_alt gabor_009 gabor_045_alt     "2_28_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2000_gabor_patch_orientation_165_079_009_045_target_position_2_4_retrieval_position_1"          gabor_165_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_28_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_165_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_167 gabor_038 gabor_054 gabor_091    gabor_167_alt gabor_038 gabor_054 gabor_091_alt     "2_29_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_167_038_054_091_target_position_1_4_retrieval_position_1"          gabor_122_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_29_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_122_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  1942      fixation_cross    gabor_079 gabor_009 gabor_029 gabor_059    gabor_079 gabor_009_alt gabor_029_alt gabor_059     "2_30_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_079_009_029_059_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_167_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_30_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2242  2992  1892      fixation_cross    gabor_085 gabor_106 gabor_016 gabor_175    gabor_085 gabor_106_alt gabor_016 gabor_175_alt     "2_31_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_1900_gabor_patch_orientation_085_106_016_175_target_position_2_4_retrieval_position_1"          gabor_085_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_31_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_085_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2042  2992  2442      fixation_cross    gabor_013 gabor_122 gabor_063 gabor_035    gabor_013_alt gabor_122 gabor_063 gabor_035_alt     "2_32_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_013_122_063_035_target_position_1_4_retrieval_position_1"          gabor_150_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_32_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  1992      fixation_cross    gabor_161 gabor_019 gabor_001 gabor_128    gabor_161_alt gabor_019 gabor_001 gabor_128_alt     "2_33_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_161_019_001_128_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_078_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_33_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  1892      fixation_cross    gabor_061 gabor_007 gabor_118 gabor_042    gabor_061_alt gabor_007 gabor_118 gabor_042_alt     "2_34_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_1900_gabor_patch_orientation_061_007_118_042_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_042_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_34_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2492      fixation_cross    gabor_137 gabor_111 gabor_154 gabor_073    gabor_137_alt gabor_111 gabor_154 gabor_073_alt     "2_35_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_137_111_154_073_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_073_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_35_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2092      fixation_cross    gabor_060 gabor_179 gabor_104 gabor_040    gabor_060_alt gabor_179 gabor_104_alt gabor_040     "2_36_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_060_179_104_040_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_149_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_36_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  2192  2992  2442      fixation_cross    gabor_173 gabor_092 gabor_111 gabor_059    gabor_173_alt gabor_092 gabor_111 gabor_059_alt     "2_37_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2450_gabor_patch_orientation_173_092_111_059_target_position_1_4_retrieval_position_2"          gabor_circ gabor_042_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_37_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_042_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  1892      fixation_cross    gabor_068 gabor_115 gabor_049 gabor_083    gabor_068 gabor_115 gabor_049_alt gabor_083_alt     "2_38_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_068_115_049_083_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_003_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_38_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  2392      fixation_cross    gabor_049 gabor_071 gabor_003 gabor_161    gabor_049 gabor_071_alt gabor_003 gabor_161_alt     "2_39_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_049_071_003_161_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_113_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_39_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2092  2992  2092      fixation_cross    gabor_160 gabor_070 gabor_138 gabor_109    gabor_160 gabor_070_alt gabor_138_alt gabor_109     "2_40_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_160_070_138_109_target_position_2_3_retrieval_position_2"          gabor_circ gabor_070_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_40_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1942  2992  2092      fixation_cross    gabor_024 gabor_180 gabor_110 gabor_070    gabor_024 gabor_180 gabor_110_alt gabor_070_alt     "2_41_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2100_gabor_patch_orientation_024_180_110_070_target_position_3_4_retrieval_position_2"          gabor_circ gabor_135_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_41_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_135_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  2042      fixation_cross    gabor_022 gabor_107 gabor_091 gabor_157    gabor_022_alt gabor_107 gabor_091 gabor_157_alt     "2_42_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_022_107_091_157_target_position_1_4_retrieval_position_1"          gabor_022_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_42_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2342      fixation_cross    gabor_114 gabor_143 gabor_173 gabor_027    gabor_114 gabor_143_alt gabor_173_alt gabor_027     "2_43_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_114_143_173_027_target_position_2_3_retrieval_position_2"          gabor_circ gabor_143_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_43_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  2542      fixation_cross    gabor_056 gabor_174 gabor_002 gabor_143    gabor_056 gabor_174_alt gabor_002_alt gabor_143     "2_44_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2550_gabor_patch_orientation_056_174_002_143_target_position_2_3_retrieval_position_2"          gabor_circ gabor_174_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_44_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  2242      fixation_cross    gabor_069 gabor_174 gabor_092 gabor_151    gabor_069_alt gabor_174 gabor_092 gabor_151_alt     "2_45_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_069_174_092_151_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_151_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_45_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  1942      fixation_cross    gabor_010 gabor_162 gabor_056 gabor_098    gabor_010_alt gabor_162 gabor_056_alt gabor_098     "2_46_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_010_162_056_098_target_position_1_3_retrieval_position_1"          gabor_010_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_46_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  1892      fixation_cross    gabor_080 gabor_096 gabor_152 gabor_022    gabor_080_alt gabor_096 gabor_152_alt gabor_022     "2_47_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_080_096_152_022_target_position_1_3_retrieval_position_1"          gabor_129_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_47_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1842  2992  2092      fixation_cross    gabor_168 gabor_135 gabor_092 gabor_049    gabor_168 gabor_135 gabor_092_alt gabor_049_alt     "2_48_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2100_gabor_patch_orientation_168_135_092_049_target_position_3_4_retrieval_position_1"          gabor_168_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_48_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_168_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2192      fixation_cross    gabor_166 gabor_012 gabor_061 gabor_130    gabor_166 gabor_012_alt gabor_061 gabor_130_alt     "2_49_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_166_012_061_130_target_position_2_4_retrieval_position_2"          gabor_circ gabor_012_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_49_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  2142      fixation_cross    gabor_071 gabor_102 gabor_144 gabor_161    gabor_071_alt gabor_102 gabor_144 gabor_161_alt     "2_50_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_071_102_144_161_target_position_1_4_retrieval_position_1"          gabor_022_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_50_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2442      fixation_cross    gabor_096 gabor_172 gabor_033 gabor_138    gabor_096 gabor_172_alt gabor_033_alt gabor_138     "2_51_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2450_gabor_patch_orientation_096_172_033_138_target_position_2_3_retrieval_position_2"          gabor_circ gabor_172_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_51_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2042  2992  2142      fixation_cross    gabor_118 gabor_001 gabor_156 gabor_074    gabor_118_alt gabor_001 gabor_156_alt gabor_074     "2_52_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_2150_gabor_patch_orientation_118_001_156_074_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_074_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_52_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_074_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2292      fixation_cross    gabor_011 gabor_042 gabor_129 gabor_165    gabor_011 gabor_042 gabor_129_alt gabor_165_alt     "2_53_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2300_gabor_patch_orientation_011_042_129_165_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_083_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_53_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_132 gabor_173 gabor_153 gabor_024    gabor_132_alt gabor_173 gabor_153_alt gabor_024     "2_54_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_132_173_153_024_target_position_1_3_retrieval_position_1"          gabor_086_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_54_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_086_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  2042      fixation_cross    gabor_088 gabor_160 gabor_126 gabor_009    gabor_088 gabor_160 gabor_126_alt gabor_009_alt     "2_55_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_088_160_126_009_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_009_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_55_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_056 gabor_113 gabor_132 gabor_025    gabor_056 gabor_113_alt gabor_132_alt gabor_025     "2_56_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_056_113_132_025_target_position_2_3_retrieval_position_2"          gabor_circ gabor_162_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_56_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_162_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1942  2992  2292      fixation_cross    gabor_067 gabor_136 gabor_046 gabor_180    gabor_067 gabor_136_alt gabor_046 gabor_180_alt     "2_57_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2300_gabor_patch_orientation_067_136_046_180_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_046_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_57_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_046_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2292      fixation_cross    gabor_059 gabor_086 gabor_009 gabor_116    gabor_059 gabor_086 gabor_009_alt gabor_116_alt     "2_58_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_059_086_009_116_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_116_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_58_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  1942      fixation_cross    gabor_038 gabor_152 gabor_116 gabor_172    gabor_038_alt gabor_152 gabor_116_alt gabor_172     "2_59_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_038_152_116_172_target_position_1_3_retrieval_position_1"          gabor_038_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_59_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2092  2992  2242      fixation_cross    gabor_028 gabor_135 gabor_095 gabor_049    gabor_028_alt gabor_135 gabor_095_alt gabor_049     "2_60_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2250_gabor_patch_orientation_028_135_095_049_target_position_1_3_retrieval_position_2"          gabor_circ gabor_135_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_60_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_135_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  1942      fixation_cross    gabor_153 gabor_065 gabor_083 gabor_130    gabor_153 gabor_065_alt gabor_083 gabor_130_alt     "2_61_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_153_065_083_130_target_position_2_4_retrieval_position_2"          gabor_circ gabor_020_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_61_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  2592      fixation_cross    gabor_059 gabor_031 gabor_139 gabor_015    gabor_059_alt gabor_031 gabor_139_alt gabor_015     "2_62_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_059_031_139_015_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_094_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_62_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2342      fixation_cross    gabor_148 gabor_040 gabor_011 gabor_127    gabor_148_alt gabor_040 gabor_011_alt gabor_127     "2_63_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_148_040_011_127_target_position_1_3_retrieval_position_1"          gabor_148_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_63_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2392      fixation_cross    gabor_129 gabor_094 gabor_016 gabor_163    gabor_129_alt gabor_094_alt gabor_016 gabor_163     "2_64_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_129_094_016_163_target_position_1_2_retrieval_position_1"          gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_64_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2042      fixation_cross    gabor_049 gabor_177 gabor_125 gabor_071    gabor_049_alt gabor_177 gabor_125 gabor_071_alt     "2_65_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_049_177_125_071_target_position_1_4_retrieval_position_1"          gabor_049_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_65_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  2592      fixation_cross    gabor_165 gabor_135 gabor_007 gabor_060    gabor_165 gabor_135_alt gabor_007 gabor_060_alt     "2_66_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2600_gabor_patch_orientation_165_135_007_060_target_position_2_4_retrieval_position_2"          gabor_circ gabor_090_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_66_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1892  2992  2292      fixation_cross    gabor_121 gabor_142 gabor_084 gabor_162    gabor_121_alt gabor_142 gabor_084 gabor_162_alt     "2_67_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2300_gabor_patch_orientation_121_142_084_162_target_position_1_4_retrieval_position_2"          gabor_circ gabor_003_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_67_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_003_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_161 gabor_145 gabor_005 gabor_078    gabor_161_alt gabor_145_alt gabor_005 gabor_078     "2_68_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_161_145_005_078_target_position_1_2_retrieval_position_1"          gabor_025_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_68_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1842  2992  2042      fixation_cross    gabor_101 gabor_124 gabor_014 gabor_073    gabor_101 gabor_124_alt gabor_014_alt gabor_073     "2_69_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2050_gabor_patch_orientation_101_124_014_073_target_position_2_3_retrieval_position_1"          gabor_146_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_69_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_146_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2242      fixation_cross    gabor_046 gabor_106 gabor_069 gabor_175    gabor_046_alt gabor_106_alt gabor_069 gabor_175     "2_70_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_046_106_069_175_target_position_1_2_retrieval_position_2"          gabor_circ gabor_154_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_70_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  