# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    62   292   292   399   125  1842  2992  2142      fixation_cross    gabor_169 gabor_055 gabor_136 gabor_119    gabor_169_alt gabor_055 gabor_136 gabor_119_alt      "1_1_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_169_055_136_119_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_136_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_1_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2442      fixation_cross    gabor_009 gabor_074 gabor_099 gabor_121    gabor_009 gabor_074 gabor_099_alt gabor_121_alt      "1_2_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_009_074_099_121_target_position_1_2_retrieval_position_1"       gabor_009_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_2_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2292      fixation_cross    gabor_121 gabor_169 gabor_001 gabor_082    gabor_121_alt gabor_169 gabor_001_alt gabor_082      "1_3_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_121_169_001_082_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_032_framed    blank blank blank blank    fixation_cross_target_position_2_4     "1_3_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2292      fixation_cross    gabor_094 gabor_128 gabor_152 gabor_177    gabor_094_alt gabor_128 gabor_152_alt gabor_177      "1_4_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_094_128_152_177_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_041_framed    blank blank blank blank    fixation_cross_target_position_2_4     "1_4_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_160 gabor_041 gabor_070 gabor_128    gabor_160 gabor_041 gabor_070_alt gabor_128_alt      "1_5_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_160_041_070_128_target_position_1_2_retrieval_position_2"       gabor_circ gabor_088_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_5_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2042  2992  2442      fixation_cross    gabor_167 gabor_096 gabor_152 gabor_025    gabor_167_alt gabor_096_alt gabor_152 gabor_025      "1_6_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_2450_gabor_patch_orientation_167_096_152_025_target_position_3_4_retrieval_position_2"       gabor_circ gabor_096_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_6_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_096_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  1892      fixation_cross    gabor_068 gabor_030 gabor_050 gabor_088    gabor_068_alt gabor_030 gabor_050 gabor_088_alt      "1_7_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_068_030_050_088_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_003_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_7_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2242      fixation_cross    gabor_122 gabor_003 gabor_035 gabor_174    gabor_122_alt gabor_003 gabor_035 gabor_174_alt      "1_8_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_122_003_035_174_target_position_2_3_retrieval_position_2"       gabor_circ gabor_003_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_8_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  1942      fixation_cross    gabor_028 gabor_054 gabor_164 gabor_101    gabor_028_alt gabor_054_alt gabor_164 gabor_101      "1_9_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_028_054_164_101_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_164_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_9_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1792  2992  2292      fixation_cross    gabor_103 gabor_152 gabor_029 gabor_085    gabor_103 gabor_152 gabor_029_alt gabor_085_alt     "1_10_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2300_gabor_patch_orientation_103_152_029_085_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_168_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_10_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_168_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2592      fixation_cross    gabor_169 gabor_032 gabor_102 gabor_147    gabor_169 gabor_032_alt gabor_102_alt gabor_147     "1_11_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_169_032_102_147_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_147_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_11_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_147_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2042      fixation_cross    gabor_046 gabor_131 gabor_157 gabor_071    gabor_046_alt gabor_131 gabor_157 gabor_071_alt     "1_12_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_046_131_157_071_target_position_2_3_retrieval_position_2"       gabor_circ gabor_131_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_12_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  1942      fixation_cross    gabor_177 gabor_146 gabor_126 gabor_099    gabor_177 gabor_146_alt gabor_126 gabor_099_alt     "1_13_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_177_146_126_099_target_position_1_3_retrieval_position_1"       gabor_037_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_13_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2142      fixation_cross    gabor_056 gabor_170 gabor_082 gabor_023    gabor_056 gabor_170 gabor_082_alt gabor_023_alt     "1_14_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_056_170_082_023_target_position_1_2_retrieval_position_1"       gabor_056_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_14_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2092      fixation_cross    gabor_064 gabor_007 gabor_142 gabor_034    gabor_064 gabor_007_alt gabor_142_alt gabor_034     "1_15_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_064_007_142_034_target_position_1_4_retrieval_position_1"       gabor_113_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_15_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_011 gabor_051 gabor_099 gabor_162    gabor_011 gabor_051_alt gabor_099_alt gabor_162     "1_16_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_011_051_099_162_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_027_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_16_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2492      fixation_cross    gabor_142 gabor_168 gabor_111 gabor_031    gabor_142 gabor_168_alt gabor_111_alt gabor_031     "1_17_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_142_168_111_031_target_position_1_4_retrieval_position_1"       gabor_142_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_17_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2142  2992  2592      fixation_cross    gabor_103 gabor_160 gabor_046 gabor_133    gabor_103 gabor_160_alt gabor_046_alt gabor_133     "1_18_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_2600_gabor_patch_orientation_103_160_046_133_target_position_1_4_retrieval_position_2"       gabor_circ gabor_022_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_18_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_022_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2242      fixation_cross    gabor_064 gabor_102 gabor_038 gabor_151    gabor_064 gabor_102_alt gabor_038_alt gabor_151     "1_19_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_064_102_038_151_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_151_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_19_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2592      fixation_cross    gabor_062 gabor_042 gabor_112 gabor_177    gabor_062 gabor_042_alt gabor_112_alt gabor_177     "1_20_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_062_042_112_177_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_131_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_20_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_019 gabor_039 gabor_147 gabor_065    gabor_019 gabor_039_alt gabor_147 gabor_065_alt     "1_21_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_019_039_147_065_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_102_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_21_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_102_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2342      fixation_cross    gabor_072 gabor_040 gabor_124 gabor_150    gabor_072_alt gabor_040_alt gabor_124 gabor_150     "1_22_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_072_040_124_150_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_150_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_22_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1992  2992  2542      fixation_cross    gabor_081 gabor_062 gabor_104 gabor_145    gabor_081_alt gabor_062 gabor_104 gabor_145_alt     "1_23_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2000_3000_2550_gabor_patch_orientation_081_062_104_145_target_position_2_3_retrieval_position_1"       gabor_081_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_23_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_081_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2042      fixation_cross    gabor_001 gabor_090 gabor_157 gabor_179    gabor_001 gabor_090_alt gabor_157 gabor_179_alt     "1_24_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_001_090_157_179_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_107_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_24_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_107_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1942  2992  2342      fixation_cross    gabor_171 gabor_126 gabor_108 gabor_156    gabor_171 gabor_126_alt gabor_108 gabor_156_alt     "1_25_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2350_gabor_patch_orientation_171_126_108_156_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_020_framed    blank blank blank blank    fixation_cross_target_position_1_3    "1_25_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_020_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_135 gabor_076 gabor_053 gabor_113    gabor_135 gabor_076 gabor_053_alt gabor_113_alt     "1_26_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_135_076_053_113_target_position_1_2_retrieval_position_2"       gabor_circ gabor_026_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_26_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_026_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  1942      fixation_cross    gabor_117 gabor_162 gabor_007 gabor_147    gabor_117_alt gabor_162_alt gabor_007 gabor_147     "1_27_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_117_162_007_147_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_097_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_27_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2542      fixation_cross    gabor_072 gabor_028 gabor_155 gabor_047    gabor_072 gabor_028_alt gabor_155 gabor_047_alt     "1_28_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_072_028_155_047_target_position_1_3_retrieval_position_1"       gabor_118_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_28_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2392      fixation_cross    gabor_006 gabor_132 gabor_150 gabor_024    gabor_006_alt gabor_132 gabor_150 gabor_024_alt     "1_29_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_006_132_150_024_target_position_2_3_retrieval_position_2"       gabor_circ gabor_132_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_29_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_148 gabor_030 gabor_063 gabor_175    gabor_148 gabor_030_alt gabor_063_alt gabor_175     "1_30_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_148_030_063_175_target_position_1_4_retrieval_position_1"       gabor_013_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_30_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_013_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  1942      fixation_cross    gabor_043 gabor_133 gabor_061 gabor_020    gabor_043_alt gabor_133_alt gabor_061 gabor_020     "1_31_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_043_133_061_020_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_061_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_31_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2042      fixation_cross    gabor_103 gabor_156 gabor_171 gabor_035    gabor_103_alt gabor_156 gabor_171_alt gabor_035     "1_32_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_103_156_171_035_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_081_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_32_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2092  2992  2192      fixation_cross    gabor_121 gabor_043 gabor_062 gabor_008    gabor_121 gabor_043_alt gabor_062 gabor_008_alt     "1_33_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2200_gabor_patch_orientation_121_043_062_008_target_position_1_3_retrieval_position_2"       gabor_circ gabor_043_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_33_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_043_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2142      fixation_cross    gabor_083 gabor_113 gabor_002 gabor_152    gabor_083_alt gabor_113 gabor_002_alt gabor_152     "1_34_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_083_113_002_152_target_position_2_4_retrieval_position_2"       gabor_circ gabor_065_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_34_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  1892      fixation_cross    gabor_168 gabor_128 gabor_013 gabor_078    gabor_168_alt gabor_128 gabor_013 gabor_078_alt     "1_35_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_168_128_013_078_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_151_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_35_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_031 gabor_012 gabor_090 gabor_068    gabor_031_alt gabor_012 gabor_090_alt gabor_068     "1_36_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_031_012_090_068_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_068_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_36_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  1942      fixation_cross    gabor_037 gabor_120 gabor_052 gabor_179    gabor_037_alt gabor_120 gabor_052 gabor_179_alt     "1_37_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_037_120_052_179_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_052_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_37_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_052_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1892  2992  2042      fixation_cross    gabor_017 gabor_073 gabor_001 gabor_043    gabor_017_alt gabor_073_alt gabor_001 gabor_043     "1_38_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2050_gabor_patch_orientation_017_073_001_043_target_position_3_4_retrieval_position_1"       gabor_017_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_38_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_017_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2542      fixation_cross    gabor_088 gabor_069 gabor_114 gabor_045    gabor_088 gabor_069_alt gabor_114 gabor_045_alt     "1_39_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_088_069_114_045_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_159_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_39_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1992  2992  2242      fixation_cross    gabor_129 gabor_021 gabor_088 gabor_108    gabor_129_alt gabor_021 gabor_088 gabor_108_alt     "1_40_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2000_3000_2250_gabor_patch_orientation_129_021_088_108_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_059_framed    blank blank blank blank    fixation_cross_target_position_2_3    "1_40_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_059_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  1992      fixation_cross    gabor_143 gabor_063 gabor_078 gabor_108    gabor_143_alt gabor_063 gabor_078 gabor_108_alt     "1_41_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_143_063_078_108_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_078_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_41_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_171 gabor_015 gabor_145 gabor_058    gabor_171_alt gabor_015_alt gabor_145 gabor_058     "1_42_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_171_015_145_058_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_058_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_42_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_058_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2442      fixation_cross    gabor_177 gabor_033 gabor_162 gabor_096    gabor_177_alt gabor_033 gabor_162 gabor_096_alt     "1_43_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_177_033_162_096_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_115_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_43_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_024 gabor_084 gabor_043 gabor_174    gabor_024_alt gabor_084 gabor_043 gabor_174_alt     "1_44_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_024_084_043_174_target_position_2_3_retrieval_position_2"       gabor_circ gabor_084_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_44_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2092      fixation_cross    gabor_004 gabor_020 gabor_087 gabor_130    gabor_004 gabor_020_alt gabor_087 gabor_130_alt     "1_45_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_004_020_087_130_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_041_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_45_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2342      fixation_cross    gabor_123 gabor_144 gabor_169 gabor_011    gabor_123_alt gabor_144 gabor_169_alt gabor_011     "1_46_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_123_144_169_011_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_061_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_46_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2192      fixation_cross    gabor_157 gabor_002 gabor_113 gabor_129    gabor_157_alt gabor_002 gabor_113_alt gabor_129     "1_47_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_157_002_113_129_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_081_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_47_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2192  2992  2392      fixation_cross    gabor_126 gabor_064 gabor_018 gabor_082    gabor_126 gabor_064_alt gabor_018 gabor_082_alt     "1_48_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_2400_gabor_patch_orientation_126_064_018_082_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_082_framed    blank blank blank blank    fixation_cross_target_position_1_3    "1_48_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_082_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2492      fixation_cross    gabor_166 gabor_020 gabor_085 gabor_109    gabor_166 gabor_020_alt gabor_085 gabor_109_alt     "1_49_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_166_020_085_109_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_085_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_49_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  1892      fixation_cross    gabor_114 gabor_142 gabor_063 gabor_168    gabor_114_alt gabor_142 gabor_063_alt gabor_168     "1_50_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_114_142_063_168_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_168_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_50_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2092      fixation_cross    gabor_146 gabor_099 gabor_027 gabor_069    gabor_146_alt gabor_099 gabor_027_alt gabor_069     "1_51_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_146_099_027_069_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_116_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_51_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2592      fixation_cross    gabor_039 gabor_129 gabor_055 gabor_085    gabor_039 gabor_129_alt gabor_055 gabor_085_alt     "1_52_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_039_129_055_085_target_position_1_3_retrieval_position_1"       gabor_039_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_52_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1842  2992  2392      fixation_cross    gabor_019 gabor_133 gabor_089 gabor_157    gabor_019 gabor_133_alt gabor_089_alt gabor_157     "1_53_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2400_gabor_patch_orientation_019_133_089_157_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_044_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_53_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_044_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2392      fixation_cross    gabor_065 gabor_005 gabor_080 gabor_142    gabor_065 gabor_005_alt gabor_080 gabor_142_alt     "1_54_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_065_005_080_142_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_080_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_54_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_049 gabor_108 gabor_082 gabor_169    gabor_049 gabor_108_alt gabor_082_alt gabor_169     "1_55_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_049_108_082_169_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_169_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_55_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2242  2992  1992      fixation_cross    gabor_010 gabor_087 gabor_071 gabor_052    gabor_010 gabor_087_alt gabor_071_alt gabor_052     "1_56_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_2000_gabor_patch_orientation_010_087_071_052_target_position_1_4_retrieval_position_2"       gabor_circ gabor_087_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_56_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_087_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_175 gabor_013 gabor_065 gabor_129    gabor_175 gabor_013 gabor_065_alt gabor_129_alt     "1_57_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_175_013_065_129_target_position_1_2_retrieval_position_1"       gabor_175_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_57_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2542      fixation_cross    gabor_155 gabor_091 gabor_073 gabor_131    gabor_155_alt gabor_091 gabor_073 gabor_131_alt     "1_58_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_155_091_073_131_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_073_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_58_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2142      fixation_cross    gabor_064 gabor_084 gabor_127 gabor_040    gabor_064 gabor_084_alt gabor_127 gabor_040_alt     "1_59_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_064_084_127_040_target_position_1_3_retrieval_position_1"       gabor_109_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_59_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2192      fixation_cross    gabor_154 gabor_037 gabor_116 gabor_092    gabor_154_alt gabor_037 gabor_116 gabor_092_alt     "1_60_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_154_037_116_092_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_116_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_60_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1842  2992  2192      fixation_cross    gabor_016 gabor_125 gabor_150 gabor_177    gabor_016_alt gabor_125 gabor_150 gabor_177_alt     "1_61_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_2200_gabor_patch_orientation_016_125_150_177_target_position_2_3_retrieval_position_1"       gabor_016_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_61_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_016_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2492      fixation_cross    gabor_087 gabor_065 gabor_024 gabor_130    gabor_087_alt gabor_065_alt gabor_024 gabor_130     "1_62_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_087_065_024_130_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_177_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_62_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  1892      fixation_cross    gabor_031 gabor_080 gabor_121 gabor_142    gabor_031_alt gabor_080 gabor_121 gabor_142_alt     "1_63_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_031_080_121_142_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_121_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_63_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_121_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  2192      fixation_cross    gabor_125 gabor_063 gabor_014 gabor_042    gabor_125_alt gabor_063_alt gabor_014 gabor_042     "1_64_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_125_063_014_042_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_178_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_64_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_178_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2342      fixation_cross    gabor_137 gabor_155 gabor_016 gabor_076    gabor_137 gabor_155_alt gabor_016 gabor_076_alt     "1_65_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2350_gabor_patch_orientation_137_155_016_076_target_position_1_3_retrieval_position_1"       gabor_092_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_65_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_174 gabor_005 gabor_139 gabor_123    gabor_174 gabor_005 gabor_139_alt gabor_123_alt     "1_66_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_174_005_139_123_target_position_1_2_retrieval_position_2"       gabor_circ gabor_005_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_66_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2042  2992  2142      fixation_cross    gabor_178 gabor_002 gabor_044 gabor_157    gabor_178 gabor_002_alt gabor_044_alt gabor_157     "1_67_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2150_gabor_patch_orientation_178_002_044_157_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_089_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_67_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_089_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  1992      fixation_cross    gabor_163 gabor_080 gabor_048 gabor_114    gabor_163_alt gabor_080_alt gabor_048 gabor_114     "1_68_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_163_080_048_114_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_048_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_68_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_048_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2342      fixation_cross    gabor_085 gabor_172 gabor_115 gabor_050    gabor_085 gabor_172_alt gabor_115 gabor_050_alt     "1_69_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_085_172_115_050_target_position_1_3_retrieval_position_1"       gabor_131_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_69_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1992  2992  1992      fixation_cross    gabor_056 gabor_177 gabor_139 gabor_029    gabor_056_alt gabor_177 gabor_139_alt gabor_029     "1_70_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2000_3000_2000_gabor_patch_orientation_056_177_139_029_target_position_2_4_retrieval_position_1"       gabor_105_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_70_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_105_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  