# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;   
	  bitmap fixation_cross_black; x=0; y=0;   
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   44    61   292   292   399   125  2142  2992  2142      fixation_cross    gabor_180 gabor_157 gabor_139 gabor_027    gabor_180_alt gabor_157 gabor_139 gabor_027_alt      "1_1_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_180_157_139_027_target_position_2_3_retrieval_position_2"       gabor_circ gabor_108_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_1_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_108_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_103 gabor_080 gabor_123 gabor_016    gabor_103 gabor_080 gabor_123_alt gabor_016_alt      "1_2_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_103_080_123_016_target_position_1_2_retrieval_position_2"       gabor_circ gabor_080_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_2_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2192      fixation_cross    gabor_146 gabor_127 gabor_171 gabor_101    gabor_146 gabor_127_alt gabor_171_alt gabor_101      "1_3_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_146_127_171_101_target_position_1_4_retrieval_position_1"       gabor_011_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_3_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  2292      fixation_cross    gabor_099 gabor_177 gabor_124 gabor_016    gabor_099 gabor_177_alt gabor_124_alt gabor_016      "1_4_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_099_177_124_016_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_016_framed    blank blank blank blank    fixation_cross_white     "1_4_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2142  2992  2592      fixation_cross    gabor_005 gabor_074 gabor_091 gabor_159    gabor_005 gabor_074_alt gabor_091_alt gabor_159      "1_5_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2600_gabor_patch_orientation_005_074_091_159_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_159_framed    blank blank blank blank    fixation_cross_white     "1_5_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2242  2992  2492      fixation_cross    gabor_101 gabor_081 gabor_158 gabor_020    gabor_101 gabor_081 gabor_158_alt gabor_020_alt      "1_6_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_101_081_158_020_target_position_1_2_retrieval_position_2"       gabor_circ gabor_130_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_6_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1942  2992  1892      fixation_cross    gabor_014 gabor_081 gabor_160 gabor_050    gabor_014_alt gabor_081 gabor_160 gabor_050_alt      "1_7_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1950_3000_1900_gabor_patch_orientation_014_081_160_050_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_050_framed    blank blank blank blank    fixation_cross_white     "1_7_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_050_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1742  2992  2442      fixation_cross    gabor_177 gabor_018 gabor_107 gabor_142    gabor_177_alt gabor_018 gabor_107 gabor_142_alt      "1_8_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_177_018_107_142_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_107_framed gabor_circ    blank blank blank blank    fixation_cross_white     "1_8_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_107_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_050 gabor_023 gabor_088 gabor_073    gabor_050 gabor_023 gabor_088_alt gabor_073_alt      "1_9_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_050_023_088_073_target_position_1_2_retrieval_position_1"       gabor_001_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "1_9_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2242  2992  2492      fixation_cross    gabor_161 gabor_145 gabor_039 gabor_178    gabor_161 gabor_145_alt gabor_039 gabor_178_alt     "1_10_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_161_145_039_178_target_position_1_3_retrieval_position_1"       gabor_116_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_10_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  2442      fixation_cross    gabor_162 gabor_116 gabor_042 gabor_001    gabor_162 gabor_116_alt gabor_042 gabor_001_alt     "1_11_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_162_116_042_001_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_091_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_11_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1892  2992  1942      fixation_cross    gabor_081 gabor_104 gabor_049 gabor_015    gabor_081_alt gabor_104 gabor_049 gabor_015_alt     "1_12_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1900_3000_1950_gabor_patch_orientation_081_104_049_015_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_155_framed    blank blank blank blank    fixation_cross_white    "1_12_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_155_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1892  2992  1892      fixation_cross    gabor_134 gabor_149 gabor_070 gabor_090    gabor_134_alt gabor_149 gabor_070 gabor_090_alt     "1_13_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_134_149_070_090_target_position_2_3_retrieval_position_2"       gabor_circ gabor_011_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_13_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_128 gabor_090 gabor_009 gabor_170    gabor_128 gabor_090 gabor_009_alt gabor_170_alt     "1_14_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_128_090_009_170_target_position_1_2_retrieval_position_2"       gabor_circ gabor_090_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_14_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  2592      fixation_cross    gabor_082 gabor_026 gabor_113 gabor_008    gabor_082 gabor_026_alt gabor_113 gabor_008_alt     "1_15_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2600_gabor_patch_orientation_082_026_113_008_target_position_1_3_retrieval_position_1"       gabor_082_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_15_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1792  2992  1892      fixation_cross    gabor_005 gabor_112 gabor_084 gabor_056    gabor_005_alt gabor_112 gabor_084_alt gabor_056     "1_16_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_1900_gabor_patch_orientation_005_112_084_056_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_034_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_16_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_034_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_103 gabor_132 gabor_026 gabor_045    gabor_103 gabor_132_alt gabor_026 gabor_045_alt     "1_17_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_103_132_026_045_target_position_1_3_retrieval_position_1"       gabor_151_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_17_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_098 gabor_142 gabor_024 gabor_057    gabor_098_alt gabor_142_alt gabor_024 gabor_057     "1_18_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_098_142_024_057_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_073_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_18_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2242  2992  2192      fixation_cross    gabor_014 gabor_120 gabor_147 gabor_063    gabor_014_alt gabor_120 gabor_147_alt gabor_063     "1_19_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2200_gabor_patch_orientation_014_120_147_063_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_102_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_19_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_102_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1992  2992  2342      fixation_cross    gabor_075 gabor_050 gabor_011 gabor_163    gabor_075_alt gabor_050 gabor_011 gabor_163_alt     "1_20_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_075_050_011_163_target_position_2_3_retrieval_position_2"       gabor_circ gabor_050_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_20_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_111 gabor_028 gabor_088 gabor_004    gabor_111 gabor_028_alt gabor_088_alt gabor_004     "1_21_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_111_028_088_004_target_position_1_4_retrieval_position_1"       gabor_111_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_21_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_177 gabor_068 gabor_019 gabor_097    gabor_177 gabor_068_alt gabor_019 gabor_097_alt     "1_22_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_177_068_019_097_target_position_1_3_retrieval_position_1"       gabor_042_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_22_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_095 gabor_012 gabor_170 gabor_144    gabor_095 gabor_012_alt gabor_170 gabor_144_alt     "1_23_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_095_012_170_144_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_170_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_23_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  1992      fixation_cross    gabor_020 gabor_146 gabor_125 gabor_064    gabor_020_alt gabor_146 gabor_125_alt gabor_064     "1_24_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_020_146_125_064_target_position_2_4_retrieval_position_2"       gabor_circ gabor_146_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_24_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1792  2992  2442      fixation_cross    gabor_087 gabor_159 gabor_129 gabor_044    gabor_087 gabor_159_alt gabor_129 gabor_044_alt     "1_25_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_087_159_129_044_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_129_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_25_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1942  2992  2242      fixation_cross    gabor_023 gabor_133 gabor_048 gabor_067    gabor_023_alt gabor_133 gabor_048 gabor_067_alt     "1_26_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_023_133_048_067_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_098_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_26_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1842  2992  2292      fixation_cross    gabor_062 gabor_092 gabor_041 gabor_110    gabor_062 gabor_092 gabor_041_alt gabor_110_alt     "1_27_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_2300_gabor_patch_orientation_062_092_041_110_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_041_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_27_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_041_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2292      fixation_cross    gabor_012 gabor_168 gabor_080 gabor_122    gabor_012 gabor_168 gabor_080_alt gabor_122_alt     "1_28_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_012_168_080_122_target_position_1_2_retrieval_position_2"       gabor_circ gabor_033_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_28_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_033_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2092      fixation_cross    gabor_065 gabor_028 gabor_091 gabor_136    gabor_065 gabor_028_alt gabor_091_alt gabor_136     "1_29_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_065_028_091_136_target_position_1_4_retrieval_position_1"       gabor_115_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_29_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1742  2992  2292      fixation_cross    gabor_003 gabor_021 gabor_048 gabor_076    gabor_003_alt gabor_021 gabor_048_alt gabor_076     "1_30_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2300_gabor_patch_orientation_003_021_048_076_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_093_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_30_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_093_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2542      fixation_cross    gabor_110 gabor_041 gabor_180 gabor_151    gabor_110 gabor_041_alt gabor_180 gabor_151_alt     "1_31_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_110_041_180_151_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_180_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_31_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  1992      fixation_cross    gabor_152 gabor_103 gabor_067 gabor_134    gabor_152_alt gabor_103 gabor_067_alt gabor_134     "1_32_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2000_gabor_patch_orientation_152_103_067_134_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_134_framed    blank blank blank blank    fixation_cross_white    "1_32_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2192      fixation_cross    gabor_032 gabor_142 gabor_072 gabor_015    gabor_032_alt gabor_142 gabor_072 gabor_015_alt     "1_33_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2200_gabor_patch_orientation_032_142_072_015_target_position_2_3_retrieval_position_2"       gabor_circ gabor_142_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_33_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2342      fixation_cross    gabor_173 gabor_158 gabor_135 gabor_020    gabor_173_alt gabor_158 gabor_135_alt gabor_020     "1_34_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_173_158_135_020_target_position_2_4_retrieval_position_2"       gabor_circ gabor_158_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_34_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2342      fixation_cross    gabor_160 gabor_083 gabor_138 gabor_022    gabor_160_alt gabor_083 gabor_138 gabor_022_alt     "1_35_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_160_083_138_022_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_138_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_35_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2192  2992  2192      fixation_cross    gabor_125 gabor_072 gabor_146 gabor_039    gabor_125_alt gabor_072 gabor_146 gabor_039_alt     "1_36_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_125_072_146_039_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_096_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_36_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1992  2992  1942      fixation_cross    gabor_035 gabor_059 gabor_096 gabor_144    gabor_035_alt gabor_059_alt gabor_096 gabor_144     "1_37_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2000_3000_1950_gabor_patch_orientation_035_059_096_144_target_position_3_4_retrieval_position_2"       gabor_circ gabor_059_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_37_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_059_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_156 gabor_002 gabor_174 gabor_140    gabor_156 gabor_002_alt gabor_174_alt gabor_140     "1_38_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_156_002_174_140_target_position_1_4_retrieval_position_1"       gabor_110_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_38_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_110_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1842  2992  1992      fixation_cross    gabor_157 gabor_026 gabor_142 gabor_173    gabor_157_alt gabor_026 gabor_142 gabor_173_alt     "1_39_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_157_026_142_173_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_142_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_39_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1742  2992  2042      fixation_cross    gabor_127 gabor_106 gabor_021 gabor_071    gabor_127_alt gabor_106_alt gabor_021 gabor_071     "1_40_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2050_gabor_patch_orientation_127_106_021_071_target_position_3_4_retrieval_position_2"       gabor_circ gabor_106_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_40_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_106_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1942  2992  2042      fixation_cross    gabor_174 gabor_126 gabor_100 gabor_013    gabor_174_alt gabor_126_alt gabor_100 gabor_013     "1_41_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_174_126_100_013_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_100_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_41_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_100_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_117 gabor_152 gabor_135 gabor_097    gabor_117 gabor_152 gabor_135_alt gabor_097_alt     "1_42_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_117_152_135_097_target_position_1_2_retrieval_position_1"       gabor_117_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_42_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2092  2992  2392      fixation_cross    gabor_178 gabor_089 gabor_045 gabor_007    gabor_178 gabor_089 gabor_045_alt gabor_007_alt     "1_43_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_178_089_045_007_target_position_1_2_retrieval_position_2"       gabor_circ gabor_089_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_43_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1992  2992  2542      fixation_cross    gabor_170 gabor_154 gabor_103 gabor_045    gabor_170 gabor_154_alt gabor_103 gabor_045_alt     "1_44_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2000_3000_2550_gabor_patch_orientation_170_154_103_045_target_position_1_3_retrieval_position_2"       gabor_circ gabor_154_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_44_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_154_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_011 gabor_120 gabor_178 gabor_035    gabor_011 gabor_120_alt gabor_178_alt gabor_035     "1_45_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_011_120_178_035_target_position_1_4_retrieval_position_1"       gabor_011_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_45_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_129 gabor_158 gabor_040 gabor_015    gabor_129_alt gabor_158 gabor_040 gabor_015_alt     "1_46_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_129_158_040_015_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_085_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_46_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_118 gabor_048 gabor_005 gabor_175    gabor_118 gabor_048 gabor_005_alt gabor_175_alt     "1_47_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_118_048_005_175_target_position_1_2_retrieval_position_1"       gabor_118_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_47_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2042  2992  2042      fixation_cross    gabor_091 gabor_135 gabor_007 gabor_052    gabor_091_alt gabor_135 gabor_007 gabor_052_alt     "1_48_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_091_135_007_052_target_position_2_3_retrieval_position_2"       gabor_circ gabor_135_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_48_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_056 gabor_163 gabor_096 gabor_113    gabor_056 gabor_163 gabor_096_alt gabor_113_alt     "1_49_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_056_163_096_113_target_position_1_2_retrieval_position_2"       gabor_circ gabor_023_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_49_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_142 gabor_062 gabor_169 gabor_081    gabor_142_alt gabor_062_alt gabor_169 gabor_081     "1_50_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_142_062_169_081_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_124_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_50_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  2492      fixation_cross    gabor_178 gabor_117 gabor_155 gabor_097    gabor_178 gabor_117 gabor_155_alt gabor_097_alt     "1_51_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_178_117_155_097_target_position_1_2_retrieval_position_1"       gabor_043_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_51_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  1792  2992  2592      fixation_cross    gabor_039 gabor_156 gabor_066 gabor_125    gabor_039 gabor_156 gabor_066_alt gabor_125_alt     "1_52_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2600_gabor_patch_orientation_039_156_066_125_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_017_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_52_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_017_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2192      fixation_cross    gabor_173 gabor_109 gabor_019 gabor_039    gabor_173 gabor_109_alt gabor_019_alt gabor_039     "1_53_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_173_109_019_039_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_039_framed    blank blank blank blank    fixation_cross_white    "1_53_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1892  2992  2042      fixation_cross    gabor_034 gabor_114 gabor_179 gabor_146    gabor_034_alt gabor_114_alt gabor_179 gabor_146     "1_54_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_034_114_179_146_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_146_framed    blank blank blank blank    fixation_cross_white    "1_54_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1742  2992  2542      fixation_cross    gabor_067 gabor_085 gabor_033 gabor_105    gabor_067 gabor_085 gabor_033_alt gabor_105_alt     "1_55_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_067_085_033_105_target_position_1_2_retrieval_position_1"       gabor_017_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_55_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  1942      fixation_cross    gabor_008 gabor_119 gabor_048 gabor_137    gabor_008_alt gabor_119 gabor_048 gabor_137_alt     "1_56_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_008_119_048_137_target_position_2_3_retrieval_position_2"       gabor_circ gabor_166_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_56_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  2192  2992  2392      fixation_cross    gabor_044 gabor_071 gabor_134 gabor_100    gabor_044 gabor_071_alt gabor_134_alt gabor_100     "1_57_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_2400_gabor_patch_orientation_044_071_134_100_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_134_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_57_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_134_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2092  2992  1942      fixation_cross    gabor_179 gabor_146 gabor_113 gabor_063    gabor_179 gabor_146_alt gabor_113 gabor_063_alt     "1_58_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_179_146_113_063_target_position_1_3_retrieval_position_1"       gabor_129_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_58_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_039 gabor_147 gabor_062 gabor_014    gabor_039 gabor_147 gabor_062_alt gabor_014_alt     "1_59_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_039_147_062_014_target_position_1_2_retrieval_position_1"       gabor_175_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_59_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2192  2992  2542      fixation_cross    gabor_042 gabor_152 gabor_065 gabor_170    gabor_042_alt gabor_152 gabor_065_alt gabor_170     "1_60_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_042_152_065_170_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_170_framed    blank blank blank blank    fixation_cross_white    "1_60_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1792  2992  2492      fixation_cross    gabor_084 gabor_019 gabor_153 gabor_126    gabor_084_alt gabor_019 gabor_153_alt gabor_126     "1_61_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_084_019_153_126_target_position_2_4_retrieval_position_2"       gabor_circ gabor_068_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_61_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    64   292   292   399   125  1792  2992  2592      fixation_cross    gabor_060 gabor_097 gabor_121 gabor_149    gabor_060 gabor_097_alt gabor_121 gabor_149_alt     "1_62_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2600_gabor_patch_orientation_060_097_121_149_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_149_framed    blank blank blank blank    fixation_cross_white    "1_62_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_149_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1992  2992  2092      fixation_cross    gabor_146 gabor_114 gabor_074 gabor_163    gabor_146_alt gabor_114_alt gabor_074 gabor_163     "1_63_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_146_114_074_163_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_027_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_63_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2092  2992  2092      fixation_cross    gabor_086 gabor_118 gabor_103 gabor_045    gabor_086_alt gabor_118_alt gabor_103 gabor_045     "1_64_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2100_gabor_patch_orientation_086_118_103_045_target_position_3_4_retrieval_position_1"       gabor_134_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "1_64_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_134_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  1842  2992  2142      fixation_cross    gabor_013 gabor_119 gabor_153 gabor_086    gabor_013_alt gabor_119_alt gabor_153 gabor_086     "1_65_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_013_119_153_086_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_103_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_65_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  2242  2992  1992      fixation_cross    gabor_079 gabor_001 gabor_123 gabor_064    gabor_079_alt gabor_001 gabor_123_alt gabor_064     "1_66_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2000_gabor_patch_orientation_079_001_123_064_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_064_framed    blank blank blank blank    fixation_cross_white    "1_66_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2092  2992  2092      fixation_cross    gabor_026 gabor_178 gabor_114 gabor_153    gabor_026 gabor_178_alt gabor_114 gabor_153_alt     "1_67_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_026_178_114_153_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_068_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_67_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    62   292   292   399   125  1992  2992  2342      fixation_cross    gabor_048 gabor_107 gabor_025 gabor_080    gabor_048 gabor_107_alt gabor_025 gabor_080_alt     "1_68_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_048_107_025_080_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_025_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_68_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    61   292   292   399   125  2242  2992  2392      fixation_cross    gabor_131 gabor_078 gabor_155 gabor_046    gabor_131_alt gabor_078 gabor_155 gabor_046_alt     "1_69_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_131_078_155_046_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_108_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_69_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_108_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   44    63   292   292   399   125  2192  2992  1892      fixation_cross    gabor_110 gabor_076 gabor_025 gabor_045    gabor_110 gabor_076_alt gabor_025_alt gabor_045     "1_70_Encoding_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2200_3000_1900_gabor_patch_orientation_110_076_025_045_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_161_framed gabor_circ    blank blank blank blank    fixation_cross_white    "1_70_Retrieval_Working_Memory_MEG_P7_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_161_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
 
};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  