# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run1";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;

# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_109 gabor_093 gabor_166 gabor_028    gabor_109_alt gabor_093 gabor_166_alt gabor_028      "1_1_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_109_093_166_028_target_position_1_3_retrieval_position_1"          gabor_059_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_1_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_059_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  1942      fixation_cross    gabor_033 gabor_121 gabor_087 gabor_055    gabor_033_alt gabor_121 gabor_087 gabor_055_alt      "1_2_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_033_121_087_055_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_055_framed    blank blank blank blank    fixation_cross_target_position_1_4     "1_2_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_055_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  2342      fixation_cross    gabor_009 gabor_141 gabor_065 gabor_084    gabor_009 gabor_141 gabor_065_alt gabor_084_alt      "1_3_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2350_gabor_patch_orientation_009_141_065_084_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_115_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_3_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  1992      fixation_cross    gabor_020 gabor_004 gabor_041 gabor_167    gabor_020 gabor_004 gabor_041_alt gabor_167_alt      "1_4_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_020_004_041_167_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_041_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "1_4_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2442      fixation_cross    gabor_063 gabor_090 gabor_178 gabor_047    gabor_063_alt gabor_090_alt gabor_178 gabor_047      "1_5_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2450_gabor_patch_orientation_063_090_178_047_target_position_1_2_retrieval_position_1"          gabor_108_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "1_5_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_108_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2042      fixation_cross    gabor_174 gabor_158 gabor_005 gabor_051    gabor_174_alt gabor_158 gabor_005 gabor_051_alt      "1_6_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_174_158_005_051_target_position_1_4_retrieval_position_1"          gabor_128_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "1_6_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2492      fixation_cross    gabor_089 gabor_125 gabor_064 gabor_037    gabor_089 gabor_125_alt gabor_064 gabor_037_alt      "1_7_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_089_125_064_037_target_position_2_4_retrieval_position_2"          gabor_circ gabor_172_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "1_7_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2142  2992  2542      fixation_cross    gabor_020 gabor_127 gabor_106 gabor_088    gabor_020_alt gabor_127 gabor_106_alt gabor_088      "1_8_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2150_3000_2550_gabor_patch_orientation_020_127_106_088_target_position_1_3_retrieval_position_2"          gabor_circ gabor_177_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "1_8_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_177_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_158 gabor_019 gabor_180 gabor_127    gabor_158 gabor_019_alt gabor_180_alt gabor_127      "1_9_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_158_019_180_127_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_180_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "1_9_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_177 gabor_109 gabor_064 gabor_037    gabor_177_alt gabor_109 gabor_064 gabor_037_alt     "1_10_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_177_109_064_037_target_position_1_4_retrieval_position_1"          gabor_127_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_10_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2392      fixation_cross    gabor_123 gabor_179 gabor_017 gabor_055    gabor_123_alt gabor_179_alt gabor_017 gabor_055     "1_11_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_123_179_017_055_target_position_1_2_retrieval_position_2"          gabor_circ gabor_179_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_11_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1992  2992  2392      fixation_cross    gabor_007 gabor_158 gabor_075 gabor_038    gabor_007_alt gabor_158 gabor_075 gabor_038_alt     "1_12_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2400_gabor_patch_orientation_007_158_075_038_target_position_1_4_retrieval_position_2"          gabor_circ gabor_158_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_12_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_158_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  1942      fixation_cross    gabor_137 gabor_170 gabor_116 gabor_152    gabor_137 gabor_170_alt gabor_116 gabor_152_alt     "1_13_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_137_170_116_152_target_position_2_4_retrieval_position_2"          gabor_circ gabor_030_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_13_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2092      fixation_cross    gabor_079 gabor_043 gabor_098 gabor_161    gabor_079_alt gabor_043 gabor_098 gabor_161_alt     "1_14_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_079_043_098_161_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_114_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_14_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1742  2992  2192      fixation_cross    gabor_156 gabor_093 gabor_005 gabor_134    gabor_156 gabor_093 gabor_005_alt gabor_134_alt     "1_15_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2200_gabor_patch_orientation_156_093_005_134_target_position_3_4_retrieval_position_2"          gabor_circ gabor_045_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_15_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_045_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  2392      fixation_cross    gabor_007 gabor_081 gabor_066 gabor_026    gabor_007_alt gabor_081 gabor_066 gabor_026_alt     "1_16_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_007_081_066_026_target_position_1_4_retrieval_position_1"          gabor_007_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_16_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_156 gabor_023 gabor_137 gabor_005    gabor_156 gabor_023 gabor_137_alt gabor_005_alt     "1_17_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_156_023_137_005_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_005_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_17_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2292      fixation_cross    gabor_127 gabor_056 gabor_171 gabor_037    gabor_127 gabor_056_alt gabor_171 gabor_037_alt     "1_18_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2300_gabor_patch_orientation_127_056_171_037_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_082_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_18_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_155 gabor_084 gabor_099 gabor_115    gabor_155_alt gabor_084 gabor_099_alt gabor_115     "1_19_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_155_084_099_115_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_049_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_19_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_049_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_083 gabor_112 gabor_163 gabor_139    gabor_083 gabor_112_alt gabor_163_alt gabor_139     "1_20_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_083_112_163_139_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_163_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_20_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2192      fixation_cross    gabor_040 gabor_022 gabor_081 gabor_002    gabor_040 gabor_022_alt gabor_081_alt gabor_002     "1_21_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_040_022_081_002_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_130_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_21_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2142  2992  2492      fixation_cross    gabor_085 gabor_012 gabor_058 gabor_118    gabor_085_alt gabor_012_alt gabor_058 gabor_118     "1_22_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2150_3000_2500_gabor_patch_orientation_085_012_058_118_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_164_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_22_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_164_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_176 gabor_106 gabor_145 gabor_121    gabor_176_alt gabor_106_alt gabor_145 gabor_121     "1_23_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_176_106_145_121_target_position_1_2_retrieval_position_1"          gabor_039_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_23_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_039_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1992  2992  2342      fixation_cross    gabor_081 gabor_170 gabor_050 gabor_124    gabor_081 gabor_170 gabor_050_alt gabor_124_alt     "1_24_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_081_170_050_124_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_004_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_24_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2392      fixation_cross    gabor_150 gabor_001 gabor_116 gabor_043    gabor_150 gabor_001_alt gabor_116_alt gabor_043     "1_25_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_150_001_116_043_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_116_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_25_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_148 gabor_011 gabor_068 gabor_041    gabor_148 gabor_011 gabor_068_alt gabor_041_alt     "1_26_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_148_011_068_041_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_068_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_26_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_068_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_120 gabor_060 gabor_078 gabor_044    gabor_120 gabor_060_alt gabor_078 gabor_044_alt     "1_27_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_120_060_078_044_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_044_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_27_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1942  2992  2192      fixation_cross    gabor_001 gabor_114 gabor_027 gabor_140    gabor_001 gabor_114_alt gabor_027 gabor_140_alt     "1_28_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2200_gabor_patch_orientation_001_114_027_140_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_027_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_28_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_027_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2342      fixation_cross    gabor_159 gabor_026 gabor_054 gabor_100    gabor_159 gabor_026_alt gabor_054_alt gabor_100     "1_29_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_159_026_054_100_target_position_2_3_retrieval_position_2"          gabor_circ gabor_072_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_29_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2442      fixation_cross    gabor_008 gabor_148 gabor_027 gabor_070    gabor_008_alt gabor_148_alt gabor_027 gabor_070     "1_30_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_008_148_027_070_target_position_1_2_retrieval_position_2"          gabor_circ gabor_098_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_30_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1992  2992  2042      fixation_cross    gabor_089 gabor_129 gabor_157 gabor_175    gabor_089_alt gabor_129 gabor_157 gabor_175_alt     "1_31_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2000_3000_2050_gabor_patch_orientation_089_129_157_175_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_020_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_31_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_020_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2542      fixation_cross    gabor_177 gabor_162 gabor_136 gabor_023    gabor_177 gabor_162_alt gabor_136_alt gabor_023     "1_32_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_177_162_136_023_target_position_2_3_retrieval_position_2"          gabor_circ gabor_112_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_32_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2592      fixation_cross    gabor_033 gabor_060 gabor_142 gabor_120    gabor_033_alt gabor_060_alt gabor_142 gabor_120     "1_33_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_033_060_142_120_target_position_1_2_retrieval_position_1"          gabor_033_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_33_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_033_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2442      fixation_cross    gabor_151 gabor_080 gabor_123 gabor_034    gabor_151 gabor_080_alt gabor_123 gabor_034_alt     "1_34_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2450_gabor_patch_orientation_151_080_123_034_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_170_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_34_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  2292      fixation_cross    gabor_023 gabor_164 gabor_094 gabor_045    gabor_023 gabor_164_alt gabor_094 gabor_045_alt     "1_35_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_023_164_094_045_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_045_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_35_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_121 gabor_152 gabor_099 gabor_176    gabor_121_alt gabor_152_alt gabor_099 gabor_176     "1_36_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_121_152_099_176_target_position_1_2_retrieval_position_2"          gabor_circ gabor_015_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_36_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1842  2992  2042      fixation_cross    gabor_011 gabor_146 gabor_060 gabor_077    gabor_011 gabor_146 gabor_060_alt gabor_077_alt     "1_37_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2050_gabor_patch_orientation_011_146_060_077_target_position_3_4_retrieval_position_2"          gabor_circ gabor_146_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_37_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_146_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_042 gabor_122 gabor_004 gabor_167    gabor_042 gabor_122_alt gabor_004 gabor_167_alt     "1_38_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_042_122_004_167_target_position_2_4_retrieval_position_2"          gabor_circ gabor_122_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_38_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_122_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_123 gabor_010 gabor_100 gabor_159    gabor_123 gabor_010_alt gabor_100_alt gabor_159     "1_39_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_123_010_100_159_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_100_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_39_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_100_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_069 gabor_129 gabor_054 gabor_144    gabor_069_alt gabor_129 gabor_054 gabor_144_alt     "1_40_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_069_129_054_144_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_095_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_40_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  1892      fixation_cross    gabor_060 gabor_082 gabor_136 gabor_019    gabor_060_alt gabor_082 gabor_136 gabor_019_alt     "1_41_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_060_082_136_019_target_position_1_4_retrieval_position_1"          gabor_060_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_41_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1842  2992  2142      fixation_cross    gabor_070 gabor_027 gabor_047 gabor_091    gabor_070 gabor_027_alt gabor_047 gabor_091_alt     "1_42_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2150_gabor_patch_orientation_070_027_047_091_target_position_2_4_retrieval_position_1"          gabor_115_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_42_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_115_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2292      fixation_cross    gabor_061 gabor_037 gabor_078 gabor_167    gabor_061 gabor_037 gabor_078_alt gabor_167_alt     "1_43_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_061_037_078_167_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_127_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "1_43_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_049 gabor_159 gabor_070 gabor_103    gabor_049_alt gabor_159_alt gabor_070 gabor_103     "1_44_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_049_159_070_103_target_position_1_2_retrieval_position_2"          gabor_circ gabor_020_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_44_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_020_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2242      fixation_cross    gabor_116 gabor_168 gabor_148 gabor_085    gabor_116_alt gabor_168 gabor_148 gabor_085_alt     "1_45_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_116_168_148_085_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_085_framed    blank blank blank blank    fixation_cross_target_position_1_4    "1_45_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2542      fixation_cross    gabor_008 gabor_121 gabor_046 gabor_086    gabor_008 gabor_121_alt gabor_046_alt gabor_086     "1_46_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2550_gabor_patch_orientation_008_121_046_086_target_position_2_3_retrieval_position_2"          gabor_circ gabor_167_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_46_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_167_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2292      fixation_cross    gabor_103 gabor_057 gabor_173 gabor_013    gabor_103_alt gabor_057 gabor_173_alt gabor_013     "1_47_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_103_057_173_013_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_173_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_47_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2192  2992  2042      fixation_cross    gabor_177 gabor_122 gabor_089 gabor_156    gabor_177_alt gabor_122 gabor_089 gabor_156_alt     "1_48_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2200_3000_2050_gabor_patch_orientation_177_122_089_156_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_089_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_48_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_089_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2192      fixation_cross    gabor_175 gabor_051 gabor_139 gabor_006    gabor_175_alt gabor_051_alt gabor_139 gabor_006     "1_49_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2200_gabor_patch_orientation_175_051_139_006_target_position_1_2_retrieval_position_2"          gabor_circ gabor_051_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_49_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_051_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2592      fixation_cross    gabor_169 gabor_135 gabor_111 gabor_080    gabor_169_alt gabor_135 gabor_111 gabor_080_alt     "1_50_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_169_135_111_080_target_position_1_4_retrieval_position_1"          gabor_029_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_50_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  2242      fixation_cross    gabor_100 gabor_022 gabor_067 gabor_042    gabor_100_alt gabor_022_alt gabor_067 gabor_042     "1_51_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_100_022_067_042_target_position_1_2_retrieval_position_2"          gabor_circ gabor_022_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_51_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2592      fixation_cross    gabor_166 gabor_014 gabor_083 gabor_030    gabor_166_alt gabor_014_alt gabor_083 gabor_030     "1_52_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2600_gabor_patch_orientation_166_014_083_030_target_position_1_2_retrieval_position_2"          gabor_circ gabor_150_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "1_52_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1742  2992  2242      fixation_cross    gabor_035 gabor_075 gabor_118 gabor_052    gabor_035 gabor_075_alt gabor_118_alt gabor_052     "1_53_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2250_gabor_patch_orientation_035_075_118_052_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_052_framed    blank blank blank blank    fixation_cross_target_position_2_3    "1_53_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_052_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  1942      fixation_cross    gabor_112 gabor_005 gabor_023 gabor_046    gabor_112_alt gabor_005 gabor_023_alt gabor_046     "1_54_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_112_005_023_046_target_position_1_3_retrieval_position_1"          gabor_112_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_54_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2092      fixation_cross    gabor_069 gabor_009 gabor_038 gabor_086    gabor_069 gabor_009_alt gabor_038 gabor_086_alt     "1_55_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_069_009_038_086_target_position_2_4_retrieval_position_2"          gabor_circ gabor_009_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_55_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2242  2992  2242      fixation_cross    gabor_023 gabor_093 gabor_175 gabor_039    gabor_023 gabor_093_alt gabor_175 gabor_039_alt     "1_56_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2250_gabor_patch_orientation_023_093_175_039_target_position_2_4_retrieval_position_1"          gabor_023_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_56_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_023_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2142      fixation_cross    gabor_109 gabor_169 gabor_003 gabor_030    gabor_109 gabor_169_alt gabor_003 gabor_030_alt     "1_57_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2150_gabor_patch_orientation_109_169_003_030_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_080_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_57_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_080_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  1992      fixation_cross    gabor_125 gabor_006 gabor_150 gabor_044    gabor_125 gabor_006 gabor_150_alt gabor_044_alt     "1_58_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_125_006_150_044_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_044_framed    blank blank blank blank    fixation_cross_target_position_3_4    "1_58_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2042  2992  2042      fixation_cross    gabor_165 gabor_103 gabor_119 gabor_075    gabor_165_alt gabor_103_alt gabor_119 gabor_075     "1_59_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_2050_gabor_patch_orientation_165_103_119_075_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_075_framed    blank blank blank blank    fixation_cross_target_position_1_2    "1_59_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_075_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2492      fixation_cross    gabor_113 gabor_008 gabor_144 gabor_023    gabor_113_alt gabor_008 gabor_144_alt gabor_023     "1_60_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2500_gabor_patch_orientation_113_008_144_023_target_position_1_3_retrieval_position_1"          gabor_066_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_60_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_137 gabor_031 gabor_176 gabor_159    gabor_137 gabor_031_alt gabor_176 gabor_159_alt     "1_61_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_137_031_176_159_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_159_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_61_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_028 gabor_010 gabor_133 gabor_082    gabor_028 gabor_010_alt gabor_133 gabor_082_alt     "1_62_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_028_010_133_082_target_position_2_4_retrieval_position_2"          gabor_circ gabor_010_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_62_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2192      fixation_cross    gabor_103 gabor_170 gabor_053 gabor_142    gabor_103 gabor_170_alt gabor_053 gabor_142_alt     "1_63_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_103_170_053_142_target_position_2_4_retrieval_position_2"          gabor_circ gabor_170_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_63_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2492      fixation_cross    gabor_052 gabor_001 gabor_020 gabor_176    gabor_052_alt gabor_001 gabor_020_alt gabor_176     "1_64_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_052_001_020_176_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_069_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "1_64_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_069_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1892  2992  2092      fixation_cross    gabor_047 gabor_090 gabor_131 gabor_064    gabor_047_alt gabor_090 gabor_131 gabor_064_alt     "1_65_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2100_gabor_patch_orientation_047_090_131_064_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_179_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_65_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_179_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2342      fixation_cross    gabor_149 gabor_075 gabor_096 gabor_041    gabor_149 gabor_075_alt gabor_096 gabor_041_alt     "1_66_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_149_075_096_041_target_position_2_4_retrieval_position_2"          gabor_circ gabor_075_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "1_66_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_075_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2442      fixation_cross    gabor_034 gabor_156 gabor_009 gabor_114    gabor_034_alt gabor_156 gabor_009 gabor_114_alt     "1_67_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_034_156_009_114_target_position_1_4_retrieval_position_1"          gabor_034_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "1_67_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_034_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2592      fixation_cross    gabor_134 gabor_113 gabor_079 gabor_002    gabor_134 gabor_113_alt gabor_079 gabor_002_alt     "1_68_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_134_113_079_002_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_002_framed    blank blank blank blank    fixation_cross_target_position_2_4    "1_68_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2192  2992  1892      fixation_cross    gabor_057 gabor_074 gabor_008 gabor_146    gabor_057_alt gabor_074 gabor_008_alt gabor_146     "1_69_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_1900_gabor_patch_orientation_057_074_008_146_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_098_framed    blank blank blank blank    fixation_cross_target_position_1_3    "1_69_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_098_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_015 gabor_173 gabor_104 gabor_052    gabor_015 gabor_173_alt gabor_104_alt gabor_052     "1_70_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_015_173_104_052_target_position_2_3_retrieval_position_2"          gabor_circ gabor_126_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "1_70_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  