# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    61   292   292   399   125  1892  2992  2542      fixation_cross    gabor_123 gabor_138 gabor_102 gabor_179    gabor_123 gabor_138_alt gabor_102 gabor_179_alt      "2_1_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_123_138_102_179_target_position_1_3_retrieval_position_1"       gabor_073_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_1_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2042      fixation_cross    gabor_138 gabor_072 gabor_178 gabor_106    gabor_138 gabor_072_alt gabor_178 gabor_106_alt      "2_2_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_138_072_178_106_target_position_1_3_retrieval_position_1"       gabor_138_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_2_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2242  2992  2392      fixation_cross    gabor_177 gabor_065 gabor_035 gabor_122    gabor_177_alt gabor_065 gabor_035 gabor_122_alt      "2_3_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_177_065_035_122_target_position_2_3_retrieval_position_2"       gabor_circ gabor_065_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_3_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1792  2992  2292      fixation_cross    gabor_016 gabor_123 gabor_106 gabor_079    gabor_016 gabor_123_alt gabor_106_alt gabor_079      "2_4_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1800_3000_2300_gabor_patch_orientation_016_123_106_079_target_position_1_4_retrieval_position_2"       gabor_circ gabor_123_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_4_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_123_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_009 gabor_040 gabor_179 gabor_161    gabor_009 gabor_040 gabor_179_alt gabor_161_alt      "2_5_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_009_040_179_161_target_position_1_2_retrieval_position_2"       gabor_circ gabor_040_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_5_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2442      fixation_cross    gabor_125 gabor_147 gabor_095 gabor_070    gabor_125_alt gabor_147 gabor_095_alt gabor_070      "2_6_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_125_147_095_070_target_position_2_4_retrieval_position_2"       gabor_circ gabor_011_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_6_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2242      fixation_cross    gabor_132 gabor_156 gabor_095 gabor_071    gabor_132_alt gabor_156_alt gabor_095 gabor_071      "2_7_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_132_156_095_071_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_116_framed    blank blank blank blank    fixation_cross_target_position_3_4     "2_7_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  1992      fixation_cross    gabor_051 gabor_012 gabor_127 gabor_159    gabor_051_alt gabor_012_alt gabor_127 gabor_159      "2_8_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_051_012_127_159_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_079_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_8_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  2342      fixation_cross    gabor_150 gabor_060 gabor_120 gabor_042    gabor_150_alt gabor_060 gabor_120_alt gabor_042      "2_9_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_150_060_120_042_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_042_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_9_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2242  2992  2292      fixation_cross    gabor_088 gabor_036 gabor_116 gabor_055    gabor_088 gabor_036 gabor_116_alt gabor_055_alt     "2_10_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_088_036_116_055_target_position_1_2_retrieval_position_2"       gabor_circ gabor_172_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_10_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_095 gabor_135 gabor_120 gabor_065    gabor_095 gabor_135 gabor_120_alt gabor_065_alt     "2_11_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_095_135_120_065_target_position_1_2_retrieval_position_2"       gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_11_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2192      fixation_cross    gabor_108 gabor_092 gabor_124 gabor_167    gabor_108 gabor_092 gabor_124_alt gabor_167_alt     "2_12_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_108_092_124_167_target_position_1_2_retrieval_position_1"       gabor_061_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_12_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2092  2992  2392      fixation_cross    gabor_092 gabor_071 gabor_135 gabor_046    gabor_092 gabor_071_alt gabor_135_alt gabor_046     "2_13_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2400_gabor_patch_orientation_092_071_135_046_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_180_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_13_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_180_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2492      fixation_cross    gabor_180 gabor_133 gabor_151 gabor_027    gabor_180 gabor_133_alt gabor_151 gabor_027_alt     "2_14_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_180_133_151_027_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_151_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_14_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1992  2992  1892      fixation_cross    gabor_099 gabor_011 gabor_152 gabor_077    gabor_099 gabor_011 gabor_152_alt gabor_077_alt     "2_15_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2000_3000_1900_gabor_patch_orientation_099_011_152_077_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_127_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_15_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_127_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_125 gabor_140 gabor_016 gabor_160    gabor_125_alt gabor_140 gabor_016 gabor_160_alt     "2_16_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_125_140_016_160_target_position_2_3_retrieval_position_2"       gabor_circ gabor_093_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_16_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2592      fixation_cross    gabor_007 gabor_143 gabor_023 gabor_078    gabor_007_alt gabor_143 gabor_023 gabor_078_alt     "2_17_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_007_143_023_078_target_position_2_3_retrieval_position_2"       gabor_circ gabor_097_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_17_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_097_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  2242      fixation_cross    gabor_069 gabor_040 gabor_097 gabor_176    gabor_069_alt gabor_040 gabor_097_alt gabor_176     "2_18_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_069_040_097_176_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_176_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_18_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2592      fixation_cross    gabor_066 gabor_028 gabor_150 gabor_093    gabor_066 gabor_028_alt gabor_150 gabor_093_alt     "2_19_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_066_028_150_093_target_position_1_3_retrieval_position_1"       gabor_066_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_19_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2092      fixation_cross    gabor_054 gabor_038 gabor_016 gabor_074    gabor_054 gabor_038_alt gabor_016_alt gabor_074     "2_20_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2100_gabor_patch_orientation_054_038_016_074_target_position_1_4_retrieval_position_1"       gabor_054_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_20_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  2092      fixation_cross    gabor_027 gabor_077 gabor_101 gabor_144    gabor_027 gabor_077 gabor_101_alt gabor_144_alt     "2_21_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_027_077_101_144_target_position_1_2_retrieval_position_1"       gabor_027_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_21_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2242  2992  2542      fixation_cross    gabor_127 gabor_160 gabor_054 gabor_014    gabor_127_alt gabor_160 gabor_054 gabor_014_alt     "2_22_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2550_gabor_patch_orientation_127_160_054_014_target_position_2_3_retrieval_position_1"       gabor_079_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_22_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_079_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2242      fixation_cross    gabor_005 gabor_085 gabor_115 gabor_133    gabor_005 gabor_085_alt gabor_115_alt gabor_133     "2_23_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_005_085_115_133_target_position_1_4_retrieval_position_1"       gabor_054_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_23_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2142  2992  1942      fixation_cross    gabor_098 gabor_020 gabor_127 gabor_179    gabor_098_alt gabor_020 gabor_127_alt gabor_179     "2_24_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_098_020_127_179_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_179_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_24_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_085 gabor_055 gabor_025 gabor_007    gabor_085_alt gabor_055_alt gabor_025 gabor_007     "2_25_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_085_055_025_007_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_007_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_25_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1742  2992  2242      fixation_cross    gabor_173 gabor_153 gabor_096 gabor_066    gabor_173_alt gabor_153 gabor_096_alt gabor_066     "2_26_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2250_gabor_patch_orientation_173_153_096_066_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_047_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_26_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_047_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  2392      fixation_cross    gabor_116 gabor_089 gabor_033 gabor_145    gabor_116_alt gabor_089_alt gabor_033 gabor_145     "2_27_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2400_gabor_patch_orientation_116_089_033_145_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_172_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_27_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2142      fixation_cross    gabor_042 gabor_004 gabor_111 gabor_021    gabor_042 gabor_004_alt gabor_111 gabor_021_alt     "2_28_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_042_004_111_021_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_111_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_28_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1942  2992  2042      fixation_cross    gabor_161 gabor_131 gabor_102 gabor_083    gabor_161_alt gabor_131 gabor_102_alt gabor_083     "2_29_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2050_gabor_patch_orientation_161_131_102_083_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_053_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_29_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_053_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2092  2992  1942      fixation_cross    gabor_110 gabor_036 gabor_125 gabor_093    gabor_110_alt gabor_036 gabor_125 gabor_093_alt     "2_30_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_1950_gabor_patch_orientation_110_036_125_093_target_position_2_3_retrieval_position_2"       gabor_circ gabor_036_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_30_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_091 gabor_123 gabor_154 gabor_018    gabor_091 gabor_123 gabor_154_alt gabor_018_alt     "2_31_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_091_123_154_018_target_position_1_2_retrieval_position_1"       gabor_091_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_31_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_062 gabor_104 gabor_151 gabor_046    gabor_062 gabor_104_alt gabor_151 gabor_046_alt     "2_32_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_062_104_151_046_target_position_1_3_retrieval_position_1"       gabor_062_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_32_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_062_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_071 gabor_009 gabor_050 gabor_119    gabor_071_alt gabor_009_alt gabor_050 gabor_119     "2_33_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_071_009_050_119_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_050_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_33_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1892  2992  2292      fixation_cross    gabor_060 gabor_035 gabor_144 gabor_007    gabor_060 gabor_035_alt gabor_144_alt gabor_007     "2_34_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2300_gabor_patch_orientation_060_035_144_007_target_position_1_4_retrieval_position_2"       gabor_circ gabor_035_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_34_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_035_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1892  2992  1992      fixation_cross    gabor_145 gabor_084 gabor_025 gabor_064    gabor_145_alt gabor_084 gabor_025_alt gabor_064     "2_35_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2000_gabor_patch_orientation_145_084_025_064_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_064_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_35_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1742  2992  2492      fixation_cross    gabor_071 gabor_009 gabor_115 gabor_089    gabor_071 gabor_009_alt gabor_115 gabor_089_alt     "2_36_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_071_009_115_089_target_position_1_3_retrieval_position_1"       gabor_071_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_36_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2442      fixation_cross    gabor_022 gabor_050 gabor_134 gabor_080    gabor_022 gabor_050 gabor_134_alt gabor_080_alt     "2_37_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_022_050_134_080_target_position_1_2_retrieval_position_1"       gabor_159_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_37_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_043 gabor_012 gabor_088 gabor_123    gabor_043 gabor_012 gabor_088_alt gabor_123_alt     "2_38_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_043_012_088_123_target_position_1_2_retrieval_position_1"       gabor_043_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_38_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2092  2992  1892      fixation_cross    gabor_050 gabor_138 gabor_168 gabor_111    gabor_050_alt gabor_138 gabor_168_alt gabor_111     "2_39_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_1900_gabor_patch_orientation_050_138_168_111_target_position_2_4_retrieval_position_2"       gabor_circ gabor_090_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_39_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_090_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2042  2992  2292      fixation_cross    gabor_174 gabor_007 gabor_094 gabor_112    gabor_174 gabor_007_alt gabor_094_alt gabor_112     "2_40_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_174_007_094_112_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_112_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_40_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  1942      fixation_cross    gabor_166 gabor_051 gabor_008 gabor_034    gabor_166 gabor_051 gabor_008_alt gabor_034_alt     "2_41_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_166_051_008_034_target_position_1_2_retrieval_position_1"       gabor_166_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_41_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1742  2992  2392      fixation_cross    gabor_079 gabor_102 gabor_162 gabor_022    gabor_079_alt gabor_102_alt gabor_162 gabor_022     "2_42_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2400_gabor_patch_orientation_079_102_162_022_target_position_3_4_retrieval_position_2"       gabor_circ gabor_102_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_42_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_102_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_144 gabor_095 gabor_036 gabor_075    gabor_144 gabor_095_alt gabor_036 gabor_075_alt     "2_43_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_144_095_036_075_target_position_1_3_retrieval_position_1"       gabor_006_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_43_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_006_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2192  2992  2092      fixation_cross    gabor_165 gabor_115 gabor_077 gabor_133    gabor_165 gabor_115 gabor_077_alt gabor_133_alt     "2_44_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_2100_gabor_patch_orientation_165_115_077_133_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_077_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_44_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_077_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2042      fixation_cross    gabor_132 gabor_115 gabor_171 gabor_052    gabor_132_alt gabor_115_alt gabor_171 gabor_052     "2_45_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_132_115_171_052_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_004_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_45_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_034 gabor_121 gabor_153 gabor_084    gabor_034_alt gabor_121_alt gabor_153 gabor_084     "2_46_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_034_121_153_084_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_104_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_46_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2492      fixation_cross    gabor_029 gabor_148 gabor_113 gabor_093    gabor_029 gabor_148_alt gabor_113 gabor_093_alt     "2_47_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_029_148_113_093_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_067_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_47_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2342      fixation_cross    gabor_158 gabor_117 gabor_074 gabor_005    gabor_158_alt gabor_117 gabor_074 gabor_005_alt     "2_48_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_158_117_074_005_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_027_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_48_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1742  2992  1942      fixation_cross    gabor_140 gabor_163 gabor_079 gabor_053    gabor_140_alt gabor_163 gabor_079_alt gabor_053     "2_49_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_140_163_079_053_target_position_2_4_retrieval_position_2"       gabor_circ gabor_027_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_49_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2042  2992  2442      fixation_cross    gabor_049 gabor_033 gabor_157 gabor_117    gabor_049_alt gabor_033 gabor_157_alt gabor_117     "2_50_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2450_gabor_patch_orientation_049_033_157_117_target_position_2_4_retrieval_position_2"       gabor_circ gabor_078_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_50_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  2342      fixation_cross    gabor_116 gabor_057 gabor_178 gabor_140    gabor_116_alt gabor_057 gabor_178_alt gabor_140     "2_51_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_116_057_178_140_target_position_2_4_retrieval_position_2"       gabor_circ gabor_057_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_51_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_057_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  1742  2992  1892      fixation_cross    gabor_017 gabor_081 gabor_137 gabor_061    gabor_017 gabor_081_alt gabor_137_alt gabor_061     "2_52_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_1900_gabor_patch_orientation_017_081_137_061_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_137_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_52_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_137_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2342      fixation_cross    gabor_179 gabor_060 gabor_096 gabor_130    gabor_179_alt gabor_060 gabor_096 gabor_130_alt     "2_53_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_179_060_096_130_target_position_2_3_retrieval_position_2"       gabor_circ gabor_060_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_53_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1792  2992  2592      fixation_cross    gabor_148 gabor_062 gabor_024 gabor_083    gabor_148 gabor_062_alt gabor_024 gabor_083_alt     "2_54_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_148_062_024_083_target_position_1_3_retrieval_position_1"       gabor_100_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_54_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_100_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1892  2992  2442      fixation_cross    gabor_170 gabor_010 gabor_118 gabor_065    gabor_170 gabor_010_alt gabor_118_alt gabor_065     "2_55_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_170_010_118_065_target_position_1_4_retrieval_position_1"       gabor_031_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_55_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1992  2992  2592      fixation_cross    gabor_176 gabor_102 gabor_037 gabor_065    gabor_176 gabor_102_alt gabor_037_alt gabor_065     "2_56_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2600_gabor_patch_orientation_176_102_037_065_target_position_1_4_retrieval_position_1"       gabor_126_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_56_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  2092  2992  2342      fixation_cross    gabor_081 gabor_129 gabor_167 gabor_103    gabor_081_alt gabor_129 gabor_167 gabor_103_alt     "2_57_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2350_gabor_patch_orientation_081_129_167_103_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_148_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_57_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_148_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  1842  2992  2242      fixation_cross    gabor_111 gabor_004 gabor_174 gabor_151    gabor_111 gabor_004 gabor_174_alt gabor_151_alt     "2_58_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_111_004_174_151_target_position_1_2_retrieval_position_1"       gabor_064_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_58_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2042      fixation_cross    gabor_166 gabor_009 gabor_027 gabor_052    gabor_166 gabor_009_alt gabor_027_alt gabor_052     "2_59_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_166_009_027_052_target_position_1_4_retrieval_position_1"       gabor_116_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_59_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_116_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2192  2992  1892      fixation_cross    gabor_120 gabor_138 gabor_059 gabor_093    gabor_120_alt gabor_138_alt gabor_059 gabor_093     "2_60_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_1900_gabor_patch_orientation_120_138_059_093_target_position_3_4_retrieval_position_2"       gabor_circ gabor_138_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_60_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_138_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2142      fixation_cross    gabor_151 gabor_006 gabor_094 gabor_064    gabor_151_alt gabor_006 gabor_094_alt gabor_064     "2_61_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_151_006_094_064_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_114_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_61_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2292      fixation_cross    gabor_037 gabor_086 gabor_163 gabor_101    gabor_037 gabor_086_alt gabor_163 gabor_101_alt     "2_62_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_037_086_163_101_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_163_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_62_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1992  2992  1992      fixation_cross    gabor_128 gabor_177 gabor_149 gabor_060    gabor_128_alt gabor_177_alt gabor_149 gabor_060     "2_63_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_128_177_149_060_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_149_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_63_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_149_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2192  2992  2192      fixation_cross    gabor_135 gabor_158 gabor_009 gabor_027    gabor_135 gabor_158_alt gabor_009 gabor_027_alt     "2_64_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_135_158_009_027_target_position_1_3_retrieval_position_1"       gabor_086_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_64_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_086_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_131 gabor_001 gabor_024 gabor_048    gabor_131 gabor_001 gabor_024_alt gabor_048_alt     "2_65_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_131_001_024_048_target_position_1_2_retrieval_position_1"       gabor_131_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_65_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    61   292   292   399   125  2142  2992  2192      fixation_cross    gabor_072 gabor_112 gabor_048 gabor_177    gabor_072 gabor_112_alt gabor_048_alt gabor_177     "2_66_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_072_112_048_177_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_130_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_66_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    64   292   292   399   125  2242  2992  1992      fixation_cross    gabor_046 gabor_102 gabor_153 gabor_075    gabor_046_alt gabor_102 gabor_153_alt gabor_075     "2_67_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2250_3000_2000_gabor_patch_orientation_046_102_153_075_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_153_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_67_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_153_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  2192  2992  2492      fixation_cross    gabor_135 gabor_156 gabor_009 gabor_066    gabor_135 gabor_156_alt gabor_009 gabor_066_alt     "2_68_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2500_gabor_patch_orientation_135_156_009_066_target_position_1_3_retrieval_position_1"       gabor_135_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_68_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    63   292   292   399   125  1792  2992  2542      fixation_cross    gabor_008 gabor_127 gabor_146 gabor_041    gabor_008_alt gabor_127 gabor_146_alt gabor_041     "2_69_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1800_3000_2550_gabor_patch_orientation_008_127_146_041_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_096_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_69_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_096_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   43    62   292   292   399   125  1942  2992  2092      fixation_cross    gabor_045 gabor_082 gabor_011 gabor_151    gabor_045_alt gabor_082_alt gabor_011 gabor_151     "2_70_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_045_082_011_151_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_151_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_70_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  