# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;	  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   44    62   292   292   399   125  1792  2992  2392      fixation_cross    gabor_048 gabor_002 gabor_092 gabor_171    gabor_048 gabor_002_alt gabor_092 gabor_171_alt      "2_1_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2400_gabor_patch_orientation_048_002_092_171_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_092_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2242  2992  2042      fixation_cross    gabor_029 gabor_088 gabor_163 gabor_142    gabor_029_alt gabor_088_alt gabor_163 gabor_142      "2_2_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_029_088_163_142_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_142_framed    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2242  2992  2042      fixation_cross    gabor_153 gabor_043 gabor_067 gabor_128    gabor_153_alt gabor_043 gabor_067 gabor_128_alt      "2_3_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2050_gabor_patch_orientation_153_043_067_128_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_067_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2242      fixation_cross    gabor_074 gabor_152 gabor_130 gabor_113    gabor_074 gabor_152_alt gabor_130 gabor_113_alt      "2_4_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_074_152_130_113_target_position_1_3_retrieval_position_1"       gabor_074_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1942  2992  2542      fixation_cross    gabor_135 gabor_090 gabor_009 gabor_029    gabor_135_alt gabor_090 gabor_009 gabor_029_alt      "2_5_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2550_gabor_patch_orientation_135_090_009_029_target_position_2_3_retrieval_position_1"       gabor_180_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_180_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2592      fixation_cross    gabor_031 gabor_014 gabor_058 gabor_095    gabor_031 gabor_014_alt gabor_058_alt gabor_095      "2_6_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_031_014_058_095_target_position_1_4_retrieval_position_1"       gabor_031_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  1892      fixation_cross    gabor_062 gabor_016 gabor_081 gabor_102    gabor_062_alt gabor_016 gabor_081_alt gabor_102      "2_7_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_062_016_081_102_target_position_2_4_retrieval_position_2"       gabor_circ gabor_016_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1942  2992  1992      fixation_cross    gabor_074 gabor_089 gabor_119 gabor_153    gabor_074 gabor_089 gabor_119_alt gabor_153_alt      "2_8_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_074_089_119_153_target_position_1_2_retrieval_position_1"       gabor_029_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1742  2992  1892      fixation_cross    gabor_174 gabor_111 gabor_141 gabor_096    gabor_174_alt gabor_111 gabor_141_alt gabor_096      "2_9_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_174_111_141_096_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_096_framed    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_096_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_132 gabor_027 gabor_070 gabor_048    gabor_132 gabor_027_alt gabor_070_alt gabor_048     "2_10_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_132_027_070_048_target_position_1_4_retrieval_position_1"       gabor_132_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  1892      fixation_cross    gabor_094 gabor_019 gabor_073 gabor_131    gabor_094 gabor_019_alt gabor_073_alt gabor_131     "2_11_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_094_019_073_131_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_180_framed    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1742  2992  2342      fixation_cross    gabor_030 gabor_096 gabor_112 gabor_173    gabor_030 gabor_096_alt gabor_112_alt gabor_173     "2_12_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_2350_gabor_patch_orientation_030_096_112_173_target_position_1_4_retrieval_position_2"       gabor_circ gabor_096_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_096_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  2342      fixation_cross    gabor_009 gabor_136 gabor_080 gabor_065    gabor_009 gabor_136_alt gabor_080 gabor_065_alt     "2_13_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_009_136_080_065_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_030_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1742  2992  2492      fixation_cross    gabor_137 gabor_057 gabor_177 gabor_103    gabor_137_alt gabor_057_alt gabor_177 gabor_103     "2_14_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2500_gabor_patch_orientation_137_057_177_103_target_position_3_4_retrieval_position_1"       gabor_087_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_087_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2242      fixation_cross    gabor_114 gabor_005 gabor_048 gabor_082    gabor_114_alt gabor_005_alt gabor_048 gabor_082     "2_15_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2250_gabor_patch_orientation_114_005_048_082_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_082_framed    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2142  2992  1942      fixation_cross    gabor_013 gabor_062 gabor_146 gabor_081    gabor_013_alt gabor_062_alt gabor_146 gabor_081     "2_16_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_013_062_146_081_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_130_framed    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_130_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  2192      fixation_cross    gabor_094 gabor_057 gabor_141 gabor_023    gabor_094_alt gabor_057_alt gabor_141 gabor_023     "2_17_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_094_057_141_023_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_004_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_004_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2142  2992  2542      fixation_cross    gabor_067 gabor_144 gabor_037 gabor_127    gabor_067 gabor_144 gabor_037_alt gabor_127_alt     "2_18_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2550_gabor_patch_orientation_067_144_037_127_target_position_1_2_retrieval_position_2"       gabor_circ gabor_007_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2242  2992  2242      fixation_cross    gabor_173 gabor_097 gabor_119 gabor_139    gabor_173 gabor_097 gabor_119_alt gabor_139_alt     "2_19_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_173_097_119_139_target_position_1_2_retrieval_position_2"       gabor_circ gabor_050_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  2442      fixation_cross    gabor_079 gabor_150 gabor_022 gabor_130    gabor_079 gabor_150 gabor_022_alt gabor_130_alt     "2_20_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2450_gabor_patch_orientation_079_150_022_130_target_position_1_2_retrieval_position_2"       gabor_circ gabor_100_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_100_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_088 gabor_178 gabor_072 gabor_149    gabor_088 gabor_178_alt gabor_072_alt gabor_149     "2_21_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_088_178_072_149_target_position_1_4_retrieval_position_1"       gabor_038_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1842  2992  2392      fixation_cross    gabor_013 gabor_170 gabor_037 gabor_052    gabor_013 gabor_170_alt gabor_037 gabor_052_alt     "2_22_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1850_3000_2400_gabor_patch_orientation_013_170_037_052_target_position_1_3_retrieval_position_2"       gabor_circ gabor_170_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_170_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2192      fixation_cross    gabor_177 gabor_160 gabor_113 gabor_071    gabor_177 gabor_160_alt gabor_113 gabor_071_alt     "2_23_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_177_160_113_071_target_position_1_3_retrieval_position_1"       gabor_037_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2042  2992  2092      fixation_cross    gabor_071 gabor_112 gabor_026 gabor_053    gabor_071 gabor_112 gabor_026_alt gabor_053_alt     "2_24_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2100_gabor_patch_orientation_071_112_026_053_target_position_1_2_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_005_framed    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_005_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_097 gabor_035 gabor_147 gabor_117    gabor_097 gabor_035 gabor_147_alt gabor_117_alt     "2_25_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_097_035_147_117_target_position_1_2_retrieval_position_2"       gabor_circ gabor_035_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2042      fixation_cross    gabor_176 gabor_126 gabor_160 gabor_008    gabor_176 gabor_126 gabor_160_alt gabor_008_alt     "2_26_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_176_126_160_008_target_position_1_2_retrieval_position_1"       gabor_036_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2342      fixation_cross    gabor_173 gabor_008 gabor_117 gabor_146    gabor_173_alt gabor_008 gabor_117 gabor_146_alt     "2_27_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_173_008_117_146_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_117_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_117_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_089 gabor_038 gabor_063 gabor_128    gabor_089 gabor_038_alt gabor_063 gabor_128_alt     "2_28_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_089_038_063_128_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_016_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2192      fixation_cross    gabor_090 gabor_036 gabor_001 gabor_148    gabor_090_alt gabor_036 gabor_001_alt gabor_148     "2_29_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_090_036_001_148_target_position_2_4_retrieval_position_2"       gabor_circ gabor_036_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_036_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2092  2992  2492      fixation_cross    gabor_110 gabor_003 gabor_060 gabor_075    gabor_110_alt gabor_003 gabor_060_alt gabor_075     "2_30_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_110_003_060_075_target_position_2_4_retrieval_position_2"       gabor_circ gabor_003_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_003_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2242  2992  2592      fixation_cross    gabor_003 gabor_128 gabor_177 gabor_156    gabor_003 gabor_128_alt gabor_177 gabor_156_alt     "2_31_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2600_gabor_patch_orientation_003_128_177_156_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_177_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1792  2992  1992      fixation_cross    gabor_037 gabor_071 gabor_088 gabor_103    gabor_037 gabor_071_alt gabor_088_alt gabor_103     "2_32_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2000_gabor_patch_orientation_037_071_088_103_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_152_framed    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2142  2992  2442      fixation_cross    gabor_137 gabor_081 gabor_006 gabor_164    gabor_137 gabor_081 gabor_006_alt gabor_164_alt     "2_33_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2150_3000_2450_gabor_patch_orientation_137_081_006_164_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_054_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_054_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2292      fixation_cross    gabor_024 gabor_086 gabor_056 gabor_112    gabor_024_alt gabor_086 gabor_056_alt gabor_112     "2_34_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2300_gabor_patch_orientation_024_086_056_112_target_position_2_4_retrieval_position_2"       gabor_circ gabor_136_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_136_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2092      fixation_cross    gabor_029 gabor_150 gabor_118 gabor_172    gabor_029_alt gabor_150 gabor_118_alt gabor_172     "2_35_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_029_150_118_172_target_position_2_4_retrieval_position_2"       gabor_circ gabor_150_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_150_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  2442      fixation_cross    gabor_176 gabor_135 gabor_005 gabor_061    gabor_176_alt gabor_135 gabor_005_alt gabor_061     "2_36_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2450_gabor_patch_orientation_176_135_005_061_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_061_framed    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  1842  2992  1992      fixation_cross    gabor_180 gabor_101 gabor_011 gabor_116    gabor_180_alt gabor_101 gabor_011 gabor_116_alt     "2_37_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_1850_3000_2000_gabor_patch_orientation_180_101_011_116_target_position_2_3_retrieval_position_1"       gabor_133_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_133_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_013 gabor_030 gabor_081 gabor_064    gabor_013 gabor_030 gabor_081_alt gabor_064_alt     "2_38_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_013_030_081_064_target_position_1_2_retrieval_position_1"       gabor_152_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_152_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  2592      fixation_cross    gabor_025 gabor_007 gabor_092 gabor_136    gabor_025 gabor_007 gabor_092_alt gabor_136_alt     "2_39_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_2600_gabor_patch_orientation_025_007_092_136_target_position_1_2_retrieval_position_1"       gabor_025_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_025_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_107 gabor_122 gabor_175 gabor_089    gabor_107 gabor_122_alt gabor_175_alt gabor_089     "2_40_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_107_122_175_089_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_089_framed    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2042  2992  2542      fixation_cross    gabor_033 gabor_095 gabor_018 gabor_154    gabor_033_alt gabor_095_alt gabor_018 gabor_154     "2_41_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2550_gabor_patch_orientation_033_095_018_154_target_position_3_4_retrieval_position_1"       gabor_078_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_078_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2192  2992  2592      fixation_cross    gabor_154 gabor_064 gabor_171 gabor_138    gabor_154_alt gabor_064 gabor_171 gabor_138_alt     "2_42_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_154_064_171_138_target_position_2_3_retrieval_position_2"       gabor_circ gabor_064_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2142      fixation_cross    gabor_165 gabor_047 gabor_019 gabor_124    gabor_165_alt gabor_047_alt gabor_019 gabor_124     "2_43_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_165_047_019_124_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_124_framed    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1892  2992  1892      fixation_cross    gabor_031 gabor_067 gabor_139 gabor_090    gabor_031 gabor_067_alt gabor_139 gabor_090_alt     "2_44_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_1900_gabor_patch_orientation_031_067_139_090_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_139_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_092 gabor_028 gabor_149 gabor_071    gabor_092_alt gabor_028_alt gabor_149 gabor_071     "2_45_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_092_028_149_071_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_012_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2392      fixation_cross    gabor_157 gabor_049 gabor_028 gabor_068    gabor_157_alt gabor_049 gabor_028 gabor_068_alt     "2_46_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_157_049_028_068_target_position_2_3_retrieval_position_2"       gabor_circ gabor_094_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_089 gabor_033 gabor_055 gabor_011    gabor_089 gabor_033_alt gabor_055 gabor_011_alt     "2_47_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_089_033_055_011_target_position_1_3_retrieval_position_1"       gabor_139_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    63   292   292   399   125  2092  2992  2042      fixation_cross    gabor_180 gabor_034 gabor_071 gabor_006    gabor_180_alt gabor_034 gabor_071 gabor_006_alt     "2_48_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2050_gabor_patch_orientation_180_034_071_006_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_143_framed    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_143_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_101 gabor_158 gabor_074 gabor_116    gabor_101_alt gabor_158_alt gabor_074 gabor_116     "2_49_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_101_158_074_116_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_074_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2142  2992  2192      fixation_cross    gabor_066 gabor_039 gabor_097 gabor_144    gabor_066_alt gabor_039 gabor_097_alt gabor_144     "2_50_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2200_gabor_patch_orientation_066_039_097_144_target_position_2_4_retrieval_position_2"       gabor_circ gabor_179_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_060 gabor_023 gabor_083 gabor_139    gabor_060 gabor_023_alt gabor_083_alt gabor_139     "2_51_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_060_023_083_139_target_position_1_4_retrieval_position_1"       gabor_060_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1742  2992  1942      fixation_cross    gabor_138 gabor_030 gabor_048 gabor_089    gabor_138 gabor_030_alt gabor_048 gabor_089_alt     "2_52_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1750_3000_1950_gabor_patch_orientation_138_030_048_089_target_position_1_3_retrieval_position_2"       gabor_circ gabor_030_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_030_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  1992      fixation_cross    gabor_080 gabor_125 gabor_161 gabor_105    gabor_080 gabor_125_alt gabor_161_alt gabor_105     "2_53_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_080_125_161_105_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_055_framed    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_055_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1942  2992  1892      fixation_cross    gabor_076 gabor_008 gabor_042 gabor_163    gabor_076 gabor_008_alt gabor_042_alt gabor_163     "2_54_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_076_008_042_163_target_position_1_4_retrieval_position_1"       gabor_076_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1742  2992  1942      fixation_cross    gabor_059 gabor_040 gabor_008 gabor_171    gabor_059 gabor_040_alt gabor_008 gabor_171_alt     "2_55_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_059_040_008_171_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_146_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_146_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  2242  2992  2342      fixation_cross    gabor_113 gabor_031 gabor_055 gabor_143    gabor_113_alt gabor_031_alt gabor_055 gabor_143     "2_56_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_113_031_055_143_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_143_framed    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_143_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2192  2992  2442      fixation_cross    gabor_023 gabor_110 gabor_072 gabor_001    gabor_023 gabor_110_alt gabor_072_alt gabor_001     "2_57_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_023_110_072_001_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_140_framed    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  1892  2992  2342      fixation_cross    gabor_052 gabor_013 gabor_132 gabor_079    gabor_052_alt gabor_013_alt gabor_132 gabor_079     "2_58_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2350_gabor_patch_orientation_052_013_132_079_target_position_3_4_retrieval_position_1"       gabor_052_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_052_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2492      fixation_cross    gabor_085 gabor_039 gabor_144 gabor_121    gabor_085 gabor_039_alt gabor_144_alt gabor_121     "2_59_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_085_039_144_121_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_171_framed    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_136 gabor_056 gabor_091 gabor_026    gabor_136 gabor_056 gabor_091_alt gabor_026_alt     "2_60_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_136_056_091_026_target_position_1_2_retrieval_position_2"       gabor_circ gabor_056_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2142  2992  2142      fixation_cross    gabor_126 gabor_154 gabor_174 gabor_003    gabor_126_alt gabor_154 gabor_174_alt gabor_003     "2_61_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2150_3000_2150_gabor_patch_orientation_126_154_174_003_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_174_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_174_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2142      fixation_cross    gabor_162 gabor_026 gabor_075 gabor_180    gabor_162_alt gabor_026_alt gabor_075 gabor_180     "2_62_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_162_026_075_180_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_134_framed    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_003 gabor_082 gabor_116 gabor_164    gabor_003 gabor_082 gabor_116_alt gabor_164_alt     "2_63_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_003_082_116_164_target_position_1_2_retrieval_position_2"       gabor_circ gabor_082_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2092  2992  1992      fixation_cross    gabor_119 gabor_005 gabor_059 gabor_037    gabor_119_alt gabor_005 gabor_059_alt gabor_037     "2_64_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2000_gabor_patch_orientation_119_005_059_037_target_position_2_4_retrieval_position_1"       gabor_119_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_119_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2092  2992  2292      fixation_cross    gabor_036 gabor_176 gabor_056 gabor_017    gabor_036_alt gabor_176 gabor_056 gabor_017_alt     "2_65_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_036_176_056_017_target_position_2_3_retrieval_position_2"       gabor_circ gabor_126_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_126_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2042  2992  2192      fixation_cross    gabor_081 gabor_150 gabor_107 gabor_043    gabor_081 gabor_150_alt gabor_107 gabor_043_alt     "2_66_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_081_150_107_043_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_060_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  1992  2992  2392      fixation_cross    gabor_046 gabor_178 gabor_016 gabor_156    gabor_046 gabor_178 gabor_016_alt gabor_156_alt     "2_67_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_046_178_016_156_target_position_1_2_retrieval_position_2"       gabor_circ gabor_131_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    62   292   292   399   125  1842  2992  1942      fixation_cross    gabor_093 gabor_164 gabor_136 gabor_054    gabor_093_alt gabor_164 gabor_136_alt gabor_054     "2_68_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_1950_gabor_patch_orientation_093_164_136_054_target_position_2_4_retrieval_position_2"       gabor_circ gabor_164_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    64   292   292   399   125  2192  2992  2092      fixation_cross    gabor_140 gabor_124 gabor_013 gabor_094    gabor_140_alt gabor_124 gabor_013_alt gabor_094     "2_69_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_300_300_399_2200_3000_2100_gabor_patch_orientation_140_124_013_094_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_013_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_013_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   44    61   292   292   399   125  2142  2992  2142      fixation_cross    gabor_090 gabor_016 gabor_129 gabor_059    gabor_090_alt gabor_016_alt gabor_129 gabor_059     "2_70_Encoding_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_090_016_129_059_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_106_framed    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P1_LR_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  