# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_053 gabor_087 gabor_136 gabor_070    gabor_053_alt gabor_087 gabor_136 gabor_070_alt      "2_1_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_053_087_136_070_target_position_1_4_retrieval_position_1"          gabor_053_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_1_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_053_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  1942      fixation_cross    gabor_049 gabor_028 gabor_155 gabor_003    gabor_049 gabor_028_alt gabor_155 gabor_003_alt      "2_2_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_1950_gabor_patch_orientation_049_028_155_003_target_position_2_4_retrieval_position_2"          gabor_circ gabor_074_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_2_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2442      fixation_cross    gabor_137 gabor_116 gabor_159 gabor_028    gabor_137 gabor_116 gabor_159_alt gabor_028_alt      "2_3_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_137_116_159_028_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_078_framed    blank blank blank blank    fixation_cross_target_position_3_4     "2_3_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_078_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2192      fixation_cross    gabor_127 gabor_106 gabor_050 gabor_076    gabor_127 gabor_106_alt gabor_050 gabor_076_alt      "2_4_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_127_106_050_076_target_position_2_4_retrieval_position_2"          gabor_circ gabor_156_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_4_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_156_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  2442      fixation_cross    gabor_114 gabor_043 gabor_172 gabor_028    gabor_114_alt gabor_043_alt gabor_172 gabor_028      "2_5_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2450_gabor_patch_orientation_114_043_172_028_target_position_1_2_retrieval_position_2"          gabor_circ gabor_043_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_5_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_043_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2142  2992  2192      fixation_cross    gabor_086 gabor_020 gabor_004 gabor_053    gabor_086 gabor_020 gabor_004_alt gabor_053_alt      "2_6_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2150_3000_2200_gabor_patch_orientation_086_020_004_053_target_position_3_4_retrieval_position_1"          gabor_086_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4     "2_6_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_086_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2092  2992  2292      fixation_cross    gabor_014 gabor_093 gabor_152 gabor_066    gabor_014_alt gabor_093_alt gabor_152 gabor_066      "2_7_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2300_gabor_patch_orientation_014_093_152_066_target_position_1_2_retrieval_position_2"          gabor_circ gabor_093_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_7_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2242      fixation_cross    gabor_094 gabor_070 gabor_031 gabor_004    gabor_094 gabor_070_alt gabor_031 gabor_004_alt      "2_8_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_094_070_031_004_target_position_2_4_retrieval_position_2"          gabor_circ gabor_070_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_8_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_070_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2092      fixation_cross    gabor_059 gabor_025 gabor_094 gabor_042    gabor_059_alt gabor_025 gabor_094_alt gabor_042      "2_9_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_059_025_094_042_target_position_1_3_retrieval_position_1"          gabor_009_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_9_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2042  2992  2342      fixation_cross    gabor_075 gabor_131 gabor_057 gabor_090    gabor_075 gabor_131 gabor_057_alt gabor_090_alt     "2_10_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2050_3000_2350_gabor_patch_orientation_075_131_057_090_target_position_3_4_retrieval_position_1"          gabor_025_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_10_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_025_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_114 gabor_080 gabor_132 gabor_048    gabor_114_alt gabor_080 gabor_132 gabor_048_alt     "2_11_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_114_080_132_048_target_position_1_4_retrieval_position_1"          gabor_114_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_11_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_030 gabor_066 gabor_135 gabor_100    gabor_030_alt gabor_066 gabor_135 gabor_100_alt     "2_12_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_030_066_135_100_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_050_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_12_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2092      fixation_cross    gabor_063 gabor_084 gabor_107 gabor_046    gabor_063_alt gabor_084 gabor_107 gabor_046_alt     "2_13_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_063_084_107_046_target_position_1_4_retrieval_position_1"          gabor_063_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_13_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_063_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  2242      fixation_cross    gabor_005 gabor_060 gabor_133 gabor_165    gabor_005 gabor_060_alt gabor_133_alt gabor_165     "2_14_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2250_gabor_patch_orientation_005_060_133_165_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_133_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_14_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_133_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1992  2992  2392      fixation_cross    gabor_097 gabor_118 gabor_139 gabor_163    gabor_097_alt gabor_118 gabor_139_alt gabor_163     "2_15_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2400_gabor_patch_orientation_097_118_139_163_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_163_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_15_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_163_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2492      fixation_cross    gabor_047 gabor_003 gabor_114 gabor_164    gabor_047_alt gabor_003 gabor_114 gabor_164_alt     "2_16_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2500_gabor_patch_orientation_047_003_114_164_target_position_1_4_retrieval_position_1"          gabor_047_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_16_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_047_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2242  2992  2392      fixation_cross    gabor_005 gabor_110 gabor_129 gabor_167    gabor_005 gabor_110_alt gabor_129_alt gabor_167     "2_17_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2400_gabor_patch_orientation_005_110_129_167_target_position_2_3_retrieval_position_2"          gabor_circ gabor_110_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_17_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_110_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2042  2992  2042      fixation_cross    gabor_115 gabor_057 gabor_144 gabor_075    gabor_115 gabor_057_alt gabor_144_alt gabor_075     "2_18_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_115_057_144_075_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_098_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_18_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1742  2992  1892      fixation_cross    gabor_109 gabor_003 gabor_167 gabor_025    gabor_109_alt gabor_003 gabor_167 gabor_025_alt     "2_19_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_109_003_167_025_target_position_1_4_retrieval_position_1"          gabor_109_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_19_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_037 gabor_064 gabor_151 gabor_104    gabor_037 gabor_064_alt gabor_151_alt gabor_104     "2_20_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_037_064_151_104_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_014_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_20_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  1892      fixation_cross    gabor_070 gabor_102 gabor_154 gabor_139    gabor_070 gabor_102_alt gabor_154_alt gabor_139     "2_21_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_070_102_154_139_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_014_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_21_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_014_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2492      fixation_cross    gabor_168 gabor_125 gabor_043 gabor_104    gabor_168 gabor_125 gabor_043_alt gabor_104_alt     "2_22_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_168_125_043_104_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_088_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_22_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_088_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2242  2992  2192      fixation_cross    gabor_065 gabor_128 gabor_101 gabor_145    gabor_065 gabor_128_alt gabor_101 gabor_145_alt     "2_23_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2250_3000_2200_gabor_patch_orientation_065_128_101_145_target_position_2_4_retrieval_position_1"          gabor_016_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_23_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_016_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1842  2992  1892      fixation_cross    gabor_177 gabor_088 gabor_018 gabor_046    gabor_177 gabor_088_alt gabor_018 gabor_046_alt     "2_24_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_177_088_018_046_target_position_2_4_retrieval_position_2"          gabor_circ gabor_134_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_24_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  1992      fixation_cross    gabor_054 gabor_121 gabor_162 gabor_012    gabor_054_alt gabor_121_alt gabor_162 gabor_012     "2_25_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_054_121_162_012_target_position_1_2_retrieval_position_1"          gabor_054_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_25_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1992  2992  2342      fixation_cross    gabor_036 gabor_018 gabor_148 gabor_108    gabor_036_alt gabor_018 gabor_148_alt gabor_108     "2_26_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2350_gabor_patch_orientation_036_018_148_108_target_position_1_3_retrieval_position_2"          gabor_circ gabor_018_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_26_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_018_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  1942      fixation_cross    gabor_135 gabor_160 gabor_024 gabor_095    gabor_135 gabor_160 gabor_024_alt gabor_095_alt     "2_27_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_1950_gabor_patch_orientation_135_160_024_095_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_024_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_27_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_024_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2592      fixation_cross    gabor_179 gabor_134 gabor_013 gabor_044    gabor_179 gabor_134 gabor_013_alt gabor_044_alt     "2_28_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2600_gabor_patch_orientation_179_134_013_044_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_061_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_28_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1992  2992  2092      fixation_cross    gabor_027 gabor_155 gabor_002 gabor_140    gabor_027 gabor_155_alt gabor_002_alt gabor_140     "2_29_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2100_gabor_patch_orientation_027_155_002_140_target_position_2_3_retrieval_position_1"          gabor_027_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_29_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_027_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_042 gabor_148 gabor_084 gabor_129    gabor_042 gabor_148_alt gabor_084 gabor_129_alt     "2_30_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_042_148_084_129_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_174_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_30_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  2542      fixation_cross    gabor_099 gabor_062 gabor_120 gabor_012    gabor_099 gabor_062 gabor_120_alt gabor_012_alt     "2_31_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2550_gabor_patch_orientation_099_062_120_012_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_120_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_31_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2542      fixation_cross    gabor_080 gabor_063 gabor_039 gabor_144    gabor_080_alt gabor_063_alt gabor_039 gabor_144     "2_32_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_080_063_039_144_target_position_1_2_retrieval_position_1"          gabor_125_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_32_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_125_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2492      fixation_cross    gabor_070 gabor_012 gabor_092 gabor_039    gabor_070 gabor_012_alt gabor_092 gabor_039_alt     "2_33_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_070_012_092_039_target_position_2_4_retrieval_position_2"          gabor_circ gabor_151_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_33_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_151_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1792  2992  2142      fixation_cross    gabor_166 gabor_124 gabor_059 gabor_084    gabor_166_alt gabor_124 gabor_059_alt gabor_084     "2_34_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2150_gabor_patch_orientation_166_124_059_084_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_036_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_34_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_036_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1742  2992  2292      fixation_cross    gabor_155 gabor_034 gabor_180 gabor_073    gabor_155_alt gabor_034 gabor_180 gabor_073_alt     "2_35_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_155_034_180_073_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_120_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_35_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2192  2992  2342      fixation_cross    gabor_017 gabor_044 gabor_123 gabor_096    gabor_017 gabor_044_alt gabor_123_alt gabor_096     "2_36_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_017_044_123_096_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_170_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_36_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2342      fixation_cross    gabor_009 gabor_163 gabor_025 gabor_073    gabor_009_alt gabor_163_alt gabor_025 gabor_073     "2_37_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2350_gabor_patch_orientation_009_163_025_073_target_position_1_2_retrieval_position_1"          gabor_009_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_37_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_009_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2042  2992  2142      fixation_cross    gabor_139 gabor_095 gabor_051 gabor_176    gabor_139 gabor_095 gabor_051_alt gabor_176_alt     "2_38_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2150_gabor_patch_orientation_139_095_051_176_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_051_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_38_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_051_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2092      fixation_cross    gabor_036 gabor_144 gabor_110 gabor_175    gabor_036 gabor_144_alt gabor_110_alt gabor_175     "2_39_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_036_144_110_175_target_position_2_3_retrieval_position_2"          gabor_circ gabor_144_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_39_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1792  2992  1942      fixation_cross    gabor_155 gabor_087 gabor_140 gabor_069    gabor_155 gabor_087_alt gabor_140_alt gabor_069     "2_40_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_155_087_140_069_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_140_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_40_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  1892      fixation_cross    gabor_160 gabor_135 gabor_094 gabor_073    gabor_160_alt gabor_135 gabor_094 gabor_073_alt     "2_41_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_160_135_094_073_target_position_1_4_retrieval_position_1"          gabor_111_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_41_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2142      fixation_cross    gabor_042 gabor_122 gabor_151 gabor_176    gabor_042_alt gabor_122_alt gabor_151 gabor_176     "2_42_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_042_122_151_176_target_position_1_2_retrieval_position_1"          gabor_042_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_42_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_042_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  1792  2992  2342      fixation_cross    gabor_123 gabor_160 gabor_177 gabor_107    gabor_123_alt gabor_160 gabor_177 gabor_107_alt     "2_43_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_2350_gabor_patch_orientation_123_160_177_107_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_040_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_43_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_040_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  1992      fixation_cross    gabor_052 gabor_091 gabor_120 gabor_166    gabor_052 gabor_091 gabor_120_alt gabor_166_alt     "2_44_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_052_091_120_166_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_031_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_44_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  1992      fixation_cross    gabor_175 gabor_052 gabor_067 gabor_028    gabor_175_alt gabor_052 gabor_067_alt gabor_028     "2_45_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_175_052_067_028_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_067_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_45_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2042  2992  2292      fixation_cross    gabor_086 gabor_011 gabor_164 gabor_131    gabor_086 gabor_011_alt gabor_164 gabor_131_alt     "2_46_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_2300_gabor_patch_orientation_086_011_164_131_target_position_2_4_retrieval_position_1"          gabor_086_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_46_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_086_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2142  2992  1992      fixation_cross    gabor_018 gabor_179 gabor_163 gabor_145    gabor_018 gabor_179 gabor_163_alt gabor_145_alt     "2_47_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_018_179_163_145_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_099_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_47_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_099_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2142  2992  2392      fixation_cross    gabor_042 gabor_106 gabor_154 gabor_081    gabor_042 gabor_106_alt gabor_154 gabor_081_alt     "2_48_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_042_106_154_081_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_081_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_48_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2492      fixation_cross    gabor_059 gabor_140 gabor_076 gabor_120    gabor_059 gabor_140 gabor_076_alt gabor_120_alt     "2_49_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2500_gabor_patch_orientation_059_140_076_120_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_076_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_49_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_076_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2192      fixation_cross    gabor_159 gabor_133 gabor_101 gabor_043    gabor_159 gabor_133_alt gabor_101 gabor_043_alt     "2_50_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_159_133_101_043_target_position_2_4_retrieval_position_2"          gabor_circ gabor_083_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_50_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_083_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2042      fixation_cross    gabor_060 gabor_087 gabor_045 gabor_126    gabor_060_alt gabor_087 gabor_045 gabor_126_alt     "2_51_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_060_087_045_126_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_171_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_51_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2192  2992  1942      fixation_cross    gabor_066 gabor_096 gabor_178 gabor_007    gabor_066 gabor_096_alt gabor_178 gabor_007_alt     "2_52_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_1950_gabor_patch_orientation_066_096_178_007_target_position_2_4_retrieval_position_1"          gabor_114_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_52_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_114_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2042      fixation_cross    gabor_145 gabor_127 gabor_038 gabor_093    gabor_145 gabor_127_alt gabor_038 gabor_093_alt     "2_53_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_145_127_038_093_target_position_2_4_retrieval_position_2"          gabor_circ gabor_176_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_53_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2042      fixation_cross    gabor_145 gabor_079 gabor_123 gabor_002    gabor_145_alt gabor_079_alt gabor_123 gabor_002     "2_54_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_145_079_123_002_target_position_1_2_retrieval_position_2"          gabor_circ gabor_079_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_54_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_079_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2142      fixation_cross    gabor_005 gabor_022 gabor_112 gabor_082    gabor_005_alt gabor_022 gabor_112_alt gabor_082     "2_55_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_005_022_112_082_target_position_1_3_retrieval_position_1"          gabor_050_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_55_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  2092  2992  2542      fixation_cross    gabor_033 gabor_099 gabor_055 gabor_078    gabor_033 gabor_099 gabor_055_alt gabor_078_alt     "2_56_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2550_gabor_patch_orientation_033_099_055_078_target_position_3_4_retrieval_position_2"          gabor_circ gabor_099_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_56_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_099_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2242  2992  2442      fixation_cross    gabor_152 gabor_007 gabor_034 gabor_114    gabor_152 gabor_007_alt gabor_034_alt gabor_114     "2_57_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_152_007_034_114_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_170_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_57_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_170_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1942  2992  2242      fixation_cross    gabor_093 gabor_049 gabor_078 gabor_166    gabor_093_alt gabor_049_alt gabor_078 gabor_166     "2_58_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2250_gabor_patch_orientation_093_049_078_166_target_position_1_2_retrieval_position_1"          gabor_093_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_58_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_093_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2442      fixation_cross    gabor_179 gabor_119 gabor_038 gabor_007    gabor_179 gabor_119_alt gabor_038_alt gabor_007     "2_59_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_179_119_038_007_target_position_2_3_retrieval_position_2"          gabor_circ gabor_119_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_59_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    64   292   292   399   125  1742  2992  2592      fixation_cross    gabor_133 gabor_026 gabor_150 gabor_174    gabor_133 gabor_026_alt gabor_150_alt gabor_174     "2_60_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1750_3000_2600_gabor_patch_orientation_133_026_150_174_target_position_2_3_retrieval_position_1"          gabor_133_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_60_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_133_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  2192  2992  1892      fixation_cross    gabor_012 gabor_164 gabor_101 gabor_074    gabor_012_alt gabor_164 gabor_101 gabor_074_alt     "2_61_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_1900_gabor_patch_orientation_012_164_101_074_target_position_1_4_retrieval_position_1"          gabor_012_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_61_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1892  2992  2292      fixation_cross    gabor_072 gabor_180 gabor_016 gabor_146    gabor_072 gabor_180_alt gabor_016 gabor_146_alt     "2_62_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_072_180_016_146_target_position_2_4_retrieval_position_2"          gabor_circ gabor_180_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_62_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1992  2992  1992      fixation_cross    gabor_011 gabor_127 gabor_040 gabor_149    gabor_011_alt gabor_127_alt gabor_040 gabor_149     "2_63_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_011_127_040_149_target_position_1_2_retrieval_position_2"          gabor_circ gabor_127_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_63_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1792  2992  2592      fixation_cross    gabor_041 gabor_146 gabor_073 gabor_110    gabor_041_alt gabor_146 gabor_073_alt gabor_110     "2_64_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_041_146_073_110_target_position_1_3_retrieval_position_1"          gabor_180_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_64_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_180_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1942  2992  2042      fixation_cross    gabor_084 gabor_168 gabor_046 gabor_001    gabor_084_alt gabor_168_alt gabor_046 gabor_001     "2_65_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2050_gabor_patch_orientation_084_168_046_001_target_position_1_2_retrieval_position_2"          gabor_circ gabor_121_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_65_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_121_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    62   292   292   399   125  1842  2992  2142      fixation_cross    gabor_140 gabor_120 gabor_005 gabor_083    gabor_140 gabor_120_alt gabor_005_alt gabor_083     "2_66_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_140_120_005_083_target_position_2_3_retrieval_position_2"          gabor_circ gabor_120_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_66_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  2092  2992  2392      fixation_cross    gabor_090 gabor_005 gabor_115 gabor_034    gabor_090_alt gabor_005 gabor_115_alt gabor_034     "2_67_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_090_005_115_034_target_position_1_3_retrieval_position_1"          gabor_140_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_67_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_140_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2192  2992  2542      fixation_cross    gabor_013 gabor_061 gabor_085 gabor_151    gabor_013_alt gabor_061 gabor_085 gabor_151_alt     "2_68_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2550_gabor_patch_orientation_013_061_085_151_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_038_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_68_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_038_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    61   292   292   399   125  1892  2992  2592      fixation_cross    gabor_007 gabor_088 gabor_035 gabor_116    gabor_007 gabor_088 gabor_035_alt gabor_116_alt     "2_69_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2600_gabor_patch_orientation_007_088_035_116_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_172_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_69_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_172_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   41    63   292   292   399   125  2092  2992  2192      fixation_cross    gabor_080 gabor_165 gabor_136 gabor_049    gabor_080_alt gabor_165 gabor_136_alt gabor_049     "2_70_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2100_3000_2200_gabor_patch_orientation_080_165_136_049_target_position_1_3_retrieval_position_2"          gabor_circ gabor_118_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_70_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_118_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  