# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_uncued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 28;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 300; width = 300; color = 0, 0, 0;} frame1;
box { height = 290; width = 290; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 290; width = 290; color = 128, 128, 128;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};

# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;

   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   42    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_145 gabor_167 gabor_117 gabor_061    gabor_145_alt gabor_167_alt gabor_117 gabor_061      "2_1_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_145_167_117_061_target_position_1_2_retrieval_position_2"          gabor_circ gabor_029_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_1_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_029_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2392      fixation_cross    gabor_144 gabor_039 gabor_169 gabor_060    gabor_144_alt gabor_039 gabor_169 gabor_060_alt      "2_2_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2400_gabor_patch_orientation_144_039_169_060_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_060_framed    blank blank blank blank    fixation_cross_white     "2_2_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2392      fixation_cross    gabor_137 gabor_174 gabor_102 gabor_122    gabor_137 gabor_174_alt gabor_102_alt gabor_122      "2_3_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_137_174_102_122_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_057_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_3_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_057_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  2192      fixation_cross    gabor_060 gabor_134 gabor_117 gabor_079    gabor_060 gabor_134 gabor_117_alt gabor_079_alt      "2_4_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2200_gabor_patch_orientation_060_134_117_079_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_166_framed gabor_circ    blank blank blank blank    fixation_cross_white     "2_4_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2042      fixation_cross    gabor_055 gabor_143 gabor_162 gabor_116    gabor_055_alt gabor_143 gabor_162_alt gabor_116      "2_5_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_055_143_162_116_target_position_1_3_retrieval_position_1"          gabor_010_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_5_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1792  2992  2342      fixation_cross    gabor_141 gabor_090 gabor_031 gabor_164    gabor_141 gabor_090_alt gabor_031 gabor_164_alt      "2_6_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1800_3000_2350_gabor_patch_orientation_141_090_031_164_target_position_2_4_retrieval_position_1"          gabor_141_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_6_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_141_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  1892      fixation_cross    gabor_037 gabor_121 gabor_151 gabor_175    gabor_037_alt gabor_121 gabor_151 gabor_175_alt      "2_7_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_037_121_151_175_target_position_1_4_retrieval_position_1"          gabor_037_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white     "2_7_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2092      fixation_cross    gabor_054 gabor_032 gabor_100 gabor_118    gabor_054_alt gabor_032 gabor_100 gabor_118_alt      "2_8_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_054_032_100_118_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_118_framed    blank blank blank blank    fixation_cross_white     "2_8_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_118_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  1942      fixation_cross    gabor_029 gabor_006 gabor_154 gabor_066    gabor_029 gabor_006 gabor_154_alt gabor_066_alt      "2_9_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_1950_gabor_patch_orientation_029_006_154_066_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_066_framed    blank blank blank blank    fixation_cross_white     "2_9_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_066_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2542      fixation_cross    gabor_088 gabor_173 gabor_049 gabor_068    gabor_088_alt gabor_173_alt gabor_049 gabor_068     "2_10_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_088_173_049_068_target_position_1_2_retrieval_position_2"          gabor_circ gabor_124_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_10_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  2092      fixation_cross    gabor_009 gabor_042 gabor_078 gabor_094    gabor_009_alt gabor_042 gabor_078_alt gabor_094     "2_11_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2100_gabor_patch_orientation_009_042_078_094_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_127_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_11_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_127_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_157 gabor_023 gabor_179 gabor_049    gabor_157_alt gabor_023 gabor_179_alt gabor_049     "2_12_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_157_023_179_049_target_position_1_3_retrieval_position_1"          gabor_109_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_12_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1942  2992  2242      fixation_cross    gabor_083 gabor_062 gabor_104 gabor_172    gabor_083 gabor_062 gabor_104_alt gabor_172_alt     "2_13_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2250_gabor_patch_orientation_083_062_104_172_target_position_3_4_retrieval_position_2"          gabor_circ gabor_014_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_13_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_014_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1942  2992  2542      fixation_cross    gabor_173 gabor_122 gabor_060 gabor_144    gabor_173 gabor_122 gabor_060_alt gabor_144_alt     "2_14_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_2550_gabor_patch_orientation_173_122_060_144_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_144_framed    blank blank blank blank    fixation_cross_white    "2_14_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_144_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1842  2992  2242      fixation_cross    gabor_172 gabor_031 gabor_155 gabor_110    gabor_172 gabor_031_alt gabor_155_alt gabor_110     "2_15_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2250_gabor_patch_orientation_172_031_155_110_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_065_framed    blank blank blank blank    fixation_cross_white    "2_15_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_065_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  1992      fixation_cross    gabor_064 gabor_106 gabor_127 gabor_179    gabor_064_alt gabor_106 gabor_127 gabor_179_alt     "2_16_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2000_gabor_patch_orientation_064_106_127_179_target_position_1_4_retrieval_position_1"          gabor_064_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_16_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_064_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2192  2992  2192      fixation_cross    gabor_140 gabor_022 gabor_179 gabor_003    gabor_140 gabor_022_alt gabor_179 gabor_003_alt     "2_17_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2200_gabor_patch_orientation_140_022_179_003_target_position_2_4_retrieval_position_2"          gabor_circ gabor_067_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_17_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_162 gabor_117 gabor_099 gabor_030    gabor_162_alt gabor_117 gabor_099 gabor_030_alt     "2_18_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_162_117_099_030_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_030_framed    blank blank blank blank    fixation_cross_white    "2_18_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  2492      fixation_cross    gabor_047 gabor_087 gabor_167 gabor_031    gabor_047_alt gabor_087 gabor_167_alt gabor_031     "2_19_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2500_gabor_patch_orientation_047_087_167_031_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_119_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_19_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1892  2992  2142      fixation_cross    gabor_024 gabor_062 gabor_146 gabor_169    gabor_024 gabor_062_alt gabor_146 gabor_169_alt     "2_20_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_2150_gabor_patch_orientation_024_062_146_169_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_146_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_20_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_146_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  1992      fixation_cross    gabor_132 gabor_026 gabor_174 gabor_156    gabor_132_alt gabor_026 gabor_174 gabor_156_alt     "2_21_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_132_026_174_156_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_107_framed    blank blank blank blank    fixation_cross_white    "2_21_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_107_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2442      fixation_cross    gabor_156 gabor_140 gabor_081 gabor_014    gabor_156 gabor_140 gabor_081_alt gabor_014_alt     "2_22_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2450_gabor_patch_orientation_156_140_081_014_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_033_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_22_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_033_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2092      fixation_cross    gabor_144 gabor_081 gabor_012 gabor_100    gabor_144 gabor_081_alt gabor_012 gabor_100_alt     "2_23_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2100_gabor_patch_orientation_144_081_012_100_target_position_2_4_retrieval_position_2"          gabor_circ gabor_081_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_23_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_081_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  1942      fixation_cross    gabor_166 gabor_109 gabor_085 gabor_002    gabor_166 gabor_109 gabor_085_alt gabor_002_alt     "2_24_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_166_109_085_002_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_002_framed    blank blank blank blank    fixation_cross_white    "2_24_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_002_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  1992      fixation_cross    gabor_053 gabor_119 gabor_175 gabor_014    gabor_053_alt gabor_119_alt gabor_175 gabor_014     "2_25_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2000_gabor_patch_orientation_053_119_175_014_target_position_1_2_retrieval_position_1"          gabor_101_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_25_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1992  2992  1892      fixation_cross    gabor_177 gabor_123 gabor_154 gabor_105    gabor_177 gabor_123 gabor_154_alt gabor_105_alt     "2_26_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_177_123_154_105_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_154_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_26_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_154_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2492      fixation_cross    gabor_060 gabor_088 gabor_033 gabor_119    gabor_060_alt gabor_088 gabor_033_alt gabor_119     "2_27_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2500_gabor_patch_orientation_060_088_033_119_target_position_1_3_retrieval_position_1"          gabor_011_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_27_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1992  2992  2342      fixation_cross    gabor_120 gabor_083 gabor_006 gabor_030    gabor_120_alt gabor_083_alt gabor_006 gabor_030     "2_28_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2000_3000_2350_gabor_patch_orientation_120_083_006_030_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_030_framed    blank blank blank blank    fixation_cross_white    "2_28_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_030_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2092  2992  2392      fixation_cross    gabor_172 gabor_017 gabor_034 gabor_056    gabor_172_alt gabor_017 gabor_034 gabor_056_alt     "2_29_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_172_017_034_056_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_106_framed    blank blank blank blank    fixation_cross_white    "2_29_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  1992      fixation_cross    gabor_002 gabor_085 gabor_035 gabor_159    gabor_002 gabor_085 gabor_035_alt gabor_159_alt     "2_30_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_002_085_035_159_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_175_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_30_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2142  2992  2092      fixation_cross    gabor_009 gabor_070 gabor_125 gabor_144    gabor_009 gabor_070_alt gabor_125 gabor_144_alt     "2_31_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2100_gabor_patch_orientation_009_070_125_144_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_098_framed    blank blank blank blank    fixation_cross_white    "2_31_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2242  2992  2492      fixation_cross    gabor_180 gabor_056 gabor_112 gabor_163    gabor_180_alt gabor_056 gabor_112 gabor_163_alt     "2_32_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2500_gabor_patch_orientation_180_056_112_163_target_position_1_4_retrieval_position_2"          gabor_circ gabor_056_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_32_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_056_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2092      fixation_cross    gabor_134 gabor_007 gabor_064 gabor_097    gabor_134_alt gabor_007_alt gabor_064 gabor_097     "2_33_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2100_gabor_patch_orientation_134_007_064_097_target_position_1_2_retrieval_position_1"          gabor_134_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_33_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_134_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2142      fixation_cross    gabor_092 gabor_139 gabor_159 gabor_118    gabor_092_alt gabor_139_alt gabor_159 gabor_118     "2_34_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2150_gabor_patch_orientation_092_139_159_118_target_position_1_2_retrieval_position_2"          gabor_circ gabor_139_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_34_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_139_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2392      fixation_cross    gabor_008 gabor_126 gabor_077 gabor_165    gabor_008_alt gabor_126 gabor_077_alt gabor_165     "2_35_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2400_gabor_patch_orientation_008_126_077_165_target_position_1_3_retrieval_position_1"          gabor_054_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_35_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  1942      fixation_cross    gabor_116 gabor_086 gabor_038 gabor_006    gabor_116_alt gabor_086 gabor_038_alt gabor_006     "2_36_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_1950_gabor_patch_orientation_116_086_038_006_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_174_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_36_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  1942      fixation_cross    gabor_029 gabor_109 gabor_075 gabor_139    gabor_029 gabor_109_alt gabor_075 gabor_139_alt     "2_37_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_029_109_075_139_target_position_2_4_retrieval_position_2"          gabor_circ gabor_109_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_37_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_109_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2192  2992  2042      fixation_cross    gabor_088 gabor_168 gabor_055 gabor_019    gabor_088 gabor_168_alt gabor_055 gabor_019_alt     "2_38_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_2050_gabor_patch_orientation_088_168_055_019_target_position_2_4_retrieval_position_1"          gabor_038_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_38_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_038_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2042  2992  2592      fixation_cross    gabor_080 gabor_120 gabor_001 gabor_062    gabor_080_alt gabor_120_alt gabor_001 gabor_062     "2_39_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2600_gabor_patch_orientation_080_120_001_062_target_position_1_2_retrieval_position_1"          gabor_031_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_39_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_031_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1792  2992  2292      fixation_cross    gabor_063 gabor_170 gabor_030 gabor_146    gabor_063_alt gabor_170_alt gabor_030 gabor_146     "2_40_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_063_170_030_146_target_position_1_2_retrieval_position_2"          gabor_circ gabor_120_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_40_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2042  2992  1892      fixation_cross    gabor_064 gabor_105 gabor_145 gabor_087    gabor_064 gabor_105_alt gabor_145 gabor_087_alt     "2_41_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2050_3000_1900_gabor_patch_orientation_064_105_145_087_target_position_2_4_retrieval_position_1"          gabor_015_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_41_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_015_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  2042      fixation_cross    gabor_053 gabor_010 gabor_121 gabor_035    gabor_053_alt gabor_010 gabor_121_alt gabor_035     "2_42_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_053_010_121_035_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_071_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_42_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_071_retrieval_position_3"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2592      fixation_cross    gabor_053 gabor_017 gabor_085 gabor_124    gabor_053 gabor_017_alt gabor_085 gabor_124_alt     "2_43_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_053_017_085_124_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_124_framed    blank blank blank blank    fixation_cross_white    "2_43_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_124_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  1992      fixation_cross    gabor_169 gabor_139 gabor_057 gabor_118    gabor_169 gabor_139_alt gabor_057 gabor_118_alt     "2_44_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2000_gabor_patch_orientation_169_139_057_118_target_position_2_4_retrieval_position_2"          gabor_circ gabor_091_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_44_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_091_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1842  2992  2292      fixation_cross    gabor_180 gabor_054 gabor_116 gabor_069    gabor_180_alt gabor_054 gabor_116_alt gabor_069     "2_45_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1850_3000_2300_gabor_patch_orientation_180_054_116_069_target_position_1_3_retrieval_position_2"          gabor_circ gabor_004_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_45_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_004_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  2042      fixation_cross    gabor_040 gabor_100 gabor_166 gabor_084    gabor_040_alt gabor_100_alt gabor_166 gabor_084     "2_46_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_040_100_166_084_target_position_1_2_retrieval_position_2"          gabor_circ gabor_148_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_46_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2442      fixation_cross    gabor_157 gabor_133 gabor_027 gabor_096    gabor_157_alt gabor_133 gabor_027_alt gabor_096     "2_47_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_157_133_027_096_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_027_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_47_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1992  2992  2192      fixation_cross    gabor_082 gabor_154 gabor_040 gabor_126    gabor_082 gabor_154_alt gabor_040 gabor_126_alt     "2_48_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2200_gabor_patch_orientation_082_154_040_126_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_171_framed    blank blank blank blank    fixation_cross_white    "2_48_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_171_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1742  2992  1892      fixation_cross    gabor_068 gabor_006 gabor_086 gabor_131    gabor_068 gabor_006 gabor_086_alt gabor_131_alt     "2_49_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_068_006_086_131_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_176_framed    blank blank blank blank    fixation_cross_white    "2_49_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_176_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1942  2992  2292      fixation_cross    gabor_047 gabor_169 gabor_127 gabor_152    gabor_047_alt gabor_169 gabor_127 gabor_152_alt     "2_50_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2300_gabor_patch_orientation_047_169_127_152_target_position_1_4_retrieval_position_1"          gabor_094_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_50_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_094_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  1742  2992  2342      fixation_cross    gabor_019 gabor_053 gabor_098 gabor_038    gabor_019 gabor_053 gabor_098_alt gabor_038_alt     "2_51_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_2350_gabor_patch_orientation_019_053_098_038_target_position_3_4_retrieval_position_1"          gabor_069_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_51_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_069_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_011 gabor_146 gabor_089 gabor_026    gabor_011_alt gabor_146 gabor_089 gabor_026_alt     "2_52_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_011_146_089_026_target_position_1_4_retrieval_position_1"          gabor_011_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_52_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_011_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2442      fixation_cross    gabor_154 gabor_044 gabor_001 gabor_179    gabor_154_alt gabor_044 gabor_001 gabor_179_alt     "2_53_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_154_044_001_179_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_179_framed    blank blank blank blank    fixation_cross_white    "2_53_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_162 gabor_132 gabor_055 gabor_086    gabor_162_alt gabor_132 gabor_055 gabor_086_alt     "2_54_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_162_132_055_086_target_position_1_4_retrieval_position_1"          gabor_162_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_54_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_162_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2142  2992  2292      fixation_cross    gabor_011 gabor_138 gabor_089 gabor_117    gabor_011 gabor_138 gabor_089_alt gabor_117_alt     "2_55_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2150_3000_2300_gabor_patch_orientation_011_138_089_117_target_position_3_4_retrieval_position_1"          gabor_011_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_55_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_011_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  1842  2992  2142      fixation_cross    gabor_080 gabor_121 gabor_035 gabor_006    gabor_080 gabor_121_alt gabor_035 gabor_006_alt     "2_56_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2150_gabor_patch_orientation_080_121_035_006_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_054_framed    blank blank blank blank    fixation_cross_white    "2_56_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_4"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1842  2992  2592      fixation_cross    gabor_130 gabor_058 gabor_148 gabor_164    gabor_130_alt gabor_058 gabor_148_alt gabor_164     "2_57_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_130_058_148_164_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_148_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_57_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_148_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2342      fixation_cross    gabor_118 gabor_164 gabor_087 gabor_045    gabor_118 gabor_164_alt gabor_087 gabor_045_alt     "2_58_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2350_gabor_patch_orientation_118_164_087_045_target_position_2_4_retrieval_position_2"          gabor_circ gabor_164_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_58_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_063 gabor_134 gabor_101 gabor_017    gabor_063_alt gabor_134 gabor_101_alt gabor_017     "2_59_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_063_134_101_017_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_101_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_59_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_101_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2192  2992  2592      fixation_cross    gabor_168 gabor_060 gabor_080 gabor_033    gabor_168_alt gabor_060_alt gabor_080 gabor_033     "2_60_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_168_060_080_033_target_position_1_2_retrieval_position_2"          gabor_circ gabor_060_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_60_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    61   292   292   399   125  2242  2992  2242      fixation_cross    gabor_093 gabor_031 gabor_003 gabor_154    gabor_093_alt gabor_031_alt gabor_003 gabor_154     "2_61_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_093_031_003_154_target_position_1_2_retrieval_position_2"          gabor_circ gabor_077_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_61_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_2"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  2142  2992  1942      fixation_cross    gabor_071 gabor_095 gabor_148 gabor_042    gabor_071_alt gabor_095_alt gabor_148 gabor_042     "2_62_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_2150_3000_1950_gabor_patch_orientation_071_095_148_042_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_148_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_62_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_148_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2242      fixation_cross    gabor_170 gabor_138 gabor_104 gabor_030    gabor_170 gabor_138_alt gabor_104 gabor_030_alt     "2_63_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2250_gabor_patch_orientation_170_138_104_030_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_030_framed    blank blank blank blank    fixation_cross_white    "2_63_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_030_retrieval_position_4"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_146 gabor_005 gabor_115 gabor_038    gabor_146 gabor_005 gabor_115_alt gabor_038_alt     "2_64_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_146_005_115_038_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_115_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_64_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    63   292   292   399   125  2192  2992  1892      fixation_cross    gabor_082 gabor_021 gabor_040 gabor_166    gabor_082 gabor_021 gabor_040_alt gabor_166_alt     "2_65_Encoding_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_300_300_399_2200_3000_1900_gabor_patch_orientation_082_021_040_166_target_position_3_4_retrieval_position_1"          gabor_130_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_65_Retrieval_Working_Memory_MEG_P1_LR_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_130_retrieval_position_1"   2    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1792  2992  2542      fixation_cross    gabor_032 gabor_097 gabor_064 gabor_115    gabor_032_alt gabor_097 gabor_064 gabor_115_alt     "2_66_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2550_gabor_patch_orientation_032_097_064_115_target_position_1_4_retrieval_position_1"          gabor_032_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_66_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_032_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  1892  2992  2442      fixation_cross    gabor_115 gabor_155 gabor_045 gabor_135    gabor_115_alt gabor_155 gabor_045_alt gabor_135     "2_67_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2450_gabor_patch_orientation_115_155_045_135_target_position_1_3_retrieval_position_1"          gabor_115_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_67_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_1"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2142  2992  2042      fixation_cross    gabor_166 gabor_056 gabor_077 gabor_030    gabor_166 gabor_056_alt gabor_077_alt gabor_030     "2_68_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2050_gabor_patch_orientation_166_056_077_030_target_position_2_3_retrieval_position_2"          gabor_circ gabor_056_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_68_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_056_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    64   292   292   399   125  1942  2992  2542      fixation_cross    gabor_019 gabor_170 gabor_043 gabor_108    gabor_019_alt gabor_170 gabor_043 gabor_108_alt     "2_69_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_300_300_399_1950_3000_2550_gabor_patch_orientation_019_170_043_108_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_043_framed gabor_circ    blank blank blank blank    fixation_cross_white    "2_69_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_043_retrieval_position_3"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;
   42    62   292   292   399   125  2042  2992  2492      fixation_cross    gabor_105 gabor_073 gabor_137 gabor_058    gabor_105 gabor_073_alt gabor_137 gabor_058_alt     "2_70_Encoding_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_105_073_137_058_target_position_2_4_retrieval_position_2"          gabor_circ gabor_073_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_white    "2_70_Retrieval_Working_Memory_MEG_P1_LR_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_073_retrieval_position_2"   1    45.96 45.96 -45.96 45.96 -45.96 -45.96 45.96 -45.96;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
}; 