# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;

default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;

TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;      
	  bitmap fixation_cross_black; x=0; y=0;
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	 
   port_code = 91;  
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   41    62   292   292   399   125  1892  2992  2542      fixation_cross    gabor_102 gabor_034 gabor_169 gabor_063    gabor_102_alt gabor_034 gabor_169_alt gabor_063      "2_1_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_102_034_169_063_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_169_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3     "2_1_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_169_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  2192      fixation_cross    gabor_057 gabor_016 gabor_180 gabor_142    gabor_057_alt gabor_016 gabor_180 gabor_142_alt      "2_2_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2200_gabor_patch_orientation_057_016_180_142_target_position_1_4_retrieval_position_1"          gabor_103_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_2_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_103_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_017 gabor_039 gabor_153 gabor_168    gabor_017 gabor_039_alt gabor_153 gabor_168_alt      "2_3_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_017_039_153_168_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_123_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_3_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_123_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  2342      fixation_cross    gabor_090 gabor_028 gabor_156 gabor_108    gabor_090_alt gabor_028_alt gabor_156 gabor_108      "2_4_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_2350_gabor_patch_orientation_090_028_156_108_target_position_1_2_retrieval_position_1"          gabor_137_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_4_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_137_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2242  2992  1992      fixation_cross    gabor_163 gabor_129 gabor_091 gabor_010    gabor_163 gabor_129_alt gabor_091 gabor_010_alt      "2_5_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_2250_3000_2000_gabor_patch_orientation_163_129_091_010_target_position_2_4_retrieval_position_3"          gabor_circ gabor_circ gabor_091_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_5_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_091_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  2042      fixation_cross    gabor_148 gabor_036 gabor_098 gabor_016    gabor_148 gabor_036_alt gabor_098 gabor_016_alt      "2_6_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2050_gabor_patch_orientation_148_036_098_016_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_016_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_6_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_016_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2592      fixation_cross    gabor_085 gabor_111 gabor_002 gabor_144    gabor_085 gabor_111_alt gabor_002_alt gabor_144      "2_7_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2600_gabor_patch_orientation_085_111_002_144_target_position_2_3_retrieval_position_2"          gabor_circ gabor_065_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3     "2_7_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  2442      fixation_cross    gabor_103 gabor_049 gabor_067 gabor_084    gabor_103 gabor_049_alt gabor_067 gabor_084_alt      "2_8_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_103_049_067_084_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_131_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_8_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_131_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  1892      fixation_cross    gabor_074 gabor_007 gabor_154 gabor_137    gabor_074_alt gabor_007 gabor_154 gabor_137_alt      "2_9_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_1900_gabor_patch_orientation_074_007_154_137_target_position_1_4_retrieval_position_1"          gabor_074_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_9_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2042  2992  2492      fixation_cross    gabor_160 gabor_046 gabor_020 gabor_110    gabor_160_alt gabor_046_alt gabor_020 gabor_110     "2_10_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_160_046_020_110_target_position_1_2_retrieval_position_2"          gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_10_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1942  2992  2192      fixation_cross    gabor_006 gabor_087 gabor_163 gabor_036    gabor_006 gabor_087_alt gabor_163 gabor_036_alt     "2_11_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2200_gabor_patch_orientation_006_087_163_036_target_position_2_4_retrieval_position_1"          gabor_144_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_11_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_144_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2492      fixation_cross    gabor_145 gabor_112 gabor_079 gabor_040    gabor_145 gabor_112_alt gabor_079_alt gabor_040     "2_12_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2500_gabor_patch_orientation_145_112_079_040_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_128_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_12_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_128_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2292      fixation_cross    gabor_168 gabor_139 gabor_120 gabor_088    gabor_168_alt gabor_139 gabor_120_alt gabor_088     "2_13_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2300_gabor_patch_orientation_168_139_120_088_target_position_1_3_retrieval_position_1"          gabor_168_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_13_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2242  2992  2092      fixation_cross    gabor_102 gabor_016 gabor_157 gabor_039    gabor_102_alt gabor_016 gabor_157 gabor_039_alt     "2_14_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2250_3000_2100_gabor_patch_orientation_102_016_157_039_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_179_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_14_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_179_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  1942      fixation_cross    gabor_175 gabor_109 gabor_134 gabor_160    gabor_175 gabor_109 gabor_134_alt gabor_160_alt     "2_15_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_175_109_134_160_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_087_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_15_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_087_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1792  2992  2242      fixation_cross    gabor_063 gabor_170 gabor_120 gabor_088    gabor_063_alt gabor_170_alt gabor_120 gabor_088     "2_16_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1800_3000_2250_gabor_patch_orientation_063_170_120_088_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_088_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_16_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_088_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  2142      fixation_cross    gabor_116 gabor_133 gabor_050 gabor_067    gabor_116_alt gabor_133 gabor_050_alt gabor_067     "2_17_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2150_gabor_patch_orientation_116_133_050_067_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_050_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_17_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  2542      fixation_cross    gabor_082 gabor_160 gabor_041 gabor_010    gabor_082_alt gabor_160 gabor_041 gabor_010_alt     "2_18_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_082_160_041_010_target_position_1_4_retrieval_position_1"          gabor_082_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_18_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_082_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2092      fixation_cross    gabor_098 gabor_170 gabor_038 gabor_153    gabor_098 gabor_170 gabor_038_alt gabor_153_alt     "2_19_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_098_170_038_153_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_013_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_19_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_013_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2042      fixation_cross    gabor_100 gabor_036 gabor_011 gabor_077    gabor_100_alt gabor_036 gabor_011 gabor_077_alt     "2_20_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2050_gabor_patch_orientation_100_036_011_077_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_077_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_20_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_077_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  1992      fixation_cross    gabor_176 gabor_142 gabor_033 gabor_067    gabor_176 gabor_142 gabor_033_alt gabor_067_alt     "2_21_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2000_gabor_patch_orientation_176_142_033_067_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_115_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_21_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_115_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2042  2992  2342      fixation_cross    gabor_096 gabor_143 gabor_123 gabor_008    gabor_096 gabor_143_alt gabor_123 gabor_008_alt     "2_22_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_096_143_123_008_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_054_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_22_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_054_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1842  2992  2392      fixation_cross    gabor_033 gabor_099 gabor_015 gabor_171    gabor_033_alt gabor_099 gabor_015 gabor_171_alt     "2_23_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2400_gabor_patch_orientation_033_099_015_171_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_015_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_23_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_015_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  2492      fixation_cross    gabor_056 gabor_138 gabor_072 gabor_015    gabor_056 gabor_138 gabor_072_alt gabor_015_alt     "2_24_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2500_gabor_patch_orientation_056_138_072_015_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_122_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_24_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_122_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2442      fixation_cross    gabor_110 gabor_074 gabor_180 gabor_004    gabor_110 gabor_074_alt gabor_180_alt gabor_004     "2_25_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2450_gabor_patch_orientation_110_074_180_004_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_132_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_25_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1892  2992  2292      fixation_cross    gabor_019 gabor_079 gabor_160 gabor_143    gabor_019 gabor_079 gabor_160_alt gabor_143_alt     "2_26_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2300_gabor_patch_orientation_019_079_160_143_target_position_3_4_retrieval_position_2"          gabor_circ gabor_125_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_26_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_125_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1942  2992  1942      fixation_cross    gabor_085 gabor_173 gabor_035 gabor_158    gabor_085 gabor_173 gabor_035_alt gabor_158_alt     "2_27_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1950_3000_1950_gabor_patch_orientation_085_173_035_158_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_158_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_27_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_158_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2192  2992  2242      fixation_cross    gabor_061 gabor_137 gabor_009 gabor_120    gabor_061_alt gabor_137 gabor_009 gabor_120_alt     "2_28_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2250_gabor_patch_orientation_061_137_009_120_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_120_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_28_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_066 gabor_107 gabor_081 gabor_040    gabor_066 gabor_107_alt gabor_081_alt gabor_040     "2_29_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_066_107_081_040_target_position_2_3_retrieval_position_2"          gabor_circ gabor_153_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_29_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_153_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  2142  2992  2092      fixation_cross    gabor_040 gabor_168 gabor_010 gabor_145    gabor_040_alt gabor_168_alt gabor_010 gabor_145     "2_30_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_2150_3000_2100_gabor_patch_orientation_040_168_010_145_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_099_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_30_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_099_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2342      fixation_cross    gabor_034 gabor_164 gabor_001 gabor_084    gabor_034 gabor_164_alt gabor_001_alt gabor_084     "2_31_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_034_164_001_084_target_position_2_3_retrieval_position_2"          gabor_circ gabor_164_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_31_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_149 gabor_063 gabor_018 gabor_178    gabor_149_alt gabor_063 gabor_018_alt gabor_178     "2_32_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_149_063_018_178_target_position_1_3_retrieval_position_1"          gabor_102_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_32_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_102_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2492      fixation_cross    gabor_166 gabor_145 gabor_102 gabor_037    gabor_166 gabor_145 gabor_102_alt gabor_037_alt     "2_33_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2500_gabor_patch_orientation_166_145_102_037_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_037_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_33_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_037_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  2342      fixation_cross    gabor_073 gabor_019 gabor_040 gabor_102    gabor_073 gabor_019_alt gabor_040_alt gabor_102     "2_34_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_2350_gabor_patch_orientation_073_019_040_102_target_position_2_3_retrieval_position_3"          gabor_circ gabor_circ gabor_040_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_34_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1742  2992  1942      fixation_cross    gabor_164 gabor_020 gabor_132 gabor_096    gabor_164_alt gabor_020 gabor_132 gabor_096_alt     "2_35_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1750_3000_1950_gabor_patch_orientation_164_020_132_096_target_position_1_4_retrieval_position_3"          gabor_circ gabor_circ gabor_180_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_35_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_180_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2592      fixation_cross    gabor_035 gabor_007 gabor_050 gabor_112    gabor_035 gabor_007_alt gabor_050 gabor_112_alt     "2_36_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_035_007_050_112_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_157_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_36_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_157_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1792  2992  2342      fixation_cross    gabor_022 gabor_046 gabor_086 gabor_173    gabor_022 gabor_046_alt gabor_086_alt gabor_173     "2_37_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1800_3000_2350_gabor_patch_orientation_022_046_086_173_target_position_2_3_retrieval_position_2"          gabor_circ gabor_001_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_37_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2192  2992  1992      fixation_cross    gabor_001 gabor_030 gabor_114 gabor_085    gabor_001_alt gabor_030 gabor_114_alt gabor_085     "2_38_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2200_3000_2000_gabor_patch_orientation_001_030_114_085_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_114_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_38_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2292      fixation_cross    gabor_146 gabor_029 gabor_100 gabor_060    gabor_146_alt gabor_029 gabor_100 gabor_060_alt     "2_39_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2300_gabor_patch_orientation_146_029_100_060_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_060_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_39_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2092  2992  2142      fixation_cross    gabor_173 gabor_020 gabor_046 gabor_086    gabor_173_alt gabor_020_alt gabor_046 gabor_086     "2_40_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2150_gabor_patch_orientation_173_020_046_086_target_position_1_2_retrieval_position_1"          gabor_173_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_40_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1792  2992  1892      fixation_cross    gabor_178 gabor_090 gabor_016 gabor_155    gabor_178 gabor_090_alt gabor_016_alt gabor_155     "2_41_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1800_3000_1900_gabor_patch_orientation_178_090_016_155_target_position_2_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_106_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_41_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_106_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1892  2992  2542      fixation_cross    gabor_098 gabor_065 gabor_014 gabor_044    gabor_098 gabor_065 gabor_014_alt gabor_044_alt     "2_42_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1900_3000_2550_gabor_patch_orientation_098_065_014_044_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_044_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_42_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  2142      fixation_cross    gabor_053 gabor_022 gabor_092 gabor_003    gabor_053 gabor_022_alt gabor_092 gabor_003_alt     "2_43_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_053_022_092_003_target_position_2_4_retrieval_position_2"          gabor_circ gabor_022_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_43_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_022_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  1942      fixation_cross    gabor_013 gabor_088 gabor_103 gabor_043    gabor_013 gabor_088_alt gabor_103 gabor_043_alt     "2_44_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_1950_gabor_patch_orientation_013_088_103_043_target_position_2_4_retrieval_position_2"          gabor_circ gabor_133_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_44_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_133_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1792  2992  2192      fixation_cross    gabor_010 gabor_079 gabor_055 gabor_096    gabor_010_alt gabor_079 gabor_055 gabor_096_alt     "2_45_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_010_079_055_096_target_position_1_4_retrieval_position_1"          gabor_010_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_45_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_010_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2092  2992  2042      fixation_cross    gabor_160 gabor_082 gabor_103 gabor_123    gabor_160_alt gabor_082_alt gabor_103 gabor_123     "2_46_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_2100_3000_2050_gabor_patch_orientation_160_082_103_123_target_position_1_2_retrieval_position_3"          gabor_circ gabor_circ gabor_103_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_46_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_103_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  1942      fixation_cross    gabor_134 gabor_114 gabor_157 gabor_045    gabor_134 gabor_114 gabor_157_alt gabor_045_alt     "2_47_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_1950_gabor_patch_orientation_134_114_157_045_target_position_3_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_045_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_47_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1992  2992  2392      fixation_cross    gabor_018 gabor_142 gabor_164 gabor_085    gabor_018 gabor_142_alt gabor_164 gabor_085_alt     "2_48_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2000_3000_2400_gabor_patch_orientation_018_142_164_085_target_position_2_4_retrieval_position_2"          gabor_circ gabor_142_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_48_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_142_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2242      fixation_cross    gabor_065 gabor_012 gabor_136 gabor_170    gabor_065_alt gabor_012 gabor_136 gabor_170_alt     "2_49_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2250_gabor_patch_orientation_065_012_136_170_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_120_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_49_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_120_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2092  2992  1892      fixation_cross    gabor_042 gabor_012 gabor_080 gabor_102    gabor_042_alt gabor_012_alt gabor_080 gabor_102     "2_50_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2100_3000_1900_gabor_patch_orientation_042_012_080_102_target_position_1_2_retrieval_position_2"          gabor_circ gabor_058_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_50_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_058_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2142  2992  2392      fixation_cross    gabor_006 gabor_175 gabor_069 gabor_053    gabor_006 gabor_175_alt gabor_069 gabor_053_alt     "2_51_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2150_3000_2400_gabor_patch_orientation_006_175_069_053_target_position_2_4_retrieval_position_2"          gabor_circ gabor_175_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_51_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1842  2992  2192      fixation_cross    gabor_170 gabor_152 gabor_005 gabor_092    gabor_170 gabor_152_alt gabor_005 gabor_092_alt     "2_52_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1850_3000_2200_gabor_patch_orientation_170_152_005_092_target_position_2_4_retrieval_position_1"          gabor_170_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_52_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_170_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2192  2992  2092      fixation_cross    gabor_040 gabor_066 gabor_024 gabor_156    gabor_040 gabor_066_alt gabor_024 gabor_156_alt     "2_53_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2200_3000_2100_gabor_patch_orientation_040_066_024_156_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_111_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_53_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_111_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2242  2992  1892      fixation_cross    gabor_156 gabor_041 gabor_005 gabor_069    gabor_156 gabor_041_alt gabor_005_alt gabor_069     "2_54_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2250_3000_1900_gabor_patch_orientation_156_041_005_069_target_position_2_3_retrieval_position_2"          gabor_circ gabor_041_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_54_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_041_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2592      fixation_cross    gabor_085 gabor_034 gabor_159 gabor_001    gabor_085_alt gabor_034 gabor_159 gabor_001_alt     "2_55_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2600_gabor_patch_orientation_085_034_159_001_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_001_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_55_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1742  2992  2042      fixation_cross    gabor_157 gabor_033 gabor_016 gabor_083    gabor_157_alt gabor_033_alt gabor_016 gabor_083     "2_56_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1750_3000_2050_gabor_patch_orientation_157_033_016_083_target_position_1_2_retrieval_position_2"          gabor_circ gabor_033_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_56_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_033_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1892  2992  2242      fixation_cross    gabor_060 gabor_034 gabor_149 gabor_117    gabor_060_alt gabor_034 gabor_149 gabor_117_alt     "2_57_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1900_3000_2250_gabor_patch_orientation_060_034_149_117_target_position_1_4_retrieval_position_2"          gabor_circ gabor_170_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_57_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_170_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2092  2992  2042      fixation_cross    gabor_050 gabor_166 gabor_092 gabor_076    gabor_050_alt gabor_166 gabor_092_alt gabor_076     "2_58_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2050_gabor_patch_orientation_050_166_092_076_target_position_1_3_retrieval_position_3"          gabor_circ gabor_circ gabor_092_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_58_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_149 gabor_035 gabor_118 gabor_167    gabor_149 gabor_035_alt gabor_118 gabor_167_alt     "2_59_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_149_035_118_167_target_position_2_4_retrieval_position_2"          gabor_circ gabor_035_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_59_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_035_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1992  2992  2542      fixation_cross    gabor_124 gabor_169 gabor_146 gabor_019    gabor_124 gabor_169 gabor_146_alt gabor_019_alt     "2_60_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2000_3000_2550_gabor_patch_orientation_124_169_146_019_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_098_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_60_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_098_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  1892  2992  1892      fixation_cross    gabor_053 gabor_091 gabor_161 gabor_001    gabor_053_alt gabor_091_alt gabor_161 gabor_001     "2_61_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_1900_3000_1900_gabor_patch_orientation_053_091_161_001_target_position_1_2_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_001_framed    blank blank blank blank    fixation_cross_target_position_1_2    "2_61_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_001_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_169 gabor_053 gabor_119 gabor_090    gabor_169_alt gabor_053_alt gabor_119 gabor_090     "2_62_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_169_053_119_090_target_position_1_2_retrieval_position_1"          gabor_033_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_62_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_033_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1942  2992  2142      fixation_cross    gabor_128 gabor_008 gabor_082 gabor_042    gabor_128 gabor_008_alt gabor_082 gabor_042_alt     "2_63_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1950_3000_2150_gabor_patch_orientation_128_008_082_042_target_position_2_4_retrieval_position_2"          gabor_circ gabor_058_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_63_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_058_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  1842  2992  2392      fixation_cross    gabor_136 gabor_067 gabor_083 gabor_004    gabor_136 gabor_067_alt gabor_083_alt gabor_004     "2_64_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_1850_3000_2400_gabor_patch_orientation_136_067_083_004_target_position_2_3_retrieval_position_2"          gabor_circ gabor_067_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_64_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    62   292   292   399   125  2092  2992  2442      fixation_cross    gabor_085 gabor_124 gabor_001 gabor_106    gabor_085_alt gabor_124_alt gabor_001 gabor_106     "2_65_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_300_300_399_2100_3000_2450_gabor_patch_orientation_085_124_001_106_target_position_1_2_retrieval_position_1"          gabor_085_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_65_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_CuedRetrieval_retrieval_patch_orientation_085_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  2142  2992  2142      fixation_cross    gabor_073 gabor_137 gabor_031 gabor_015    gabor_073 gabor_137_alt gabor_031 gabor_015_alt     "2_66_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_073_137_031_015_target_position_2_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_155_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_66_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_091 gabor_005 gabor_022 gabor_162    gabor_091_alt gabor_005 gabor_022 gabor_162_alt     "2_67_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_091_005_022_162_target_position_1_4_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_112_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_67_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_112_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    63   292   292   399   125  1942  2992  2442      fixation_cross    gabor_112 gabor_161 gabor_051 gabor_036    gabor_112_alt gabor_161 gabor_051_alt gabor_036     "2_68_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_300_300_399_1950_3000_2450_gabor_patch_orientation_112_161_051_036_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_086_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_68_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_UncuedRetriev_retrieval_patch_orientation_086_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    61   292   292   399   125  1842  2992  2292      fixation_cross    gabor_100 gabor_163 gabor_132 gabor_055    gabor_100 gabor_163 gabor_132_alt gabor_055_alt     "2_69_Encoding_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_300_300_399_1850_3000_2300_gabor_patch_orientation_100_163_132_055_target_position_3_4_retrieval_position_3"          gabor_circ gabor_circ gabor_084_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_69_Retrieval_Working_Memory_MEG_P8_RL_Salient_DoChange_CuedRetrieval_retrieval_patch_orientation_084_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   41    64   292   292   399   125  2042  2992  2592      fixation_cross    gabor_030 gabor_094 gabor_167 gabor_146    gabor_030_alt gabor_094 gabor_167_alt gabor_146     "2_70_Encoding_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_300_300_399_2050_3000_2600_gabor_patch_orientation_030_094_167_146_target_position_1_3_retrieval_position_4"          gabor_circ gabor_circ gabor_circ gabor_146_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_70_Retrieval_Working_Memory_MEG_P8_RL_Salient_NoChange_UncuedRetriev_retrieval_patch_orientation_146_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  