# ATWM1 MEG Experiment
                         
scenario = "ATWM1_Working_Memory_MEG_salient_cued_run2";
#scenario_type = fMRI; # Fuer Scanner
#scenario_type = fMRI_emulation; # Zum Testen
scenario_type = trials; # for MEG
#scan_period = 2000; # TR
#pulses_per_scan = 1;
#pulse_code = 1;
pulse_width=6;


default_monitor_sounds = false;

active_buttons = 2;
response_matching = simple_matching;
button_codes = 10, 20;
default_font_size = 36;     
default_font  = "Arial"; 
default_background_color = 0 ,0 ,0 ;
write_codes=true; # for MEG only

begin;	

#Picture definitions   
box { height = 382; width = 382; color = 0, 0, 0;} frame1;
box { height = 369; width = 369; color = 255, 255, 255;} frame2;    
box { height = 30; width = 4; color = 0, 0, 0;} fix1;    
box { height = 4; width = 30; color = 0, 0, 0;} fix2;
box { height = 30; width = 4; color = 255, 0, 0;} fix3;    
box { height = 4; width = 30; color = 255, 0, 0;} fix4;  
box { height = 369; width = 369; color = 42, 42, 42;} background;
 
TEMPLATE "StimuliDeclaration.tem" {};

trial {
    sound sound_incorrect;
    time = 0;    
    duration = 1;  
} wrong;

trial {
    sound sound_correct;
    time = 0;
    duration = 1;  
} right;

trial {
    sound sound_no_response;
    time = 0;
    duration = 1;
} miss;


# Start of experiment (MEG only) - sync with CTF software
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
	  box background; x=0; y=0;    
	  bitmap fixation_cross_black; x=0; y=0;  
   } expStart;	
   time = 0;  	
   duration = 1000;
   code = "ExpStart"; 	
   port_code = 80;    
};


# baselinePre (at the beginning of the session)
trial { 
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
   }default;	
   time = 0;  	
   duration = 10000;
   #mri_pulse = 1;
   code = "BaselinePre"; 	
   port_code = 91;    
};
       
               
TEMPLATE "ATWM1_Working_Memory_MEG.tem" {
trigger_encoding trigger_retrieval cue_time preparation_time encoding_time single_stimulus_presentation_time delay_time retrieval_time intertrial_interval alerting_cross   stim_enc1 stim_enc2 stim_enc3 stim_enc4 	stim_enc_alt1 stim_enc_alt2 stim_enc_alt3 stim_enc_alt4    trial_code   stim_retr1 stim_retr2 stim_retr3 stim_retr4   stim_cue1 stim_cue2 stim_cue3 stim_cue4 fixationcross_cued     retr_code    the_target_button   posX1 posY1 posX2 posY2 posX3 posY3 posX4 posY4;
   43    62   292   292   399   125  2042  2992  2342      fixation_cross    gabor_111 gabor_044 gabor_027 gabor_065    gabor_111 gabor_044 gabor_027_alt gabor_065_alt      "2_1_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2350_gabor_patch_orientation_111_044_027_065_target_position_1_2_retrieval_position_2"       gabor_circ gabor_044_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2     "2_1_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_044_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  2442      fixation_cross    gabor_160 gabor_078 gabor_105 gabor_054    gabor_160 gabor_078_alt gabor_105_alt gabor_054      "2_2_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2450_gabor_patch_orientation_160_078_105_054_target_position_1_4_retrieval_position_1"       gabor_160_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_2_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2542      fixation_cross    gabor_090 gabor_068 gabor_131 gabor_108    gabor_090 gabor_068_alt gabor_131_alt gabor_108      "2_3_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2550_gabor_patch_orientation_090_068_131_108_target_position_1_4_retrieval_position_1"       gabor_045_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_3_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_045_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2242      fixation_cross    gabor_143 gabor_127 gabor_016 gabor_061    gabor_143_alt gabor_127 gabor_016_alt gabor_061      "2_4_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2250_gabor_patch_orientation_143_127_016_061_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_106_framed    blank blank blank blank    fixation_cross_target_position_2_4     "2_4_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_106_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  2542      fixation_cross    gabor_089 gabor_155 gabor_033 gabor_008    gabor_089 gabor_155_alt gabor_033_alt gabor_008      "2_5_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_089_155_033_008_target_position_1_4_retrieval_position_1"       gabor_089_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_5_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1942  2992  2392      fixation_cross    gabor_096 gabor_029 gabor_165 gabor_011    gabor_096 gabor_029_alt gabor_165_alt gabor_011      "2_6_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2400_gabor_patch_orientation_096_029_165_011_target_position_1_4_retrieval_position_2"       gabor_circ gabor_079_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_6_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_079_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1992  2992  2142      fixation_cross    gabor_005 gabor_150 gabor_175 gabor_115    gabor_005_alt gabor_150_alt gabor_175 gabor_115      "2_7_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_005_150_175_115_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_067_framed    blank blank blank blank    fixation_cross_target_position_3_4     "2_7_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_067_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2092      fixation_cross    gabor_025 gabor_004 gabor_092 gabor_137    gabor_025 gabor_004_alt gabor_092_alt gabor_137      "2_8_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2100_gabor_patch_orientation_025_004_092_137_target_position_1_4_retrieval_position_1"       gabor_163_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4     "2_8_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_163_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1992  2992  1992      fixation_cross    gabor_057 gabor_094 gabor_119 gabor_134    gabor_057_alt gabor_094 gabor_119_alt gabor_134      "2_9_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2000_3000_2000_gabor_patch_orientation_057_094_119_134_target_position_2_4_retrieval_position_1"       gabor_057_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4     "2_9_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_057_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2442      fixation_cross    gabor_117 gabor_010 gabor_141 gabor_179    gabor_117 gabor_010_alt gabor_141 gabor_179_alt     "2_10_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2450_gabor_patch_orientation_117_010_141_179_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_141_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_10_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_141_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  1992      fixation_cross    gabor_096 gabor_073 gabor_029 gabor_159    gabor_096 gabor_073_alt gabor_029_alt gabor_159     "2_11_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_2000_gabor_patch_orientation_096_073_029_159_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_159_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_11_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  1942      fixation_cross    gabor_031 gabor_053 gabor_005 gabor_176    gabor_031_alt gabor_053_alt gabor_005 gabor_176     "2_12_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_1950_gabor_patch_orientation_031_053_005_176_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_005_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_12_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_005_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  1892      fixation_cross    gabor_142 gabor_173 gabor_108 gabor_026    gabor_142 gabor_173_alt gabor_108 gabor_026_alt     "2_13_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_142_173_108_026_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_060_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_13_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_060_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  2392      fixation_cross    gabor_087 gabor_018 gabor_168 gabor_106    gabor_087 gabor_018_alt gabor_168_alt gabor_106     "2_14_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2400_gabor_patch_orientation_087_018_168_106_target_position_1_4_retrieval_position_1"       gabor_132_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_14_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_132_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1842  2992  1892      fixation_cross    gabor_089 gabor_107 gabor_175 gabor_020    gabor_089 gabor_107 gabor_175_alt gabor_020_alt     "2_15_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1850_3000_1900_gabor_patch_orientation_089_107_175_020_target_position_1_2_retrieval_position_1"       gabor_089_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_15_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  2142      fixation_cross    gabor_131 gabor_015 gabor_179 gabor_067    gabor_131_alt gabor_015 gabor_179 gabor_067_alt     "2_16_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2150_gabor_patch_orientation_131_015_179_067_target_position_2_3_retrieval_position_2"       gabor_circ gabor_015_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_16_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_015_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2092  2992  2042      fixation_cross    gabor_095 gabor_111 gabor_076 gabor_148    gabor_095 gabor_111_alt gabor_076_alt gabor_148     "2_17_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2100_3000_2050_gabor_patch_orientation_095_111_076_148_target_position_1_4_retrieval_position_3"       gabor_circ gabor_circ gabor_030_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_17_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_030_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_090 gabor_163 gabor_112 gabor_042    gabor_090 gabor_163 gabor_112_alt gabor_042_alt     "2_18_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_090_163_112_042_target_position_1_2_retrieval_position_2"       gabor_circ gabor_023_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_18_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  2092      fixation_cross    gabor_180 gabor_045 gabor_124 gabor_099    gabor_180_alt gabor_045 gabor_124 gabor_099_alt     "2_19_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_2100_gabor_patch_orientation_180_045_124_099_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_074_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_19_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_074_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1942  2992  2492      fixation_cross    gabor_179 gabor_156 gabor_115 gabor_094    gabor_179_alt gabor_156 gabor_115_alt gabor_094     "2_20_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1950_3000_2500_gabor_patch_orientation_179_156_115_094_target_position_2_4_retrieval_position_1"       gabor_179_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_20_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_179_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2242      fixation_cross    gabor_149 gabor_111 gabor_026 gabor_086    gabor_149_alt gabor_111_alt gabor_026 gabor_086     "2_21_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2250_gabor_patch_orientation_149_111_026_086_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_165_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_21_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  2492      fixation_cross    gabor_086 gabor_153 gabor_046 gabor_172    gabor_086 gabor_153 gabor_046_alt gabor_172_alt     "2_22_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2500_gabor_patch_orientation_086_153_046_172_target_position_1_2_retrieval_position_2"       gabor_circ gabor_017_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_22_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_017_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  1892      fixation_cross    gabor_146 gabor_173 gabor_100 gabor_127    gabor_146_alt gabor_173 gabor_100_alt gabor_127     "2_23_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_1900_gabor_patch_orientation_146_173_100_127_target_position_2_4_retrieval_position_2"       gabor_circ gabor_173_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_23_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_173_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_040 gabor_061 gabor_024 gabor_088    gabor_040 gabor_061 gabor_024_alt gabor_088_alt     "2_24_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_040_061_024_088_target_position_1_2_retrieval_position_2"       gabor_circ gabor_061_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_24_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_061_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2342      fixation_cross    gabor_040 gabor_007 gabor_152 gabor_071    gabor_040 gabor_007 gabor_152_alt gabor_071_alt     "2_25_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2350_gabor_patch_orientation_040_007_152_071_target_position_1_2_retrieval_position_1"       gabor_040_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_25_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_040_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2042  2992  1942      fixation_cross    gabor_130 gabor_178 gabor_019 gabor_070    gabor_130_alt gabor_178_alt gabor_019 gabor_070     "2_26_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_1950_gabor_patch_orientation_130_178_019_070_target_position_3_4_retrieval_position_2"       gabor_circ gabor_043_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_26_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_043_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1892  2992  2042      fixation_cross    gabor_148 gabor_177 gabor_006 gabor_021    gabor_148_alt gabor_177 gabor_006_alt gabor_021     "2_27_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1900_3000_2050_gabor_patch_orientation_148_177_006_021_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_021_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_27_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_021_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  2592      fixation_cross    gabor_020 gabor_138 gabor_088 gabor_073    gabor_020 gabor_138_alt gabor_088 gabor_073_alt     "2_28_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_020_138_088_073_target_position_1_3_retrieval_position_1"       gabor_155_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_28_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_155_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2042      fixation_cross    gabor_062 gabor_038 gabor_172 gabor_102    gabor_062 gabor_038 gabor_172_alt gabor_102_alt     "2_29_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2050_gabor_patch_orientation_062_038_172_102_target_position_1_2_retrieval_position_2"       gabor_circ gabor_038_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_29_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_038_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2492      fixation_cross    gabor_089 gabor_142 gabor_056 gabor_023    gabor_089 gabor_142_alt gabor_056_alt gabor_023     "2_30_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_089_142_056_023_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_162_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_30_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_162_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2092  2992  2542      fixation_cross    gabor_115 gabor_083 gabor_166 gabor_149    gabor_115_alt gabor_083_alt gabor_166 gabor_149     "2_31_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2100_3000_2550_gabor_patch_orientation_115_083_166_149_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_166_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_31_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_166_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2142  2992  2442      fixation_cross    gabor_043 gabor_126 gabor_015 gabor_095    gabor_043_alt gabor_126_alt gabor_015 gabor_095     "2_32_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2150_3000_2450_gabor_patch_orientation_043_126_015_095_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_065_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_32_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_065_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2242  2992  1992      fixation_cross    gabor_157 gabor_131 gabor_072 gabor_048    gabor_157_alt gabor_131 gabor_072_alt gabor_048     "2_33_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2250_3000_2000_gabor_patch_orientation_157_131_072_048_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_025_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_33_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_025_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2192      fixation_cross    gabor_001 gabor_057 gabor_131 gabor_090    gabor_001 gabor_057 gabor_131_alt gabor_090_alt     "2_34_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2200_gabor_patch_orientation_001_057_131_090_target_position_1_2_retrieval_position_2"       gabor_circ gabor_057_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_34_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_057_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2342      fixation_cross    gabor_089 gabor_160 gabor_134 gabor_111    gabor_089_alt gabor_160 gabor_134_alt gabor_111     "2_35_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2350_gabor_patch_orientation_089_160_134_111_target_position_2_4_retrieval_position_2"       gabor_circ gabor_160_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_35_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_160_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2192      fixation_cross    gabor_180 gabor_029 gabor_104 gabor_045    gabor_180 gabor_029 gabor_104_alt gabor_045_alt     "2_36_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2200_gabor_patch_orientation_180_029_104_045_target_position_1_2_retrieval_position_1"       gabor_135_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_36_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_135_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1892  2992  1992      fixation_cross    gabor_030 gabor_079 gabor_004 gabor_142    gabor_030_alt gabor_079_alt gabor_004 gabor_142     "2_37_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1900_3000_2000_gabor_patch_orientation_030_079_004_142_target_position_3_4_retrieval_position_1"       gabor_030_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_37_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_030_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  2042      fixation_cross    gabor_110 gabor_154 gabor_070 gabor_091    gabor_110_alt gabor_154 gabor_070_alt gabor_091     "2_38_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_2050_gabor_patch_orientation_110_154_070_091_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_138_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_38_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_138_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2292      fixation_cross    gabor_137 gabor_107 gabor_050 gabor_066    gabor_137 gabor_107_alt gabor_050_alt gabor_066     "2_39_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2300_gabor_patch_orientation_137_107_050_066_target_position_1_4_retrieval_position_1"       gabor_001_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_39_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_001_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2242  2992  2242      fixation_cross    gabor_035 gabor_087 gabor_170 gabor_012    gabor_035_alt gabor_087 gabor_170 gabor_012_alt     "2_40_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2250_3000_2250_gabor_patch_orientation_035_087_170_012_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_122_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_40_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_122_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  1942      fixation_cross    gabor_149 gabor_033 gabor_015 gabor_120    gabor_149 gabor_033_alt gabor_015 gabor_120_alt     "2_41_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_1950_gabor_patch_orientation_149_033_015_120_target_position_1_3_retrieval_position_1"       gabor_104_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_41_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_104_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2092  2992  2592      fixation_cross    gabor_142 gabor_084 gabor_019 gabor_002    gabor_142 gabor_084_alt gabor_019 gabor_002_alt     "2_42_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2100_3000_2600_gabor_patch_orientation_142_084_019_002_target_position_1_3_retrieval_position_2"       gabor_circ gabor_084_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_42_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_084_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2192  2992  2042      fixation_cross    gabor_051 gabor_177 gabor_101 gabor_072    gabor_051_alt gabor_177_alt gabor_101 gabor_072     "2_43_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2200_3000_2050_gabor_patch_orientation_051_177_101_072_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_072_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_43_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_072_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  1992      fixation_cross    gabor_103 gabor_176 gabor_063 gabor_047    gabor_103_alt gabor_176 gabor_063 gabor_047_alt     "2_44_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2000_gabor_patch_orientation_103_176_063_047_target_position_2_3_retrieval_position_2"       gabor_circ gabor_129_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_44_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_129_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  1892      fixation_cross    gabor_029 gabor_109 gabor_050 gabor_139    gabor_029_alt gabor_109 gabor_050 gabor_139_alt     "2_45_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_1900_gabor_patch_orientation_029_109_050_139_target_position_2_3_retrieval_position_2"       gabor_circ gabor_159_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_45_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_159_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1842  2992  2342      fixation_cross    gabor_052 gabor_075 gabor_111 gabor_025    gabor_052 gabor_075_alt gabor_111_alt gabor_025     "2_46_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1850_3000_2350_gabor_patch_orientation_052_075_111_025_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_164_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_46_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_164_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1942  2992  2092      fixation_cross    gabor_012 gabor_075 gabor_047 gabor_027    gabor_012 gabor_075_alt gabor_047 gabor_027_alt     "2_47_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1950_3000_2100_gabor_patch_orientation_012_075_047_027_target_position_1_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_163_framed    blank blank blank blank    fixation_cross_target_position_1_3    "2_47_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_163_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1792  2992  1942      fixation_cross    gabor_094 gabor_007 gabor_063 gabor_153    gabor_094 gabor_007_alt gabor_063 gabor_153_alt     "2_48_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1800_3000_1950_gabor_patch_orientation_094_007_063_153_target_position_1_3_retrieval_position_3"       gabor_circ gabor_circ gabor_113_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_48_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_113_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2092      fixation_cross    gabor_071 gabor_009 gabor_038 gabor_146    gabor_071_alt gabor_009_alt gabor_038 gabor_146     "2_49_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2100_gabor_patch_orientation_071_009_038_146_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_177_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_49_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_177_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1942  2992  2392      fixation_cross    gabor_026 gabor_068 gabor_092 gabor_110    gabor_026_alt gabor_068 gabor_092_alt gabor_110     "2_50_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_1950_3000_2400_gabor_patch_orientation_026_068_092_110_target_position_2_4_retrieval_position_3"       gabor_circ gabor_circ gabor_092_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_50_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_092_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2142      fixation_cross    gabor_025 gabor_050 gabor_176 gabor_135    gabor_025_alt gabor_050 gabor_176_alt gabor_135     "2_51_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2150_gabor_patch_orientation_025_050_176_135_target_position_2_4_retrieval_position_2"       gabor_circ gabor_050_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_2_4    "2_51_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_050_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  2292      fixation_cross    gabor_171 gabor_093 gabor_038 gabor_007    gabor_171_alt gabor_093 gabor_038_alt gabor_007     "2_52_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2300_gabor_patch_orientation_171_093_038_007_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_007_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_52_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_007_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1992  2992  2142      fixation_cross    gabor_143 gabor_059 gabor_079 gabor_033    gabor_143 gabor_059_alt gabor_079_alt gabor_033     "2_53_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2000_3000_2150_gabor_patch_orientation_143_059_079_033_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_033_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_53_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_033_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2242  2992  2492      fixation_cross    gabor_027 gabor_115 gabor_137 gabor_082    gabor_027 gabor_115_alt gabor_137_alt gabor_082     "2_54_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2250_3000_2500_gabor_patch_orientation_027_115_137_082_target_position_1_4_retrieval_position_1"       gabor_027_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_54_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_027_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2092  2992  2392      fixation_cross    gabor_059 gabor_025 gabor_101 gabor_141    gabor_059 gabor_025 gabor_101_alt gabor_141_alt     "2_55_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2100_3000_2400_gabor_patch_orientation_059_025_101_141_target_position_1_2_retrieval_position_2"       gabor_circ gabor_165_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_55_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_165_retrieval_position_2"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2142  2992  2442      fixation_cross    gabor_060 gabor_007 gabor_133 gabor_092    gabor_060_alt gabor_007_alt gabor_133 gabor_092     "2_56_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2150_3000_2450_gabor_patch_orientation_060_007_133_092_target_position_3_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_092_framed    blank blank blank blank    fixation_cross_target_position_3_4    "2_56_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_092_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  2042  2992  2292      fixation_cross    gabor_180 gabor_114 gabor_030 gabor_008    gabor_180 gabor_114_alt gabor_030_alt gabor_008     "2_57_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2050_3000_2300_gabor_patch_orientation_180_114_030_008_target_position_1_4_retrieval_position_2"       gabor_circ gabor_114_framed gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_57_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_114_retrieval_position_2"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  2192  2992  2592      fixation_cross    gabor_169 gabor_053 gabor_032 gabor_139    gabor_169 gabor_053_alt gabor_032_alt gabor_139     "2_58_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_2200_3000_2600_gabor_patch_orientation_169_053_032_139_target_position_1_4_retrieval_position_1"       gabor_119_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_4    "2_58_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_119_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  2042  2992  2592      fixation_cross    gabor_016 gabor_001 gabor_049 gabor_032    gabor_016_alt gabor_001 gabor_049 gabor_032_alt     "2_59_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_2050_3000_2600_gabor_patch_orientation_016_001_049_032_target_position_2_3_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_167_framed    blank blank blank blank    fixation_cross_target_position_2_3    "2_59_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_167_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1742  2992  2242      fixation_cross    gabor_148 gabor_100 gabor_127 gabor_166    gabor_148 gabor_100_alt gabor_127 gabor_166_alt     "2_60_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1750_3000_2250_gabor_patch_orientation_148_100_127_166_target_position_1_3_retrieval_position_1"       gabor_012_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_3    "2_60_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_012_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_041 gabor_097 gabor_023 gabor_056    gabor_041_alt gabor_097 gabor_023 gabor_056_alt     "2_61_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_041_097_023_056_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_023_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_61_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_023_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1942  2992  1892      fixation_cross    gabor_078 gabor_047 gabor_014 gabor_032    gabor_078 gabor_047_alt gabor_014_alt gabor_032     "2_62_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1950_3000_1900_gabor_patch_orientation_078_047_014_032_target_position_1_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_168_framed    blank blank blank blank    fixation_cross_target_position_1_4    "2_62_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_168_retrieval_position_4"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  2042  2992  2192      fixation_cross    gabor_147 gabor_092 gabor_174 gabor_128    gabor_147_alt gabor_092 gabor_174 gabor_128_alt     "2_63_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_2050_3000_2200_gabor_patch_orientation_147_092_174_128_target_position_2_3_retrieval_position_3"       gabor_circ gabor_circ gabor_174_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_2_3    "2_63_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_174_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2292      fixation_cross    gabor_010 gabor_160 gabor_175 gabor_092    gabor_010_alt gabor_160_alt gabor_175 gabor_092     "2_64_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2300_gabor_patch_orientation_010_160_175_092_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_175_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_64_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_175_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2192      fixation_cross    gabor_064 gabor_129 gabor_153 gabor_014    gabor_064_alt gabor_129_alt gabor_153 gabor_014     "2_65_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2200_gabor_patch_orientation_064_129_153_014_target_position_3_4_retrieval_position_3"       gabor_circ gabor_circ gabor_153_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_65_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_153_retrieval_position_3"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    64   292   292   399   125  1992  2992  1942      fixation_cross    gabor_117 gabor_031 gabor_175 gabor_010    gabor_117_alt gabor_031_alt gabor_175 gabor_010     "2_66_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_300_300_399_2000_3000_1950_gabor_patch_orientation_117_031_175_010_target_position_3_4_retrieval_position_1"       gabor_117_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_3_4    "2_66_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_UncuedRetriev_retrieval_patch_orientation_117_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1792  2992  2092      fixation_cross    gabor_007 gabor_159 gabor_049 gabor_089    gabor_007_alt gabor_159 gabor_049_alt gabor_089     "2_67_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1800_3000_2100_gabor_patch_orientation_007_159_049_089_target_position_2_4_retrieval_position_4"       gabor_circ gabor_circ gabor_circ gabor_089_framed    blank blank blank blank    fixation_cross_target_position_2_4    "2_67_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_089_retrieval_position_4"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    61   292   292   399   125  1892  2992  2242      fixation_cross    gabor_046 gabor_010 gabor_029 gabor_063    gabor_046 gabor_010 gabor_029_alt gabor_063_alt     "2_68_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_300_300_399_1900_3000_2250_gabor_patch_orientation_046_010_029_063_target_position_1_2_retrieval_position_1"       gabor_095_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_68_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_CuedRetrieval_retrieval_patch_orientation_095_retrieval_position_1"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    63   292   292   399   125  1742  2992  2192      fixation_cross    gabor_169 gabor_022 gabor_137 gabor_062    gabor_169 gabor_022 gabor_137_alt gabor_062_alt     "2_69_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_300_300_399_1750_3000_2200_gabor_patch_orientation_169_022_137_062_target_position_1_2_retrieval_position_3"       gabor_circ gabor_circ gabor_002_framed gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_69_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_DoChange_UncuedRetriev_retrieval_patch_orientation_002_retrieval_position_3"   1    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;
   43    62   292   292   399   125  1742  2992  2542      fixation_cross    gabor_114 gabor_156 gabor_034 gabor_088    gabor_114 gabor_156 gabor_034_alt gabor_088_alt     "2_70_Encoding_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_300_300_399_1750_3000_2550_gabor_patch_orientation_114_156_034_088_target_position_1_2_retrieval_position_1"       gabor_114_framed gabor_circ gabor_circ gabor_circ    blank blank blank blank    fixation_cross_target_position_1_2    "2_70_Retrieval_Working_Memory_MEG_P1_RL_Nonsalient_NoChange_CuedRetrieval_retrieval_patch_orientation_114_retrieval_position_1"   2    58.69 58.69 -58.69 58.69 -58.69 -58.69 58.69 -58.69;

};

# baselinePost (at the end of the session)
trial {   
   picture {
      box frame1; x=0; y=0;
      box frame2; x=0; y=0;
		box background; x=0; y=0;
      bitmap fixation_cross_black; x=0; y=0;
      };	
   time = 0;  	
   duration = 5000;  
   code = "BaselinePost"; 	 
   port_code = 92;  
};  